<?xml version="1.0" encoding="utf-16"?>
<velocity11 file="Form_Data" version="1.0">
  <Property name="UseGlobalContext" value="1" />
  <Property name="RestoreDefaultsOnLoad" value="1" />
  <Property name="ShowLogInFullScreen" value="1" />
  <Property name="FormBackgroundColor" value="-1" />
  <Object type="ToolboxLibrary.MainContainer, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="mainContainer1" children="Controls">
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic9" children="Controls">
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      <Property name="Text">SciLifeLab version</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="SciLifeLab version" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="SciLifeLab version" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage4" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup7" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox1" children="Controls">
        <Property name="Size">330, 39</Property>
        <Property name="UseCompatibleTextRendering">True</Property>
        <Property name="Text">TESTING ONLY: Reduces all incubation times and/or mix cycles</Property>
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="protocol_testing" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="TESTING ONLY: Reduces all incubation times and/or mix cycles" ValueToDisplay="" Hide_if="" />
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      </Object>
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      <Property name="Text">Advanced Settings</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Advanced Settings" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Advanced Settings" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage3" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage2" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup3" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup6" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic66" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formStacker1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic65" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formStacker2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic64" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formStacker3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic63" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formStacker4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic47" children="Controls">
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          <Property name="Text">BenchCel Stacker 4</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="BenchCel Stacker 4" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="BenchCel Stacker 4" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic46" children="Controls">
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          <Property name="Text">BenchCel Stacker 1</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="BenchCel Stacker 1" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="BenchCel Stacker 1" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic15" children="Controls">
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          <Property name="Text">BenchCel Stacker 3</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="BenchCel Stacker 3" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="BenchCel Stacker 3" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic6" children="Controls">
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          <Property name="Text">BenchCel Stacker 2</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="BenchCel Stacker 2" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="BenchCel Stacker 2" ValueToDisplay="" Hide_if="" />
        </Object>
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        <Property name="Text">BenchCel</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="BenchCel" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="BenchCel" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup5" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic8" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravo9Temp" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic7" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravo6Temp" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic4" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravo4Temp" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic62" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos9" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic61" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos8" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic60" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos7" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic59" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos6" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic58" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic57" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic14" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic11" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic10" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic56" children="Controls">
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          <Property name="Text">&lt;Pos 9: Chilled&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 9: Chilled&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 9: Chilled&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic55" children="Controls">
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          <Property name="Text">&lt;Position 8&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 8&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 8&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic54" children="Controls">
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          <Property name="Text">&lt;Pos 6: Peltier&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 6: Peltier&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 6: Peltier&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic53" children="Controls">
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          <Property name="Text">&lt;Pos 5: Shaker&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 5: Shaker&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 5: Shaker&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic52" children="Controls">
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          <Property name="Text">&lt;Pos 7: Magnetic&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 7: Magnetic&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 7: Magnetic&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic51" children="Controls">
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          <Property name="Text">&lt;Pos 4: Peltier&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 4: Peltier&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 4: Peltier&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic50" children="Controls">
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          <Property name="Text">&lt;Position 3&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 3&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 3&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic49" children="Controls">
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          <Property name="Text">&lt;Position 2&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 2&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 2&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic48" children="Controls">
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          <Property name="Text">&lt;Position 1&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 1&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 1&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage1" children="Controls">
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        </Object>
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        <Property name="Text">Bravo Deck</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Bravo Deck" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="Bravo Deck" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup4" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic1" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic45" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic44" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic43" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic42" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic41" children="Controls">
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          <Property name="Text">Shelf 1</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 1" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 1" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic40" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic39" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic38" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic36" children="Controls">
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          <Property name="Text">Shelf 2</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 2" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 2" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic35" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic34" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic33" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic32" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic31" children="Controls">
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          <Property name="Text">Shelf 3</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 3" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 3" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic30" children="Controls">
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          <Property name="Text">Shelf 4</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 4" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 4" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic29" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic28" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic27" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic26" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic25" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic24" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic23" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic22" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic21" children="Controls">
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          <Property name="Text">Shelf 5</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 5" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 5" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic20" children="Controls">
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          <Property name="Text">MiniHub Cassette 4</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 4" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 4" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic19" children="Controls">
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          <Property name="Text">MiniHub Cassette 3</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 3" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 3" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic18" children="Controls">
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          <Property name="Text">MiniHub Cassette 2</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 2" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 2" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic17" children="Controls">
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          <Property name="Text">MiniHub Cassette 1</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 1" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 1" ValueToDisplay="" Hide_if="" />
        </Object>
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        <Property name="Text">MiniHub</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="MiniHub" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="MiniHub" ValueToDisplay="" Hide_if="" />
      </Object>
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      <Property name="Text">Workstation Setup</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Workstation Setup" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Workstation Setup" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup2" children="Controls">
      <Object type="ToolboxLibrary.InitializeAllDevices, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="initializeAllDevices1" children="Controls">
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        <Property name="Text">Initialize All Devices</Property>
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Initialize All Devices" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Device file" Description="The file in which the devices to be initialized are specified" Type="9" Value="C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Device Files\BravoMiniPHBenchCel_round_magnet.dev" ValueToDisplay="Device Files(*.dev)|*.dev||" Hide_if="" />
        <Parameter Name="Enabled" Description="" Type="0" Value="1" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic72" children="Controls">
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        <Property name="Text">Once you have loaded labware according to Workstation Setup on right, Click "Run Selected Protocol" to start run.</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Once you have loaded labware according to Workstation Setup on right, Click &quot;Run Selected Protocol&quot; to start run." ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="Once you have loaded labware according to Workstation Setup on right, Click &quot;Run Selected Protocol&quot; to start run." ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.ToggleFullScreen, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="toggleFullScreen1" children="Controls">
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        <Property name="Text">Full Screen</Property>
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Full Screen" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.PauseResume, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="pauseResume1" children="Controls">
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        <Property name="Text">Pause</Property>
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Pause" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton1" children="Controls">
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        <Property name="Text">Run Selected Protocol</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="run(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Forms\\Supporting Files\\clear_inventory.bat&quot;, true);&#xA;print(&quot;Clearing Plate Inventory&quot;)&#xA;if (&quot;Aliquot_Libraries_v1.5.pro&quot; == formProtocolName){&#xA;    run(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Forms\\Supporting Files\\set_Aliquot_Libraries_tip_state.bat&quot;, true);&#xA;    print(&quot;Resetting tip state before Aliquot_Libraries_v1.5&quot;)}&#xA;runset.clear();&#xA;print(&quot;Clearing Runset&quot;)&#xA;&#xA;if (/\b.pro/.test(formProtocolName)){&#xA;    print(&quot;Starting protocol : &quot;+formProtocolName)&#xA;    runset.appendProtocolFileToRunset (&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Protocol Files\\&quot; + formProtocolName, 1, '', 'SureSelectXT_Illumina_v1.5.VWForm');&#xA;} else if  (/\b.rst/.test(formProtocolName)){&#xA;    print(&quot;Starting runset : &quot;+formProtocolName)&#xA;    runset.appendRunsetFileToRunset (&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Protocol Files\\&quot; + formProtocolName, 'SureSelectXT_Illumina_v1.5.VWForm');&#xA;}&#xA;" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Run Selected Protocol" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.TimeElapsed, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="timeElapsed1" children="Controls">
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        <Property name="Text">Elapsed Time: 00:00:00</Property>
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        <Parameter Name="Value" Description="" Type="1" Value="00:00:00" ValueToDisplay="" Hide_if="" />
      </Object>
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      <Property name="Text">Controls</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Controls" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Controls" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup1" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox2" children="Controls">
        <Property name="Size">89, 24</Property>
        <Property name="UseCompatibleTextRendering">True</Property>
        <Property name="Text">Low Input</Property>
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="low_input" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Low Input" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup8" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic68" children="Controls">
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          <Property name="Text">a. Select DNA Product to Cleanup:</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="a. Select DNA Product to Cleanup:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="a. Select DNA Product to Cleanup:" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist3" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="user_case_input" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Covaris Shearing Cleanup;Pre-Capture PCR Cleanup;Post-Capture PCR Cleanup" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="Covaris Shearing Cleanup;Pre-Capture PCR Cleanup;Post-Capture PCR Cleanup;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic13" children="Controls">
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          <Property name="Text">***AMPureXP_XT_Illumina_v1.5.pro Only***</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="***AMPureXP_XT_Illumina_v1.5.pro Only***" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="***AMPureXP_XT_Illumina_v1.5.pro Only***" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist4" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="plate_type" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="96 Eppendorf Twin.tec PCR;96 ABI PCR half skirt in black carrier" ValueToDisplay="" Hide_if="" />
          <Parameter Name="Read only" Description="If checked, the operator may never alter the value of this field" Type="0" Value="1" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="96 Eppendorf Twin.tec PCR" ValueToDisplay="" Hide_if="Const(0)" />
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          <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="96 Eppendorf Twin.tec PCR;96 ABI PCR half skirt in black carrier;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic69" children="Controls">
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          <Property name="Text">b. Select Plate type containing DNA for cleanup:</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="b. Select Plate type containing DNA for cleanup:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="b. Select Plate type containing DNA for cleanup:" ValueToDisplay="" Hide_if="" />
        </Object>
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        <Property name="Text">AMPure XP Parameters</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="AMPure XP Parameters" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="AMPure XP Parameters" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton3" children="Controls">
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        <Property name="Text">Clear Workstation Setup Display</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="open(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Forms\\Supporting Files\\Set_SS_WS_State_Function.js&quot;);&#xA;set_initial_state(this, &quot;Empty&quot;, columns_samples);" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Clear Workstation Setup Display" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton2" children="Controls">
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        <Property name="Text">Display Initial Workstation Setup</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="// runset.clear();&#xA;// runset.appendProtocolFileToRunset (&quot;C:/VWorks Workspace/NGS Option B/XT_Illumina_1.5/Set_NGS_WS_State.pro&quot;, 1, '', 'SureSelectXT_Illumina_v1.5.VWForm');&#xA;open(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Forms\\Supporting Files\\Set_SS_WS_State_Function.js&quot;)&#xA;set_initial_state(this, &quot;Empty&quot;, columns_samples)&#xA;set_initial_state(this, formProtocolName, columns_samples)&#xA;" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Display Initial Workstation Setup" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic70" children="Controls">
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        <Property name="Text">3) Click button below to Display Initial Workstation Setup</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="3) Click button below to Display Initial Workstation Setup" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="3) Click button below to Display Initial Workstation Setup" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic2" children="Controls">
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        <Property name="Text">1) Select Protocol to Run:</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="1) Select Protocol to Run:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="1) Select Protocol to Run:" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist1" children="Controls">
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formProtocolName" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="AMPureXP_XT_Illumina_v1.5.pro;LibraryPrep_XT_Illumina_v1.5.rst;Pre-CapturePCR_XT_Illumina_v1.5.pro;Aliquot_Libraries_v1.5.pro;Hybridization_v1.5.pro;SureSelectCapture&amp;Wash_v1.5.rst;Post-CaptureIndexing_XT_Illumina_v1.5.pro;" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="AMPureXP_XT_Illumina_v1.5.pro;LibraryPrep_XT_Illumina_v1.5.rst;Pre-CapturePCR_XT_Illumina_v1.5.pro;Aliquot_Libraries_v1.5.pro;Hybridization_v1.5.pro;SureSelectCapture&amp;Wash_v1.5.rst;Post-CaptureIndexing_XT_Illumina_v1.5.pro;" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic3" children="Controls">
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        <Property name="Text">2) Select Number of Columns of Samples*</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="2) Select Number of Columns of Samples*" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="2) Select Number of Columns of Samples*" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist2" children="Controls">
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="columns_samples" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="1;2;3;4;6;12" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="1;2;3;4;6;12;" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic5" children="Controls">
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="columns_samples" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic16" children="Controls">
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        <Property name="Text">Columns selected</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Columns selected" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="Columns selected" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic12" children="Controls">
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        <Property name="Text">* needs to be 1, 2, 3, 4, 6, or 12 columns</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="* needs to be 1, 2, 3, 4, 6, or 12 columns" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="* needs to be 1, 2, 3, 4, 6, or 12 columns" ValueToDisplay="" Hide_if="" />
      </Object>
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      <Property name="Text">Parameters</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Parameters" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Parameters" ValueToDisplay="" Hide_if="" />
    </Object>
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  </Object>
</velocity11>