Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Device Files\BravoMiniPHBenchCel_round_magnet_red4.dev
  Form_File: C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Forms\SureSelectXT_Illumina_v1.5.VWForm
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\tiptracking.js")
    open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\file_operations.js")
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: Bravo - 1
      1: 12 SeaHorse PP Reservoir Pyramid Btm
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Temperature: 69
      Timeout: 1
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    Task BuiltIn::User Message
      TaskScript: if (formProtocolName != undefined) task.skip()
      Title: Setting Temperature
      Body: After acknowledging this message, position 4 will be set to 69C.  There may be a pause for a few minutes while the position 4 comes to temperature.
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    Task BuiltIn::User Message
      Estimated time: 4
      TaskScript: if (columns_samples != undefined) task.skip()
      Title: Columns of Samples
      Body:
        Enter the number of columns of samples.

        This has to be either 1, 2, 3, 4, 6, or 12 columns of samples.

        Five columns will be processed as 6 columns, and anything between 6 and 12 columns will be treated as a full plate.
      User data entry into variable: 1
      Variable name: columns_samples
    Task BuiltIn::User Message
      Estimated time: 7
      TaskScript:
        columns_samples = parseInt(columns_samples)

        print("User has entered " + columns_samples + " columns.")

        if(columns_samples > 12)
           {
            print("Error entering column number. Restart protocol.")
           }
        else
           {
            task.skip()
           }
      Title: Error
      Body: There was an error in entering columns of samples.  Please pause, abort, and restart the protocol.
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    Task BuiltIn::JavaScript
      TaskScript:
        if(columns_samples == 5)
           {
            //convert to 6 columns
           columns_samples = 6
           }
        else if(columns_samples > 6)
           {
            //treat as full plate
            columns_samples = 12
            }

        print("The number of columns that will be processed is " + columns_samples + ".")

        //get head mode parameters for subprocesses
        setHeadForRun(columns_samples)
    Task BuiltIn::User Message
      Estimated time: 68
      TaskScript: if (formProtocolName != undefined) task.skip()
      Title: Set temperature
      Body:
        Confirm that appropriate amount of master mix is in the following columns of the master mix plate:
        Column 1 - Blocker mix.
        Column 2 - Capture Library.
        Column 3 - Hyb Buffer.

        Place DNA plate at position 5, Eppendorf PCR plate at position 6, and master mix plate (Eppendorf) at position 9.

        Place empty tip boxes at position 8 of the Bravo and cassette 1 slot 2 of the Mini Plate Hub.

        Place new tips in the BenchCel, rack 1.
    Task BuiltIn::User Message
      Estimated time: 6
      TaskScript:
        if(!protocol_testing)
        {
            task.skip()
            print("Skipping user message about form ignore incubations check box.")
        }
        else
        {
            if(task.isSimulatorRunning())
             {
               task.Userdataentryintovariable= 1;
              }
        }
      Title: Incubation Times and Mix Cycles
      Body:
        The "TESTING ONLY" box is checked.  This is for testing only and will reduce all timed incubations and/or number of mix cycles.

        Click Continue if this is intended.  Abort the protocol if the box should not be checked.
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Main_Processes
  Process
    Plate name: Reagent  Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips1
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_1
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Signal
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Process
    Plate name: DNA Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Signal
      Waitfor: Waitfor_1
    Task BuiltIn::Signal
      Waitfor: Waitfor_2
    Task BuiltIn::Wait For
      Waitfor: Waitfor
    Task BuiltIn::Wait For
      Waitfor: Waitfor_1_1
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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  Process
    Plate name: PCR Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Wait For
      Waitfor: Waitfor_2
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Signal
      Waitfor: Waitfor_1_1
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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  Process
    Plate name: TipControl
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0
        tips_on_loc = 13

        single_col_tips_on = 0
        single_col_tips_off  = 0
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips2")
           {
            print("Spawning tips2.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips2.")
           }
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips4")
           {
            print("Spawning tips4.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips4.")
           }
      Process to spawn: tips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips5")
           {
            print("Spawning tips5.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips5.")
           }
      Process to spawn: tips5
  Process
    Plate name: tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Place Plate
      TaskScript:
        if (isEmpty())
           {
            print("Placing " + plate.name + " at position 8");
           }
        else
           {
            task.skip();
           print("Skipping place at position 8.");
           }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //tips1 will become emptytips2 if tips1 is empty

        if (isEmpty())
           {
            print(plate.name + " becomes emptytips2");
           }
        else
           {
            task.skip();
           print("Skipping spawn of emptytips2");
           }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //if there are tips remaining, tip box will become tips2

        if (!isEmpty())
           {
            print(plate.name + " will become tips2.");
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips2.");
           }
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //if all tips are used tips1, need to get full box from stacker

        if (isEmpty())
           {
            print("Spawning new tips from stacker for tips2");
            tip_box_to_Spawn = "tips2"
           }
        else
           {
            task.skip();
           print("Skipping spawn of TipControl.");
           }
      Process to spawn: TipControl
  Process
    Plate name: emptytips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //if used tip box is not full, it becomes empty tips2

        if(!isFull())
           {
            print("Spawning emptytips2.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of emptytips2.")
           }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //completely filled used tips get upstacked

        if(isFull())
           {
            print("Spawning upstack of " + plate.name + ".")
           }
        else
           {
            task.skip();
            print("Skipping upstack of " + plate.name + ".")
           }
      Process to spawn: UpstackUsedTips
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //becomes used tip box if empty

        if (isEmpty())
           {
            task.loadIntoByLocation = ["Cassette4Slot1"]
            print(plate.name + " becomes next used tip box.  Loading into Mini plate hub Cassette 4 slot 1.")
           }
        else
           {
            task.loadIntoByLocation = ["Cassette4Slot2"]
           print(plate.name + " will be stored in Cassette 4 slot 2 for tips4.")
           }

        print("Loading plate into " + task.loadIntoByLocation)
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: tips3
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //upstack if full

        if(isFull())
           {
            print("Spawning upstack of " + plate.name + ".")
           }
        else
           {
            task.skip();
            print("Skipping upstack of " + plate.name + ".")
           }
      Process to spawn: UpstackUsedTips
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //store in miniplatehub if not full

        if(!isFull())
           {
            print("Loading " + plate.name + " into Miniplatehub.")
           }
        else
           {
            task.skip()
            print("Skipping load of " + plate.name + " into Miniplatehub.")
           }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: emptytips3
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      TaskScript:
        if (isEmpty())
           {
            print("Spawning new tips from stacker for tips4");
            tip_box_to_Spawn = "tips4"
           }
        else
           {
            task.skip();
           print("Skipping spawn of TipControl.");
           }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if (!isEmpty())
           {
            print("Spawning unload of new tips from miniplatehub for tips4");
           }
        else
           {
            task.skip();
           print("Skipping spawn of unload.");
           }
      Process to spawn: Unload_tips
  Process
    Plate name: emptytips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: Unload_emptytips
  Process
    Plate name: tips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Place Plate
      TaskScript:
        if (isEmpty())
           {
            print("Placing " + plate.name + " at position 8");
           }
        else
           {
            task.skip();
           print("Skipping place at position 8.");
           }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //if tips remain, tip box will move to next subprocess

        if (!isEmpty())
           {
            print(plate.name + " becomes tips5");
           }
        else
           {
            task.skip();
           print("Skipping spawn of tips5");
           }
      Process to spawn: tips5
    Task BuiltIn::Spawn Process
      TaskScript:
        //spawn tips from miniplatehub for tips5

        if (isEmpty())
           {
            print(plate.name + " becomes emptytips5");
           }
        else
           {
            task.skip();
           print("Skipping spawn of emptytips5");
           }
      Process to spawn: emptytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if (isEmpty())
           {
            print("Spawning TipContol for tips5.");
            tip_box_to_Spawn = "tips5"
           }
        else
           {
            task.skip();
           print("Skipping spawn of emptytips5");
           }
      Process to spawn: TipControl
  Process
    Plate name: emptytips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //if tip box is full, upstack

        if(isFull())
           {
            print("Spawning upstack of " + plate.name + ".")
           }
        else
           {
            task.skip();
            print("Skipping upstack of " + plate.name + ".")
           }
      Process to spawn: UpstackUsedTips
    Task BuiltIn::Spawn Process
      TaskScript:
        //spawn emptytips5

        if(!isFull())
           {
            print(plate.name + " will become emptytips5.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of emptytips5.")
           }
      Process to spawn: emptytips5
  Process
    Plate name: tips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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  Process
    Plate name: emptytips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: UpstackUsedTips
  Process
    Plate name: Unload_tips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: tips4
  Process
    Plate name: Unload_emptytips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips4
  Process
    Plate name: UpstackUsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Pipette_Process Name=Mix DNA and Blockers
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=11 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 33
      TaskScript:
        //for real run use 5 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: DNA Plate
      Volume: 7
      Pre-aspirate volume: 1
      Blowout volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq
      Mix cycles: 5
      Dynamic tip extension: 0.15
      Aspirate distance: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: DNA Plate
      Location to use, location: 4
    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 8
    Task BuiltIn::User Message
      Estimated time: 9
      TaskScript:
        if(task.isSimulatorRunning())
        {
            task.Userdataentryintovariable= 1;
        }
      Title: Remove plate
      Body: Remove plate from block, seal and place in thermocycler.
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Block Mix Transfer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: var block_mix = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var single_col_tips_on = 0
        var single_col_tips_off  = 0
    Task BuiltIn::Loop
      TaskScript:
        task.Numberoftimestoloop = columns_samples

        single_col_tips_on++
        single_col_tips_off++
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips_on ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(1)
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Reagent  Plate
      Location, location: 9
      Volume: 11.6
      Pre-aspirate volume: 1
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      TaskScript:
        task.Wellselection = [[ 1 , block_mix ]]
      Location, plate: DNA Plate
      Volume: 11.6
      Blowout volume: 1
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips_off ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(1)
    Task BuiltIn::Loop End
      TaskScript: block_mix++
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Capture Library
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: var capture = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var single_col_tips_on_2 = 0
        var single_col_tips_off_2  = 0
    Task BuiltIn::Loop
      TaskScript:
        task.Numberoftimestoloop = columns_samples

        single_col_tips_on_2++
        single_col_tips_off_2++
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips_on_2 ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 14
      Location, plate: Reagent  Plate
      Location, location: 9
      Volume: 7
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = [[ 1 , capture ]]
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 7
      Blowout volume: 2
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips_off_2 ]]

        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips3
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
      TaskScript: capture++
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer DNA
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 3
      Location: 4
      Temperature: 69
      Wait: 1
      Temperature Tolerance: 5
      Timeout: 5
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=10 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task BuiltIn::User Message
      Estimated time: 12
      TaskScript:
        if(task.isSimulatorRunning())
        {
            task.Userdataentryintovariable= 1;
        }
      Title: Wait for plate in thermocycler
      Body:
        When thermocycler has reached hold step at 65C, click Continue.

        Leave DNA plate in thermocycler until you are prompted to transfer the plate.
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: PCR Plate
      Volume: 2.5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 24
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::User Message
      Estimated time: 6
      TaskScript:
        if(task.isSimulatorRunning())
        {
            task.Userdataentryintovariable= 1;
        }
      Title: Place DNA plate on Bravo
      Body:
        Complete the following steps as quickly as possible:

        Retrieve DNA plate from thermocycler, and place on block at Bravo position 4 and unseal.

        Click Continue to resume protocol.

        *Use Caution: Position 4 will be hot.
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: DNA Plate
      Location, location: 4
      Volume: 24
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: DNA Plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: DNA Plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 5
    Task BuiltIn::User Message
      Estimated time: 8
      TaskScript:
        if(task.isSimulatorRunning())
        {
            task.Userdataentryintovariable= 1;
        }
      Title: Remove Plate from 4
      Body:
        Quickly remove plate from position 4, seal and place in thermocycler.

        Click Continue after plate is in thermocycler for protocol to finish.
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips5
      Mark tips as used: 0
      Well selection: Column=10 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Hybe Buffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: var hybe = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::Loop
      TaskScript:
        task.Numberoftimestoloop = columns_samples

        single_col_tips_on++
        single_col_tips_off++
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips_on ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips4
      Well selection: Column=1 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(1)
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: Reagent  Plate
      Location, location: 9
      Volume: 13
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.2
      Well selection: Column=2 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[ 1 , hybe ]]
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 13
      Blowout volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips_off ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips4
      Mark tips as used: 0
      Well selection: Column=1 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(1)
    Task BuiltIn::Loop End
      TaskScript: hybe++
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task BuiltIn::User Message
      Estimated time: 3
      TaskScript:
        var remaining_new_tips = 12 - col
        print("The number of columns of remaining new tips is " + remaining_new_tips + ".")

        if(remaining_new_tips > 0)
           {
            task.Title = "Unused Tips";
            task.Body = "There are still " + remaining_new_tips + " columns of unused tips in the tip box in cassette 4 slot 2."
           }
        else
           {
            task.Title = "Empty Tip box"
            task.Body = "The tip box cassette 4 slot 2 is empty and can be used in other protocols."
           }

        print("There is also a tip box with new tips in cassette 4 slot 1.")
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    Task BuiltIn::User Message
      Estimated time: 1
      Title: More unused tips
      Body: The tip box in cassette 1 slot 1 contains unused tips as well.
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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