<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Device Files\BravoMiniPHBenchCel_round_magnet_wash.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Forms\SureSelectXT_Illumina_v1.5.VWForm' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\tiptracking.js&quot;)
open(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\file_operations.js&quot;)' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (formProtocolName != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Setting Temperature' />
						<Parameter Category='' Name='Body' Value='Position 4 will be set to 69C.  The protocol will not continue until the temperature gets within 5 degrees.

Place the red adaptor block at position 4 as well to warm.  The PCR plate will be transfered here in a few steps.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if (protocol_testing) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='69' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='5' />
						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='74' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
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						<Parameter Category='' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (columns_samples != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Columns of Samples' />
						<Parameter Category='' Name='Body' Value='Enter the number of columns of samples.  

This has to be either 1, 2, 3, 4, 6, or 12 columns of samples.

Five columns will be processed as 6 columns, and anything between 6 and 12 columns will be treated as a full plate.
' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='columns_samples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='columns_samples = parseInt(columns_samples)

print(&quot;User has entered &quot; + columns_samples + &quot; columns.&quot;)

if(columns_samples &gt; 12)
   {
    print(&quot;Error entering column number. Restart protocol.&quot;)
   }
else
   {
    task.skip()
   }' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Error' />
						<Parameter Category='' Name='Body' Value='There was an error in entering columns of samples.  Please pause, abort, and restart the protocol.
' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(columns_samples == 5)
   {
    //convert to 6 columns
   columns_samples = 6
   }
else if(columns_samples &gt; 6)
   {
    //treat as full plate
    columns_samples = 12
    }

print(&quot;The number of columns that will be processed is &quot; + columns_samples + &quot;.&quot;)

//set head mode using number of columns
setHeadForRun(columns_samples)

var mastermix_col = 1
' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (formProtocolName != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Warm Buffer 2' />
						<Parameter Category='' Name='Body' Value='Confirm that buffer 2 is at position 6 and the Nunc with prepared beads is at position 5.

Place tips in racks 1 and 2 of BenchCel and an empty tip box at cassette 4, slot 1.

And confirm these plates are in the miniplatehub (slot 1 is at the bottom):

Cassette 1, slot 3 - Eppendorf plate for wash

Cassette 3, slot 3 - Wash buffer 1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (formProtocolName != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Inventory Editor' />
						<Parameter Category='' Name='Body' Value='Have you cleared the inventory from previous runs?

Go to Tools--&gt;Inventory Editor--&gt;Inventory Management and delete all plates
in View by plate.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!protocol_testing)
{
    task.skip()
    print(&quot;Skipping user message about form ignore incubations check box.&quot;)
}
else
{
    if(task.isSimulatorRunning())
     {
       task.Userdataentryintovariable= 1;
      }
}
' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Incubation Times and Mix Cycles' />
						<Parameter Category='' Name='Body' Value='The &quot;TESTING ONLY&quot; box is checked.  This is for testing only and will reduce all timed incubations and/or number of mix cycles.

Click Continue if this is intended.  Abort the protocol if the box should not be checked.
' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Waitfor' >
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				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer Hyb. Soln' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer Hyb. Soln' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Capture Plate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Waitfor_1' >
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				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer Hyb. Soln' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer Hyb. Soln' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Hyb PCR plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Waitfor' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer Hyb. Soln' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer Hyb. Soln' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(isEmpty()){
  var need_tips = 1
  }else
   {task.skip();
  var need_tips = 0
    }' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='New tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 4, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Waitfor_1' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer Hyb. Soln' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer Hyb. Soln' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(isFull()){
   print(&quot;Upstacking &quot; + plate.name + &quot; &quot; + plate.instance)
   }else
   {task.skip()
    print(&quot;Tip box still has space.&quot;)
    }' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='UsedTipUpstack' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Empty Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='used_col = 0

tips_off_loc = 13' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTipUpstack' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Transfer Hyb. Soln' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = head_mode' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='tips_on_loc = tips_on_loc - columns_samples
task.Wellselection = [[ 1 , tips_on_loc ]]

print(&quot;Pressing tips on at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='New tips' />
						<Parameter Category='' Name='Location, location' Value='2' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;3&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='3' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackNew(columns_samples)' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Hyb PCR plate' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='40' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='5' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='print(&quot;Waiting for position 4 to reach 85 degrees C&quot;)

if(protocol_testing) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='69' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='5' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(task.isSimulatorRunning())
{
    task.Userdataentryintovariable= 1;
}
' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Add Hyb Plate' />
						<Parameter Category='' Name='Body' Value='Complete the following steps as quickly as possible:

Retrieve Hybridization plate from thermocycler, and place in block at Bravo position 4 and unseal.

Click Continue to resume protocol.

*Use Caution: Position 4 will be hot.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Wait For User' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.skip()' />
					<Parameters >
						<Parameter Category='' Name='User Message' Value='Please press the Go button to continue' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Hyb PCR plate' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Volume' Name='Volume' Value='34' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='3' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='34' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='69' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='//to initially mix beads and hyb

//for real run use 10 Mix Cycles

if(protocol_testing) task.Mixcycles = 2' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='150' />
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						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='6' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(task.isSimulatorRunning())
{
    task.Userdataentryintovariable= 1;
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Update Bravo Deck' />
						<Parameter Category='' Name='Body' Value='Removethe Eppendorf plate from position 4.

Leave red aluminum insert at position 4 for next protocol.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='On' />
						<Parameter Category='' Name='RPM' Value='900' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='//long slow mix

//for real run use 25 Mix Cycles

if(protocol_testing) task.Mixcycles = 2' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='150' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Capture Mix 2' />
						<Parameter Category='Properties' Name='Mix cycles' Value='25' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='6' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='//to remove droplets
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='20' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq mix' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='Off' />
						<Parameter Category='' Name='RPM' Value='500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
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						<Parameter Category='Volume' Name='Volume' Value='0.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='dispense then long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
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						<Parameter Category='Volume' Name='Volume' Value='0.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='dispense then long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Capture Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='dispense then long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tips_off_loc = tips_off_loc - columns_samples
task.Wellselection = [[ 1 , tips_off_loc ]]
print(&quot;Taking tips off at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Empty Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;3&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackUsed(columns_samples)' />
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='//overwrite ss_temp.txt file with new variables
//for use in the next protocol
//mastermix_tips
//need_tips
//col
//used_col
//Nunc plate to use

//setting mastermix_tips and spri_case variable
mastermix_col = 0
spri_case = 0

var update_temp_file = (mastermix_col + &quot;\n&quot; + need_tips + &quot;\n&quot; + col + &quot;\n&quot; + used_col + &quot;\n&quot; + Nunc + &quot;\n&quot; + head_mode + &quot;\n&quot; + columns_samples + &quot;\n&quot; + tips_on_loc + &quot;\n&quot; + tips_off_loc + &quot;\n&quot; + Collection + &quot;\n&quot; + DNA_plate + &quot;\n&quot; + spri_case)

file_overwrite(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\ss_temp.txt&quot; , update_temp_file)' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>