Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Device Files\BravoMiniPHBenchCel_round_magnet_wash.dev
  Form_File: C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Forms\SureSelectXT_Illumina_v1.5.VWForm
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\tiptracking.js")
    open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_1.5_scilife_mod\\Scripts\\file_operations.js")
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      TaskScript: getprotocolvariables()
      Device to use: Bravo - 1
      1: 96 Deep Well PP Sqr Well V Btm
      6: 96 Nunc Deep Well 1 mL
    Task BuiltIn::User Message
      Estimated time: 4
      TaskScript: task.skip()
      Title: Enter number of samples
      Body: Enter in the number of samples to process.  This number has to be less than or equal to 96 samples.
      User data entry into variable: 1
      Variable name: samples
    Task BuiltIn::JavaScript
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Temperature: 69
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: 74
      Timeout: 1
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Main_Processes
  Process
    Plate name: Wash plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_1
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: Transfer to Wash Plate
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Wash Buffer 1
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 1
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        //for real run use 10 minutes

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 600
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 1
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute 30 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 90
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_1
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        //for real run use 10 minutes

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 600
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute 30 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 90
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_2
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 3
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        //for real run use 10 minutes

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 600
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 3
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute 30 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 90
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_3
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 4
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        //for real run use 10 minutes

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 600
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 4
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute 30 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 90
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_4
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 5
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        //for real run use 10 minutes

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 600
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 5
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute 30 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 90
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove buffer 2_5
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 6
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        //for real run use 10 minutes

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 600
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 6
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_6
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 0
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      Process to spawn: Water Reservoir
    Task Bravo::SubProcess
      Sub-process name: Add Water
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Process
    Plate name: Capture plate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Spawn Process
      Process to spawn: emptytips1
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        print("!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!" + need_tips)
        if(need_tips){
            print("Tip box from previous protocol was used up.  Spawning new tip box.")
        	var tip_box_to_Spawn = "tips1"
        }
        else{
        task.skip();
        }
      Process to spawn: TipControl
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        if(!need_tips){
            print("Tip box from previous protocol not used up.  Spawning tips at 2.")
        }
        else{
        task.skip();
        }
      Process to spawn: tips1
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute 30 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 90
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Spawn Process
      Process to spawn: Buffer 1 Plate
    Task BuiltIn::Signal
      Waitfor: Waitfor_1
    Task Bravo::SubProcess
      Sub-process name: SS Wash Buffer #1
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    Task BuiltIn::Wait For
      Waitfor: Waitfor
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=9
      TaskScript:
        //for real run use 3 minutes 10 seconds

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 190
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Buffer 1 intermediate mixes
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 0
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer to Wash Plate
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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  Process
    Plate name: Buffer 1 Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: SS Wash Buffer #1
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
  Process
    Plate name: Water Reservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Add Water
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: TipControl
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Devices
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0

        tips_on_loc = 13
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn== "tips1"){
           print("Spawning tips1.")
           }else
           {task.skip();
            }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates
        if(tip_box_to_Spawn == "tips2"){
           print("Spawning new tipbox for tips2.")
           }else
            {task.skip();
            }

        /*
        if((plate.instance % 2) == 0){
           print("Spawning tips1.")
           }else
            {task.skip();
            }
        */
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn == "tips3"){
           print("Spawning new tipbox for tips3.")
           }else
            {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips4"){
           print("Spawning new tipbox for tips4.")
           }else
            {task.skip();
            }
      Process to spawn: tips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips5"){
           print("Spawning new tipbox for tips5.")
           }else
            {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips6"){
           print("Spawning new tipbox for tips6.")
           }else
            {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips7"){
           print("Spawning new tipbox for tips7.")
           }else
            {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips8"){
           print("Spawning new tipbox for tips8.")
           }else
            {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips9"){
           print("Spawning new tipbox for tips9.")
           }else
            {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips10"){
           print("Spawning new tipbox for tips10.")
           }else
            {task.skip();
            }
      Process to spawn: tips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips11"){
           print("Spawning new tipbox for tips11.")
           }else
            {task.skip();
            }
      Process to spawn: tips11
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips12"){
           print("Spawning new tipbox for tips12.")
           }else
            {task.skip();
            }
      Process to spawn: tips12
  Process
    Plate name: UsedTipUpstack
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Devices
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Process
    Plate name: tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips2
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips2"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: SS Wash Buffer #1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips3"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: SS Wash Buffer #1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 1 intermediate mixes
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips4
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips4"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 1 intermediate mixes
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer to Wash Plate
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips5"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer to Wash Plate
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Wash Buffer 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips6"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Wash Buffer 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 1
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 1
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips7"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 1
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 1
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 2
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 2
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips8"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 2
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 2
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 3
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 3
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips9"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 wash 3
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    Task Bravo::SubProcess
      Sub-process name: Wash 2 Post Incubation Mix 3
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 4
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 4
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_4
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips10
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips10"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 4
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 4
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_4
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips10
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 5
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 5
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    Task Bravo::SubProcess
      Sub-process name: Remove buffer 2_5
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips11
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips11
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips11"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips10
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 5
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 5
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    Task Bravo::SubProcess
      Sub-process name: Remove buffer 2_5
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips11
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips11
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 6
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 6
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_6
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips12
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips12
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips12"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips11
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Wash 6
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    Task Bravo::SubProcess
      Sub-process name: Buffer 2 Post Incubation Mix 6
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    Task Bravo::SubProcess
      Sub-process name: Remove Buffer 2_6
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips12
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips12
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Add Water
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    Task BuiltIn::Place Plate
      Task_Disabled: 1
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Task_Disabled: 1
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips13
    Task BuiltIn::Place Plate
      Task_Disabled: 1
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Task_Disabled: 1
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips13
    Task BuiltIn::Spawn Process
      Task_Disabled: 1
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips13"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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  Process
    Plate name: emptytips12
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Add Water
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    Task BuiltIn::Place Plate
      Task_Disabled: 1
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Task_Disabled: 1
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips13
    Task BuiltIn::Spawn Process
      Task_Disabled: 1
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: UsedTipUpstack
  Pipette_Process Name=Add Water
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips12
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Water Reservoir
      Volume: 5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      Location, plate: Water Reservoir
      Volume: 30
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: Wash plate
      Location, location: 5
      Volume: 30
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 31
      TaskScript:
        //for real run use 10 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Volume: 20
      Mix cycles: 10
      Aspirate distance: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Wash plate
      Volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 36
      TaskScript:
        //for real run use 10 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Volume: 20
      Mix cycles: 10
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips12
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::JavaScript
      Task_Disabled: 1
      TaskScript:
        //get initial time to be used in next task

        var t1 = new Date()//getTime()

        t_start = t1.getTime()

        t_start = t_start/1000
        //print("The starting time in seconds is " + t_start)
    Task BuiltIn::JavaScript
      Task_Disabled: 1
      TaskScript:
        //instead of using incubate task, use repeat delay
        var t2 = new Date()//getTime()

        t_end = t2.getTime()

        t_end= t_end/1000
        //print("The current time in seconds is " + t_end)

        var t_diff = t_end - t_start

        //compare times
        //task will repeat every 15 seconds and check if
        //240 seconds has elapsed
        if(task.isSimulatorRunning()){
        print("In simulation, skipping repeat delay.")
        }else if(t_diff < 240){
                 task.repeatDelay(15)
                 print("Waiting at Position 9.")
               }else{
        print("Continuing on.")
        }
    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 1 intermediate mixes
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips3
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Capture plate
      Volume: 5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 3
      Location, plate: Capture plate
      Volume: 5
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript:
        //for real run use 7 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Capture plate
      Location, location: 9
      Volume: 120
      Mix cycles: 7
      Aspirate distance: 0.2
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: Capture plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: Capture plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Capture plate
      Volume: 4
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        //get initial time to be used in next task

        var t1 = new Date()//getTime()

        t_start = t1.getTime()

        t_start = t_start/1000
        //print("The starting time in seconds is " + t_start)
    Task BuiltIn::JavaScript
      TaskScript:
        //instead of using incubate task, use repeat delay
        var t2 = new Date()//getTime()

        t_end = t2.getTime()

        t_end= t_end/1000
        //print("The current time in seconds is " + t_end)

        var t_diff = t_end - t_start

        //compare times
        //task will repeat every 30 seconds and check if
        //190 seconds has elapsed

        if(task.isSimulatorRunning()){
        print("In simulation, skipping repeat delay.")
        }else if(t_diff < 190){
                 task.repeatDelay(15)
                 print("Waiting at Position 9.")
               }else{
        print("Continuing on.")
        }
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Capture plate
      Volume: 5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips3
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 2 Post Incubation Mix 4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Wash plate
      Location, location: 4
      Volume: 16
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //mix at bottom of well

        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 80
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      TaskScript: //to pull everything off the tips
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 25
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips9
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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
  Pipette_Process Name=Buffer 2 Post Incubation Mix 5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: Wash plate
      Location, location: 4
      Volume: 16
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 125
      TaskScript:
        //mix at bottom of well

        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 80
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: //to pull everything off the tips
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 26
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips10
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Buffer 2 Post Incubation Mix 6
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips11
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: Wash plate
      Location, location: 4
      Volume: 16
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 126
      TaskScript:
        //mix at bottom of well

        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 80
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: Wash plate
      Location, location: 5
      Mode: On
      RPM: 900
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 34
      TaskScript:
        //mix at bottom of well

        //for real run use 5 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 5
      Volume: 80
      Liquid class: Buffer 2 mix
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: Wash plate
      Location, location: 5
      Mode: Off
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: //to pull everything off the tips
      Location, plate: Wash plate
      Location, location: 5
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 25
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips11
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Buffer 2 Wash 4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips9
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=2 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 6
      Volume: 20
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: 6
      Volume: 130
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 14
      TaskScript:
        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Wash plate
      Volume: 20
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 4
    Task Bravo::secondary::Dispense
      TaskScript: task.skip()
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip()
      Location, plate: emptytips9
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 2 Wash 5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips10
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 6
      Volume: 20
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: 6
      Volume: 130
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 129
      TaskScript:
        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: Wash plate
      Volume: 20
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 4
    Task Bravo::secondary::Dispense
      TaskScript: task.skip()
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip()
      Location, plate: emptytips10
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 2 Wash 6
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips11
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: 6
      Volume: 20
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: 6
      Volume: 130
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: Wash plate
      Location, location: 4
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 135
      TaskScript:
        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: Wash plate
      Volume: 20
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 4
    Task Bravo::secondary::Dispense
      TaskScript: task.skip()
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip()
      Location, plate: emptytips11
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 2 wash 1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips6
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=5 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 6
      Volume: 25
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: 6
      Volume: 150
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 10
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 115
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 21
      Location, plate: Wash plate
      Volume: 29
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 4
    Task Bravo::secondary::Dispense
      TaskScript:
        //including but skipping this task so compiler doesn't complain

        task.skip()
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips6
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 2 wash 2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips7
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 6
      Volume: 20
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: 6
      Volume: 130
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 10
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Wash plate
      Volume: 20
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 4
    Task Bravo::secondary::Dispense
      TaskScript: task.skip()
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip()
      Location, plate: emptytips7
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Buffer 2 wash 3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips8
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 6
      Volume: 20
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: 6
      Volume: 130
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 4
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 14
      TaskScript:
        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Wash plate
      Volume: 20
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 4
    Task Bravo::secondary::Dispense
      TaskScript: task.skip()
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip()
      Location, plate: emptytips8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Buffer 2_1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 38
      Location, plate: Wash plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 2.5
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 1
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips6
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=5 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Buffer 2_2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 38
      Location, plate: Wash plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 2.5
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 1
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips7
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Buffer 2_3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 38
      Location, plate: Wash plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 2.5
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 1
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips8
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Buffer 2_4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 38
      Location, plate: Wash plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 2.5
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: 1
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips9
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=2 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Buffer 2_6
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips11
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 39
      Location, plate: Wash plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      Location, plate: 1
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips11
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Supernatant
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)

        var asp_loop = 1
      Location, plate: tips1
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=10 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 31
      TaskScript:
        switch (asp_loop){
            case 1:
                task.Distancefromwellbottom = 3
                task.Dynamictipextension = 0.007
                break;
            case 2:
                task.Distancefromwellbottom = 0.85
                break;
        }

        print("The aspirate loop is " + asp_loop)
        print("The distance from well bottom is " + task.Distancefromwellbottom)
        print("Using dynamic tip extension of " + task.Dynamictipextension)
      Location, plate: Capture plate
      Location, location: 7
      Volume: 120
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: 1
      Volume: 120
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::Loop End
      TaskScript: asp_loop++
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips1
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=10 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Wash Buffer 1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      Estimated time: 3
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips5
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 38
      Location, plate: Wash plate
      Location, location: 7
      Volume: 155
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.035
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: 1
      Volume: 155
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips5
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove buffer 2_5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 39
      Location, plate: Wash plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 2.5
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      Location, plate: 1
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips10
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=SS Wash Buffer #1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=9 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript: //air gap
      Location, plate: Buffer 1 Plate
      Location, location: 9
      Volume: 10
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: Buffer 1 Plate
      Location, location: 9
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: Capture plate
      Location, location: 5
      Volume: 150
      Blowout volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: Capture plate
      Location, location: 5
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //for real run use 15 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Capture plate
      Volume: 120
      Mix cycles: 15
      Aspirate distance: 0.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: Capture plate
      Location, location: 5
      Mode: Off
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Capture plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: Capture plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=9 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer to Wash Plate
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips4
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=7 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: Capture plate
      Volume: 10
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: Capture plate
      Location, location: 5
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //for real run use 7 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Capture plate
      Volume: 120
      Mix cycles: 7
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: Capture plate
      Location, location: 5
      Mode: Off
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Aspirate
      Estimated time: 14
      Location, plate: Capture plate
      Volume: 155
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Wash plate
      Location, location: 7
      Volume: 155
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.06
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips4
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=7 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Wash 2 Post Incubation Mix 1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        //included this task to avoid compiler error
        //task.skip()
      Location, plate: Wash plate
      Volume: 20
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 14
      TaskScript:
        //mix at bottom of well

        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 90
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      TaskScript: //to pull everything off the tips
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 29
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips6
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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
  Pipette_Process Name=Wash 2 Post Incubation Mix 2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Wash plate
      Location, location: 4
      Volume: 16
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //mix at bottom of well

        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 80
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      TaskScript: //to pull everything off the tips
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 25
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips7
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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
  Pipette_Process Name=Wash 2 Post Incubation Mix 3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        var remove_2 = 1
        //skip this task
        task.skip()
      Location, plate: tips8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Wash plate
      Location, location: 4
      Volume: 16
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        //mix at bottom of well

        //for real run use 20 Mix Cycles

        if(protocol_testing) task.Mixcycles = 2;
      Location, plate: Wash plate
      Location, location: 4
      Volume: 80
      Liquid class: Buffer 2 mix
      Mix cycles: 20
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      TaskScript: //to pull everything off the tips
      Location, plate: Wash plate
      Location, location: 4
      Volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq mix
      Mix cycles: 1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: Wash plate
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 25
      Location, plate: Wash plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip()
      Location, plate: emptytips8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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
Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Turn off temperature: 1
      Timeout: 1
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