velocity11 Form_Data 1.0
MainContainer
  OperatorConsoleGroup
    Group name: Controls
    OperatorConsoleStatic Display string: Load Sources:
    OperatorConsoleRadioButton
      Default value: 1
      Caption: To MiniHub
      Group ID: 1
    OperatorConsoleRadioButton
      JavaScript variable: formPromptForSources
      Default value: 0
      Caption: Manually
      Group ID: 1
    OperatorConsoleStatic Display string: Sources Enter Sealed?
    OperatorConsoleRadioButton
      JavaScript variable: formSealedSources
      Default value: 1
      Caption: Yes
      Group ID: 2
    OperatorConsoleRadioButton
      Default value: 0
      Caption: No
      Group ID: 2
    OperatorConsoleButton
      Script: open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Forms\\Supporting Files\\ShowSetupScript.js")
      Caption: Show Setup
    OperatorConsoleButton
      Script:
        { // Set form CheckSum to verify ready to run protocol
            for (var i = 1; i<=8; i++){
                if ( ( eval("typeof formSourceFile"+i))== "undefined" ){
                    eval('formSourceFile'+i+' = ""')
                }else if ( i > formNumberOfSources ){
                    eval('formSourceFile'+i+' = ""')
                }
                if ( ( eval("typeof formSourceID"+i))== "undefined" ){
                    eval('formSourceID'+i+' = ""')
                }else if ( i > formNumberOfSources ){
                    eval('formSourceID'+i+' = ""')
                    }
            }
            testCheckSum = ""+formNumberOfSources+formDestID+formSourceFile1+formSourceID1+formSourceFile2+formSourceID2+formSourceFile3+formSourceID3+formSourceFile4+formSourceID4+formSourceFile5+formSourceID5+formSourceFile6+formSourceID6+formSourceFile7+formSourceID7+formSourceFile8+formSourceID8
        }
        if (testCheckSum == formCheckSum){

        open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Forms\\Supporting Files\\NormalizationScripts.js")
        if (false == read_form_sources())
            print("Error getting data from form.")
        else if (false == add_source_file_contents()) {
            print("Error retrieving transfer file data")
        }else {
            source_plate = new Array()
            fill_source_array()
            well_ng_target = formPoolConcentration / formPooledSamples
            attach_source_volumes(well_ng_target)
            formMasterInputFile = create_output_files(formDestID)
        }

        run("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Forms\\Supporting Files\\clear_inventory.bat", true);
        print("Clearing Plate Inventory")

        runset.clear()
        runset.appendProtocolFileToRunset ("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Protocol Files\\PreCapture_Pooling_v1.0.pro", 1, '', 'SureSelect_XT2_Pooling.VWForm');

        }else print("Plate details have changed since layout was generated, please click Show Setup again.")
      Caption: Run Protocol
    PauseResume Caption: Pause
    InitializeAllDevices
      Caption: Initialize all devices
      Device file: C:\VWorks Workspace\NGS Option B\XT_Illumina_2.0\Device Files\BravoMiniPHBenchCel_round_magnet.dev
    ToggleFullScreen Caption: Full Screen On/Off
    DoMenu
      Caption: Display Gantt Chart
      Action: Display Gantt Chart(s)
    TimeElapsed
      Text: Elapsed Time: 00:00:00
      Value: 01:10:47
  OperatorConsoleGroup
    Group name: Workstation Setup
    OperatorConsoleGroup
      Group name: MiniHub
      OperatorConsoleStatic Display string: MiniHub Cassette 1
      OperatorConsoleStatic Display string: MiniHub Cassette 2
      OperatorConsoleStatic Display string: MiniHub Cassette 3
      OperatorConsoleStatic Display string: MiniHub Cassette 4
      OperatorConsoleStatic Display string: Shelf 5
      OperatorConsoleStatic JavaScript variable: formCass1Slot5
      OperatorConsoleStatic JavaScript variable: formCass2Slot5
      OperatorConsoleStatic JavaScript variable: formCass3Slot5
      OperatorConsoleStatic JavaScript variable: formCass4Slot5
      OperatorConsoleStatic Display string: Shelf 4
      OperatorConsoleStatic JavaScript variable: formCass1Slot4
      OperatorConsoleStatic JavaScript variable: formCass2Slot4
      OperatorConsoleStatic JavaScript variable: formCass3Slot4
      OperatorConsoleStatic JavaScript variable: formCass4Slot4
      OperatorConsoleStatic Display string: Shelf 3
      OperatorConsoleStatic JavaScript variable: formCass1Slot3
      OperatorConsoleStatic JavaScript variable: formCass2Slot3
      OperatorConsoleStatic JavaScript variable: formCass3Slot3
      OperatorConsoleStatic JavaScript variable: formCass4Slot3
      OperatorConsoleStatic Display string: Shelf 2
      OperatorConsoleStatic JavaScript variable: formCass1Slot2
      OperatorConsoleStatic JavaScript variable: formCass2Slot2
      OperatorConsoleStatic JavaScript variable: formCass3Slot2
      OperatorConsoleStatic JavaScript variable: formCass4Slot2
      OperatorConsoleStatic Display string: Shelf 1
      OperatorConsoleStatic JavaScript variable: formCass1Slot1
      OperatorConsoleStatic JavaScript variable: formCass2Slot1
      OperatorConsoleStatic JavaScript variable: formCass3Slot1
      OperatorConsoleStatic JavaScript variable: formCass4Slot1
    OperatorConsoleGroup
      Group name: Bravo Deck
      OperatorConsoleStatic Display string: <Position 1>
      OperatorConsoleStatic Display string: <Position 2>
      OperatorConsoleStatic Display string: <Position 3>
      OperatorConsoleStatic JavaScript variable: formBravoPos1
      OperatorConsoleStatic JavaScript variable: formBravoPos2
      OperatorConsoleStatic
        JavaScript variable: formBravoPos3
        Value: Source Plate Loading Position
      OperatorConsoleStatic Display string: <Pos 4: Peltier>
      OperatorConsoleStatic Display string: <Pos 5: Shaker>
      OperatorConsoleStatic Display string: <Pos 6: Peltier>
      OperatorConsoleStatic JavaScript variable: formBravoPos4
      OperatorConsoleStatic
        JavaScript variable: formBravoPos5
        Value: Destination Plate: Destination1
      OperatorConsoleStatic
        JavaScript variable: formBravoPos6
        Value: Empty Tip Box
      OperatorConsoleStatic Display string: <Pos 7: Magnetic>
      OperatorConsoleStatic Display string: <Position 8>
      OperatorConsoleStatic Display string: <Pos 9: Chiller>
      OperatorConsoleStatic
        JavaScript variable: formBravo9Temp
        Value: 0°C
      OperatorConsoleStatic JavaScript variable: formBravoPos7
      OperatorConsoleStatic JavaScript variable: formBravoPos8
      OperatorConsoleStatic JavaScript variable: formBravoPos9
    OperatorConsoleGroup
      Group name: BenchCel
      OperatorConsoleStatic Display string: BenchCel Stacker 1
      OperatorConsoleStatic Display string: BenchCel Stacker 2
      OperatorConsoleStatic Display string: BenchCel Stacker 3
      OperatorConsoleStatic Display string: BenchCel Stacker 4
      OperatorConsoleStatic
        JavaScript variable: formStacker1
        Value: 1 Tip Box
      OperatorConsoleStatic JavaScript variable: formStacker2
      OperatorConsoleStatic JavaScript variable: formStacker3
      OperatorConsoleStatic JavaScript variable: formStacker4
  OperatorConsoleGroup
    Group name: Pooling Options
    OperatorConsoleStatic Display string: Number of Indexes to Pool:
    OperatorConsoleDroplist
      JavaScript variable: formPooledSamples
      Items: 8;16
      Default value: 8
      Value: 16
    OperatorConsoleStatic Display string: Pooled DNA Quantity [ng]:
    OperatorConsoleDropdown
      JavaScript variable: formPoolConcentration
      Mandatory: 1
      Default value: 1500
    OperatorConsoleStatic Display string: (1500ng Recommended)
  OperatorConsoleGroup
    Group name: Destination Plate
    OperatorConsoleStatic Display string: Plate ID/Barcode:
    OperatorConsoleTextBox
      JavaScript variable: formDestID
      Mandatory: 1
      Default value: Destination1
  OperatorConsoleGroup
    Group name: Source Plates
    OperatorConsoleStatic Display string: Number of Source Plates:
    OperatorConsoleDroplist
      JavaScript variable: formNumberOfSources
      Items: 1;2;3;4;5;6;7;8;0
      Value: 1
    OperatorConsoleStatic Display string: Concentration File
    OperatorConsoleStatic Display string: ID/Barcode
    OperatorConsoleStatic Display string: Plate 1
    OperatorConsoleFileBrowsing
      JavaScript variable: formSourceFile1
      Value: C:/Users/AAS/Desktop/121212_XT2ilmn_AutoValidation_NA10831.csv
    OperatorConsoleTextBox
      JavaScript variable: formSourceID1
      Default value: Source1
    OperatorConsoleStatic Display string: Plate 2
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile2
    OperatorConsoleTextBox
      JavaScript variable: formSourceID2
      Default value: Source2
    OperatorConsoleStatic Display string: Plate 3
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile3
    OperatorConsoleTextBox
      JavaScript variable: formSourceID3
      Default value: Source3
    OperatorConsoleStatic Display string: Plate 4
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile4
    OperatorConsoleTextBox
      JavaScript variable: formSourceID4
      Default value: Source4
    OperatorConsoleStatic Display string: Plate 5
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile5
    OperatorConsoleTextBox
      JavaScript variable: formSourceID5
      Default value: Source5
    OperatorConsoleStatic Display string: Plate 6
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile6
    OperatorConsoleTextBox
      JavaScript variable: formSourceID6
      Default value: Source6
    OperatorConsoleStatic Display string: Plate 7
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile7
    OperatorConsoleTextBox
      JavaScript variable: formSourceID7
      Default value: Source7
    OperatorConsoleStatic Display string: Plate 8
    OperatorConsoleFileBrowsing JavaScript variable: formSourceFile8
    OperatorConsoleTextBox
      JavaScript variable: formSourceID8
      Default value: Source8
  OperatorConsoleGroup
    OperatorConsoleStatic Display string: Protocol Running from input file:
    OperatorConsoleStatic
      JavaScript variable: formMasterInputFile
      Value: C:/VWorks Workspace/VWorks/Hit Picking/Pooling Files/Pooling_master_file_Destination1_20121214_105510.csv
