Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\NGS Option B\XT_Illumina_2.0\Device Files\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Scripts\\file_operations.js")
    open("C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Scripts\\tiptracking.js")
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::JavaScript
      TaskScript:
        formCurrentProtocol = task.getProtocolName()

        /*  Description of tip usage

        There are 2 'sets' of tips and they're used as follows:
        Subprocess, Set, process name, description

        Transfer Block Mix, Set1, tips1, left side of head, right side of tip box
        Mix DNA and Blockers, Set2, tips2, multiple columns
        Transfer Capture Library,Set1, tips3, right side of head, left side of tip box
        Transfer Hyb buffer, Set2, tips4, right side of head, left side of tip box, can use multiple columns
        Transfer DNA,Set2, tips5, multiple columns

        The above uses the tiptracking.js functions and script within the subprocesses
        to manage tips.
        */
    Task BuiltIn::Configure Labware
      Device to use: Bravo - 1
      1: 12 SeaHorse PP Reservoir Pyramid Btm
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if (protocol_testing) task.skip();
      Location: 4
      Temperature: 23
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if (protocol_testing) task.skip();
      Location: 6
      Temperature: 23
      Timeout: 1
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    Task BuiltIn::User Message
      Estimated time: 3
      TaskScript: if (columns_samples != undefined) task.skip()
      Title: Columns of Samples
      Body:
        Enter the number of columns of samples.

        This has to be either 1, 2, 3, 4, 6, or 12 columns of samples.

        Five columns will be processed as 6 columns, and anything between 6 and 12 columns will be treated as a full plate.
      User data entry into variable: 1
      Variable name: columns_samples
    Task BuiltIn::User Message
      Estimated time: 7
      TaskScript:
        columns_samples = parseInt(columns_samples)

        print("User has entered " + columns_samples + " columns.")

        if(columns_samples > 12)
           {
            print("Error entering column number. Restart protocol.")
           }
        else
           {
            task.skip()
           }
      Title: Error
      Body: There was an error in entering columns of samples.  Please pause, abort, and restart the protocol.
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    Task BuiltIn::User Message
      Estimated time: 6
      TaskScript:
        if(!protocol_testing)
        {
            task.skip()
            print("Skipping user message about form ignore incubations check box.")
        }
        else
        {
            if(task.isSimulatorRunning())
             {
               task.Userdataentryintovariable= 1;
              }
        }
      Title: Incubation Times and Mix Cycles
      Body:
        The "TESTING ONLY" box is checked.  This is for testing only and will reduce all timed incubations.

        Click Continue if this is intended.  Abort the protocol if the box should not be checked.
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    Task BuiltIn::JavaScript
      TaskScript:
        if(columns_samples == 5)
           {
            //convert to 6 columns
           columns_samples = 6
           }
        else if(columns_samples > 6)
           {
            //treat as full plate
            columns_samples = 12
            }

        print("The number of columns that will be processed is " + columns_samples + ".")

        //get head mode parameters for subprocesses
        setHeadForRun(columns_samples)
Main_Processes
  Process
    Plate name: Reagent  Plate
    Plate type: 96 Nunc Deep Well 1 mL using Silver Insert
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips1
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_1
    Task BuiltIn::Spawn Process
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips3
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task BuiltIn::Spawn Process
      TaskScript:
         var temp;

        //if all tips are used, need to get full box from stacker

        if (isEmpty())
           {
            print(plate.name+":  Spawning new tips from stacker");
            tip_box_to_Spawn = "tips4";
            temp = 0;
           }
        else
           {
            task.skip();
           print(plate.name+":  Skipping spawn of TipControl.");
           }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        //if tips remain, tip box will move to next subprocess

        if (!isEmpty())
           {
            print(plate.name+":   Spawning unload from minihub cassette 4 slot 1");
            temp = 1;
           }
        else
           {
            task.skip();
           print(plate.name+":   Skipping spawn of unload from minihub cassette 4 slot 1");
           }
      Process to spawn: tips4
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips4
    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Signal
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
  Process
    Plate name: DNA Plate
    Plate type: 96 ABI PCR half skirt in Red Alum Insert
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    Task BuiltIn::Place Plate
      TaskScript: plate.labware = plate_type
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Signal
      Waitfor: Waitfor_1
    Task BuiltIn::Signal
      Waitfor: Waitfor_2
    Task BuiltIn::Wait For
      Waitfor: Waitfor
    Task BuiltIn::Wait For
      Waitfor: Waitfor_1_1
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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  Process
    Plate name: PCR Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Wait For
      Waitfor: Waitfor_2
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Signal
      Waitfor: Waitfor_1_1
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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  Process
    Plate name: Pooled DNA Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Process
    Plate name: TipControl
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0
        tips_on_loc = 13

        single_col_tips_on = 0
        single_col_tips_off  = 0
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips2")
           {
            print("Spawning tips2.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips2.")
           }
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips3")
           {
            print("Spawning tips3.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips3.")
           }
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips4")
           {
            print("Spawning tips4.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips4.")
           }
      Process to spawn: tips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if( tip_box_to_Spawn == "tips5")
           {
            print("Spawning tips5.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of tips5.")
           }
      Process to spawn: tips5
  Process
    Plate name: tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: tips2
  Process
    Plate name: emptytips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Block Mix Transfer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: emptytips2
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //if there are tips remaining, tip box will be used in
        //transfer hyb buffer

        if (!isEmpty())
           {
            task.loadIntoByLocation = ["Cassette4Slot1"]
            print(plate.name + ":  Placing at minihub "+task.loadIntoByLocation);
           }
        else
           {
            task.loadIntoByLocation = ["Cassette4Slot2"]
            print(plate.name + ":  Placing at minihub "+task.loadIntoByLocation);
           }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Mix DNA and Blockers
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //if used tip box is not full, it goes into minihub for transfer
        //hyb buffer

        if(!isFull())
           {
            print(plate.name+":  Load into minihub.")
           }
        else
           {
            task.skip();
            print(plate.name+":  Skipping load into minihub.")
           }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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    Task BuiltIn::Spawn Process
      TaskScript:
        //completely filled used tips get upstacked

        if(isFull())
           {
            print("Spawning upstack of " + plate.name + ".")
           }
        else
           {
            task.skip();
            print("Skipping upstack of " + plate.name + ".")
           }
      Process to spawn: UpstackUsedTips
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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  Process
    Plate name: emptytips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Capture Library
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
  Process
    Plate name: tips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        if(temp)
        {
           print(plate.name+":  Unloading from minihub cassette 4 slot 1.")
        }
        else
        {
           task.skip();
           print(plate.name+":  Skipping unload from minihub cassette 4 slot 1.")
        }
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Place Plate
      TaskScript:
        if (isEmpty())
           {
            print("Placing " + plate.name + " at position 8");
           }
        else
           {
            task.skip();
           print("Skipping place at position 8.");
           }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //spawn tips from miniplatehub for tips5

        if (isEmpty())
           {
            print(plate.name + " becomes emptytips5");
           }
        else
           {
            task.skip();
           print("Skipping spawn of emptytips5");
           }
      Process to spawn: emptytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        //if tips remain, tip box will move to next subprocess

        if (!isEmpty())
           {
            print(plate.name + " becomes tips5");
           }
        else
           {
            task.skip();
           print("Skipping spawn of tips5");
           }
      Process to spawn: tips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if (isEmpty())
           {
            print("Spawning TipContol for tips5.");
            tip_box_to_Spawn = "tips5"
           }
        else
           {
            task.skip();
           print("Skipping spawn of emptytips5");
           }
      Process to spawn: TipControl
  Process
    Plate name: emptytips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Hybe Buffer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //if tip box is full, upstack

        if(isFull())
           {
            print("Spawning upstack of " + plate.name + ".")
           }
        else
           {
            task.skip();
            print("Skipping upstack of " + plate.name + ".")
           }
      Process to spawn: UpstackUsedTips
    Task BuiltIn::Spawn Process
      TaskScript:
        //spawn emptytips5

        if(!isFull())
           {
            print(plate.name + " will become emptytips5.")
           }
        else
           {
            task.skip();
            print("Skipping spawn of emptytips5.")
           }
      Process to spawn: emptytips5
  Process
    Plate name: tips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
  Process
    Plate name: emptytips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: UpstackUsedTips
  Process
    Plate name: UpstackUsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Pipette_Process Name=Mix DNA and Blockers
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: Pooled DNA Plate
      Volume: 2
      Distance from well bottom: 20
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: Pooled DNA Plate
      Volume: 7
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: DNA Plate
      Volume: 7
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 43
      Location, plate: DNA Plate
      Volume: 15
      Blowout volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Mix cycles: 5
      Dynamic tip extension: 0.15
      Aspirate distance: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 8
    Task BuiltIn::User Message
      Estimated time: 36
      Title: Remove plate
      Body: Remove plate from insert, seal and place in thermocycler.
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    Task Bravo::secondary::Set temperature
      Estimated time: 2
      Location, plate: DNA Plate
      Location, location: 4
      Temperature: 66
      Timeout: 1
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Block Mix Transfer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: var block_mix = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        //using single column of tips for all of blocker transfer
        //tips for Capture library transfer will come from this tip box too

        var single_col_tips = 12
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips ]]

        print("Pressing tips on at " + task.Wellselection)

        /*
        tips_on_loc = tips_on_loc - 1
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)

        //task.Wellselection = [[ 1 , single_col_tips_on ]]

        //print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Loop
      TaskScript: task.Numberoftimestoloop = columns_samples
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      Location, plate: Reagent  Plate
      Volume: 11.5
      Pre-aspirate volume: 1
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript:
        task.Wellselection = [[ 1 , block_mix ]]
      Location, plate: DNA Plate
      Volume: 11.5
      Blowout volume: 1
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
      TaskScript: block_mix++
    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips ]]
        print("Taking tips off at " + task.Wellselection)

        /*
        tips_off_loc = tips_off_loc - 1
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)

        //task.Wellselection = [[ 1 , single_col_tips_off ]]
        //print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emptytips1
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Capture Library
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: var capture = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript:
        //change column of tips to 1 for other side of tip box
        single_col_tips = 1

        task.Wellselection = [[ 1 , single_col_tips ]]

        print("Pressing tips on at " + task.Wellselection)

        /*
        tips_on_loc = tips_on_loc - 1
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)

        //task.Wellselection = [[ 1 , single_col_tips_on_2 ]]

        //print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      TaskScript: task.Numberoftimestoloop = columns_samples
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      Location, plate: Reagent  Plate
      Volume: 9.5
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.2
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript:
        task.Wellselection = [[ 1 , capture ]]
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 9.5
      Blowout volume: 1
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 0.5
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[ 1 , capture ]]
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 0
      Blowout volume: 1
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
      TaskScript: capture++
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[ 1 , single_col_tips ]]
        print("Taking tips off at " + task.Wellselection)

        /*
        tips_off_loc = tips_off_loc - 1
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)

        //task.Wellselection = [[ 1 , single_col_tips_off_2 ]]

        //print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emptytips3
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer DNA
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips5
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task BuiltIn::User Message
      Estimated time: 6
      Title: Wait for plate in thermocycler
      Body:
        When thermocycler has reached hold step at 65C, click Continue.

        Leave DNA plate in thermocycler until you are prompted to transfer the plate.
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: PCR Plate
      Volume: 2.5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 48
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 2
      Title: Place DNA plate on Bravo
      Body:
        Complete the following steps as quickly as possible:

        Retrieve DNA plate from thermocycler, and place on carrier at Bravo position 4 and unseal.

        Click Continue to resume protocol.

        *Use Caution: Position 4 will be hot.
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: DNA Plate
      Location, location: 4
      Volume: 46.5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: DNA Plate
      Empty tips: 1
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: DNA Plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 5
    Task BuiltIn::User Message
      Estimated time: 2
      Title: Remove Plate from 4
      Body:
        Quickly remove plate from position 4, seal and place in thermocycler.

        Click Continue after plate is in thermocycler for protocol to finish.
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      Location: 4
      Temperature: 20
      Wait: 0
      Temperature Tolerance: 5
      Timeout: 5
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips5
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Hybe Buffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        var hybe = 1

        //need to use Set 2 tips starting from column 1 in tip box
        //but still using tip tracking functions in .js file
        var tips_on_loc_hyb = 0
        var tips_off_loc_hyb = 0
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::Loop
      TaskScript: task.Numberoftimestoloop = columns_samples
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc_hyb = tips_on_loc_hyb + 1
        task.Wellselection = [[ 1 , tips_on_loc_hyb ]]

        print("Pressing tips on at " + task.Wellselection)

        //task.Wellselection = [[ 1 , single_col_tips_on ]]

        //print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips4
      Well selection: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(1)
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      Location, plate: Reagent  Plate
      Volume: 37
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.2
      Well selection: Column=2 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = [[ 1 , hybe ]]
      Location, plate: PCR Plate
      Location, location: 5
      Volume: 37
      Blowout volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc_hyb = tips_off_loc_hyb + 1
        task.Wellselection = [[ 1 , tips_off_loc_hyb ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips4
      Mark tips as used: 0
      Well selection: Column=2 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(1)
    Task BuiltIn::Loop End
      TaskScript: hybe++
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task BuiltIn::User Message
      Estimated time: 2
      TaskScript:
        var remaining_new_tips = 12 - col
        print("The number of columns of remaining new tips is " + remaining_new_tips + ".")

        if(remaining_new_tips > 0)
           {
            task.Title = "Unused Tips";
            task.Body = "There are still " + remaining_new_tips + " columns of unused tips in the tip box at Bravo Position 2.  There are also new tips in cassette 1, slot 1."
           }
        else
           {
            task.Title = "Empty Tip box"
            task.Body = "The tip box at Bravo Position 2 is empty and can be used in other protocols.  There are also new tips in cassette 1, slot 1."
           }
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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