<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option B\XT_Illumina_2.0\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='formCurrentProtocol = &apos;&apos;' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Scripts\\file_operations.js&quot;)
open(&quot;C:\\VWorks Workspace\\NGS Option B\\XT_Illumina_2.0\\Scripts\\tiptracking.js&quot;)' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='formCurrentProtocol = task.getProtocolName()

columns_samples = parseInt(columns_samples)

setHeadForRun(columns_samples)

//var mastermix_col = 1' />
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!protocol_testing)
{
    task.skip()
    print(&quot;Skipping user message about form ignore incubations check box.&quot;)
}
else
{
    if(task.isSimulatorRunning())
     {
       task.Userdataentryintovariable= 1;
      }
}
' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Incubation Times and Mix Cycles' />
						<Parameter Category='' Name='Body' Value='The &quot;TESTING ONLY&quot; box is checked.  This is for testing only and will reduce all timed incubations.

Click Continue if this is intended.  Abort the protocol if the box should not be checked.
' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if (protocol_testing) task.skip();

print(&quot;Setting position 6 to 4 degrees C, please wait&quot;)' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='6' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='plate.labware = plate_type' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Master Mix Addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Master Mix Addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Waitfor' >
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				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Reaction Plate' />
					<Parameter Name='Plate type' Value='96 ABI PCR half skirt in Red Alum Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Master Mix Addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Master Mix Addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Master Mix Plate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL using Silver Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Waitfor_1' >
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				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='DNA transfer tips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Used DNA transfer tips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DNA Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Master Mix Addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Master Mix Addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Waitfor' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='MasterMix Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Master Mix Addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Master Mix Addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Waitfor_1' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Used MasterMix tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DNA transfer tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 4, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Used DNA transfer tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Master Mix Addition' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='var precapturepcr_mm = 1' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MasterMix Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = columns_samples' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='12' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Master Mix Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='26' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='4' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='
task.Wellselection = [[ 1 , precapturepcr_mm ]]' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='26' />
						<Parameter Category='Volume' Name='Blowout volume' Value='4' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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					<TaskScript Name='TaskScript' Value='precapturepcr_mm++' />
				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used MasterMix tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Transfer DNA' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = head_mode' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='tips_on_loc = tips_on_loc - columns_samples
task.Wellselection = [[ 1 , tips_on_loc ]]

print(&quot;Pressing tips on at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA transfer tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;3&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='3' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackNew(columns_samples)' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='//air gap' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='20' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Bead Mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='20' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.036' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.2' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA Plate' />
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						<Parameter Category='Volume' Name='Volume' Value='0.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='dispense then long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='2' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA Plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='24' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='4' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.036' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='24' />
						<Parameter Category='Volume' Name='Blowout volume' Value='4' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Volume' Value='40' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='5' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 2 - 10ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tips_off_loc = tips_off_loc - columns_samples
task.Wellselection = [[ 1 , tips_off_loc ]]
print(&quot;Taking tips off at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used DNA transfer tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;3&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackUsed(columns_samples)' />
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if (protocol_testing) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Remove Plates' />
						<Parameter Category='' Name='Body' Value='The PCR plate at Bravo Position 6 is ready to be sealed and place in the thermocycler.

The DNA plate at Bravo Position 5 ready to be sealed and the remaining sample can be moved to storage. ' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>