<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option B\XT_Illumina_2.0\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='C:\VWorks Workspace\NGS Option B\XT_Illumina_2.0\Forms\SureSelect_XT2_Pooling.VWForm' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open( &apos;C:/VWorks Workspace/NGS Option B/XT_Illumina_2.0/Forms/Supporting Files/InProtocolScripts.js&apos;);
' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var formCurrentProtocol = &quot;&quot;
var promptForSources = formPromptForSources
var sealedSources = formSealedSources
var currentSourceWell = &quot;&quot;
var currentSourcePlate = &quot;&quot;
var numberOfWells = &quot;&quot;
var currentDestWell = &quot;&quot;
var currentSourceWellID = &quot;&quot;
var currentDestWellID = &quot;&quot;
var currentSourceWellPosition = &quot;&quot;
var currentDestWellPosition = &quot;&quot;
var currentTransferVolume = &quot;&quot;
var delaySubprocess = true
currentTip = &quot;&quot;
//destPlateType = formPlateType
' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='formCurrentProtocol = task.getProtocolName()' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='well_map_96 = well_map_builder(8,12)


' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Read in plate data
read_master_file(formMasterInputFile)
print(&quot;Master file read complete&quot;)
create_source_plate_array()
print(&quot;Source Array Created&quot;)
fill_source_plate_array()
print(&quot;Source Array Filled&quot;)' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='numberOfSourcePlates = source_plate.length -1
print(&quot;Number of Source plates = &quot;+numberOfSourcePlates)' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if (promptForSources) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1; cassette 1, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 2, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 3, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 4, slot 1, slot 2, slot 3, slot 4, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='currentSourcePlate = plate.instance' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='New tips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (promptForSources) {
	messageTitle = &quot;Add Source Plate&quot;	
	messageText = &quot;Place source plate at Bravo: \n    &quot; + source_plate[currentSourcePlate].barcode +&quot;\n \n&quot;+&quot;Click Continue when plate is unsealed and ready at Bravo Position 3.&quot;
}else if (sealedSources){
	messageTitle = &quot;Unseal Source Plate&quot;	
	messageText = &quot;Unseal source plate on Bravo: \n    &quot; + source_plate[currentSourcePlate].barcode +&quot;\n \n&quot;+&quot;Click Continue when plate is unsealed and ready at Position 3.&quot;
}else task.skip()
task.Title = messageTitle
task.Body = messageText

if (task.isSimulatorRunning) task.Userdataentryintovariable = 1
else task.Userdataentryintovariable = 0' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Unseal Plate' />
						<Parameter Category='' Name='Body' Value='Unseal Source Plate at Bravo Position 3.

Click continue once unsealed plate is returned to Position 3.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='//currentSourcePlate = plate.instance
currentSourceWell = 1
delaySubprocess = false' />
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer 500ng' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer 500ng' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1; cassette 1, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 2, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 3, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 4, slot 1, slot 2, slot 3, slot 4, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if (plate.instance ==1){
	//Spawn the first used tip box
}else task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Used tips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = numberOfSourcePlates' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Source' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='currentDestWell = 0
' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if (delaySubprocess) task.repeatDelay(20)' />
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer 500ng' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer 500ng' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Destination' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='currentTip = 0' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if (delaySubprocess) task.repeatDelay(20)' />
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer 500ng' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer 500ng' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='SignalUsedTipsGone' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if (currentSourcePlate == numberOfSourcePlates) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if (plate.instance == numberOfSourcePlates) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Used tips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='New tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if (delaySubprocess) task.repeatDelay(20)' />
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer 500ng' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer 500ng' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='SignalUsedTipsGone' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Used tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Transfer 500ng' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = numberOfSourcePlates' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = source_plate[currentSourcePlate].numberOfTransfers' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='96' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='0' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = well_map_96[currentTip]
print(&quot;Loading tip number &quot;+currentTip+&quot; at &quot;+task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='New tips' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; LinkedText=&apos;From hit pick task&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='currentSourceWellID = source_plate[currentSourcePlate].well[currentSourceWell].wellID
currentDestWellID = source_plate[currentSourcePlate].well[currentSourceWell].targetWellID
currentSourceWellPosition = get_well_position(currentSourceWellID)
currentDestWellPosition = get_well_position(currentDestWellID)
currentTransferVolume = source_plate[currentSourcePlate].well[currentSourceWell].volume' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = currentSourceWellPosition
task.Volume = currentTransferVolume' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 5 - 25ul hit pick' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = currentDestWellPosition
task.Volume = currentTransferVolume' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Destination' />
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						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 5 - 25ul hit pick' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = well_map_96[currentTip]
print(&quot;Unloading tip number &quot;+currentTip+&quot; at &quot;+task.Wellselection)
currentTip++' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used tips' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; LinkedText=&apos;From hit pick task&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='currentSourceWell++' />
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (promptForSources) {
	messageTitle = &quot;Seal Source Plate&quot;	
	messageText = &quot;Seal source plate on Bravo: \n    &quot; + source_plate[currentSourcePlate].barcode +&quot;\n \n&quot;+&quot;Click Continue when plate is sealed and ready at Bravo Position 9.&quot;
}else if (sealedSources){
	messageTitle = &quot;Seal Source Plate&quot;	
	messageText = &quot;Seal source plate on Bravo: \n    &quot; + source_plate[currentSourcePlate].barcode +&quot;\n \n&quot;+&quot;Click Continue when plate is sealed and ready at Bravo Position 9.&quot;
}else task.skip()
task.Title = messageTitle
task.Body = messageText

if (task.isSimulatorRunning) task.Userdataentryintovariable = 1
else task.Userdataentryintovariable = 0' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Seal Plate' />
						<Parameter Category='' Name='Body' Value='Seal Source Plate at Bravo Position 9.

Click continue once sealed plate is returned to Position 9.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='if (currentSourcePlate == numberOfSourcePlates) task.skip()
else if (source_plate[currentSourcePlate].numberOfTransfers &lt; 96) {
    // run task
}else task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if (currentSourcePlate == numberOfSourcePlates) task.skip()
else if (source_plate[currentSourcePlate].numberOfTransfers &lt; 96) {
    // run task
}else task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='New tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if (currentSourcePlate == numberOfSourcePlates) task.skip()
else if (source_plate[currentSourcePlate].numberOfTransfers &lt; 96) {
    // run task
}else task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='Source' />
						<Parameter Category='' Name='Spawn control' Value='Do not spawn new plates' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='New tips' />
						<Parameter Category='' Name='Spawn control' Value='Do not spawn new plates' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='Used tips' />
						<Parameter Category='' Name='Spawn control' Value='Do not spawn new plates' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var formCurrentProtocol = &quot;&quot;' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>