Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  Form_File: C:\VWorks Workspace\Forms\SureSelect\Double SPRI.VWForm
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open("C:\\VWorks Workspace\\Scripts\\SureSelect\\file_operations.js")
    open("C:\\VWorks Workspace\\Scripts\\SureSelect\\tiptracking.js")
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: Bravo - 1
      1: 96 Deep Well PP Sqr Well V Btm
      9: 96 Nunc Deep Well 1 mL
    Task BuiltIn::JavaScript
      TaskScript:
        if (form_manual_parameters == "Yes") manual_spri_parameters = true
        else manual_spri_parameters = false

        runset_1 = false
        print("The state of runset is " + runset_1)
        //temp scripts for testing this protocol separately from runset

        if(runset_1){
            //get tip box states and Nunc plate to use from previous protocol
            getprotocolvariables()
        }
        else{
        //  Set all variables that are needed through out (that are usually set by
        //  previous mastermix addition protocol)
        var need_tips = 1
        var col = 0
        var used_col = 0
        var Nunc1 = 1
        var Nunc2 = 2
        var tips_on_loc = 13
        var tips_off_loc = 13
        var Collection = 2
        var DNA_plate = 1
        var spri_case = form_spri_case
        print("Need tips is " + need_tips + "\n")
        print("Col is " + col + "\n")
        print("used _col is " + used_col + "\n")
        // print("Nunc is " + Nunc + "\n")
        print("tips_on_loc is " + tips_on_loc + "\n")
        print("tips_off_loc is" + tips_off_loc + "\n")
        print("Collection is" + Collection + "\n")
        print("DNA_plate is" + DNA_plate + "\n")
        print("spri_case is" + spri_case + "\n")
        }
    Task BuiltIn::User Message
      Estimated time: 9
      TaskScript:
        if(form_columns_samples != undefined){
            columns_samples = form_columns_samples
            task.skip()
        }else if(runset_1) task.skip()
      Title: Enter number of samples
      Body: Enter in the number of samples to process.  This number has to be less than or equal to 96 samples.
      User data entry into variable: 1
      Variable name: samples
    Task BuiltIn::JavaScript
      TaskScript:
        if(runset_1){
           task.skip()
           print("Using Runset, skipping startup task.")
        }
        else{
        setHeadForRun(columns_samples)
        }
    Task BuiltIn::JavaScript
      TaskScript:
        if(manual_spri_parameters){
            bead_vol1 = parseInt(form_bead_vol1);
            bead_vol2 = parseInt(form_bead_vol2);
            dna_vol = parseInt(form_dna_vol);
            sup_vol = bead_vol1 + dna_vol - 6;
            sup_vol2 = bead_vol2 + sup_vol - 6;
            dna_bead_vol1 = bead_vol1 + dna_vol;
            dna_bead_vol2 = bead_vol2 + sup_vol;
            elute_vol = parseInt(form_elute_vol);
            transfer_final_sup = form_transfer_sup
        }else{
            switch (spri_case){
                    case 1:
                    bead_vol1 = 110
                    bead_vol2 = 70
                    dna_vol = 100
                    sup_vol = bead_vol1 + dna_vol - 6
                    sup_vol2 = bead_vol2 + sup_vol - 6
                    dna_bead_vol1 = bead_vol1 + dna_vol
                    dna_bead_vol2 = bead_vol2 + sup_vol
                    elute_vol = 26
                    transfer_final_sup = "No"
                    break;
                case 2:
                    bead_vol1 = 110
                    bead_vol2 = 70
                    dna_vol = 100
                    sup_vol = bead_vol1 + dna_vol - 6
                    sup_vol2 = bead_vol2 + sup_vol - 6
                    dna_bead_vol1 = bead_vol1 + dna_vol
                    dna_bead_vol2 = bead_vol2 + sup_vol
                    elute_vol = 26
                    transfer_final_sup = "No"
                    break;
            }
        print("The volumes used in this protocol are from case " + spri_case)
        }
        //print("The volume of DNA and beads is " + dna_bead_vol1 + "ul")
        //print("The elution volume is " + elute_vol + "ul")
        //print("The volume of DNA and beads is " + dna_bead_vol2 + "ul")
Main_Processes
  Process
    Plate name: AMPure XP Cleanup 1
    Plate type: 96 Nunc Deep Well 1 mL
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    Device Device_Name=Bravo - 1 Location_Name=5
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //1st purification (after End-Repair) - plate comes from cassette 1, slot5
        //2nd purification (after A-tailing) - plate comes from cassette 2, slot5
        //3rd purification (after Ligation) - plate comes from cassette 3, slot5

        var currentNunc1 = "Cassette" + Nunc1 + "Slot5"

        task.unloadFrom = [currentNunc1]

        print("Unloading Nunc plate from " + task.unloadFrom)
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        print("!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!" + need_tips)
        if(need_tips){
            print("Tip box from previous protocol was used up.  Spawning new tip box.")
        	var tip_box_to_Spawn = "tips1"
        }
        else{
        task.skip();
        }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        if(!need_tips){
            print("Tip box from previous protocol not used up.  Spawning tips at 2.")
        }
        else{
        task.skip();
        }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips1
    Task BuiltIn::Spawn Process
      Process to spawn: SPRI reservoir
    Task Bravo::SubProcess
      Sub-process name: AMPure XP Addition
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    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      TaskScript:
        //for real run use 5 minutes
        print("Incubating Cleanup 1 for 5 Minutes on Position 5")
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if( dna_bead_vol1 > 150){
           //5 minutes with black mag 180ul of beads
            task.Incubationtime = 300
            print("Resting at magnet for " + task.Incubationtime + " seconds or 5 minutes.")
        }else
        {  task.Incubationtime = 180
           //3 minutes with black mag 90ul of beads
            print("Resting at magnet for " + task.Incubationtime + " seconds or 3 minutes.")
        }
      Incubation time: 300
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant to Cleanup 2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: AMPure XP Cleanup 2
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //1st purification (after End-Repair) - plate comes from cassette 1, slot5
        //2nd purification (after A-tailing) - plate comes from cassette 2, slot5
        //3rd purification (after Ligation) - plate comes from cassette 3, slot5

        var currentNunc2 = "Cassette" + Nunc2 + "Slot5"

        task.unloadFrom = [currentNunc2]

        print("Unloading Nunc plate from " + task.unloadFrom)
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 5
    Task Bravo::SubProcess
      Sub-process name: AMPure XP Addition
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    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant to Cleanup 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      TaskScript:
        //for real run use 5 minutes
        print("Incubating Cleanup 2 for 5 Minutes on Position 5")
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if( dna_bead_vol2 > 150){
           //5 minutes with black mag 180ul of beads
            task.Incubationtime = 300
            print("Resting at magnet for " + task.Incubationtime + " seconds or 5 minutes.")
        }else
        {  task.Incubationtime = 180
           //3 minutes with black mag 90ul of beads
            print("Resting at magnet for " + task.Incubationtime + " seconds or 3 minutes.")
        }
      Incubation time: 300
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Spawn Process
      Process to spawn: Ethanol Reservoir
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: //for real run use 1 minutes
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: //for real run use 1 minutes
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 2
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    Task BuiltIn::Spawn Process
      Process to spawn: Water Reservoir
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        if( bead_vol2 > 90){
           //5 minutes with black mag 180ul of beads
            task.Incubationtime = 300
            print("Resting at Position 4 for " + task.Incubationtime + " seconds or 5 minutes.")
        }else
        {  task.Incubationtime = 180
           //3 minutes with black mag 90ul of beads
            print("Resting at Position 4 for " + task.Incubationtime + " seconds or 3 minutes.")
        }
      Incubation time: 300
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      TaskScript: //real time is 2 minutes
      Incubation time: 120
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      TaskScript:
        if("Yes" == transfer_final_sup){
            print("Spawning Collection plate.")
        }else
        {task.skip()
          print("Skipping spawn of collection plate.")
        }

        //if(spri_case == 3){
        //    print("Spawning Collection plate.")
        //}else
        //{task.skip()
        //  print("Skipping spawn of collection plate.")
        //}
      Process to spawn: Sample Collection Plate
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: //for real run use 2 minutes
      Incubation time: 120
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Spawn Process
      TaskScript:
        if("Yes" == transfer_final_sup){
            print("Spawning transfer to collection plate for pre-capture PCR setup.")
        }else
        {task.skip()
          print("Skipping transfer to collection plate.  Nunc will be used in next protocol.")
        }

        // if(spri_case == 3){
        //    print("Spawning transfer to collection plate for pre-capture PCR setup.")
        //}else
        //{task.skip()
        //  print("Skipping transfer to collection plate.  Nunc will be used in next protocol.")
        //}
      Process to spawn: Transfer to PCR
  Process
    Plate name: DNA plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //during purification after A-tailing
        //DNA plate goes back to cassette 2, slot4

        var DNA_location = "Cassette" + DNA_plate + "Slot4"

        task.loadIntoByLocation = [DNA_location]

        print("Loading plate into " + task.loadIntoByLocation)
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
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  Process
    Plate name: SPRI reservoir
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: AMPure XP Addition
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Ethanol Reservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Water Reservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::User Message
      Estimated time: 5
      TaskScript: task.skip()
      Title: Remove Water Reservoir
      Body: Remove from 6
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Sample Collection Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        //during purification after A-tailing
        //DNA plate comes out of  cassette 4, slot 3

        var currentCollectionPlate = "Cassette" + Collection + "Slot3"

        task.unloadFrom = [currentCollectionPlate]

        print("Unloading Sample Collection plate from " + task.unloadFrom)
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
  Process
    Plate name: Transfer to PCR
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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  Process
    Plate name: TipControl
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Devices
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0

        tips_on_loc = 13
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn== "tips1"){
           print("Spawning tips1.")
           }else
           {task.skip();
            }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates
        if(tip_box_to_Spawn == "tips2"){
           print("Spawning new tipbox for tips2.")
           }else
            {task.skip();
            }

        /*
        if((plate.instance % 2) == 0){
           print("Spawning tips1.")
           }else
            {task.skip();
            }
        */
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn == "tips3"){
           print("Spawning new tipbox for tips3.")
           }else
            {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips4"){
           print("Spawning new tipbox for tips4.")
           }else
            {task.skip();
            }
      Process to spawn: tips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips5"){
           print("Spawning new tipbox for tips5.")
           }else
            {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips6"){
           print("Spawning new tipbox for tips6.")
           }else
            {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips7"){
           print("Spawning new tipbox for tips7.")
           }else
            {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips8"){
           print("Spawning new tipbox for tips8.")
           }else
            {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips9"){
           print("Spawning new tipbox for tips9.")
           }else
            {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips10"){
           print("Spawning new tipbox for tips10.")
           }else
            {task.skip();
            }
      Process to spawn: tips10
  Process
    Plate name: UsedTipUpstack
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if((plate.instance % 2) == 1){
           print("Upstacking used tip box to Stacker 3.");
        }
        else{
        task.skip();
        }
      Process to spawn: Upstack 3
    Task BuiltIn::Spawn Process
      TaskScript:
        if((plate.instance % 2) == 0){
           print("Upstacking used tip box to Stacker 4.");
        }
        else{
        task.skip();
        }
      Process to spawn: Upstack 4
  Process
    Plate name: tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AMPure XP Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips2
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips2"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: AMPure XP Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips3"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant to Cleanup 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips4
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips4"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant to Cleanup 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emtpytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips5"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emtpytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips6"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emtpytips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips7"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips8"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips9"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //if((!isEmpty()) && (spri_case ==3))
        //   {
        //    print("Spawning tips10.")
        //    }
        //else
        //   {
        //    task.skip()
        //    }

        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips10
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }

        //if((isEmpty()) && (spri_case ==3))
        //   {
        //    print("Tip box empty will become emptytips9.")
        //   }
        //else
        //   {
        //    task.skip()
        //   }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }

        //if((isEmpty()) && (spri_case ==3))
        //   {
        //    print("Spawning emptytips9.")
        //   }
        //else
        //   {
        //    task.skip()
        //   }
      Process to spawn: emptytips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips10"
          }else
           {task.skip();
            }

        //if((isEmpty()) && (spri_case ==3))
        //   {
        //    print("Spawning TipControl.")
        //    tip_box_to_Spawn = "tips10"
        //   }
        //else
        //   {
        //    task.skip()
        //   }
      Process to spawn: TipControl
  Process
    Plate name: emptytips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }

        //if((!isFull()) && (spri_case == 3))
        //  {
        //  print("Tip box is not full so it will move to next subprocess. Spawning emptytips9.");
        //  }
        //else
        //  {
        //    task.skip();
        //   }
      Process to spawn: emptytips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }

        //if(isFull())
        //   {
        //    print("Upstacking " + plate.name + " " + plate.instance)
        //   }
        //else
        //   {
        //    task.skip()
        //    print("Tip box still has space.")
        //    }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips10
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           print("Tip box is empty.  Storing "+plate.name + " " + plate.instance + " in miniplatehub Cassette 4 slot 1")
           need_tips = 1
           }else
           {task.skip()
           need_tips = 0
            }

        //if((isEmpty()) && (spri_case != 3))
        //   {
        //   print("Tip box is empty.  Storing "+plate.name + " " + plate.instance + " in miniplatehub Cassette 4 slot 1")
        //   need_tips = 1
        //   }
        //else
        //   {
        //    task.skip()
        //    need_tips = 0
        //    }
      Process to spawn: EmptyNow
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        if(!isEmpty()){
           print("Tip box still has space.  Storing "+plate.name + " " + plate.instance + " in miniplatehub")
           }else
           {task.skip()
            }

        //if((!isEmpty()) && (spri_case != 3))
        //   {
        //   print("Tip box still has tips.  Storing "+plate.name + " " + plate.instance + " in miniplatehub cassette 4, slot 2.")
        //   }
        //else
        //   {
        //    task.skip()
        //    }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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  Process
    Plate name: emptytips10
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        if(!isFull()){
           print("Tip box still has space.  Storing "+plate.name + " " + plate.instance + " in miniplatehub")
           }else
           {task.skip()
            }

        //if((!isFull()) && (spri_case != 3))
        //   {
        //   print("Tip box still has space.  Storing "+plate.name + " " + plate.instance + " in miniplatehub")
        //   }
        //else
        //   {
        //    task.skip()
        //    }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: EmptyNow
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: Upstack 3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Process
    Plate name: Upstack 4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Pipette_Process Name=AMPure XP Addition
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips1
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: //air gap
      Location, plate: SPRI reservoir
      Volume: 15
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 58
      TaskScript:
        switch (spri_case){
            case 1:
                task.Volume = 150
                break;
            case 2:
                task.Volume = 150
                break;
            case 3:
                 task.Volume = 60
                break;
        }
        print ("Volume used to mix is " + task.Volume)
      Location, plate: SPRI reservoir
      Location, location: 6
      Volume: 150
      Mix cycles: 10
      Aspirate distance: .3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 74
      TaskScript:
        switch (spri_case){
            case 1:
                task.Dispensedistance = 8
                break;
            case 2:
                task.Dispensedistance = 5
                break;
            case 3:
                task.Aspiratedistance = 1
                task.Dispensedistance = 2
                task.Volume = 60
                break;
        }
        print ("Dispense height during mix is " + task.Dispensedistance)
        print ("Aspirate height during mix is " + task.Aspiratedistance)
        print ("The volume is " + task.Volume)
      Location, plate: SPRI reservoir
      Volume: 90
      Mix cycles: 15
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: SPRI reservoir
      Volume: 0.5
      Liquid class: dispense then long wait
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: SPRI reservoir
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 14
      Location, plate: SPRI reservoir
      Location, location: 6
      Volume: =bead_vol1 [100]
      Pre-aspirate volume: 4
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript: print("Dispensing " + bead_vol1 + "ul of beads");
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: =bead_vol1 [100]
      Blowout volume: 4
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: // New Task for cleanup 2
      Location, plate: SPRI reservoir
      Location, location: 6
      Volume: =bead_vol2 [bead_vol2]
      Pre-aspirate volume: 4
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript: // New Task for cleanup 2
      Location, plate: AMPure XP Cleanup 2
      Location, location: 4
      Volume: =bead_vol2 [70]
      Blowout volume: 4
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        task.skip()
        /*

        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)

        */
      Location, plate: emptytips1
      Location, location: 8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        task.skip()
        //trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=DNA Addition
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript:
        task.skip()
        /*
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips2
      Location, location: 2
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        //aspirate a little over to make sure all DNA is transfered

        task.Volume = (parseInt(dna_vol) + 5)

        print("adding " + task.Volume )
      Location, plate: DNA plate
      Location, location: 7
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript: task.Volume = (parseInt(dna_vol) + 5)
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript: //large pre-aspirate before mix
      Location, plate: AMPure XP Cleanup 1
      Volume: 12
      Distance from well bottom: 25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 147
      TaskScript:
        if(dna_bead_vol1 <= 180){
            task.Volume = (dna_bead_vol1 - 40)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 150
             print ("DNA and beads exceed 150ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 30
      Aspirate distance: .5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: AMPure XP Cleanup 1
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=9 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Elution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips9
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: print("Volume of water for elution = " + elute_vol);
      Location, plate: Water Reservoir
      Volume: =elute_vol [30]
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Volume: =elute_vol [30]
      Blowout volume: 2
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: AMPure XP Cleanup 2
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 15
      Allow concurrent operation: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 94
      Location, plate: AMPure XP Cleanup 2
      Volume: =elute_vol [30]
      Pre-aspirate volume: 5
      Blowout volume: 5
      Liquid class: Bead Mixing
      Mix cycles: 30
      Aspirate distance: .5
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: AMPure XP Cleanup 2
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 15
      Allow concurrent operation: 1
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips9
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Aspiration 1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        task.skip()
        /*
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips6
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 43
      Location, plate: AMPure XP Cleanup 2
      Location, location: 7
      Volume: 183
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Dynamic tip extension: 0.010
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: 1
      Empty tips: 1
      Volume: 170
      Blowout volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips6
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Aspiration 2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        task.skip()

        /*
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips8
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 44
      Location, plate: AMPure XP Cleanup 2
      Location, location: 7
      Volume: 183.5
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Dynamic tip extension: 0.010
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 1
      Empty tips: 1
      Volume: 250
      Blowout volume: 1
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips8
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=9 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips5
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 17
      Location, plate: Ethanol Reservoir
      Location, location: 6
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      Location, plate: AMPure XP Cleanup 2
      Location, location: 7
      Empty tips: 1
      Volume: 170
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        task.skip()
        /*
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emtpytips5
      Location, location: 8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        task.skip()
        //trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips7
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 17
      Location, plate: Ethanol Reservoir
      Location, location: 6
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      Location, plate: AMPure XP Cleanup 2
      Location, location: 7
      Empty tips: 1
      Volume: 250
      Blowout volume: 1
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        task.skip()
        /*
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emptytips7
      Location, location: 8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        task.skip()
        //trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Supernatant
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips4
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 47
      TaskScript:
        //if sup_vol is less than 185 skip this task
        //else divide by 2

        if(sup_vol2 <= 185){
            task.skip();
            print("Skipping first aspirate of supernatant");
            }else
            {task.Volume = sup_vol2/2;
            }

        //task.Volume = ((parseInt(dna_vol) + parseInt(bead_vol))-8)/2
        print(task.Volume)
      Location, plate: AMPure XP Cleanup 2
      Volume: 140
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: 4.65
      Dynamic tip extension: 0.010
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 21
      TaskScript:
        if(sup_vol2 <= 185){
            task.skip();
            print("Skipping first dispense of supernatant")
            }
      Location, plate: 1
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 48
      TaskScript:
        //if supe_vol is greater than 185, aspirate half
        //if supe_vol is less than 185, aspirate all

        if(sup_vol2 < 185){
           task.Volume = sup_vol2
           }else
           {task.Volume = sup_vol2/2
            }
      Location, plate: AMPure XP Cleanup 2
      Volume: 132
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: 1.65
      Dynamic tip extension: 0.007
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 21
      Location, plate: 1
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips4
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Sample Collection
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips10
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        //want to leave behind a small amount of
        //water so we don't aspirate beads

        task.Volume = (parseInt(elute_vol) - 2)

        print("Transfering " + task.Volume + "ul to collection plate.")
      Location, plate: Transfer to PCR
      Location, location: 7
      Volume: 29
      Pre-aspirate volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 1.25
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript: task.Volume = (parseInt(elute_vol) - 2)
      Location, plate: Sample Collection Plate
      Location, location: 5
      Empty tips: 1
      Volume: 30
      Blowout volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips10
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=3 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Supernatant to Cleanup 2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips3
      Location, location: 2
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 34
      TaskScript:
        //if sup_vol is less than 185 skip this task
        //else divide by 2

        if(sup_vol <= 180){
            task.skip();
            print("Skipping first aspirate of supernatant");
            }else
            {task.Volume = sup_vol/2;
            }

        //task.Volume = ((parseInt(dna_vol) + parseInt(bead_vol))-8)/2
        print(task.Volume)
      Location, plate: AMPure XP Cleanup 1
      Volume: 140
      Pre-aspirate volume: 2
      Liquid class: Ethanol to waste
      Distance from well bottom: 4.65
      Dynamic tip extension: 0.010
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(sup_vol <= 180){
            task.skip();
            print("Skipping first dispense of supernatant")
        }else
            {task.Volume = sup_vol/2;
            }
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 34
      TaskScript:
        //if supe_vol is greater than 185, aspirate half
        //if supe_vol is less than 185, aspirate all

        if(sup_vol <= 180){
           task.Volume = sup_vol
           }else
           {task.Volume = sup_vol/2
            }
      Location, plate: AMPure XP Cleanup 1
      Volume: 132
      Pre-aspirate volume: 2
      Liquid class: Ethanol to waste
      Distance from well bottom: 1.65
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        //if supe_vol is greater than 185, dispense half
        //if supe_vol is less than 185, dispense all

        if(sup_vol <= 180){
           task.Volume = sup_vol
           }else
           {task.Volume = sup_vol/2
            }
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Volume: 132
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript: //large pre-aspirate before mix
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Volume: 12
      Distance from well bottom: 25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 147
      TaskScript:
        if(dna_bead_vol2 <= 150){
            task.Volume = (dna_bead_vol2 - 40)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 150
             print ("DNA and beads exceed 150ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 30
      Aspirate distance: .5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: AMPure XP Cleanup 2
      Location, location: 5
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: AMPure XP Cleanup 2
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips3
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      Location: 4
      Temperature: 45
      Timeout: 1
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Move To Location
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 3
      Location: 1
    Task BuiltIn::JavaScript
      TaskScript:
        //overwrite ss_temp.txt file with new variables
        //for use in the next protocol
        //mastermix_tips
        //need_tips
        //col
        //used_col
        //Nunc plate to use

        var update_temp_file = (mastermix_col + "\n" + need_tips + "\n" + col + "\n" + used_col + "\n" + Nunc + "\n" + head_mode + "\n" + columns_samples + "\n" + tips_on_loc + "\n" + tips_off_loc + "\n" + Collection + "\n" + DNA_plate)

        file_overwrite("C:\\VWorks Workspace\\Scripts\\SureSelect\\ss_temp.txt" , update_temp_file)
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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