<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\TruSeq\BravoMiniPHBenchCel_round_magnet_RED_insert.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='var columns_samples;
var head_mode;

//gets number of columns to be used for set head mode
function getNumColumns(samples){
   columns_samples = Math.ceil((parseInt(samples)/8))
   
   //if the number of columns if 5, do 6
   if(columns_samples == 5){
   columns_samples = 6
   }

   //if the number of columns is greater than 6, do 12
   if(columns_samples &gt; 6){
   columns_samples = 12
   }
   print(&quot;The number of columns of samples is &quot; + columns_samples + &quot;\n&quot;)
   
}

function setHeadForRun(columns_samples){

   head_mode = &quot;3,3,8,&quot; + columns_samples
  
   print(&quot;The head mode configuration is &quot; + head_mode + &quot;\n&quot;)

}

  
print(&quot;Successfully incorporated Startup script.&quot;)' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
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						<Parameter Category='' Name='2' Value='96 V11 LT250 Tip Box 19477.002' />
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						<Parameter Category='' Name='8' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='9' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Number of Samples' />
						<Parameter Category='' Name='Body' Value='Enter in Number of samples to process.  This number has to be 96 or less.' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='samples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='print(&quot;The number of samples is &quot; + samples)

//get number of columns
getNumColumns(samples)

//get head mode parameters for subprocesses
setHeadForRun(columns_samples)

//get first supernatant volume
//assuming 12ul bead/soln dead volume given Nunc 1ml plate

' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='5' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer first strand MM' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer first strand MM' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Reagent  Plate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer first strand MM' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer first strand MM' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cDNA Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Transfer first strand MM' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='var block_mix = 1' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = columns_samples' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='12' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reagent  Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='30' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='3' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='.08' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='
task.Wellselection = [[ 1 , block_mix ]]' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='cDNA Plate' />
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						<Parameter Category='Volume' Name='Volume' Value='30' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='
task.Wellselection = [[ 1 , block_mix ]]' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='cDNA Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='40' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='
task.Wellselection = [[ 1 , block_mix ]]' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='cDNA Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='6' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='East' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;9&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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					<TaskScript Name='TaskScript' Value='block_mix++' />
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='' />
						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>