<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\TruSeq\BravoMiniPHBenchCel_round_magnet_RED_insert.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open(&quot;C:\\VWorks Workspace\\Scripts\\SureSelect\\tiptracking.js&quot;)
open(&quot;C:\\VWorks Workspace\\Scripts\\SureSelect\\file_operations.js&quot;)	' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var protocol_testing = false' />
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='var runset_1 = true' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='12 SeaHorse PP Reservoir Pyramid Btm' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='72' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='5' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (columns_samples != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Columns of Samples' />
						<Parameter Category='' Name='Body' Value='Enter the number of columns of samples.  

This has to be either 1, 2, 3, 4, 6, or 12 columns of samples.

Five columns will be processed as 6 columns, and anything between 6 and 12 columns will be treated as a full plate.
' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='columns_samples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='columns_samples = parseInt(columns_samples)

print(&quot;User has entered &quot; + columns_samples + &quot; columns.&quot;)

if(columns_samples &gt; 12)
   {
    print(&quot;Error entering column number. Restart protocol.&quot;)
   }
else
   {
    task.skip()
   }' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Error' />
						<Parameter Category='' Name='Body' Value='There was an error in entering columns of samples.  Please pause, abort, and restart the protocol.
' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(columns_samples == 5)
   {
    //convert to 6 columns
   columns_samples = 6
   }
else if(columns_samples &gt; 6)
   {
    //treat as full plate
    columns_samples = 12
    }

print(&quot;The number of columns that will be processed is &quot; + columns_samples + &quot;.&quot;)

setHeadForRun(columns_samples)

var mastermix_col = 1
' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (formProtocolName != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Check log and temperature' />
						<Parameter Category='' Name='Body' Value='Check the log to confirm that the correct run parameters have been entered.

Pause and abort protocol if the parameters are incorrect.

Also confirm that Inheco heat blocks are at the correct temperature.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if (formProtocolName != undefined) task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Inventory Editor' />
						<Parameter Category='' Name='Body' Value='Have you cleared the inventory from previous runs?

Go to Tools--&gt;Inventory Editor--&gt;Inventory Management and delete all plates
in View by plate.' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='task.skip()' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Seal Plate' />
						<Parameter Category='' Name='Body' Value='Seal reaction plate with plate seal or caps.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='//real time is 5 minutes at 65 to denature mRNA

if (protocol_testing) task.Incubationtime = 1' />
					<Parameters >
						<Parameter Category='' Name='Incubation time' Value='360' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='//real time is 3 minutes at 4 to re-nature mRNA

if (protocol_testing) task.Incubationtime = 1' />
					<Parameters >
						<Parameter Category='' Name='Incubation time' Value='180' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='5m at RT and temp to 87' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='5m at RT and temp to 87' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Waitfor' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='7' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='Nunc = &quot;1&quot;
Collection = &quot;2&quot;
DNA_plate = &quot;1&quot;
spri_case = 1' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Bead Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Master Mix Plate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Used DNA transfer tips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 3' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Waitfor' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='RNA Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(isEmpty()){
  var need_tips = 1
  }else
   {task.skip();
  var need_tips = 0
    }' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DNA transfer tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 4, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(isFull()){
   print(&quot;Upstacking &quot; + plate.name + &quot; &quot; + plate.instance)
   }else
   {task.skip()
    print(&quot;Tip box still has space.&quot;)
    }' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='UsedTipUpstack' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Used DNA transfer tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='used_col = 0

tips_off_loc = 13' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTipUpstack' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='5m at RT and temp to 87' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='87' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='30' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='//time actually 5  min at RT to bind DNA' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='Bead Plate' />
						<Parameter Category='' Name='Location to use, location' Value='5' />
						<Parameter Category='' Name='Reservation time' Value='300' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Transfer DNA' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = head_mode' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='tips_on_loc = tips_on_loc - columns_samples
task.Wellselection = [[ 1 , tips_on_loc ]]

print(&quot;Pressing tips on at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA transfer tips' />
						<Parameter Category='' Name='Location, location' Value='2' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackNew(columns_samples)' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='//air gap' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='RNA Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='RNA Plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='50' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='1' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Bead Plate' />
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						<Parameter Category='Volume' Name='Volume' Value='50' />
						<Parameter Category='Volume' Name='Blowout volume' Value='1' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 10 - 50ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Bead Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='80' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='5' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='6' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='.5' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='//remaining airgap' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Bead Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 2 - 10ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tips_off_loc = tips_off_loc - columns_samples
task.Wellselection = [[ 1 , tips_off_loc ]]
print(&quot;Taking tips off at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used DNA transfer tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackUsed(columns_samples)' />
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='//overwrite ss_temp.txt file with new variables
//for use in the next protocol
//mastermix_tips
//need_tips
//col
//used_col
//Nunc plate to use


var update_temp_file = (mastermix_col + &quot;\n&quot; + need_tips + &quot;\n&quot; + col + &quot;\n&quot; + used_col + &quot;\n&quot; + Nunc + &quot;\n&quot; + head_mode + &quot;\n&quot; + columns_samples + &quot;\n&quot; + tips_on_loc + &quot;\n&quot; + tips_off_loc + &quot;\n&quot; + Collection + &quot;\n&quot; + DNA_plate + &quot;\n&quot; + spri_case)

file_overwrite(&quot;C:\\VWorks Workspace\\Scripts\\SureSelect\\ss_temp.txt&quot; , update_temp_file)' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='87' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='30' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>