Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\TruSeq\BravoMiniPHBenchCel_round_magnet_RED_insert.dev
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open("C:\\VWorks Workspace\\Scripts\\SureSelect\\file_operations.js")
    open("C:\\VWorks Workspace\\Scripts\\SureSelect\\tiptracking.js")
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::JavaScript
      TaskScript: var protocol_testing = false
    Task BuiltIn::User Message
      Estimated time: 38
      TaskScript: task.skip()
      Title: CHANGE RUNSET VARIABLE
      Body:
        Is a runset being used?
        -->change runset variable to true

        If not, set runset variable to false on the next task.
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    Task BuiltIn::Configure Labware
      TaskScript:
        runset_1 = true
        print("The state of runset is " + runset_1)
        //temp scripts for testing this protocol separately from runset

        if(runset_1){
            //get tip box states and Nunc plate to use from previous protocol
            getprotocolvariables()
        }
        else{
        //set all variables that are needed through out (that are usually set by
        //previous mastermix addition protocol
        //var mastermix_col =
        var need_tips = 1
        var col = 0
        var used_col = 0
        var Nunc = 1
        //var head_mode =
        //var columns_samples =
        var tips_on_loc = 13
        var tips_off_loc = 13
        var Collection = 2
        var DNA_plate = 1
        var spri_case = 1
        print("Need tips is " + need_tips + "\n")
        print("Col is " + col + "\n")
        print("used _col is " + used_col + "\n")
        print("Nunc is " + Nunc + "\n")
        print("tips_on_loc is " + tips_on_loc + "\n")
        print("tips_off_loc is" + tips_off_loc + "\n")
        print("Collection is" + Collection + "\n")
        print("DNA_plate is" + DNA_plate + "\n")
        print("spri_case is" + spri_case + "\n")
        }
      Device to use: Bravo - 1
      1: 96 Deep Well PP Sqr Well V Btm
      9: 96 Nunc Deep Well 1 mL
    Task BuiltIn::User Message
      Estimated time: 9
      TaskScript:
        if(runset_1){
           task.skip()
           print("Using Runset, skipping startup task.")
        }
      Title: Enter number of samples
      Body: Enter in the number of samples to process.  This number has to be less than or equal to 96 samples.
      User data entry into variable: 1
      Variable name: samples
    Task BuiltIn::JavaScript
      TaskScript:
        if(runset_1){
           task.skip()
           print("Using Runset, skipping startup task.")
        }
        else{
        getNumColumns(samples)
        setHeadForRun(columns_samples)
        }
    Task BuiltIn::JavaScript
      TaskScript:
        switch (spri_case){
            case 1:
                bead_vol = 180
                dna_vol = 100
                sup_vol = bead_vol + dna_vol - 6
                dna_bead_vol = bead_vol + dna_vol
                elute_vol = 32
                break;
            case 2:
                bead_vol = 90
                dna_vol = 50
                sup_vol = bead_vol + dna_vol - 6
                dna_bead_vol = bead_vol + dna_vol
                elute_vol = 15
                break;
            case 3:
                bead_vol = 90
                dna_vol = 50
                sup_vol = bead_vol + dna_vol - 6
                dna_bead_vol = bead_vol + dna_vol
                elute_vol = 32
                break;
        }
        print("The volumes used in this protocol are from case " + spri_case)
        print("The volume of DNA and beads is " + dna_bead_vol + "ul")
        print("The elution volume is " + elute_vol + "ul")
        print("The volume of DNA and beads is " + dna_bead_vol + "ul")
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Temperature: 85
      Timeout: 3
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: 30
      Timeout: 1
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Main_Processes
  Process
    Plate name: Bead plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        // 5 min

        if (protocol_testing) task.Incubationtime = 1
      Incubation time: 180
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        print("!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!" + need_tips)
        if(need_tips){
            print("Tip box from previous protocol was used up.  Spawning new tip box.")
        	var tip_box_to_Spawn = "tips1"
        }
        else{
        task.skip();
        }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        if(!need_tips){
            print("Tip box from previous protocol not used up.  Spawning tips at 2.")
        }
        else{
        task.skip();
        }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips1
    Task Bravo::SubProcess
      Sub-process name: Remove Sup
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Buffer Wash 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: Reagent Plate
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: if (protocol_testing) task.Incubationtime = 1
      Incubation time: 180
      Use relative timing: 0
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    Task BuiltIn::Wait For
      Waitfor: WaitforReagentPlate
    Task Bravo::SubProcess
      Sub-process name: Remove Sup 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 10
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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  Process
    Plate name: Wash Reservoir
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: Buffer Wash 1
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Reagent Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 4
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Spawn Process
      Process to spawn: MMix Tips
    Task BuiltIn::Spawn Process
      Process to spawn: MMix Used
    Task Bravo::SubProcess
      Sub-process name: Frag Buffer Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Signal
      Waitfor: WaitforReagentPlate
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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  Process
    Plate name: TipControl
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Devices
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
        Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0

        tips_on_loc = 13
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn== "tips1"){
           print("Spawning tips1.")
           }else
           {task.skip();
            }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates
        if(tip_box_to_Spawn == "tips2"){
           print("Spawning new tipbox for tips2.")
           }else
            {task.skip();
            }

        /*
        if((plate.instance % 2) == 0){
           print("Spawning tips1.")
           }else
            {task.skip();
            }
        */
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn == "tips3"){
           print("Spawning new tipbox for tips3.")
           }else
            {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn == "tips4"){
           print("Spawning new tipbox for tips4.")
           }else
            {task.skip();
            }
      Process to spawn: tips4
  Process
    Plate name: UsedTipUpstack
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if((plate.instance % 2) == 1){
           print("Upstacking used tip box to Stacker 3.");
        }
        else{
        task.skip();
        }
      Process to spawn: Upstack 3
    Task BuiltIn::Spawn Process
      TaskScript:
        if((plate.instance % 2) == 0){
           print("Upstacking used tip box to Stacker 4.");
        }
        else{
        task.skip();
        }
      Process to spawn: Upstack 4
  Process
    Plate name: MMix Tips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_NewTipsMoved
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Frag Buffer Addition
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: New Tips Control Store
  Process
    Plate name: MMix Used
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_UsedTipsMoved
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Frag Buffer Addition
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: Used Tips Control store
  Process
    Plate name: tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Sup
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips2
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips2"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Sup
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Buffer Wash 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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    Task BuiltIn::Signal
      Waitfor: Waitfor_NewTipsMoved
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Buffer Wash 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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    Task BuiltIn::Signal
      Waitfor: Waitfor_UsedTipsMoved
  Process
    Plate name: New Tips Control Store
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Wait For
      Waitfor: Waitfor
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Estimated time: 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Place Plate
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips3"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: Used Tips Control store
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Signal
    Task BuiltIn::Place Plate
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Sup 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips4
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           tip_box_to_Spawn = "tips4"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
  Process
    Plate name: emptytips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Sup 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips4
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
           print("Tip box is empty.  Storing "+plate.name + " " + plate.instance + " in miniplatehub Cassette 4 slot 1")
           need_tips = 1
           }else
           {task.skip()
           need_tips = 0
            }
      Process to spawn: EmptyNow
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        if(!isEmpty()){
           print("Tip box still has space.  Storing "+plate.name + " " + plate.instance + " in miniplatehub")
           }else
           {task.skip()
            }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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  Process
    Plate name: emptytips4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer DNA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        if(!isFull()){
           print("Tip box still has space.  Storing "+plate.name + " " + plate.instance + " in miniplatehub")
           }else
           {task.skip()
            }
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: EmptyNow
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: Upstack 3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Process
    Plate name: Upstack 4
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Pipette_Process Name=Buffer Wash 1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Location, location: 2
      Well selection: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Wash Reservoir
      Location, location: 6
      Volume: 150
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .15
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: Bead plate
      Location, location: 5
      Empty tips: 1
      Volume: 170
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 91
      Location, plate: Bead plate
      Location, location: 5
      Volume: 120
      Pre-aspirate volume: 5
      Blowout volume: 5
      Liquid class: Bead Mixing
      Mix cycles: 20
      Aspirate distance: .5
      Dispense at different distance: 1
      Dispense distance: 6
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Frag Buffer Addition
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: var atailing_mm = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[ 1, mastermix_col]]

        print("Pressing master mix tips on at " + task.Wellselection)
      Location, plate: MMix Tips
      Location, location: 2
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop
      TaskScript: task.Numberoftimestoloop = columns_samples
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: 9
      Location, location: 9
      Volume: 19.5
      Pre-aspirate volume: 3
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: .15
      Well selection: Column=2 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[ 1 , atailing_mm ]]
      Location, plate: Reagent Plate
      Volume: 19.5
      Blowout volume: 3
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
      TaskScript: atailing_mm++
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.Wellselection = [[ 1, mastermix_col]]
      Location, plate: MMix Used
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=1 Row=0
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    Task BuiltIn::Group End
      TaskScript: mastermix_col++
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  Pipette_Process Name=Remove Sup
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips1
      Location, location: 2
      Well selection: Column=10 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 33
      Location, plate: Bead plate
      Location, location: 7
      Volume: 110
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: .1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 1
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips1
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=10 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Sup 2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips3
      Location, location: 2
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 42
      Location, plate: Bead plate
      Location, location: 7
      Volume: 150
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: .1
      Dynamic tip extension: 0.005
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      Location, plate: 1
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips3
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer DNA
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips4
      Location, location: 2
      Well selection: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: Reagent Plate
      Volume: 5
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: Reagent Plate
      Volume: 20
      Pre-aspirate volume: 4
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: .05
      Dynamic tip extension: .01
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: Bead plate
      Volume: 20
      Blowout volume: 4
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 47
      Location, plate: Bead plate
      Volume: 15
      Pre-aspirate volume: 6
      Blowout volume: 5
      Liquid class: Bead Mixing
      Mix cycles: 30
      Aspirate distance: .15
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Bead plate
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 2 - 10ul aq
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips4
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Move To Location
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 1
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: 30
      Timeout: 1
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    Task BuiltIn::JavaScript
      TaskScript:
        //overwrite ss_temp.txt file with new variables
        //for use in the next protocol
        //mastermix_tips
        //need_tips
        //col
        //used_col
        //Nunc plate to use

        var update_temp_file = (mastermix_col + "\n" + need_tips + "\n" + col + "\n" + used_col + "\n" + Nunc + "\n" + head_mode + "\n" + columns_samples + "\n" + tips_on_loc + "\n" + tips_off_loc + "\n" + Collection + "\n" + DNA_plate)

        file_overwrite("C:\\VWorks Workspace\\Scripts\\SureSelect\\ss_temp.txt" , update_temp_file)
