<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var g = GetGlobalObject();

var pro = {
	hmode: &quot;1,2,1,&quot;+g.formColumns,
	cols: g.formColumns,
	shake: false
};

var vol = {
	PRE_ASP: 5,
	mix: g.settings.mixVolume
};
' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mixing' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mixing' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='samples' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mixing' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mixing' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='WideBoreTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mixing' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mixing' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Mixing' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = pro.hmode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-pro.cols]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WideBoreTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.PRE_ASP' Value='5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(!pro.shake) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WideBoreTips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='On' />
						<Parameter Category='' Name='RPM' Value='500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.mix' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1.75' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='3.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(!pro.shake) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='Off' />
						<Parameter Category='' Name='RPM' Value='500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.PRE_ASP' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='9' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>