<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Constants:
var MAX_VOLUME = 170;
var MAX_MIX_VOLUME = 150;
var PRE_ASP_LARGE = 15;
var PRE_ASP_MEDIUM = 10;
var PRE_ASP_SMALL = 5;
// Get protocol parameters from global scope:
var global = GetGlobalObject();
var runsetMode = global.runsetMode;
if(runsetMode) global.updateRunset();
var columns = global.formColumns;
var headMode = &quot;1,2,1,&quot; + columns;
var tipColumn = global.settings.tipColumn || 1;
var reagentColumn = global.settings.reagentColumn || 1;
var indexColumn = global.settings.indexColumn | 1;
var timeMod = global.timeMod || 1;
var tempRt = global.tempRt || 20;
var sampleVolume = global.settings.sampleVolume || 50;
var reagentVolume = global.settings.reagentVolume || 50;
var primerVolume = global.settings.primerVolume || 10; // Total primer volume
var protocolName = global.settings.protocolName;
//var altPlate = (runsetMode || columns &gt; 8);
var dph = global.dph;

var singleTipbox = (columns &lt; 9 || (!runsetMode &amp;&amp; columns &lt; 12));

global.statusString = protocolName + &quot; started&quot;;' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='10' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='10' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='6' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='6' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(singleTipbox) task.Locationtouse = 2;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='IndexPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='ReagentTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='NewTips2' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='TransferPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 3' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='TransferPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Transfer plate' />
						<Parameter Category='' Name='Body' Value='When the robot has finished moving, take the plate from postion 4, transfer to a thermal cycler. Confirm this message to finish the protocol and turn off the cooling.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='resetTemp' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='resetTemp' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='IndexPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(singleTipbox) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(singleTipbox) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='UsedTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(singleTipbox) task.skip();' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips2' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='aliquotReagent' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = reagentVolume;	// Volume to dispense per well
var maxTipVolume = MAX_VOLUME;	// Tip capacity
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(runsetMode) task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(runsetMode) task.Wellselection = [[1,reagentColumn]];
/*
if(tipVolume === (volumeLeft + deadVolume)) {
	task.Distancefromwellbottom = 0.5;
	task.Dynamictipextension = dph(tipVolume, 0.5);
}
*/' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TransferPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -4.5;
}
if(runsetMode) task.Wellselection = [[1,reagentColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(runsetMode) task.Wellselection = [[1,13-tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;9&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='resetTemp' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='// Dummy task
task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='IndexPlate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferReagent' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];
if(!singleTipbox) task.Location_plate = &quot;NewTips2&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = reagentVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(reagentVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TransferPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + reagentVolume;
task.Dynamictipretraction = 5 / (sampleVolume + reagentVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Volume = 0.8 * (reagentVolume + sampleVolume + primerVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-6' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(singleTipbox) {
   task.Wellselection = [[1,1]];
 } else {
   task.Location_plate = &quot;NewTips2&quot;;
   task.Wellselection = [[1,13-columns]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='// Dummy task to be able to conditionally include NewTips2
task.skip;' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='NewTips2' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>