Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: 10X Setup
      1: 96 V11 LT250 Tip Box 19477.002
      3: 96 V11 LT250 Tip Box 19477.002
      4: Tip Trash
      7: 96 V11 LT250 Tip Box 19477.002
    Task Bravo::Set temperature - Position
      Device Device_Name=10X Setup Location_Name=6
      Estimated time: 2
      Location: 6
      Temperature: 25
      Temperature Tolerance: 5
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::Define Variables
      bPromptWhenExecuted: 1
      strPromptText: How many columns?
      arrVariables numColumns=1
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    Task BuiltIn::Define Variables
      bPromptWhenExecuted: 1
      strPromptText: Reservoir index?
      arrVariables index=1
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Main_Processes
  Process
    Plate name: Input Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Add SPRI Mix
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 1
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 2
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    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 6
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=6
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Dislodge Pellet
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    Task Bravo::SubProcess
      Sub-process name: Incubate and Mix
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    Task Bravo::SubProcess
      Sub-process name: delay tip fetch 1
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: delay tip fetch 2
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    Task Bravo::SubProcess
      Sub-process name: Transfer Eluent
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
  Process
    Plate name: Reagent Reservoir
    Plate type: 24 Column Reservoir
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Add SPRI Mix
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 1
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 2
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    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 5
  Process
    Plate name: Output Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Transfer Eluent
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 9
  Pipette_Process Name=Add Elution Buffer
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=1 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Wellselection = [[1, (1+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 41.5
      Pre-aspirate volume: 0.25
      Post-aspirate volume: 0.25
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=1 Row=1
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: Input Plate
      Volume: 42
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.12
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch retract distance: 1
      Tip touch horizontal offset: -1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Mark tips as used: 0
      Well selection: Column=1 Row=0
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  Pipette_Process Name=Add SPRI Mix
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript: task.Wellselection = [[1, index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 88
      Pre-aspirate volume: 10
      Liquid class: Ethanol
      Distance from well bottom: 0.25
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=0 Row=1
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: Input Plate
      Volume: 80
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.15
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      Location, plate: Input Plate
      Volume: 160
      Liquid class: SPRIselect Mix
      Mix cycles: 10
      Dynamic tip extension: 0.076
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 438
      Location, plate: Input Plate
      Volume: 160
      Liquid class: 20 ul/s Periotic Mix
      Mix cycles: 11
      Dynamic tip extension: 0.076
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: Input Plate
      Empty tips: 1
      Volume: 20
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 14
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch horizontal offset: -1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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
  Pipette_Process Name=Dislodge Pellet
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 3
      Location: 6
      Temperature: 25
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=1 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: Input Plate
      Volume: 40
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: offset 30% - Left
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: offset 30% - Right
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: offset 30% - Back
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: offset 30% - Front
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: offset 30% - Left
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 40
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: offset 30% - Right
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      TaskScript: task.skip();
      Location, plate: Input Plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=EtOH Wash 1
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript: task.Wellselection = [[1, (12+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 100
      Pre-aspirate volume: 5
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Input Plate
      Volume: 105
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.09
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=2 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript: task.Wellselection = [[1, (12+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 100
      Pre-aspirate volume: 15
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 0.1
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Input Plate
      Volume: 105
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 10
      Dynamic tip retraction: 0.03
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 30
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: Input Plate
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 6
      Dynamic tip extension: 0.035
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript: task.Wellselection = [[1, index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 175
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 8
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 42
      Location, plate: Input Plate
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.05
      Dynamic tip extension: 0.035
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript: task.Wellselection = [[1, index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 175
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 10
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=EtOH Wash 2
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=1 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Wellselection = [[1, (12+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 160
      Pre-aspirate volume: 20
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      Location, plate: Input Plate
      Volume: 165
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 2.5
      Dynamic tip retraction: 0.06
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch retract distance: 1
      Tip touch horizontal offset: -2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 30
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Input Plate
      Volume: 160
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 6
      Dynamic tip extension: 0.033
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      TaskScript: task.Wellselection = [[1, (13+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 165
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 5
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 18
      Location, plate: Input Plate
      Volume: 160
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.033
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      TaskScript: task.Wellselection = [[1, (13+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 165
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 5
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=1
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: Input Plate
      Volume: 160
      Post-aspirate volume: 1
      Liquid class: 75 ul/s Fast-Z
      Distance from well bottom: 0.2
      Dynamic tip extension: 0.033
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      TaskScript: task.Wellselection = [[1, (13+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 165
      Blowout volume: 1
      Distance from well bottom: 5
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=1
      Pipette technique: offset 30% - Back
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 120
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
  Pipette_Process Name=Incubate and Mix
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=6 Row=0
    Task Bravo::secondary::Aspirate
      TaskScript: task.skip();
      Location, plate: Input Plate
      Volume: 2
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 299
      Location, plate: Input Plate
      Volume: 40
      Blowout volume: 1
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 100
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 3.5
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 260
      Location, plate: Input Plate
      Volume: 40
      Blowout volume: 1
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 100
      Aspirate distance: 0.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      Location: 6
      Temperature: 4
      Temperature Tolerance: 6
      Timeout: 10
      Allow concurrent operation: 1
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
  Pipette_Process Name=Transfer Eluent
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 22
      Location, plate: Input Plate
      Volume: 40
      Pre-aspirate volume: 0.5
      Post-aspirate volume: 0.5
      Liquid class: 96 diposable tip - normalization slow
      Distance from well bottom: 0.09
      Dynamic tip extension: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: Output Plate
      Location, location: 9
      Volume: 41
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 2
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  Pipette_Process Name=Transfer Supernatant
    Device Device_Name=10X Setup Location_Name=1
    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 30
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    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 18
      Location, plate: Input Plate
      Volume: 170
      Pre-aspirate volume: 10
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 6
      Dynamic tip extension: 0.04
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Wellselection = [[1, numColumns + 1]];
      Location, plate: Input Plate
      Volume: 176
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 2
      Dynamic tip retraction: 0.06
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 23
      Location, plate: Input Plate
      Volume: 80
      Post-aspirate volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.05
      Dynamic tip extension: 0.075
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, numColumns + 1]];
      Location, plate: Input Plate
      Volume: 85.5
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 12
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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
  Pipette_Process Name=delay tip fetch 1
    Device Device_Name=10X Setup Location_Name=1
    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 0
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
  Pipette_Process Name=delay tip fetch 2
    Device Device_Name=10X Setup Location_Name=1
    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 0
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
