Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev
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Startup_Processes
  Process
    Plate name: Configure
    Task BuiltIn::Configure Labware
      Device to use: 10X Setup
      1: 96 V11 LT180 Tip Box 19477.002 FILTERED
      3: 96 V11 LT180 Tip Box 19477.002 FILTERED
      4: Tip Trash
      7: 96 V11 LT180 Tip Box 19477.002 FILTERED
    Task BuiltIn::Define Variables
      bPromptWhenExecuted: 1
      strPromptText: Define Variables:
      arrVariables Number_of_Columns=1 Reservoir_Index=1
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Main_Processes
  Process
    Plate name: SPRIselect Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: SPRIselect Aliquot I
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    Task Bravo::SubProcess
      Sub-process name: Transfer SI-PCR
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: SPRIselect II
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash I
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash II
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    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Resuspend
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Elute
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
  Process
    Plate name: Reagent Reservoir
    Plate type: 24 Column Reservoir
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: SPRIselect Aliquot I
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    Task Bravo::SubProcess
      Sub-process name: SPRIselect II
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash I
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash II
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    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 5
  Process
    Plate name: Input Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Retaining Block
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: SPRIselect Aliquot I
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    Task Bravo::SubProcess
      Sub-process name: Transfer SI-PCR
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 6
  Process
    Plate name: Output Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Elute
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 9
  Pipette_Process Name=Add Elution Buffer
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=10 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript: task.Wellselection = [[1, (1+Reservoir_Index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 24
      Pre-aspirate volume: 1
      Post-aspirate volume: 0.5
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 1
      Well selection: Column=1 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 25.5
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 1
      Dynamic tip retraction: 0.16
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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  Pipette_Process Name=Elute
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=1 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 20
      Pre-aspirate volume: 4.5
      Post-aspirate volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.75
      Dynamic tip extension: 0.14
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: Output Plate
      Location, location: 9
      Volume: 25
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.145
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 2
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  Pipette_Process Name=EtOH Wash I
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=10 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: task.Wellselection = [[1, (12+Reservoir_Index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 160
      Pre-aspirate volume: 10
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 5
      Dynamic tip extension: 0.02
      Well selection: Column=12 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 41
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 165
      Blowout volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 2
      Dynamic tip retraction: 0.063
      Perform tip touch: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: SPRIselect Plate
      Location to use, location: 2
      Reservation time: 30
    Task Bravo::secondary::Aspirate
      Estimated time: 39
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 1
      Dynamic tip extension: 0.065
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Wellselection = [[1, (13+Reservoir_Index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 175
      Blowout volume: 1
      Liquid class: Ethanol to waste
      Distance from well bottom: 5
      Dynamic tip retraction: 0.02
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 1
      Tip touch horizontal offset: -1
      Well selection: Column=13 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=EtOH Wash II
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=11 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: task.Wellselection = [[1, (12+Reservoir_Index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 160
      Pre-aspirate volume: 10
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.02
      Well selection: Column=12 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 41
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 165
      Blowout volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 2
      Dynamic tip retraction: 0.063
      Perform tip touch: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: SPRIselect Plate
      Location to use, location: 2
      Reservation time: 30
    Task Bravo::secondary::Aspirate
      Estimated time: 39
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 6
      Dynamic tip extension: 0.035
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Wellselection = [[1, (12+Reservoir_Index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 172.5
      Blowout volume: 1
      Liquid class: Ethanol to waste
      Distance from well bottom: 5
      Dynamic tip retraction: 0.02
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 1
      Well selection: Column=12 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 42
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.035
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Wellselection = [[1, (12+Reservoir_Index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 172.5
      Blowout volume: 1
      Liquid class: Ethanol to waste
      Distance from well bottom: 5
      Dynamic tip retraction: 0.02
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 1
      Well selection: Column=12 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Remove Supernatant
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 40
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 160
      Pre-aspirate volume: 5
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.8
      Dynamic tip extension: 0.06
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 165
      Blowout volume: 1
      Liquid class: 75 ul/s Fast-Z
      Distance from well bottom: 2.5
      Dynamic tip retraction: 0.07
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch retract distance: 1
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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
  Pipette_Process Name=Resuspend
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      Location to use, plate: SPRIselect Plate
      Location to use, location: 8
      Reservation time: 60
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Pre-aspirate volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 3
      Tip touch horizontal offset: -5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3.5
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Left
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 3
      Tip touch horizontal offset: -5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3.5
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Right
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 3
      Tip touch horizontal offset: -5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3.5
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Back
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 3
      Tip touch horizontal offset: -5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3.5
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 3
      Tip touch horizontal offset: -5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3.5
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Left
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 3
      Tip touch horizontal offset: -5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3.5
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Right
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    Task BuiltIn::Reserve Location
      Location to use, plate: SPRIselect Plate
      Location to use, location: 8
      Reservation time: 30
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 272
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Blowout volume: 5
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 100
      Dynamic tip extension: 0.15
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: SPRIselect Plate
      Location to use, location: 8
      Reservation time: 60
    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=SPRIselect Aliquot I
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=11 Row=0
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 7
      Location, plate: Input Plate
      Location, location: 6
      Volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Mix cycles: 1
      Dynamic tip extension: 2
      Aspirate distance: 17
      Perform tip touch: 1
      Tip touch retract distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 6
      Location, plate: Input Plate
      Location, location: 6
      Volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Mix cycles: 1
      Dynamic tip extension: 2
      Aspirate distance: 17
      Perform tip touch: 1
      Tip touch retract distance: 2
      Well selection: Column=0 Row=0
      Pipette technique: Pierce Back-Right
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 6
      Location, plate: Input Plate
      Location, location: 6
      Volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Mix cycles: 1
      Dynamic tip extension: 2
      Aspirate distance: 17
      Perform tip touch: 1
      Tip touch retract distance: 2
      Well selection: Column=0 Row=0
      Pipette technique: Pierce Front-Left
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 6
      Location, plate: Input Plate
      Location, location: 6
      Volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Mix cycles: 1
      Dynamic tip extension: 2
      Aspirate distance: 17
      Perform tip touch: 1
      Tip touch retract distance: 2
      Well selection: Column=0 Row=0
      Pipette technique: Pierce Back-Left
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 7
      Location, plate: Input Plate
      Location, location: 6
      Volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Mix cycles: 1
      Dynamic tip extension: 2
      Aspirate distance: 17
      Perform tip touch: 1
      Tip touch retract distance: 2
      Well selection: Column=0 Row=0
      Pipette technique: Pierce Front-Right
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Wellselection = [[1, Reservoir_Index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 48
      Pre-aspirate volume: 6
      Post-aspirate volume: 1
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.052
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 55
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.12
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=SPRIselect II
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Wellselection = [[1, Reservoir_Index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 18
      Pre-aspirate volume: 13
      Post-aspirate volume: 0.5
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.25
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 5
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 20
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.58
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 50
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 100
      Blowout volume: 5
      Liquid class: SPRIselect Mix
      Mix cycles: 10
      Dynamic tip extension: 0.1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 1
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch horizontal offset: -1.5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 422
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 125
      Blowout volume: 5.5
      Liquid class: 20 ul/s Periotic Mix
      Mix cycles: 12
      Dynamic tip extension: 0.1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 1
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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  Pipette_Process Name=Transfer SI-PCR
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: Input Plate
      Location, location: 6
      Volume: 96
      Pre-aspirate volume: 14
      Post-aspirate volume: 0.5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.07
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 100
      Liquid class: 75 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.11
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 50
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 100
      Blowout volume: 5
      Liquid class: SPRIselect Mix
      Mix cycles: 10
      Dynamic tip extension: 0.1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 1.25
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch horizontal offset: -1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 422
      Location, plate: SPRIselect Plate
      Location, location: 8
      Volume: 125
      Blowout volume: 5.5
      Liquid class: 20 ul/s Periotic Mix
      Mix cycles: 12
      Dynamic tip extension: 0.1
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Transfer Supernatant
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + Number_of_Columns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 35
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 135
      Pre-aspirate volume: 5
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: SPRIselect Plate
      Location, location: 2
      Volume: 140
      Blowout volume: 1
      Liquid class: 20 ul/s Fast-Z
      Distance from well bottom: 1.5
      Dynamic tip retraction: 0.077
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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