<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='96 V11 LT180 Tip Box 19477.002 FILTERED' />
						<Parameter Category='' Name='2' Value='' />
						<Parameter Category='' Name='3' Value='96 V11 LT180 Tip Box 19477.002 FILTERED' />
						<Parameter Category='' Name='4' Value='Tip Trash' />
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						<Parameter Category='' Name='8' Value='96 V11 LT180 Tip Box 19477.002 FILTERED' />
						<Parameter Category='' Name='9' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='6' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='What is the full path of the CSV File?' >
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					<arrVariables CSV='&quot;C:\\Users\\10X\\Desktop\\Dilutions\\20160825_input_plate.csv&quot;' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var myFile;
var myArray;
var temp = 0;
var volume = 0;
var lastColumn = 0;
var extraVolume = 0;

myFile = new File();
myArray = new Array();
specialArray = new Array();

// Open CSV file and put data into results var. 
myFile.Open(CSV, 0, 0);
result = myFile.Read();
myFile.Close();

// Strip spaces out of the input data. 
var noSpaces = result.replace(/ /g, &quot;&quot;);

// Remove new line and coma literal. 
var strArray = noSpaces.split(/,|\r?\n/);

// Add data to myArray
for (j=2; j &lt; strArray.length; j++){
   var well = strArray[j];
   j++;

   // Change well ID into a list of chars. 
   var location = well.split(&quot;&quot;);

   // Change the row letter into address number. 
   switch(location[0]){
      case &quot;A&quot;:
         location[0] = 1;
         break;
      case &quot;B&quot;:
         location[0] = 2;
         break;
      case &quot;C&quot;:
         location[0] = 3;
         break;
      case &quot;D&quot;:
         location[0] = 4;
         break;
      case &quot;E&quot;:
         location[0] = 5;
         break;
      case &quot;F&quot;:
         location[0] = 6;
         break;
      case &quot;G&quot;:
         location[0] = 7;
         break;
      case &quot;H&quot;:
         location[0] = 8;
         break;
      default:
         location[0] = 0;
         location[1] = 0;
         break;
   }

   // Parse the string literal of the volume to into a number. 
   volume = strArray[j];
   volume = parseFloat(volume);

   // Don&apos;t add data to array if the volume isn&apos;t a number. 
   if (isNaN(volume)){
      break;
   }
   
   if (volume &gt; 200){
      print(&quot;sample is out of Range. Skipping sample: &quot; + well)
      volume = &quot;&quot;;
   } else if (volume &gt; 165){
      volume /= 2;
      myArray.push(location, volume);
   }

   // Track the last column for loop management. 
   if (location[1] &gt; lastColumn){
      lastColumn = location[1];
   }

   // Push data into array. 
   myArray.push(location, volume);
}

// Modify Volumes again for total volumes under 25 ul
for (k=0; k &lt; myArray.length; k+=2){
   if (temp == 0){
      temp = myArray[k+1];
   }
   
   if ((temp + 5 + extraVolume) &lt; 25){
      temp += myArray[k+1];
      extraVolume += 5;
      k -= 2;
   } else {
      myArray[k+1] = temp;
      specialArray.push(myArray[k], extraVolume);
      extraVolume = temp = 0;
   }
}

print(&quot;Final dilution volume transfer array modified for 5 ul minimum transfer:&quot;)
print(myArray);
print(&quot;Final additional sample transfers for low conc.:&quot;)
print(specialArray);
print(&quot;Last Column is &quot; + lastColumn);
' />
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Diluent index' >
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					<arrVariables index='12' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='6' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Configure' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot Diluent' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot Diluent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Low Conc. Samples' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Low Conc. Samples' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX All Samples' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX All Samples' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Final Aliquot' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Final Aliquot' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Normalization Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Red Alum Insert' />
					<Parameter Name='Simultaneous plates' Value='1' />
					<Parameter Name='Plates have lids' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot Diluent' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot Diluent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Diluent Plate' />
					<Parameter Name='Plate type' Value='12 Seahorse Reservoir' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Low Conc. Samples' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Low Conc. Samples' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX All Samples' />
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						<Parameter Category='Static labware configuration' Name='5' Value='12 Seahorse Reservoir' />
						<Parameter Category='Static labware configuration' Name='6' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX All Samples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Sample Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Aliquot Diluent' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='0' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
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					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = myArray.length/2;' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='2' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if (myArray[i+1] &lt; 5){
   task.skip();
}

if (myArray[i+1] &gt; 200){
   task.Volume = 155;
}

task.Wellselection = [[8, index]];
task.Volume = myArray[i+1];

if (i &lt; 1){
   task.Preaspiratevolume = ((myArray.length*3)/4);
}

task.Postaspiratevolume = 1.0;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Diluent Plate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='1' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='1' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if (myArray[i+1] &lt; 5){
   task.skip();
}

if (myArray[i+1] &gt; 200){
   task.Volume = 155;
}

task.Wellselection = [myArray[i]];
task.Volume = (myArray[i+1]+2.5);
task.Dynamictipretraction = ((-0.011*Math.log(task.Volume))+0.12);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Normalization Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='12' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.08' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Final Aliquot' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,1,8,&quot; + lastColumn;
' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
						<Parameter Category='' Name='Location, location' Value='3' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Normalization Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='1' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='lastColumn++;
task.Wellselection = [[1, lastColumn]];
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Normalization Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='13' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.3' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='0.5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='-1.5' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
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					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TRX All Samples' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,1,8,&quot; + lastColumn;
' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
						<Parameter Category='' Name='Location, location' Value='3' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Sample Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0.5' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Blowoutvolume = 2.5;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Normalization Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='5.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Blowoutvolume = 2.5;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Normalization Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='175' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.1' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TRX Low Conc. Samples' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='0' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='if (specialArray.length &lt; 1){
   task.skip();
}

task.Numberoftimestoloop = specialArray.length/2;' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='2' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='j' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if (specialArray.length &lt; 1){
   task.skip();
} else if (specialArray[j+1] &lt; 5){
   task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if (specialArray.length &lt; 1){
   task.skip();
} else if (specialArray[j+1] &lt; 5){
   task.skip();
}

task.Wellselection = [specialArray[j]];
task.Volume = specialArray[j+1];

if (j &lt; 1){
   task.Preaspiratevolume = ((specialArray.length*3)/4)+5;
}

task.Postaspiratevolume = 1;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Sample Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Volume' Value='20' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0.5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0.5' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='var diluent = 0;
var dist = 1;
var volume = (specialArray[j+1]+2.5);
var index = new Array();

if (specialArray.length &lt; 1){
   task.skip();
} else if (specialArray[j+1] &lt; 5){
   task.skip();
}

task.Volume = volume;
task.Wellselection = [specialArray[j]];

// find diluent volume at target location
for (a=0; a &lt; myArray.length; a+=2){
   if (myArray[a] == specialArray[j]){
      diluent += myArray[a+1];
   }
}

dist = 0.0001*(diluent*diluent) + 0.078*diluent + 1;
task.Distancefromwellbottom = dist;

print(&quot;Diluent volume is &quot; + diluent);
print(&quot;Distance from well bottom = &quot; + dist);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Normalization Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='21' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.05' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if (specialArray.length &lt; 1){
   task.skip();
} else if (specialArray[j+1] &lt; 5){
   task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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					<TaskScript Name='TaskScript' Value='if (specialArray.length &lt; 1){
   task.skip();
}' />
				</Task>
				<Task Name='BuiltIn::Relid' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Normalization Plate' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>