<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='6' />
						<Parameter Category='' Name='Timeout' Value='20' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Number of chips?' >
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					<arrVariables num_chips='1' />
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='What column at location 9 contains the enzyme mix?' >
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					<arrVariables enzyme='1' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Denature' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Denature' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Transfer Master Mix' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Incubation time' Value='195' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Trasfer Sample' >
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				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Delay Tip Fetch' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Delay Tip Fetch' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Denatured Sample' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Denatured Sample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Template Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Denature' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Denature' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Denaturant' />
					<Parameter Name='Plate type' Value='1 Seahorse Rervoir - low profile' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Transfer Master Mix' >
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				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Master Mix' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Master Mix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Denatured Sample' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Denatured Sample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Make Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Red Alum Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Master Mix' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Master Mix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Trasfer Sample' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Master Mix' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL using Silver Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Denature' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Denature' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Master Mix' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Master Mix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Denatured Sample' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Denatured Sample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Used Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Denature' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Denature' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Master Mix' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Master Mix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TRX Denatured Sample' />
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						<Parameter Category='Static labware configuration' Name='5' Value='1 Seahorse Rervoir - low profile' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TRX Denatured Sample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Delay Tip Fetch' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location to use, location' Value='8' />
						<Parameter Category='' Name='Reservation time' Value='' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Denature' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,1,8,&quot; + num_chips' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;2&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='2' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, (num_chips + 1)]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='13' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Vent_Puncture - Right' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, (num_chips + 1)]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='13' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='-1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Vent_Puncture - Left' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Denaturant' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 1 - 2ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, (num_chips + 1)]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 1 - 2ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.05' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, (num_chips + 1)]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='15' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.05' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, (num_chips + 1)]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used Tips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;2&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TRX Denatured Sample' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,1,8,&quot; + num_chips' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings />
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Make Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='2' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, (num_chips + 1)]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Template Plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='10' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Make Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='4.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Make Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.07' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.25' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Make Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used Tips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;2&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;7&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings />
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Make Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies >
					<Sub_Process Name='Denature' />
					<Sub_Process Name='TRX Master Mix' />
				</Dependencies>
			</Pipette_Process>
			<Pipette_Process Name='TRX Master Mix' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings />
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Make Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = num_chips' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='12' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='12' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, enzyme]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Master Mix' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Volume' Value='97.5' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0.5' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 500 - 200 ul MM' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1 , i]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Make Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 500 - 200 ul MM' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.07' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='-1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Used Tips' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;9&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings />
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Make Plate' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies >
					<Sub_Process Name='Denature' />
				</Dependencies>
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>