<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='2' Value='' />
						<Parameter Category='' Name='3' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='4' Value='Tip Trash' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='6' />
						<Parameter Category='' Name='Timeout' Value='20' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Load Sample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Load Sample' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Load Beads' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Load Beads' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Load Oil' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Load Oil' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Remove GEMS' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Remove GEMS' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='10X GEM Chip' />
					<Parameter Name='Plate type' Value='10X Chip Holder v2' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Remove GEMS' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Remove GEMS' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Output plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert' />
					<Parameter Name='Simultaneous plates' Value='1' />
					<Parameter Name='Plates have lids' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='7' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Load Beads' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Load Beads' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='7' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Gel Beads' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Retaining Block' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Load Sample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Load Sample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Make Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Red Alum Insert' />
					<Parameter Name='Simultaneous plates' Value='1' />
					<Parameter Name='Plates have lids' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Load Oil' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Load Oil' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Partition Oil' />
					<Parameter Name='Plate type' Value='12 Seahorse Reservoir' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Load Beads' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
						<Parameter Category='' Name='Location, location' Value='1' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;6&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='13' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='offset 30% - Right' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='13' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='1' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='offset 30% - Left' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Volume' Value='90' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='1' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - 200 uL GB Mix' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.085' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='80' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='30 ul/s Fast-Z' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.09' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Volume' Value='80' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - 200 uL GB Mix' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.09' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.25' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 diposable tip - normalization slow' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Volume' Value='94' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0.5' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GBs' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.07' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='10X GEM Chip' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='85.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GBs' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, GB]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Gel Beads' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='15' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='13' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Load Oil' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
						<Parameter Category='' Name='Location, location' Value='1' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[ 1 , oil ]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Partition Oil' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='135' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='1' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GEM OIL' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='10X GEM Chip' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='136' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GEM OIL' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.033' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='10x Chip Oil Reservoir' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[ 1 , oil ]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Partition Oil' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='135' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GEM OIL' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='10X GEM Chip' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='135' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GEM OIL' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.03' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='10x Chip Oil Reservoir' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Load Sample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Master Mix Column? (0 = Skip)' >
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					<Parameters >
						<Parameter Category='' Name='Plate' Value='' />
					</Parameters>
					<arrVariables MM='0' />
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Gel Bead Column?' >
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					<Parameters >
						<Parameter Category='' Name='Plate' Value='' />
					</Parameters>
					<arrVariables GB='1' />
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Oil Reservoir?' >
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					<Parameters >
						<Parameter Category='' Name='Plate' Value='' />
					</Parameters>
					<arrVariables oil='1' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Make Plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
						<Parameter Category='' Name='Location, location' Value='3' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;9&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1 , MM]];

if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Make Plate' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='90' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='1' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='1' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.07' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='10X GEM Chip' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='92' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='5 ul/s Fast-Z' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.098' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
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					<TaskScript Name='TaskScript' Value='if (MM == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Make Plate' />
					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Remove GEMS' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Output Column? ( 0 = Skip )' >
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					<Parameters >
						<Parameter Category='' Name='Plate' Value='' />
					</Parameters>
					<arrVariables Output='0' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Delid' >
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					<TaskScript Name='TaskScript' Value='if (Output == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Output plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if (Output == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
						<Parameter Category='' Name='Location, location' Value='3' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if (Output == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='10X GEM Chip' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='126' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200 ul - GEMs' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1 , Output]];

if (Output == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Output plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='130' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200 ul - GEMs' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.07' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if (Output == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Relid' >
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					<TaskScript Name='TaskScript' Value='if (Output == 0){
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Plate' Value='Output plate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>