<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='2' Value='' />
						<Parameter Category='' Name='3' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='4' Value='Tip Trash' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Device Profile Change!' />
						<Parameter Category='' Name='Body' Value='*Important:
The profile must be changed from &quot;10x Bravo&quot; to &quot;10x Bravo - ALPAQUA Mag Block&quot;.

*Note:
Position 2 and 8 have modified teach points. The Alpaqua mag block is permenantly placed on the deck at position 2. The silver retaining block should be used at position 8 when the labware listed is in a red alluminum insert. ' />
						<Parameter Category='' Name='Only show the first time' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Number of columns of GEMs?' >
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					<arrVariables num_columns='1' />
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='What column contains Recovery Agent?' >
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					<arrVariables Recovery_Agent='1' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Configure' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Break Emulsion' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Break Emulsion' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Incubation time' Value='600' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Remove Recovery Agent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Remove Recovery Agent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='GEM plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Break Emulsion' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Break Emulsion' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Recovery Agent' />
					<Parameter Name='Plate type' Value='12 Seahorse Reservoir' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='7' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Remove Recovery Agent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Remove Recovery Agent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='7' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Waste Oil' />
					<Parameter Name='Plate type' Value='Tip Box Lid Plate' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Break Emulsion' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,8,&quot; + num_columns' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
						<Parameter Category='' Name='Location, location' Value='1' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Back-Right' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Front-Left' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Back-Left' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Front-Right' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, Recovery_Agent]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Recovery Agent' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='125' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GEM OIL' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200ul - GEM OIL' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='14' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East/South/North' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='2' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='140' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - GEM Break' />
						<Parameter Category='Properties' Name='Mix cycles' Value='25' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.07' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='140' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 200 ul - GEMs' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='17' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='13' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Remove Recovery Agent' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,8,&quot; + num_columns' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
						<Parameter Category='' Name='Location, location' Value='1' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='145' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='Recovery Reagent' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.02' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Waste Oil' />
						<Parameter Category='' Name='Location, location' Value='7' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, num_columns+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, num_columns+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Back-Right' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, num_columns+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Front-Left' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, num_columns+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Back-Left' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, num_columns+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='GEM plate' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='0.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Mix cycles' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='17' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East/South/North' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-10' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='Pierce Front-Right' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>