Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::JavaScript
      TaskScript: run("C:/VWorks Workspace/Protocol Files/facility/resources/clear_inventory.bat", true);
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=6
      Estimated time: 2
      Location: 6
      Temperature: 40
      Temperature Tolerance: 10
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::Define Variables
      bPromptWhenExecuted: 1
      strPromptText: How many columns?
      arrVariables numColumns=1 timeMod=1
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Main_Processes
  Process
    Plate name: Input Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Retaining Block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Add Cleanup Mix
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    Task Bravo::SubProcess
      Sub-process name: Transfer Bind Mix
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  Process
    Plate name: BindPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Transfer Bind Mix
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Signal
      Waitfor: enter_etoh
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: task.Incubationtime = 150 * timeMod;
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 1
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    Task Bravo::SubProcess
      Sub-process name: EtoH Wash 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=8
      TaskScript: task.Incubationtime = 120 * timeMod;
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=6
      TaskScript: task.Incubationtime = 120 * timeMod;
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Dislodge Pellet
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    Task Bravo::SubProcess
      Sub-process name: Incubate and Mix
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::User Message
      Task_Disabled: 1
      Estimated time: 376
      Title: Spin down
      Body: Take the Nunc plate from position 7, seal and spin down. Return plate and choose Continue.
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: task.Incubationtime = 150 * timeMod;
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Transfer Eluent
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
  Process
    Plate name: Reagent Plate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Add Cleanup Mix
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Wait For
      Waitfor: enter_etoh
    Task BuiltIn::Spawn Process
      Process to spawn: Ethanol Plate
    Task BuiltIn::Wait For
      Waitfor: etoh_done
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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  Process
    Plate name: Output Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: Transfer Eluent
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  Process
    Plate name: ElutionTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer
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    Task Bravo::SubProcess
      Sub-process name: Dislodge Pellet
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    Task Bravo::SubProcess
      Sub-process name: Incubate and Mix
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    Task Bravo::SubProcess
      Sub-process name: Transfer Eluent
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  Process
    Plate name: WashTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Add Cleanup Mix
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    Task Bravo::SubProcess
      Sub-process name: Transfer Bind Mix
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    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 1
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    Task Bravo::SubProcess
      Sub-process name: EtoH Wash 2
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    Task Bravo::SubProcess
      Sub-process name: Move Tips
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: ElutionTips
  Process
    Plate name: UsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: Transfer Supernatant
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    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 1
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    Task Bravo::SubProcess
      Sub-process name: EtoH Wash 2
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    Task Bravo::SubProcess
      Sub-process name: Move Tips
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    Task Bravo::SubProcess
      Sub-process name: Incubate and Mix
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    Task Bravo::SubProcess
      Sub-process name: Transfer Eluent
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  Process
    Plate name: Ethanol Plate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 1
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    Task Bravo::SubProcess
      Sub-process name: EtoH Wash 2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Signal
      Waitfor: etoh_done
  Pipette_Process Name=Add Cleanup Mix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-numColumns]];
      Location, plate: WashTips
      Location, location: 2
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 78
      TaskScript: //task.Wellselection = [[1, index]];
      Location, plate: Reagent Plate
      Volume: 150
      Pre-aspirate volume: 25
      Liquid class: 75 ul/s Fast-Z
      Mix cycles: 10
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: //task.Wellselection = [[2, index]];
      Location, plate: Reagent Plate
      Volume: 25
      Liquid class: 20 ul/s Fast-Z
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -14
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: //task.Wellselection = [[1, index]];
      Location, plate: Reagent Plate
      Volume: 150
      Pre-aspirate volume: 20
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: Input Plate
      Volume: 140
      Liquid class: Ethanol
      Distance from well bottom: 7
      Dynamic tip retraction: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 39
      Location, plate: Input Plate
      Volume: 150
      Blowout volume: 5
      Liquid class: 96 disposable tip - GEM Break
      Mix cycles: 10
      Dynamic tip extension: 0.07
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 935
      Location, plate: Input Plate
      Volume: 150
      Blowout volume: 5
      Liquid class: 20 ul/s Periotic Mix
      Mix cycles: = 25 * timeMod; [25]
      Dynamic tip extension: 0.07
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 64
      Location, plate: Input Plate
      Volume: 150
      Liquid class: 96 disposable tip - normalization
      Mix cycles: 1
      Dynamic tip extension: 0.06
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Input Plate
      Volume: 20
      Liquid class: 20 ul/s Fast-Z
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: WashTips
      Location, location: 2
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Add Elution Buffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-numColumns]];
      Location, plate: ElutionTips
      Location, location: 2
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: //task.Wellselection = [[1, (1+index)]];
      Location, plate: Reagent Plate
      Volume: 54
      Pre-aspirate volume: 0.25
      Post-aspirate volume: 0.25
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.5
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      Location, plate: BindPlate
      Volume: 54.5
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.018
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 15
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: ElutionTips
      Location, location: 2
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Dislodge Pellet
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 3
      Location: 6
      Temperature: 40
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: ElutionTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: BindPlate
      Volume: 45
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
      Pipette technique: offset 25% - Left
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
      Pipette technique: offset 25% - Right
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
      Pipette technique: offset 25% - Back
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
      Pipette technique: offset 25% - Front
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
      Pipette technique: offset 25% - Left
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
      Pipette technique: offset 25% - Right
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    Task Bravo::secondary::Dispense
      TaskScript: task.skip();
      Location, plate: BindPlate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 3
      Perform tip touch: 1
      Tip touch retract distance: -2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: ElutionTips
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=EtOH Wash 1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-2*numColumns]];
      Location, plate: WashTips
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: //task.Wellselection = [[1, (12+index)]];
      Location, plate: Ethanol Plate
      Volume: 150
      Pre-aspirate volume: 6
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      Location, plate: BindPlate
      Volume: 154
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.021
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 12
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript: //task.Wellselection = [[1, (12+index)]];
      Location, plate: Ethanol Plate
      Volume: 100
      Pre-aspirate volume: 4
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: BindPlate
      Volume: 104
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 4.2
      Dynamic tip retraction: 0.015
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 12
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 15
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: BindPlate
      Volume: 155
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.032
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript: //task.Wellselection = [[1, index]];
      Location, plate: Ethanol Plate
      Volume: 156
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 1
      Dynamic tip retraction: 0.0206
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 12
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 30
      Location, plate: BindPlate
      Volume: 110
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.3
      Dynamic tip extension: 0.02
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      TaskScript: //task.Wellselection = [[1, index]];
      Location, plate: Ethanol Plate
      Volume: 111
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 4.2
      Dynamic tip retraction: 0.012
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 12
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: UsedTips
      Location, location: 1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=EtoH Wash 2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: WashTips
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript: //task.Wellselection = [[1, (12+index)]];
      Location, plate: Ethanol Plate
      Volume: 125
      Pre-aspirate volume: 5
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 0.8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      Location, plate: BindPlate
      Volume: 126
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.0159
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 14
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 30
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      Location, plate: BindPlate
      Volume: 135
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.3
      Dynamic tip extension: 0.02
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      TaskScript: //task.Wellselection = [[1, (13+index)]];
      Location, plate: Ethanol Plate
      Volume: 136
      Blowout volume: 4
      Liquid class: Ethanol
      Distance from well bottom: 5.5
      Dynamic tip retraction: 0.011
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 9
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 21
      Location, plate: BindPlate
      Volume: 65
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.08
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 13
      TaskScript: //task.Wellselection = [[2, (13+index)]];
      Location, plate: Ethanol Plate
      Volume: 67
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 13
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 20
      Location, plate: BindPlate
      Volume: 65
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.08
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 10
      TaskScript: //task.Wellselection = [[2, (13+index)]];
      Location, plate: Ethanol Plate
      Volume: 66
      Liquid class: Ethanol
      Distance from well bottom: 13
      Well selection: Column=6 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,numColumns+1]];
      Location, plate: UsedTips
      Location, location: 1
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Incubate and Mix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: ElutionTips
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript: task.skip();
      Location, plate: BindPlate
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 151
      Location, plate: BindPlate
      Volume: 45
      Blowout volume: 5
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 50
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Task_Disabled: 1
      Estimated time: 260
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 100
      Aspirate distance: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 76
      Location, plate: BindPlate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 25
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: BindPlate
      Volume: 50
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.3
      Dynamic tip extension: 0.024
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: BindPlate
      Volume: 55
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.3
      Dynamic tip retraction: 0.03
      Perform tip touch: 1
      Tip touch retract distance: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Location, plate: BindPlate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: UsedTips
      Location, location: 1
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      Location: 6
      Temperature: 20
      Temperature Tolerance: 5
      Timeout: 10
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 6
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::secondary::Shake
      Estimated time: 31
      Location, plate: BindPlate
      Mode: Timed
      RPM: 1200
      Direction: NWSE
      Time for operation in Timed mode: 30
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
  Pipette_Process Name=Move Tips
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: UsedTips
      Location, location: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-2*numColumns]];
      Location, plate: WashTips
      Location, location: 2
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Bind Mix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: WashTips
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: Input Plate
      Volume: 20
      Liquid class: 100 ul/s Fast-Z
      Distance from well bottom: 35
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Input Plate
      Volume: 140
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.07
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: BindPlate
      Volume: 140
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 2
      Perform tip touch: 1
      Tip touch retract distance: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: BindPlate
      Volume: 20
      Liquid class: 20 ul/s Fast-Z
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: WashTips
      Location, location: 2
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Eluent
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-2*numColumns]];
      Location, plate: ElutionTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 19
      Location, plate: BindPlate
      Volume: 54
      Pre-aspirate volume: 1
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.3
      Dynamic tip extension: 0.022
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 241
      Location, plate: Output Plate
      Volume: 54
      Blowout volume: 1
      Liquid class: 10 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.039
      Perform tip touch: 1
      Tip touch retract distance: -2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,numColumns+1]];
      Location, plate: UsedTips
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 2
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  Pipette_Process Name=Transfer Supernatant
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: WashTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: BindPlate
      Volume: 150
      Pre-aspirate volume: 5
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 2.5
      Dynamic tip extension: 0.0167
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: //task.Wellselection = [[1, numColumns+1]];
      Location, plate: BindPlate
      Volume: 151
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip retraction: 0.0247
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 15
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 33
      Location, plate: BindPlate
      Volume: 130
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.25
      Dynamic tip extension: 0.0196
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: //task.Wellselection = [[1, numColumns+1]];
      Location, plate: BindPlate
      Volume: 136
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 4
      Dynamic tip retraction: 0.011
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 15
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: UsedTips
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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