Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: 10X Setup
      1: 96 V11 LT250 Tip Box 19477.002
      3: 96 V11 LT250 Tip Box 19477.002
      4: Tip Trash
      7: 96 V11 LT250 Tip Box 19477.002
    Task Bravo::Set temperature - Position
      Device Device_Name=10X Setup Location_Name=6
      Estimated time: 2
      Location: 6
      Temperature: 25
      Temperature Tolerance: 5
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::Define Variables
      bPromptWhenExecuted: 1
      strPromptText: How many columns?
      arrVariables numColumns=1
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    Task BuiltIn::Define Variables
      bPromptWhenExecuted: 1
      strPromptText: Reservoir index?
      arrVariables index=1
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Main_Processes
  Process
    Plate name: Input Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: Add SPRI Mix
    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      SubProcess_Name: Transfer Supernatant
    Task Bravo::SubProcess
      SubProcess_Name: EtOH Wash 1
    Task Bravo::SubProcess
      Sub-process name: EtOH Wash 2
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    Task Bravo::SubProcess
      SubProcess_Name: Add Elution Buffer
    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 6
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=6
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      SubProcess_Name: Dislodge Pellet
    Task Bravo::SubProcess
      SubProcess_Name: Incubate and Mix
    Task Bravo::SubProcess
      SubProcess_Name: delay tip fetch 1
    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
    Task BuiltIn::Incubate
      Device Device_Name=10X Setup Location_Name=2
      Incubation time: 150
      Use relative timing: 0
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    Task Bravo::SubProcess
      SubProcess_Name: delay tip fetch 2
    Task Bravo::SubProcess
      SubProcess_Name: Transfer Eluent
    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 2
  Process
    Plate name: Reagent Reservoir
    Plate type: 24 Column Reservoir
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: Add SPRI Mix
    Task Bravo::SubProcess
      SubProcess_Name: EtOH Wash 1
    Task Bravo::SubProcess
      SubProcess_Name: EtOH Wash 2
    Task Bravo::SubProcess
      SubProcess_Name: Add Elution Buffer
    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 5
  Process
    Plate name: Output Plate
    Plate type: 96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 9
    Task Bravo::SubProcess
      SubProcess_Name: Transfer Eluent
    Task BuiltIn::Place Plate
      Device to use: 10X Setup
      Location to use: 9
  Pipette_Process Name=Add Elution Buffer
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=1 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Wellselection = [[1, (1+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 55
      Pre-aspirate volume: 0.25
      Post-aspirate volume: 0.25
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Well selection: Column=1 Row=1
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: Input Plate
      Volume: 55.5
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 1.5
      Dynamic tip retraction: 0.11
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Tip touch retract distance: 1
      Tip touch horizontal offset: -1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Mark tips as used: 0
      Well selection: Column=1 Row=0
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  Pipette_Process Name=Add SPRI Mix
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=6 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Wellselection = [[1, index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 35
      Pre-aspirate volume: 30
      Liquid class: Ethanol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=1
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Input Plate
      Volume: 30
      Liquid class: Ethanol
      Distance from well bottom: 7
      Dynamic tip retraction: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 39
      Location, plate: Input Plate
      Volume: 60
      Blowout volume: 5
      Liquid class: SPRIselect Mix
      Mix cycles: 10
      Dynamic tip extension: 0.07
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 312
      Location, plate: Input Plate
      Volume: 60
      Blowout volume: 5
      Liquid class: 20 ul/s Periotic Mix
      Mix cycles: 11
      Dynamic tip extension: 0.07
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: Input Plate
      Volume: 25
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 10
      Dynamic tip retraction: 0.05
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.skip();
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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
  Pipette_Process Name=Dislodge Pellet
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 3
      Location: 6
      Temperature: 25
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=1 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: Input Plate
      Volume: 45
      Pre-aspirate volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Left
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Right
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Back
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Left
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip extension: 0.06
      Perform tip touch: 1
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: Input Plate
      Volume: 45
      Liquid class: 96 disposable tip - Fast Mix
      Distance from well bottom: 6
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Right
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    Task Bravo::secondary::Dispense
      TaskScript: task.skip();
      Location, plate: Input Plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=EtOH Wash 1
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=8 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 255
      TaskScript: task.Wellselection = [[1, (12+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 150
      Pre-aspirate volume: 2
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 5
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Input Plate
      Volume: 152
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.082
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 30
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Input Plate
      Volume: 155
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 5
      Dynamic tip extension: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript: task.Wellselection = [[1, index]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 156
      Liquid class: Ethanol
      Distance from well bottom: 10
      Perform tip touch: 1
      Which sides to use for tip touch: East
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=EtOH Wash 2
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 7
      Location, location: 7
      Allow automatic tracking of tip usage: 1
      Well selection: Column=6 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: task.Wellselection = [[1, (12+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 150
      Pre-aspirate volume: 5
      Post-aspirate volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 0.1
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      Location, plate: Input Plate
      Volume: 151
      Blowout volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.082
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 30
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Input Plate
      Volume: 155
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 5
      Dynamic tip extension: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript: task.Wellselection = [[1, (13+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 156
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 12
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Aspirate
      Estimated time: 21
      Location, plate: Input Plate
      Volume: 65
      Post-aspirate volume: 1
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.08
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript: task.Wellselection = [[2, (13+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 67
      Blowout volume: 1
      Liquid class: Ethanol
      Distance from well bottom: 13
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Well selection: Column=0 Row=1
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      Location, plate: Input Plate
      Volume: 65
      Liquid class: 96 disposable tip - normalization
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.08
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Wellselection = [[2, (13+index)]];
      Location, plate: Reagent Reservoir
      Location, location: 5
      Volume: 66
      Distance from well bottom: 13
      Well selection: Column=0 Row=0
      Pipette technique: offset 30% - Front
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 90
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
  Pipette_Process Name=Incubate and Mix
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.skip();
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=6 Row=0
    Task Bravo::secondary::Aspirate
      TaskScript: task.skip();
      Location, plate: Input Plate
      Volume: 2
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 299
      Location, plate: Input Plate
      Volume: 45
      Blowout volume: 1
      Liquid class: 96 disposable tip - Fast Mix
      Mix cycles: 100
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 3.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 6
      Turn off temperature: 1
      Timeout: 1
      Allow concurrent operation: 1
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  Pipette_Process Name=Transfer Eluent
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 1
      Location, location: 1
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 24
      Location, plate: Input Plate
      Volume: 52
      Pre-aspirate volume: 0.5
      Post-aspirate volume: 0.5
      Liquid class: 96 diposable tip - normalization slow
      Distance from well bottom: 0.75
      Dynamic tip extension: 0.09
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: Output Plate
      Location, location: 9
      Volume: 53
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 1
      Dynamic tip retraction: 0.085
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 2
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  Pipette_Process Name=Transfer Supernatant
    Device Device_Name=10X Setup Location_Name=1
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,1,8," + numColumns;
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: 3
      Location, location: 3
      Allow automatic tracking of tip usage: 1
      Well selection: Column=0 Row=0
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      Location, plate: Input Plate
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 6
      Dynamic tip extension: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Wellselection = [[1, numColumns + 1]];
      Location, plate: Input Plate
      Volume: 171
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 2
      Dynamic tip retraction: 0.06
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 17
      Location, plate: Input Plate
      Volume: 170
      Post-aspirate volume: 1
      Liquid class: 15 ul/s Fast-Z
      Distance from well bottom: 0.5
      Dynamic tip extension: 0.05
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Wellselection = [[1, numColumns + 1]];
      Location, plate: Input Plate
      Volume: 171
      Liquid class: 30 ul/s Fast-Z
      Distance from well bottom: 2
      Dynamic tip retraction: 0.06
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 4
      Location, location: 4
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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
  Pipette_Process Name=delay tip fetch 1
    Device Device_Name=10X Setup Location_Name=1
    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 0
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
  Pipette_Process Name=delay tip fetch 2
    Device Device_Name=10X Setup Location_Name=1
    Task BuiltIn::Reserve Location
      Location to use, plate: Input Plate
      Reservation time: 0
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
