<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Protocol Files\development\jgr\10x_genome_bravo\__10X_Library_Prep.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
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						<Parameter Category='' Name='3' Value='96 V11 LT180 Tip Box 19477.002 FILTERED' />
						<Parameter Category='' Name='4' Value='Tip Trash' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='5' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='How many columns?' >
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					<arrVariables numColumns='1' />
				</Task>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='Master Mix Index?' >
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					<arrVariables index='1' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Add Master Mix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Add Master Mix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='RXN Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec half skirt PCR in Red Alum Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Add Master Mix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Add Master Mix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='10X Setup' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='10X Setup' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Master Mix' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR in Red Alum Insert' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Add Master Mix' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='6' />
						<Parameter Category='' Name='Timeout' Value='15' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = numColumns;' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='n' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
						<Parameter Category='' Name='Location, location' Value='3' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, index]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Master Mix' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Volume' Name='Volume' Value='25' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='15' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, n]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='RXN Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='30' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.27' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, n]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='RXN Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Volume' Value='80' />
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						<Parameter Category='Properties' Name='Liquid class' Value='30 ul/s Fast-Z' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0.1' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, n]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='RXN Plate' />
						<Parameter Category='' Name='Location, location' Value='6' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip - normalization' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='1' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='-1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='4' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='10X Setup' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>