<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var g = GetGlobalObject();
var columns = g.columns;
var MAX_TIP_VOLUME = 175;
var reagentVolume = g.settings.reagentVolume;
var primerVolume = g.settings.primerVolume;
var sampleVolume = g.settings.sampleVolume;
var tipColumn = g.settings.tipColumn;
var reagentColumn = g.settings.reagentColumn;
var finalHold = g.settings.finalHold;
var dph = g.dph;
' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotPrimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotPrimer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Storage Incubate' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='incubateAtLocation' Value='' />
						<Parameter Category='' Name='newIncubationTime' Value='0' />
					</Parameters>
					<Parameter >
						<IncubationTime Incubation_Time_MS='10' />
						<RelativeTiming bRelative_Timing='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='NewTips2' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotPrimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotPrimer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotPrimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotPrimer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='TransferPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotPrimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotPrimer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='finishUp' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='finishUp' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReactionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='7' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &gt; 10) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips2' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='aliquotPrimer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = primerVolume;	// Volume to dispense per well
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = (columns &gt; 1) * 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
if(tipVolume === (volumeLeft + deadVolume)) {
	task.Distancefromwellbottom = 0.2;
	task.Dynamictipextension =dph(tipVolume, 0.2);
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.6' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -4.5;
}
task.Wellselection = [[1,reagentColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='aliquotReagent' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = reagentVolume;	// Volume to dispense per well
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = (columns &gt; 1) * 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(tipVolume === (volumeLeft + deadVolume)) {
	task.Distancefromwellbottom = 0.2;
	task.Dynamictipextension =dph(tipVolume, 0.2);
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.6' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TransferPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.6' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -4.5;
}
task.Wellselection = [[1,reagentColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='finishUp' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
						<Parameter Category='' Name='Location to use, location' Value='6' />
						<Parameter Category='' Name='Reservation time' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!finalHold) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Final cold' />
						<Parameter Category='' Name='Body' Value='Protocol finished, select Continue to turn off cooling.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='2' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferSample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='// Dummy task
if(columns &lt; 11) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='NewTips2' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(columns &gt; 10) task.Location_plate = &quot;NewTips2&quot;;
task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = reagentVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(reagentVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TransferPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + reagentVolume;
task.Dynamictipretraction = 5 / (sampleVolume + reagentVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Blowout volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Volume = 0.7 * (sampleVolume + reagentVolume + primerVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Blowout volume' Value='3' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-4' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) {
	task.Wellselection = [[1,3]];
 } else {
   task.Location_plate = &quot;NewTips2&quot;;
   task.Wellselection = [[1,13-columns]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
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</Velocity11>