<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
var columns = global.formColumns || 1;
var headMode = &quot;1,2,1,&quot; + columns;
var elutionVolume = global.settings.elutionVolume;
var splitEluateVolume = global.settings.splitEluateVolume || 0;
var MAX_VOLUME = 175;
var MAX_MIX_VOLUME = 160;
var PRE_ASP = 5;
var PRE_ASP_LARGE = 15;

var dph = global.dph;
' />
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
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						<Parameter Category='' Name='2' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='3' Value='' />
						<Parameter Category='' Name='4' Value='96 Eppendorf Twin.tec PCR' />
						<Parameter Category='' Name='5' Value='' />
						<Parameter Category='' Name='6' Value='96 Nunc Deep Well 1 mL' />
						<Parameter Category='' Name='7' Value='96 Nunc Deep Well 1 mL' />
						<Parameter Category='' Name='8' Value='96 Nunc Deep Well 1 mL' />
						<Parameter Category='' Name='9' Value='96 Nunc Deep Well 1 mL' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='splitEluate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='splitEluate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='AliquotPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(splitEluateVolume &gt; 0) {
	task.Body = &quot;Choose &apos;Continue&apos; to transfer &quot; + splitEluateVolume + &quot; uL of total &quot; + elutionVolume + &quot; uL to a separate plate.&quot;;
} else {
	task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Split eluate' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(splitEluateVolume == 0) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='AliquotPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UserMessage' />
					<Parameter Name='Plate type' Value='96 Deep Well PP Sqr Well V Btm' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='splitEluate' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,13-columns]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_slow_medium_vol&quot;;
var mPreAspVolume = PRE_ASP;
var mTransferVolume = splitEluateVolume;
var mAspDistance =0.7;
var mDispDistance = 0.5;
var mBlowoutHeight = 7;
var mDoTipTouch = true;
var mTouchRetract = -6;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(mPreAspVolume == 0) {
   task.skip();
}
task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='AliquotPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(mPreAspVolume == 0 &amp;&amp; !mDoTipTouch) {
   task.skip();
}
task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_blowout&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;None&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='AliquotPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>