Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      Task_Disabled: 1
      TaskScript:
        /*
         Declaration of variables
        */

        var global = GetGlobalObject();

        // Time modifier:
        var timeMod = 1;
        // Ambient temperature:
        var roomTemperature = 20;
        // Number of columns with samples:
        var columnsOfSamples = parseInt(global.formColumns);
        // The headmode used throughout:
        var headMode = "1,2,1," + columnsOfSamples;
        // Bead volume:
        var beadVolume = parseFloat(global.formBeadVolume);
        // Volume to resuspend washed beads in:
        var beadResuspVolume = parseFloat(global.formResuspVolume);
        // Max aspiration volume:
        var maxAspVolume = 170;
        // Max volume to use when mixing:
        var maxMixVolume = 150;
        // Volume for washing bead source plate:
        var plateWashVolume = 300;
        // Volume used when washing
        // away bead storage buffer:
        var beadWashVolume = 120;
        // Volume used when washing
        // DNA-bead complex:
        var dnaWashVolume = 400;
        // Volume elution buffer to rinse tips with:
        var rinseVolume = 80;
        // Precipitation buffer volume:
        var precipVolume = parseFloat(global.formPrecipVolume);
        // Sample volume:
        var sampleVolume = parseFloat(global.formSampleVolume);
        // Magnet incubation time, long
        // Used when pelleting fragsep and adjusted so that
        // larger volumes have longer pellet time:
        var pelletTimeLong = 120 * ((((precipVolume+sampleVolume+beadResuspVolume)/160) + 1) / 2);
        // Magnet incubation time:
        var pelletTime = 60;
        // Magnet incubation time, short:
        var pelletTimeShort = 30;
        // Incubation time for bead binding:
        var bindTime = parseFloat(global.formBindTime) * 60 * timeMod;
        // Elution buffer volume:
        var elutionVolume = parseFloat(global.formElutionVolume);
        // Elution incubation time:
        var elutionTime = 2 * 60 * timeMod;
        // Temperature of finished sample plate:
        var finalTemperature = 10;
        // Pre-aspiration volume:
        var preAsp = 20;
        // Number of times to perform the bead
        // storage buffer removal wash:
        var beadWashRepeats = 1;
        // Number of times to repeat the wash of
        // the DNA-bead complex:
        var dnaWashRepeats = 1;
        // The number of times to mix when washing:
        var dnaWashMixes = 5;
        // Transfer loop vars:
        var stepVolume;
        var aspRepeats;
        // Bind mix vars:
        // Incubation time for air-drying wash buffer:
        var ethanolDryTime = 10 * 60;
        // For displaying status:
        global.statusString = "Setting temperature...";
    Task BuiltIn::JavaScript
      TaskScript:
        /*
         Declaration of variables TEST VERSION
        */

        var global = GetGlobalObject();

        // Time modifier:
        var timeMod = 1;
        // Ambient temperature:
        var roomTemperature = 20;
        // Number of columns with samples:
        var columnsOfSamples = 3;
        // The headmode used throughout:
        var headMode = "1,2,1," + columnsOfSamples;
        // Bead volume:
        var beadVolume = 50;
        // Volume to resuspend washed beads in:
        var beadResuspVolume = 10;
        // Max aspiration volume:
        var maxAspVolume = 170;
        // Max volume to use when mixing:
        var maxMixVolume = 150;
        // Volume for washing bead source plate:
        var plateWashVolume = 300;
        // Volume used when washing
        // away bead storage buffer:
        var beadWashVolume = 120;
        // Volume used when washing
        // DNA-bead complex:
        var dnaWashVolume = 380;
        // Volume elution buffer to rinse tips with:
        var rinseVolume = 80;
        // Precipitation buffer volume:
        var precipVolume = 100;
        // Sample volume:
        var sampleVolume = 50;
        // Magnet incubation time, long
        // Used when pelleting fragsep and adjusted so that
        // larger volumes have longer pellet time:
        var pelletTimeLong = 12 * ((((precipVolume+sampleVolume+beadResuspVolume)/160) + 1) / 2);
        // Magnet incubation time:
        var pelletTime = 10;
        // Magnet incubation time, short:
        var pelletTimeShort = 5;
        // Incubation time for bead binding:
        var bindTime = 2 * 60 * timeMod;
        // Elution buffer volume:
        var elutionVolume = 30;
        // Elution incubation time:
        var elutionTime = 2 * 60 * timeMod;
        // Temperature of finished sample plate:
        var finalTemperature = 10;
        // Pre-aspiration volume:
        var preAsp = 20;
        // Number of times to perform the bead
        // storage buffer removal wash:
        var beadWashRepeats = 1;
        // Number of times to repeat the wash of
        // the DNA-bead complex:
        var dnaWashRepeats = 2;
        // The number of times to mix when washing:
        var dnaWashMixes = 5;
        // Transfer loop vars:
        var stepVolume;
        var aspRepeats;
        // Incubation time for air-drying wash buffer
        var ethanolDryTime = 5 * 60;
        // Panel temperature for wash buffer evaporation:
        var dryTemperature = 50;
        // For displaying status:
        global.statusString = "Setting temperature...";
    Task BuiltIn::JavaScript
      TaskScript:
        // DEBUG
        var vars = [global.statusString,
        				columnsOfSamples,
        				headMode,
        				sampleVolume,
        				beadVolume,
        				precipVolume,
        				beadResuspVolume,
        				bindTime,
        				elutionVolume];

        print(vars);
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 3
      Location: 4
      Temperature: =dryTemperature; [20]
      Wait: 0
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 3
      Location: 6
      Temperature: =roomTemperature; [20]
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "Protocol started";
Main_Processes
  Process
    Plate name: Tipbox
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: BeadStirUp
    Task Bravo::SubProcess
      SubProcess_Name: BeadDistribution
    Task BuiltIn::Spawn Process
      Process to spawn: ElutionBufferPlate
    Task Bravo::SubProcess
      SubProcess_Name: RinsePlate
    Task Bravo::SubProcess
      SubProcess_Name: IsolateBeads1
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips1
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads1
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips2
    Task Bravo::SubProcess
      Sub-process name: BeadSampleResusp
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    Task BuiltIn::Spawn Process
      Process to spawn: PrecipBufferPlate
    Task Bravo::SubProcess
      SubProcess_Name: MakeFragSep
    Task Bravo::SubProcess
      SubProcess_Name: Bind
    Task Bravo::SubProcess
      SubProcess_Name: IsolateBeads3
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips3
    Task BuiltIn::Spawn Process
      Process to spawn: WashBufferPlate
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads2
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips4
    Task Bravo::SubProcess
      SubProcess_Name: AddElutionBuffer
    Task Bravo::SubProcess
      SubProcess_Name: Elute
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips5
    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
    Task Bravo::SubProcess
      SubProcess_Name: TransferEluate
  Process
    Plate name: BeadPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: BeadDistribution
    Task Bravo::SubProcess
      SubProcess_Name: IsolateBeads1
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: BeadSampleResusp
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Signal
      Waitfor: signalShakerCleared
    Task Bravo::SubProcess
      SubProcess_Name: MakeFragSep
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: FragSepPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: BeadStirUp
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: BeadPlate
    Task Bravo::SubProcess
      SubProcess_Name: BeadDistribution
    Task Bravo::SubProcess
      SubProcess_Name: RinsePlate
    Task BuiltIn::Wait For
      Waitfor: signalShakerCleared
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: MakeFragSep
    Task Bravo::SubProcess
      SubProcess_Name: Bind
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      SubProcess_Name: IsolateBeads3
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: AddElutionBuffer
    Task Bravo::SubProcess
      SubProcess_Name: Elute
    Task Bravo::SubProcess
      SubProcess_Name: TransferEluate
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      SubProcess_Name: BeadSampleResusp
  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: RinsePlate
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips1
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads1
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips2
    Task Bravo::SubProcess
      SubProcess_Name: BeadSampleResusp
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips3
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips4
    Task Bravo::SubProcess
      SubProcess_Name: AddElutionBuffer
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips5
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: PrecipBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      SubProcess_Name: MakeFragSep
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: WashBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads2
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      SubProcess_Name: RinsePlate
    Task Bravo::SubProcess
      SubProcess_Name: IsolateBeads1
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips1
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads1
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips2
    Task Bravo::SubProcess
      SubProcess_Name: IsolateBeads3
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips3
    Task Bravo::SubProcess
      SubProcess_Name: WashBeads2
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips4
    Task Bravo::SubProcess
      SubProcess_Name: RinseTips5
  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      SubProcess_Name: TransferEluate
  Pipette_Process Name=AddElutionBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Adding elution buffer";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        // To try to eliminate beads left in tips,
        // perform an extra large preasp:
        var extraPreAsp;
        if((elutionVolume + preAsp) > 130) {
           extraPreAsp = 180 - elutionVolume - preAsp;
           if(extraPreAsp < 0) {
              extraPreAsp = 0;
           }
        } else {
           extraPreAsp = 50;
        }
        task.Volume = preAsp + extraPreAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 50
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: task.Volume = elutionVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = elutionVolume;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepPlate
      Location, location: 5
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 37
      TaskScript:
        var mixVolume = 0.7 * elutionVolume;
        if(mixVolume > (maxMixVolume - extraPreAsp)) {
        	mixVolume = maxMixVolume - extraPreAsp;
        }
        task.Volume = mixVolume;
      Location, plate: FragSepPlate
      Liquid class: j_slow_mixing
      Mix cycles: 10
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: FragSepPlate
      Location, location: 5
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadDistribution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Distributing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        // Column 1:
        task.Headmode = "1,2,1,1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        // Column 12:
        task.skip()
        task.Wellselection = [[1,12]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Preaspiration
        task.Volume = preAsp;
        var currentColumn = 1;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =columnsOfSamples;
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = beadVolume;
      Location, plate: FragSepPlate
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,currentColumn]];
        task.Volume = beadVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
      TaskScript: currentColumn++;
    Task Bravo::secondary::Dispense
      Estimated time: 16
      TaskScript:
        // Blowout
        task.Volume = preAsp;
        task.Wellselection = [[1,columnsOfSamples]];
      Location, plate: BeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Column 12:
        task.skip();
        task.Wellselection = [[1,12]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadSampleResusp
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 36
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Volume = beadResuspVolume;
        task.Preaspiratevolume = preAsp;
        task.Postaspiratevolume = 3;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_small_vol
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = sampleVolume;
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript: task.Volume = beadResuspVolume + sampleVolume + 3;
      Location, plate: BeadPlate
      Liquid class: j_peg_handling
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadPlate
      Location, location: 5
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 45
      TaskScript:
        var mixVolume = 0.7 * (beadResuspVolume + sampleVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 10
      Aspirate distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadPlate
      Location, location: 5
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        //task.skip();
        task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadStirUp
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        // Column 1:
        task.Headmode = "1,2,1,1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        // Column 12:
        task.Wellselection = [[1,12]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 37
      TaskScript:
        var mixVolume = 0.7 * (beadVolume * columnsOfSamples);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: FragSepPlate
      Liquid class: j_normal_mixing
      Mix cycles: 8
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        task.skip();
        task.Wellselection = [[1,12]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Bind
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Precipitating DNA";
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columnsOfSamples]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 30;
        var mIncubationTime = bindTime;
        var mTimerCycles = 5;
        var mMixVolume = (precipVolume < maxMixVolume) ? precipVolume : maxMixVolume;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: FragSepPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepPlate
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 117
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 455
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepPlate
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Elute
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Eluting";
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columnsOfSamples]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 0;
        var mIncubationTime = elutionTime;
        var mTimerCycles = 3;
        var mMixVolume = elutionVolume*0.7;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 6;
        var mDoTipTouch = true;
        var mTouchRetract = -5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.skip();
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: FragSepPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 46
      TaskScript:
        // Time n mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 58
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      TaskScript:
        task.Volume = extraPreAsp;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Removing bead storage buffer";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-columnsOfSamples]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Volume = (beadVolume < 120) ? (beadVolume + 20) : (maxAspVolume - beadVolume);
        task.Preaspiratevolume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        // task.Volume = (beadVolume < 120) ? (beadVolume + 20) : (maxAspVolume - beadVolume);
        task.Blowoutvolume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Isolating beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: FragSepPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Preaspiration
        task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // To allow larger volumes of precipitation
        // buffer than the tip can handle in a single
        // aspiration:
        aspRepeats =Math.ceil((precipVolume + sampleVolume + beadResuspVolume + 5) / maxAspVolume);
        stepVolume = (precipVolume + sampleVolume + beadResuspVolume) / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: FragSepPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Blowout volume: 20
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=MakeFragSep
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Making fragment separation mixture";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        //task.skip();
        task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Preasp
        task.Volume = preAsp;
      Location, plate: PrecipBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // To allow larger volumes of precipitation
        // buffer than the tip can handle in a single
        // aspiration:

        aspRepeats = 1;
        stepVolume = precipVolume;
        if(stepVolume > maxAspVolume) {
           aspRepeats = Math.ceil(stepVolume / maxAspVolume);
           stepVolume = Math.round(stepVolume / aspRepeats);
        }
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      TaskScript: task.Volume = stepVolume;
      Location, plate: PrecipBufferPlate
      Liquid class: j_peg_handling
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      TaskScript: task.Volume = stepVolume;
      Location, plate: FragSepPlate
      Liquid class: j_peg_handling
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Aspirate
      Estimated time: 42
      TaskScript: task.Volume = sampleVolume + beadResuspVolume + 5;
      Location, plate: BeadPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = sampleVolume + beadResuspVolume + 5;
      Location, plate: FragSepPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 37
      TaskScript:
        // To get rid of any bubbles at bottom of well:
        var mixVolume = 0.7 * (precipVolume + sampleVolume + beadResuspVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: FragSepPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepPlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 67
      TaskScript:
        var mixVolume = 0.7 * (precipVolume + sampleVolume + beadResuspVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: FragSepPlate
      Liquid class: j_slow_mixing
      Mix cycles: 10
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: FragSepPlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript: task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_blowout
      Distance from well bottom: 10
      Perform tip touch: 1
      Tip touch retract distance: -8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinsePlate
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing bead source plate";
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        // Column 1:
        task.Headmode = "1,2,1,1";
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        // Column 12:
        task.skip();
        task.Wellselection = [[1,12]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        aspRepeats =Math.ceil((plateWashVolume) / maxAspVolume);
        stepVolume = (plateWashVolume) / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript: task.Volume= stepVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = stepVolume;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 34
      TaskScript:
        var mixVolume = 0.7 * plateWashVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: FragSepPlate
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        // An extra volume is added to handle excess
        aspRepeats =Math.ceil((plateWashVolume + 50) / maxAspVolume);
        stepVolume = (plateWashVolume + 50) / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: FragSepPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Column 12:
        task.Wellselection = [[1,12]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        //task.skip();
        task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        //task.skip();
        task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEluate
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      Location: 4
      Temperature: =finalTemperature;
      Temperature Tolerance: 1
      Timeout: 1
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Isolating eluate";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        //task.skip();
        task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: FragSepPlate
      Location to use, location: 7
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript: task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript: task.Volume = elutionVolume + 5;
      Location, plate: FragSepPlate
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Volume = elutionVolume + 5;
      Location, plate: FinalPlate
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = elutionVolume * 0.9;
      Location, plate: FinalPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        // Remove bubbles
        task.Volume =elutionVolume * 0.9;
        task.Dynamictipretraction = 4 / (elutionVolume * 0.9);
      Location, plate: FinalPlate
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.25
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Tip-surface touch in case drops on tips
        task.Volume = preAsp;
      Location, plate: FinalPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 6
      Turn off temperature: 1
      Timeout: 1
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
  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Washing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =beadWashRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        aspRepeats =Math.ceil((beadWashVolume + 5) / maxAspVolume);
        stepVolume = beadWashVolume / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume= stepVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = stepVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 42
      TaskScript:
        var mixVolume = 0.7 * beadWashVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 8
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: // Blowout
      Location, plate: BeadPlate
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: BeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Return tips so not to interfere with plate moving
        task.Wellselection = [[1,13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Washing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        //task.skip();
        task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dnaWashRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: WashBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        aspRepeats =Math.ceil((dnaWashVolume + 5) / maxAspVolume);
        stepVolume = dnaWashVolume / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume= stepVolume;
      Location, plate: WashBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = stepVolume;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 46
      TaskScript:
        var mixVolume = 0.7 * dnaWashVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
        task.Mixcycles = dnaWashMixes;
      Location, plate: FragSepPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 15
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: // Blowout
      Location, plate: FragSepPlate
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 5
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Location, plate: FragSepPlate
      Location, location: 5
      Mode: Timed
      RPM: 1300
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: FragSepPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: FragSepPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: FragSepPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Return tips so not to interfere with plate moving
        task.Wellselection = [[1,13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript:
        // Let ethanol evaporate
        task.Reservationtime = ethanolDryTime;

        global.statusString = "Allowing wash buffer to dry";
      Location to use, plate: FragSepPlate
      Location to use, location: 4
    Task Bravo::secondary::Set temperature - Position
      Location: 4
      Temperature: =roomTemperature [20]
      Temperature Tolerance: 1
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: Cleanup
    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "Awaiting user confirmation...";
    Task BuiltIn::User Message
      Estimated time: 4
      Title: Temperature reset
      Body: The protocol has finished. Remove sample plate from position 4 and confirm to turn off cooling.
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    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "Protocol finished";
