<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Covaris' />
					<Parameter Name='Plate type' Value='96 Covaris microTUBE Plate' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transfer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var sourceVolume = 50;
var mode = GetGlobalObject().formMode;' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!(typeof mode === &quot;undefined&quot;)) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Select mode' />
						<Parameter Category='' Name='Body' Value='Enter 0 or 1:
		0 for transferring from sample to Covaris plate
		1 for transferring from Covaris to empty plate' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='mode' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(!mode) mode = 0;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Covaris' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_covaris' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='8' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Inspect tips' />
						<Parameter Category='' Name='Body' Value='Check the tips for aluminum foil. If you can see pieces obstructing the tips use your gloved fingers to remove it.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Location_plate = (mode) ? &quot;Covaris&quot; : &quot;Source&quot;;
task.Liquidclass = (mode) ? &quot;j_covaris&quot; : &quot;j_slow_medium_vol&quot;;
task.Distancefromwellbottom = (mode) ?  0.25 : 0.65;
task.Volume = (mode) ? sourceVolume+5 : sourceVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.65' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Location_plate = (mode) ? &quot;Source&quot; : &quot;Covaris&quot;;
task.Liquidclass = (mode) ? &quot;j_slow_medium_vol&quot; : &quot;j_covaris&quot;;
task.Distancefromwellbottom = (mode) ? 0.65 : 1.5;
task.Volume = (mode) ? sourceVolume+5 : sourceVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Covaris' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_covaris' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>