<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var vol = {
	row: 5,
	col: 10
};' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='UsedTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolRows' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolRows' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolRows' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolRows' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolColumns' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolColumns' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolRows' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolRows' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Samples' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolRows' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolRows' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolColumns' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolColumns' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Transfer' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='PoolColumns' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='PoolColumns' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Pools' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='PoolColumns' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='0' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='12' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='col' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,col]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Transfer' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.col' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='1' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Pools' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.col' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='vol.mix = 0.8 * vol.col * 12;
if(vol.mix &gt; 160) {
	vol.mix = 160;
}
task.Volume = vol.mix;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Pools' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Pools' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='PoolRows' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='1' SubsetConfig='1' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='8' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='row' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[9-row,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[row,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.row' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Transfer' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=vol.row' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.7' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(row === 8) task.skip();
task.Wellselection = [[row,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='// Dummy task
task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='vol.mix = 0.8 * vol.row * 8;
if(vol.mix &gt; 160) {
	vol.mix = 160;
}
task.Volume = vol.mix;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Transfer' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.7' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Transfer' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>