<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='0' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Constants:
var MAX_VOLUME = 170;
var MAX_MIX_VOLUME = 160;
var PRE_ASP_LARGE = 15;
var PRE_ASP_MEDIUM = 10;
var PRE_ASP_SMALL = 5;
// Get protocol parameters from global scope:
var global = GetGlobalObject();
var columns = parseInt(global.formColumns, 10);
var headMode = &quot;1,2,1,&quot; + columns;

var tipColumn = 1;
var reagentColumn = 1;
var timeMod = 1;
var tempRt = 20;
var sampleVolume = parseInt(global.formSampleVolume);
var reagentVolume = parseInt(global.formReagentVolume);
var primerVolume = parseInt(global.formPrimerVolume);
var bufferVolume = parseInt(global.formBufferVolume);
var doOffDeckIncubation = true;
var protocolName = &quot;General PCR setup&quot;;
var smallPlate = false;

// These criteria mus be met:
var ok = (columns &gt; 0 &amp;&amp; columns &lt; 13) &amp;&amp;
		(sampleVolume &gt;= 0 &amp;&amp; sampleVolume &lt; 999) &amp;&amp;
		(primerVolume &gt;= 0 &amp;&amp; primerVolume &lt; 999) &amp;&amp;
		(bufferVolume &gt;= 0 &amp;&amp; bufferVolume &lt; 999) &amp;&amp;
		(reagentVolume &gt;= 0 &amp;&amp; reagentVolume &lt; 999);

global.formStatus = protocolName + &quot; started&quot;;
' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Dynamic Pipetting Height 2.0:
function dph(vol, endHeight) {
	var v = parseFloat(vol);
	var e = parseFloat(endHeight);
	if(v &gt; 0 &amp;&amp; e &gt; 0 &amp;&amp; !isNaN(v+e)) {
		return 0.078 - 9.501E-5*v + (0.734-e)/v;
	} else {
		throw &quot;ValueException&quot;;
	}
}' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotPrimer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='SampleTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='7' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(smallPlate) plate.labware = &quot;96 Eppendorf Twin.tec PCR&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotPrimer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotPrimer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotPrimer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='IndexPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReactionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SampleTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='AliquotPrimer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = primerVolume;	// Volume to dispense per well
var maxTipVolume = MAX_VOLUME; // Tip capacity
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);

global.statusString = &quot;Aliquoting primer&quot;;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
if(smallPlate) task.Distancefromwellbottom = 0.6;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Distancefromwellbottom = smallPlate ? 7 : 15;
	task.Tiptouchretractdistance = smallPlate ? -6 : -14.5;
} else {
	task.Performtiptouch = false;
}
task.Wellselection = [[1,reagentColumn+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn-1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='AliquotReagent' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = reagentVolume;	// Volume to dispense per well
var maxTipVolume = MAX_VOLUME; // Tip capacity
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);

global.statusString = &quot;Aliquoting master mix&quot;;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(smallPlate) task.Distancefromwellbottom = 0.6;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Distancefromwellbottom = smallPlate ? 7 : 15;
	task.Tiptouchretractdistance = smallPlate ? -6 : -14.5;
} else {
	task.Performtiptouch = false;
}
task.Wellselection = [[1,reagentColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferSample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;

global.statusString = &quot;Mixing sample and reagents&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) {
	task.Location_plate = &quot;ReagentTips&quot;;
}
task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='// Dummy task
task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='ReagentTips' />
						<Parameter Category='' Name='Location to use, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Reservation time' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;
//task.Dynamictipretraction = 4 / (sampleVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mix_vol = 0.8 * (sampleVolume + primerVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + primerVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(sampleVolume + primerVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='IndexPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume + primerVolume;
task.Dynamictipretraction = 5 / (sampleVolume + primerVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Volume = 0.8 * (sampleVolume + reagentVolume + primerVolume);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Blowout volume' Value='5' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-4' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 11) {
	task.Wellselection = [[1,11-columns]];
 } else {
   task.Location_plate = &quot;SampleTips&quot;;
   task.Wellselection = [[1,13-columns]];
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='2' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!doOffDeckIncubation) task.skip();

task.Body = &quot;Take the Eppendorf plate from &quot; +
	&quot;position 5 of the Bravo deck, seal, place in a thermal &quot; +
	&quot;cycler and run the &quot; + protocolName.toLowerCase() +
	&quot; program. Once the incubation has finished, return the &quot; +
	&quot;plate to position 5 and choose &apos;Continue&apos;.&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Transfer plate' />
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies >
					<Sub_Process Name='AliquotPrimer' />
					<Sub_Process Name='AliquotReagent' />
				</Dependencies>
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>