<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='0' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();

// Preset values:
var MIX_CYCLES = 6;
var PRE_ASP_VOLUME = 10;
var MAX_VOLUME = 170;
var DISP_HEIGHT = 1;

// Labware types:
var plateMap = {&quot;Eppendorf&quot;:&quot;96 Eppendorf Twin.tec PCR&quot;,
								&quot;Nunc&quot;:&quot;96 Nunc Deep Well 1 mL&quot;,
								&quot;Reservoir&quot;:&quot;96 Matrix open reservoir movable&quot;,
								&quot;Square deep well&quot;:&quot;96 Deep Well PP Sqr Well V Btm&quot;,
								&quot;Bio-Rad 384&quot;:&quot;384 Bio-Rad Hard-Shell&quot;};
var sourcePlate = plateMap[global.formSourcePlate];
var destinationPlate = plateMap[global.formDestinationPlate];

// Other user settings:
var transferVolume = parseFloat(global.formTransferVolume);
var includeMix = global.formIncludeMix;
var columns = parseInt(global.formColumns);
var putTipsIn  = (global.formSingleTipBox) ? &quot;newTips&quot; : &quot;usedTips&quot;;
var sourceOffset = parseInt(global.formSourceOffset);
var destinationOffset = parseInt(global.formDestinationOffset);
var moveAsp = !!global.formMoveAsp;

// Set pipetting speed and height:
var aspHeight;
var liquidClass = &quot;j_&quot;;
if(global.formSpeed == &quot;Slow&quot;) {
	liquidClass += &quot;slow_&quot;;
	aspHeight = 0.75;
} else {
	liquidClass += &quot;normal_&quot;;
	aspHeight = 1;
}
if(transferVolume &gt; 50) {
	liquidClass += &quot;large_vol&quot;;
	aspHeight += 0.25;
} else if(transferVolume &gt; 15) {
	liquidClass += &quot;medium_vol&quot;;
} else {
	liquidClass += &quot;small_vol&quot;;
	aspHeight -= 0.25;
}

// Dynamic Pipetting Height 2.0:
function dph(vol, endHeight) {
	var v = parseFloat(vol);
	var e = parseFloat(endHeight);
	if(v &gt; 0 &amp;&amp; e &gt; 0 &amp;&amp; !isNaN(v+e)) {
		return 0.078 - 9.501E-5*v + (0.734-e)/v;
	} else {
		throw &quot;ValueException&quot;;
	}
}' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Check that user settings are valid:
var settingsValid = 
		(sourceOffset + columns &lt; 14) &amp;&amp;
		(destinationOffset + columns &lt; 14) &amp;&amp;
		(transferVolume &gt; 0.5) &amp;&amp;
		(transferVolume &lt; 2000) &amp;&amp;
		(global.formSourcePlate in plateMap) &amp;&amp;
		(global.formDestinationPlate in plateMap);

print(&quot;Pipette from: &quot; + sourcePlate);
print(&quot;Pipette to: &quot; + destinationPlate);
print(&quot;Volume: &quot; + transferVolume + &quot; uL&quot;);
print(&quot;Asp height: &quot; + aspHeight + &quot; mm&quot;);
print(&quot;Liquid class: &quot; + liquidClass);
' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(settingsValid) { task.skip(); } else { print(&quot;WARNING: SETTINGS INVALID!&quot;); }' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='WARNING!' />
						<Parameter Category='' Name='Body' Value='The parameters specified are invalid, the transfer will not be completed! ' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='plate.labware = sourcePlate;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='sourcePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='plate.labware = destinationPlate;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='destinationPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='newTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='usedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transfer1' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var tipSelection = [[1,13-columns]];
var sourceWellSelection = [[1,sourceOffset]];
var destinationWellSelection = [[1,destinationOffset]];

// Repeated pipetting calculation:
var repeats = Math.ceil(transferVolume / MAX_VOLUME);
var stepVolume = transferVolume / repeats;
var mixVolume = (transferVolume &lt; MAX_VOLUME) ? 0.8*transferVolume : 0.8*MAX_VOLUME;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid) { task.skip(); }
task.Wellselection = tipSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='// Pre-aspiration
if(!settingsValid) { task.skip(); }
task.Wellselection = sourceWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='sourcePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=PRE_ASP_VOLUME' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid) { task.skip(); }' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=repeats' Value='' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid) { task.skip(); }
task.Wellselection = sourceWellSelection;
if(moveAsp &amp;&amp; i === repeats) {
	task.Dynamictipextension = dph(stepVolume, 0.5);
	task.Distancefromwellbottom = 0.5;
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='sourcePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=stepVolume' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' TaskParameterScript='=liquidClass' Value='' />
						<Parameter Category='Properties' Name='Distance from well bottom' TaskParameterScript='=aspHeight' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid) { task.skip(); }
task.Wellselection = destinationWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destinationPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=stepVolume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' TaskParameterScript='=liquidClass' Value='' />
						<Parameter Category='Properties' Name='Distance from well bottom' TaskParameterScript='=DISP_HEIGHT' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid) { task.skip(); }' />
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid || !includeMix) { task.skip(); }
task.Wellselection = destinationWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destinationPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=mixVolume' Value='' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' TaskParameterScript='=MIX_CYCLES' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1.5' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='2.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
if(!settingsValid) { task.skip(); }
task.Wellselection = destinationWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destinationPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=PRE_ASP_VOLUME' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='7' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-6' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(!settingsValid) { task.skip(); }
task.Location_plate = putTipsIn;
task.Wellselection = (putTipsIn == &quot;newTips&quot;) ? tipSelection : [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>