<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='addReagents' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='addReagents' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='addReagents' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='addReagents' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='reagents1' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='addReagents' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='addReagents' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1; slot 1, slot 2, slot 3, slot 4, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='reaction1' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='addReagents' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='3' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='3' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reagents1' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reaction1' />
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						<Parameter Category='Volume' Name='Volume' Value='10' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='reaction1' />
						<Parameter Category='' Name='Spawn control' Value='Precalculate # of plates (normal operation)' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>