Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var MAX_TIP_VOLUME = 175;

        // Shake time = 180, pellet time = 60 ...
        var settings = {
        	shakeRpm: 1200,
        	shakeTime: 30,
        	columns: 2,
        	pelletTime: 60
        };

        var volume = {
        	start: 374,
        	beads: 15,
        	buffer1: 280,
        	buffer2: 300,
        	buffer3: 300,
        	buffer4: 300,
        	buffer5: 75
        };
Main_Processes
  Process
    Plate name: Beads
    Plate type: 96 Eppendorf Twin.tec PCR
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
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    Task BuiltIn::Spawn Process
      Process to spawn: Buffer2
  Process
    Plate name: Buffer1
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: Buffer3
  Process
    Plate name: Buffer2
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Signal
      Waitfor: BUFFER2_READY
    Task Bravo::SubProcess
      Sub-process name: wash1-2
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  Process
    Plate name: Buffer3
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: Buffer4
  Process
    Plate name: Buffer4
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: Buffer5
  Process
    Plate name: Buffer5
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Final
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Samples
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task Bravo::SubProcess
      Sub-process name: shakeIncubate
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    Task BuiltIn::Wait For
      Waitfor: BUFFER2_READY
    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
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    Task BuiltIn::Spawn Process
      Process to spawn: WideTips
  Process
    Plate name: Tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: addBeads
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  Process
    Plate name: WideTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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  Pipette_Process Name=addBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,1",
        	sourceColumn: 1,
        	singlePlate: false,
        	columns: settings.columns,
        	getTips: true,
        	tipColumn: 12,
        	returnTips: true,
        	liquidClass: "j_slow_medium_vol",
        	preAspVolume: 2,
        	transferVolume: volume.beads,
        	aspDistance: 1,
        	dispDistance: 2,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4,
        	skipTransfer: false,
        	count: 0
        };

        // Skip tip handling if no transfer is necessary
        // and tips are not carried over:
        if(m.singlePlate && m.columns === 1) {
        	m.skipTransfer = true;
        	if(m.getTips && m.returnTips) {
        		m.getTips = false;
        		m.returnTips = false;
        	}
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =m.columns; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,m.tipColumn]];
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.skipTransfer) {
           task.skip();
        }
        task.Wellselection = [[1,m.sourceColumn]];
        task.Volume = m.preAspVolume;
      Location, plate: Beads
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 11
      TaskScript:
        if(m.count%4 > 0) task.skip();
        m.mixVolume = (m.columns - m.count) * m.transferVolume * 0.75;
        task.Volume = (m.mixVolume > 50) ? 50 : m.mixVolume;
      Location, plate: Beads
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 1.2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        if(m.skipTransfer) {
           task.skip();
        }
        task.Wellselection = [[1,m.sourceColumn]];
        task.Volume = m.transferVolume;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Beads
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(m.skipTransfer) {
           task.skip();
        }
        task.Wellselection = [[1,++m.count]];
        task.Volume = m.transferVolume + m.preAspVolume;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = [[1,13-m.tipColumn--]];
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Group End
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  Pipette_Process Name=addBuffer1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: (typeof MAX_TIP_VOLUME !== "undefined") ? MAX_TIP_VOLUME : 175,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,1]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_large_vol",
        	preAspVolume: 5,
        	transferVolume: volume.buffer1,
        	aspDistance: 1,
        	dispDistance: 1,
        	blowoutHeight: 10,
        	doTipTouch: true,
        	touchRetract: -9
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Buffer1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Buffer1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=addBuffer5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-settings.columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_large_vol",
        	preAspVolume: 5,
        	transferVolume: volume.buffer5,
        	aspDistance: 1,
        	dispDistance: 2,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: WideTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Buffer5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Buffer5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: WideTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Shake
      Estimated time: 45
      Location, plate: Samples
      Mode: Timed
      RPM: =settings.shakeRpm [500]
      Direction: NWSE
      Time for operation in Timed mode: =settings.shakeTime [180]
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: (typeof MAX_TIP_VOLUME !== "undefined") ? MAX_TIP_VOLUME : 175,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-settings.columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_medium_vol",
        	preAspVolume: 2,
        	transferVolume: volume.buffer5,
        	aspDistance: 0.3,
        	dispDistance: 1,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        // Use wide bore tips
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: WideTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Final
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Final
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: WideTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,1]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_large_vol",
        	preAspVolume: 10,
        	transferVolume: volume.buffer3 + 10,
        	aspDistance: 0.6,
        	dispDistance: 30,
        	blowoutHeight: 30,
        	doTipTouch: true,
        	touchRetract: 5
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = "j_normal_large_volume";
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=shakeIncubate
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Shake
      Estimated time: 13
      Location, plate: Samples
      Mode: Timed
      RPM: =settings.shakeRpm [500]
      Direction: NWSE
      Time for operation in Timed mode: =settings.shakeTime [180]
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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
  Pipette_Process Name=wash1-2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=2 strFrequency=Every time strInitialValue=0 strVariableName=i
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,1]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_large_vol",
        	preAspVolume: 10,
        	transferVolume: ([volume.buffer1+volume.beads+volume.start,volume.buffer2,volume.buffer2,volume.buffer3][i] + 10),
        	aspDistance: 0.6,
        	dispDistance: 30,
        	blowoutHeight: 30,
        	doTipTouch: true,
        	touchRetract: 5
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = "j_normal_large_volume";
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      Location to use, plate: Samples
      Location to use, location: 5
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,1]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_large_vol",
        	preAspVolume: 5,
        	transferVolume: (i < 2) ? volume.buffer2 : volume.buffer3,
        	aspDistance: 1,
        	dispDistance: 2,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Location_plate = (i < 2) ? "Buffer2" : "Buffer3";
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Buffer2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Location_plate = (i < 2) ? "Buffer2" : "Buffer3";
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Buffer3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Shake
      Location, plate: Samples
      Mode: Timed
      RPM: =settings.shakeRpm [500]
      Direction: NWSE
      Time for operation in Timed mode: =settings.shakeTime [180]
      Allow concurrent operation: 1
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    Task BuiltIn::Loop End
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  Pipette_Process Name=wash3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,1]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_large_vol",
        	preAspVolume: 5,
        	transferVolume: volume.buffer4,
        	aspDistance: 1,
        	dispDistance: 2,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Buffer4
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Buffer4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,1]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_large_vol",
        	preAspVolume: 10,
        	transferVolume: volume.buffer4 + 10,
        	aspDistance: 0.6,
        	dispDistance: 30,
        	blowoutHeight: 30,
        	doTipTouch: true,
        	touchRetract: 5
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = "j_normal_large_volume";
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Loop End
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