Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var MAX_TIP_VOLUME = 175;

        // Shake time = 180, pellet time = 60 ...
        var settings = {
        	shakeRpm: 1200,
        	shakeLong: 180,
        	shakeShort: 60,
        	columns: 2,
        	pelletTime: 60
        };

        var volume = {
        	start: 374,
        	beads: 15,
        	buffer1: 280,
        	buffer2: 300,
        	buffer3: 300,
        	buffer4: 300,
        	buffer5: 75
        };

        var current = {
        	bufferColumn: 1,
        	wasteColumn: 1
        };

        current.tips = (function() {
        	var newTips = 12;
        	var usedTips = 0;
        	var tipsOn = 0;
        	return {
        		get: function(columns) {
        			var selection = [[1, newTips-columns+1]];
        			tipsOn = columns;
        			newTips -= columns;
        			return selection;
        		},
        		discard: function() {
        			var selection = [[1, usedTips+1]];
        			usedTips += tipsOn;
        			tipsOn = 0;
        			return selection;
        		}
        	};
        })();

        if(settings.columns > 2) {
        	print("Specified of columns " + settings.columns + " is above max allowed 2.");
        	task.pause();
        	task.repeatDelay(3);
        }
Main_Processes
  Process
    Plate name: Reagents
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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  Process
    Plate name: Final
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Samples
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task Bravo::SubProcess
      Sub-process name: shakeIncubate
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    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: addBeads
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    Task Bravo::SubProcess
      Sub-process name: addBuffer1
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    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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    Task Bravo::SubProcess
      Sub-process name: addBuffer5
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    Task Bravo::SubProcess
      Sub-process name: elution
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: wash1-2
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    Task Bravo::SubProcess
      Sub-process name: removeBuffer
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    Task Bravo::SubProcess
      Sub-process name: wash3
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  Pipette_Process Name=addBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,1",
        	sourceColumn: current.bufferColumn,
        	singlePlate: false,
        	columns: settings.columns,
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_medium_vol",
        	preAspVolume: 2,
        	transferVolume: volume.beads,
        	aspDistance: 0.5,
        	dispDistance: 2,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4,
        	skipTransfer: false,
        	count: 0
        };

        // Skip tip handling if no transfer is necessary
        // and tips are not carried over:
        if(m.singlePlate && m.columns === 1) {
        	m.skipTransfer = true;
        	if(m.getTips && m.returnTips) {
        		m.getTips = false;
        		m.returnTips = false;
        	}
        }
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =m.columns; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = current.tips.get(1);
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.skipTransfer) {
           task.skip();
        }
        task.Wellselection = [[1,m.sourceColumn]];
        task.Volume = m.preAspVolume;
      Location, plate: Reagents
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 25
      TaskScript:
        m.mixVolume = (m.columns - m.count) * m.transferVolume * 0.75;
        task.Volume = (m.mixVolume > 50) ? 50 : m.mixVolume;
        task.Mixcycles = m.count ? 5 : 10;
      Location, plate: Reagents
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 0.6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        if(m.skipTransfer) {
           task.skip();
        }
        task.Wellselection = [[1,m.sourceColumn]];
        task.Volume = m.transferVolume;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        if(m.skipTransfer) {
           task.skip();
        }
        task.Wellselection = [[1,++m.count]];
        task.Volume = m.transferVolume + m.preAspVolume;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Group End
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  Pipette_Process Name=addBuffer1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        current.bufferColumn++;

        var m = {
        	maxVolume: (typeof MAX_TIP_VOLUME !== "undefined") ? MAX_TIP_VOLUME : 175,
        	headMode: "1,2,1,"+settings.columns,
        	aspSelection: [[1,current.bufferColumn]],
        	dispSelection: [[1,1]],
        	getTips: true,
        	returnTips: false,
        	liquidClass: "j_normal_large_vol",
        	preAspVolume: 5,
        	transferVolume: volume.buffer1,
        	aspDistance: 1,
        	dispDistance: 1,
        	blowoutHeight: 10,
        	doTipTouch: true,
        	touchRetract: -9
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
          } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=addBuffer5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        current.bufferColumn += settings.columns;

        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	aspSelection: [[1,current.bufferColumn]],
        	dispSelection: [[1,1]],
        	getTips: true,
        	returnTips: false,
        	liquidClass: "j_normal_large_vol",
        	preAspVolume: 5,
        	transferVolume: volume.buffer5,
        	aspDistance: 1,
        	dispDistance: 2,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Shake
      Estimated time: 182
      Location, plate: Samples
      Mode: Timed
      RPM: =settings.shakeRpm [500]
      Direction: NWSE
      Time for operation in Timed mode: =settings.shakeLong [180]
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: (typeof MAX_TIP_VOLUME !== "undefined") ? MAX_TIP_VOLUME : 175,
        	headMode: "1,2,1,"+settings.columns,
        	wellSelection: [[1,1]],
        	getTips: false,
        	returnTips: true,
        	liquidClass: "j_slow_small_vol",
        	preAspVolume: 2,
        	transferVolume: volume.buffer5,
        	aspDistance: 0.3,
        	dispDistance: 1,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        // Use wide bore tips
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 47
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 24
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Final
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Final
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=5 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        current.wasteColumn += settings.columns;

        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	aspSelection: [[1,1]],
        	dispSelection: [[1,current.wasteColumn]],
        	getTips: false,
        	returnTips: true,
        	liquidClass: "j_slow_large_vol",
        	preAspVolume: 10,
        	transferVolume: volume.buffer3 + 10,
        	aspDistance: 0.6,
        	dispDistance: 30,
        	blowoutHeight: 30,
        	doTipTouch: true,
        	touchRetract: 5
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=3 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=shakeIncubate
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: Samples
      Mode: Timed
      RPM: =settings.shakeRpm [500]
      Direction: NWSE
      Time for operation in Timed mode: =settings.shakeLong [180]
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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
  Pipette_Process Name=wash1-2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=2 strFrequency=Every time strInitialValue=0 strVariableName=i
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	aspSelection: [[1,1]],
        	dispSelection: [[1,current.wasteColumn]],
        	getTips: false,
        	returnTips: [true,false,true,false][i],
        	liquidClass: "j_slow_large_vol",
        	preAspVolume: 10,
        	transferVolume: ([volume.buffer1+volume.beads+volume.start,volume.buffer2,volume.buffer2,volume.buffer3][i] + 10),
        	aspDistance: 0.6,
        	dispDistance: 30,
        	blowoutHeight: 30,
        	doTipTouch: true,
        	touchRetract: 5
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=2 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      Location to use, plate: Samples
      Location to use, location: 5
    Task BuiltIn::JavaScript
      TaskScript:
        if(i%2===0) current.bufferColumn += settings.columns;

        m.aspSelection =  [[1,current.bufferColumn]];
        m.dispSelection =  [[1,1]];
        m.getTips =  [true,false,true,false][i];
        m.returnTips =  false;
        m.liquidClass =  "j_normal_large_vol";
        m.preAspVolume =  5;
        m.transferVolume =  (i < 2) ? volume.buffer2 : volume.buffer3;
        m.aspDistance =  1;
        m.dispDistance =  2;
        m.blowoutHeight =  5;
        m.doTipTouch =  true;
        m.touchRetract =  -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=8 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: Samples
      Mode: Timed
      RPM: =settings.shakeRpm [500]
      Direction: NWSE
      Time for operation in Timed mode: =settings.shakeShort [180]
      Allow concurrent operation: 1
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
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  Pipette_Process Name=wash3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::JavaScript
      TaskScript: current.bufferColumn += settings.columns;
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        // Pipetting parameters set in loop
        var m = {
        	maxVolume: MAX_TIP_VOLUME,
        	headMode: "1,2,1,"+settings.columns,
        	getTips: true,
        	returnTips: true,
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = current.tips.get(settings.columns);
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        m.aspSelection = [[1,current.bufferColumn]];
        m.dispSelection = [[1,1]];
        m.liquidClass = "j_normal_large_vol";
        m.preAspVolume = 10;
        m.transferVolume = volume.buffer4;
        m.aspDistance = 1;
        m.dispDistance = 2;
        m.blowoutHeight = 5;
        m.doTipTouch = true;
        m.touchRetract = -4;
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Reagents
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = settings.pelletTime;
      Location to use, plate: Samples
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::JavaScript
      TaskScript:
        m.aspSelection = [[1,1]];
        m.dispSelection = [[1,current.wasteColumn]];
        m.liquidClass = "j_slow_large_vol";
        m.preAspVolume = 10;
        m.transferVolume = volume.buffer4 + 10;
        m.aspDistance = 0.6;
        m.dispDistance = 30;
        m.blowoutHeight = 30;
        m.doTipTouch = true;
        m.touchRetract = 5;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume <= 0) {
           task.skip();
        }
        task.Wellselection = m.aspSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / m.maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = m.aspSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: Samples
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = m.dispSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume <= 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.dispSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = current.tips.discard();
        } else {
           task.skip();
        }
      Location, plate: Tips2
      Mark tips as used: 1
      Well selection: Column=4 Row=0
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    Task BuiltIn::Group End
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