<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Define Variables' bOnlyFirstTime='0' bPromptWhenExecuted='1' strPromptText='How many aliquot plates do you want to make?' >
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					<Parameters >
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					</Parameters>
					<arrVariables n='0' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1; cassette 1, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 2, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 3, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 4, slot 1, slot 2, slot 3, slot 4, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='AliquotPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Aliquot' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=n' Value='n' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='3' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='AliquotPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='3' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.6' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='AliquotPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-4' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='AliquotPlate' />
						<Parameter Category='' Name='Spawn control' Value='Spawn new plates when task runs ' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>