<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2014

var global = GetGlobalObject();
var columns = parseInt(global.formColumns, 10) || 1;
var startColumn = parseInt(global.formStartColumn, 10) || 1;
var volume = {
	max: 170,
	maxMix: 160,
	buffer: 200,
	assay: 40,
	extra: 2
};
volume.standard = parseFloat(global.formVolumeStandard) || 10;
volume.sample = parseFloat(global.formVolumeSample) || 2;

var sampleWells = [[1,1],[1,2],[2,1]];
var standardWells = [[2,2],[2,4],[2,6]];' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SampleSource' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStandards1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='StandardSource' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSamples2' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePrep' />
					<Parameter Name='Plate type' Value='96 Bio-Rad Hard-Shell' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStandards1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStandards2' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='StandardPrep' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSamples1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSamples2' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='StandardTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='tipsCleared' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SampleTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='tipsCleared' >
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				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='StandardTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Assay' />
					<Parameter Name='Plate type' Value='384 Bio-Rad Hard-Shell' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transferSamples1' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,startColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleSource' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.sample;' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePrep' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.sample;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mixVol = 0.8 * volume.buffer;
task.Volume = (mixVol &lt;= volume.maxMix) ? mixVol : volume.maxMix;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePrep' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePrep' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferSamples2' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,12-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleWells.length * volume.assay + volume.extra;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePrep' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=sampleWells.length;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [sampleWells[i]];
task.Dynamictipretraction = 6 / volume.assay;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Assay' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.assay;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePrep' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,12-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferStandards1' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardSource' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.standard;' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardPrep' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.standard;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mixVol = 0.8 * volume.buffer;
task.Volume = (mixVol &lt;= volume.maxMix) ? mixVol : volume.maxMix;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardPrep' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardPrep' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferStandards2' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = standardWells.length * volume.assay + volume.extra;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardPrep' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=standardWells.length' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [standardWells[i]];
task.Dynamictipretraction = 6 / volume.assay;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Assay' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.assay;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardPrep' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StandardTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>