<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sub1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sub1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sub1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sub1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process1' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='sub1' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mHeadMode = &quot;1,2,1,12&quot;;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,1]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_extra_slow_mixing&quot;;
var mPreAspVolume = 20;
var mIncubationTime = 10 * 60;
var mTimerCycles = 3;
var mMixVolume = 150;
var mAspDistance = 1;
var mDispDistance = 1;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
    task.Wellselection = mTipSelection;
} else {
    task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mPreAspVolume;
task.Wellselection = mWellSelection;
task.Distancefromwellbottom = 50;
task.Liquidclass = &quot;j_normal_large_vol&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process1' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='On' />
						<Parameter Category='' Name='RPM' Value='750' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='// Time 5 mix cycles to calculate how
// many corresponds to total incubation time: 
var mTimer = new Date().getTime();
task.Volume = mMixVolume;
task.Liquidclass = mLiquidClass;
task.Mixcycles = mTimerCycles;
task.Aspiratedistance = mAspDistance;
if(mAspDistance !== mDispDistance) {
    task.Dispenseatdifferentdistance = true;
    task.Dispensedistance = mDispDistance;
} else {
    task.Dispenseatdifferentdistance = false;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='// Calculate how many mix cycles that corresponds 
// to total incubation time: 
mTimer = (new Date().getTime() - mTimer) / 1000;
var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
print(&quot;mTimer=&quot; + mTimer + &quot;, mMixCycles=&quot; + mMixCycles);
if(mMixCycles &gt; 0) {
   task.Mixcycles = mMixCycles;
} else {
   task.skip();
}

task.Volume = mMixVolume;
task.Liquidclass = mLiquidClass;
task.Aspiratedistance = mAspDistance;
if(mAspDistance !== mDispDistance) {
    task.Dispenseatdifferentdistance = true;
    task.Dispensedistance = mDispDistance;
} else {
    task.Dispenseatdifferentdistance = false;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process1' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='Off' />
						<Parameter Category='' Name='RPM' Value='750' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mPreAspVolume;
task.Distancefromwellbottom = mBlowoutHeight;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
if(mDoTipTouch) {
    task.Performtiptouch = true;
    task.Tiptouchretractdistance = mTouchRetract;
    task.Whichsidestousefortiptouch = &quot;South/North&quot;;
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
    task.Wellselection = mTipSelection;
} else {
    task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>