<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
var runsetMode = global.runsetMode;
if(runsetMode) global.updateRunset();
var columns = global.formColumns || 1;
var testMode = global.testMode;

var MAX_TIP_VOLUME = 175;

var sampleVolume = global.settings.sampleVolume;
var reagentVolume = global.settings.reagentVolume;
var beadVolume = global.settings.beadVolume;
var stopVolume = global.settings.stopVolume;
var shakeMix = false;
var tipColumn = global.settings.tipColumn;
var reagentColumn = global.settings.reagentColumn;

var dph = global.dph;
' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='tagmentation' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='tagmentation' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStop' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='TagmentationPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!beadVolume) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!beadVolume) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='TransferPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='7' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='7' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotStop' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='NewTips2' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSample' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStop' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips2' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 5) plate.labware = &quot;96 Eppendorf Twin.tec PCR&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotStop' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotStop' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='TransferPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStop' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='StopPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotStop' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotStop' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotReagent' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotReagent' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='aliquotReagent' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = reagentVolume;	// Volume to dispense per well
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = +(columns &gt; 1) * 15;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(0.7 * volumeLeft &gt; 0.9 * MAX_TIP_VOLUME) {
	task.Volume = 0.9 * MAX_TIP_VOLUME;
} else {
	task.Volume = 0.7 * volumeLeft;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='10' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(columns &lt; 5) {
  task.Dynamictipextension = dph(tipVolume, 0.4);
  task.Distancefromwellbottom =0.75;
} else {
  task.Distancefromwellbottom =0.4;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
task.Distancefromwellbottom = (columns &lt; 5) ? 8 : 15;
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = (columns &lt; 5) ? -7 : -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='aliquotStop' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = stopVolume;	// Volume to dispense per well
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = (columns &gt; 1) * 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / (MAX_TIP_VOLUME - deadVolume));' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
task.Distancefromwellbottom = (columns &lt; 5) ? 0.6 : 0.4;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StopPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
task.Distancefromwellbottom = (columns &lt; 5) ? 8 : 15;
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = (columns &lt; 5) ? -7 : -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='tagmentation' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(!shakeMix) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='1500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='30' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='TagmentationPlate' />
						<Parameter Category='' Name='Location to use, location' Value='5' />
						<Parameter Category='' Name='Reservation time' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='3' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Transfer plate' />
						<Parameter Category='' Name='Body' Value='Remove the plate from position 5, seal and transfer to a thermal cycler and run the tagmentation program. Return the plate to position 5 when the program has finished, unseal and choose &apos;Continue&apos;.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='TagmentationPlate' />
						<Parameter Category='' Name='Location to use, location' Value='5' />
						<Parameter Category='' Name='Reservation time' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferSample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Preaspiratevolume = (shakeMix) ? 0 : 5;
task.Volume = sampleVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(!beadVolume) task.skip();
task.Volume = beadVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = dph(reagentVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TransferPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume +beadVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(shakeMix) task.skip();
task.Volume = 0.8 * (sampleVolume + reagentVolume + beadVolume);
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(shakeMix) task.skip();
task.Volume = 0.7 * (sampleVolume + reagentVolume + beadVolume);
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.85' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(shakeMix) task.skip();
task.Volume = 5;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='7' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-6' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferStop' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Preaspiratevolume = (shakeMix) ? 0 : 5;
task.Volume = stopVolume;
task.Distancefromwellbottom = 0.35;
task.Dynamictipextension = dph(stopVolume, 0.35);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='StopPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=stopVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(shakeMix) task.skip();
task.Volume = 0.8 * (sampleVolume + reagentVolume + beadVolume + stopVolume);
task.Blowoutvolume = 5;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.75' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-2' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(!shakeMix) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='TagmentationPlate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='1500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='30' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='3' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='if(runsetMode) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='TagmentationPlate' />
						<Parameter Category='' Name='Location to use, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Reservation time' Value='240' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(!runsetMode) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='5' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Transfer plate' />
						<Parameter Category='' Name='Body' Value='Transfer the plate in position 5 to a thermal cycler and run the denaturation program. Click &apos;Continue&apos; when the program HAS STARTED to prepare for the next step.' />
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>