Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();
        if(global.runsetMode) global.updateRunset();
        var columns = global.formColumns || 1;
        var headMode = "1,2,1," + columns;
        var beadVolume1 = global.settings.beadVolume1 || 95;
        var beadVolume2 = global.settings.beadVolume2 || 30;
        var beadDiluteVolume1 = global.settings.beadDiluteVolume1 || 32.5;
        var beadDiluteVolume2 = global.settings.beadDiluteVolume2 || 2.5;
        var sampleVolume = global.settings.sampleVolume || 100;
        var bindVolume1 = sampleVolume + beadDiluteVolume1 + beadVolume1;
        var transferVolume = global.settings.transferVolume || 250;
        var bindVolume2 = transferVolume + beadDiluteVolume2 + beadVolume2;
        var washVolume = 200;
        var washes = 2;
        var elutionVolume = global.settings.elutionVolume || 25;
        var MAX_VOLUME = 175;
        var MAX_MIX_VOLUME = 160;
        var PRE_ASP = 5;
        var PRE_ASP_LARGE = 15;

        var testMode = (global.testMode) ? true : false;
        var bindTime = testMode ? 1 : 5 * 60;
        var elutionTime = testMode ? 1 : 2 * 60;
        var ethanolDryTime = testMode ? 1 : 5 * 60;
        var pelletTime = testMode ? 1 : 180;
        var pelletTimeShort = testMode ? 1 : 30;
        var pelletTimeLong = testMode ? 1 : 240;

        var dph = global.dph;

        // For testing:
        print("beadVolume1="+beadVolume1+";sampleVolume="+sampleVolume+";elutionVolume="+elutionVolume);
        /*
        columns = 1;
        headMode = "1,2,1," + columns;
        beadVolume = 90;
        sampleVolume = 50;
        elutionVolume = 25;
        washVolume = 200;
        bindTime = 5 * 60;
        elutionTime = 2 * 60;
        ethanolDryTime = 10 * 60;
        pelletTime = 60;
        pelletTimeShort = 30;
        pelletTimeLong = 180;
        */
Main_Processes
  Process
    Plate name: BindTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: addDiluent1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: bind1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: addDiluent2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: bind2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: BeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: SamplePlate
    Task BuiltIn::Wait For
      Waitfor: signal1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
  Process
    Plate name: BindPlate2
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addDiluent2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: bind2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Signal
      Waitfor: signal1
  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: rinseTips1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: EthanolPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      TaskScript: if(global.runsetMode) plate.labware = "96 Deep Well PP Sqr Well V Btm";
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: addDiluent1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: addDiluent2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: BindPlate1
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addDiluent1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: bind1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Spawn Process
      Process to spawn: BindPlate2
    Task Bravo::SubProcess
      Sub-process name: transferBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
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  Process
    Plate name: Occupied
    Plate type: 96 Nunc Deep Well 1 mL
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=addDiluent1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = PRE_ASP;
        var mTransferVolume = beadDiluteVolume1;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips && mTransferVolume > 0) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume === 0 || mTransferVolume === 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mTransferVolume === 0) task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        if(mTransferVolume === 0) task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if((mPreAspVolume === 0 && !mDoTipTouch) || mTransferVolume === 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips && mTransferVolume > 0) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=addDiluent2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = PRE_ASP;
        var mTransferVolume = beadDiluteVolume2;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips && mTransferVolume > 0) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume === 0 || mTransferVolume === 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mTransferVolume === 0) task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(mTransferVolume === 0) task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if((mPreAspVolume === 0 && !mDoTipTouch) || mTransferVolume === 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips && mTransferVolume > 0) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=bind1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mIncubationTime = bindTime;
        var mTimerCycles = 3;
        var mMixVolume = bindMixVolume;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate1
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 74
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 213
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate1
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate1
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=bind2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mIncubationTime = bindTime;
        var mTimerCycles = 3;
        var mMixVolume = bindMixVolume;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate2
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 67
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 213
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate2
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate2
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elute
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mLiquidClassMix = "j_normal_mixing";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 1;
        var mDispDistance = 0.75;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_mixing";
        var mPreAspVolume = PRE_ASP;
        var mIncubationTime = elutionTime;
        var mTimerCycles = 5;
        var mMixVolume = elutionVolume * 0.8;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BindPlate2
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 18
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClassMix;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 81
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClassMix;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate2
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate2
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BindPlate2
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = PRE_ASP;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 0.4;
        var mDispDistance = 0.5;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 26
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FinalPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBindMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BindPlate2
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = bindVolume2 + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 22
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 25
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=rinseTips1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = MAX_VOLUME / 2;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Preaspiratevolume = mPreAspVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Distancefromwellbottom = mDispDistance;
        task.Liquidclass = mLiquidClass;
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=rinseTips2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = MAX_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Preaspiratevolume = mPreAspVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Distancefromwellbottom = mDispDistance;
        task.Liquidclass = mLiquidClass;
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=rinseTips3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = MAX_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Preaspiratevolume = mPreAspVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Distancefromwellbottom = mDispDistance;
        task.Liquidclass = mLiquidClass;
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = beadVolume1;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mMixVolume = (0.8 * beadVolume1 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * beadVolume1;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 24
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadPlate
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume/2;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var mMixVolume = (0.8 * (beadVolume1+beadDiluteVolume1) > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * (beadVolume1+beadDiluteVolume1);
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume/2;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 15;
        var mTransferVolume = beadVolume2;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mMixVolume = (0.8 * beadVolume2 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * beadVolume2;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadPlate
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBindMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BindPlate1
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = transferVolume;
        var mAspDistance = 0.75;
        var mDispDistance = 2;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;

        bindMixVolume = 0.6 * (bindVolume2);
        bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 23
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 27
      Location, plate: BindPlate2
      Volume: =bindMixVolume;
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: BindPlate2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      TaskScript:
        task.skip(); // By this time it has been standing long enough..
        task.Reservationtime = pelletTime;
      Location to use, plate: SamplePlate
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var bindMixVolume = 0.6 * (bindVolume1 + sampleVolume);
        bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(sampleVolume, 0.5);
        task.Preaspiratevolume = PRE_ASP_LARGE;
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: BindPlate1
      Volume: =sampleVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      Location, plate: BindPlate1
      Volume: =bindMixVolume;
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = PRE_ASP_LARGE;
      Location, plate: BindPlate1
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=wash
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =washes; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: EthanolPlate
      Volume: =PRE_ASP;
      Liquid class: j_normal_large_vol
      Distance from well bottom: 45
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(washVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = washVolume / steps;
      Location, plate: EthanolPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = washVolume / steps;
      Location, plate: BindPlate2
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -14
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 22
      TaskScript: task.Volume = (washVolume * 0.8 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : washVolume * 0.8;
      Location, plate: BindPlate2
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BindPlate2
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript: steps = Math.ceil((washVolume + 10) / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript: task.Volume = (washVolume + 10) / steps;
      Location, plate: BindPlate2
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Volume = (washVolume + 10) / steps;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: Waste
      Volume: =PRE_ASP;
      Liquid class: j_blowout
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = ethanolDryTime;
      Location to use, plate: BindPlate2
      Location to use, location: 7
      Reservation time: 0
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