<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='Plate filler for TruSeq RNA Access library prep' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();

var columns = global.formColumns;
var volumes = global.settings.volumes;' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Fill' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Fill' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='EthanolReservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Fill' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Fill' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ElutionBufferReservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Fill' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Fill' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='EthanolPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Fill' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Fill' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ElutionBufferPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Fill' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Fill' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Fill' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=volumes.length' Value='2' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 175;
var mHeadMode = &quot;1,2,1,&quot;+columns;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,1]];
var mGetTips = (i === 0);
var mReturnTips = (i === volumes.length-1);
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = volumes[i];
var mAspDistance = 1;
var mDispDistance = 2;
var mBlowoutHeight = 5;
var mDoTipTouch = false;
var mTouchRetract = -4;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(mPreAspVolume == 0) {
   task.skip();
}
task.Location_plate = (i===0) ? &quot;ElutionBufferReservoir&quot; : &quot;EthanolReservoir&quot;;

task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EthanolReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Location_plate = (i===0) ? &quot;ElutionBufferReservoir&quot; : &quot;EthanolReservoir&quot;;
task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ElutionBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Location_plate = (i===0) ? &quot;ElutionBufferPlate&quot; : &quot;EthanolPlate&quot;;
task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ElutionBufferPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(mPreAspVolume == 0 &amp;&amp; !mDoTipTouch) {
   task.skip();
}
task.Location_plate = (i===0) ? &quot;ElutionBufferPlate&quot; : &quot;EthanolPlate&quot;;
task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_blowout&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;None&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EthanolPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>