<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var volume = {
	buffer: 100,
	source: [1, 1, 1, 2, 2, 2]
};
var settings = {
	startColumn: 1
};' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='addBuffer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='addBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Replace tipbox' />
						<Parameter Category='' Name='Body' Value='Replace the tipbox at position 2.' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='addBuffer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='addBuffer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Dest' />
					<Parameter Name='Plate type' Value='96 Costar Flat Bottom' />
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					<Parameter Name='Use single instance of plate' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='addBuffer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='addBuffer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Buffer' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='addBuffer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Buffer' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.buffer' Value='100' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Dest' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.buffer' Value='100' />
						<Parameter Category='Volume' Name='Blowout volume' Value='5' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transfer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=volume.source.length;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,i+1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.source[i];' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,settings.startColumn+i]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Dest' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume.source[i];' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1+i]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
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</Velocity11>