Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::JavaScript
      TaskScript:
        var columns = 12;
        var headMode = "1,2,1,12";
        var volumes = {
        	source:1.8,
        	dilution:10,
        	buffer1:1798.2,
        	buffer2:90,
        	reagent:16,
        	assay:4
        };
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=4
      Estimated time: 2
      Location: 4
      Temperature: 4
      Timeout: 1
      Allow concurrent operation: 1
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Main_Processes
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: transferSample
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  Process
    Plate name: AssayPlate1
    Plate type: 384 Bio-Rad Hard-Shell
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte1
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte2
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    Task Bravo::SubProcess
      Sub-process name: transferStandards
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    Task Bravo::SubProcess
      Sub-process name: finishUp
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  Process
    Plate name: AssayPlate2
    Plate type: 384 Bio-Rad Hard-Shell
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte3
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte4
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    Task Bravo::SubProcess
      Sub-process name: transferStandards
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  Process
    Plate name: BufferReservoir
    Plate type: 96 Matrix open reservoir movable
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: fillBufferPlates
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
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  Process
    Plate name: DilutionPlate1
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      SubProcess_Name: fillBufferPlates
    Task Bravo::SubProcess
      SubProcess_Name: transferSample
    Task Bravo::SubProcess
      Sub-process name: transferDilution
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte1
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte3
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  Process
    Plate name: DilutionPlate2
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Spawn Process
      Process to spawn: AssayPlate1
    Task Bravo::SubProcess
      SubProcess_Name: fillBufferPlates
    Task Bravo::SubProcess
      SubProcess_Name: transferDilution
    Task Bravo::SubProcess
      Sub-process name: transferAnalyte2
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte4
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    Task BuiltIn::Wait For
      Waitfor: signalStandardPlate
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
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    Task BuiltIn::Signal
  Process
    Plate name: DilutionTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: fillBufferPlates
    Task Bravo::SubProcess
      SubProcess_Name: transferSample
    Task Bravo::SubProcess
      SubProcess_Name: transferDilution
    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: ReagentTips
    Task BuiltIn::Wait For
      Waitfor: signalTipsCleared
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferAnalyte2
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte4
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  Process
    Plate name: ReagentTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: prepareReagent
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    Task Bravo::SubProcess
      SubProcess_Name: transferReagent
    Task Bravo::SubProcess
      Sub-process name: transferAnalyte1
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte3
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte2
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte4
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfor: signalTipsCleared
  Process
    Plate name: ReagentPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: prepareReagent
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  Process
    Plate name: TransferPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: prepareReagent
    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
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    Task BuiltIn::Spawn Process
      Process to spawn: StandardPlate
  Process
    Plate name: StandardPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Signal
      Waitfor: signalStandardPlate
    Task Bravo::SubProcess
      SubProcess_Name: transferStandards
  Process
    Plate name: UsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
    Task Bravo::SubProcess
      Sub-process name: transferAnalyte1
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    Task Bravo::SubProcess
      Sub-process name: transferAnalyte3
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    Task BuiltIn::Load
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  Process
    Plate name: StandardTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
    Task Bravo::SubProcess
      Sub-process name: transferStandards
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  Pipette_Process Name=fillBufferPlates
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_fast_large_vol";
        var mPreAspVolume = 0;
        var mTransferVolume = volumes.buffer1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: DilutionTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BufferReservoir
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BufferReservoir
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: DilutionPlate1
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Well selection: Column=0 Row=0
      Pipette technique: NorthOffset100
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        mLiquidClass = "j_normal_medium_vol";
        mTransferVolume = volumes.buffer2;
        mAspDistance = 2;
        mDispDistance = 1;
    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BufferReservoir
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: DilutionPlate2
      Well selection: Column=0 Row=0
      Pipette technique: NorthOffset100
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BufferReservoir
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: DilutionTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=finishUp
    Device Device_Name=Bravo - 1 Location_Name=1
    Task Bravo::secondary::Wait For User
      Estimated time: 12
      User Message: Confirm to turn off cooling and finish the protocol.
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
      Allow concurrent operation: 1
    Task BuiltIn::Reserve Location
      TaskScript: task.skip();
      Location to use, plate: AssayPlate1
      Location to use, location: 4
    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 1
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  Pipette_Process Name=prepareReagent
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = 8 * volumes.reagent + 4;	// Volume to dispense per well
        var maxTipVolume = 170;	// Tip capacity
        var columnsToDo = 7;
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 2;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columnsToDo;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        var volumeLeft = (columnsToDo - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: TransferPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: ReagentTips
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferAnalyte1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: ReagentTips
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = volumes.assay * 2 + 2;
      Location, plate: DilutionPlate1
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[1,1],[1,2]];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [wells[i++]];
        task.Volume = volumes.assay;
      Location, plate: AssayPlate1
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: DilutionPlate1
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 25
      Perform tip touch: 1
      Tip touch retract distance: -10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferAnalyte2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: DilutionTips
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = volumes.assay * 2 + 2;
      Location, plate: DilutionPlate2
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[2,1],[2,2]];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [wells[i++]];
        task.Volume = volumes.assay;
      Location, plate: AssayPlate1
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: DilutionPlate2
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: ReagentTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferAnalyte3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = volumes.assay * 2 + 2;
      Location, plate: DilutionPlate1
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 15
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[1,1],[1,2]];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [wells[i++]];
        task.Volume = volumes.assay;
      Location, plate: AssayPlate2
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: DilutionPlate1
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 25
      Perform tip touch: 1
      Tip touch retract distance: -10
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferAnalyte4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: DilutionTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = volumes.assay * 2 + 2;
      Location, plate: DilutionPlate2
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[2,1],[2,2]];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [wells[i++]];
        task.Volume = volumes.assay;
      Location, plate: AssayPlate2
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: DilutionPlate2
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=6 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: ReagentTips
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferDilution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 2;
        var mTransferVolume = volumes.dilution;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mMixVolume = 75;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: DilutionTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 2
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: DilutionPlate1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: DilutionPlate1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: DilutionPlate2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 37
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: DilutionPlate2
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: DilutionPlate2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: DilutionTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferReagent
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Estimated time: 0.0
      Head mode: Channels=0 ColumnCount=7 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: ReagentTips
      Well selection: Column=5 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[1,1],[1,2],[2,1],[2,2]];
        var i = 0;
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = 8 * volumes.reagent + 2;
      Location, plate: TransferPlate
      Pre-aspirate volume: 2
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 22
      TaskScript: task.Wellselection = [wells[i++]];
      Location, plate: AssayPlate1
      Volume: =volumes.reagent [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript: i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 22
      TaskScript: task.Wellselection = [wells[i++]];
      Location, plate: AssayPlate2
      Volume: =volumes.reagent [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: TransferPlate
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 2
      Perform tip touch: 1
      Tip touch retract distance: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: ReagentTips
      Mark tips as used: 0
      Well selection: Column=5 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 2;
        var mTransferVolume = volumes.source;
        var mAspDistance = 1.5;
        var mDispDistance = 15;
        var mMixVolume = 160;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 20;
        var mMixAspDistance = 5;
        var mMixDispDistance = 20;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = -15;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: DilutionTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: DilutionPlate1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 126
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: DilutionPlate1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: DilutionPlate1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: DilutionTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferStandards
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: StandardTips
      Well selection: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = volumes.assay * 8 + 2;
      Location, plate: StandardPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[1,7],[1,8],[2,7],[2,8]];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [wells[i++]];
        task.Volume = volumes.assay;
      Location, plate: AssayPlate1
      Liquid class: slow_entry
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript: i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [wells[i++]];
        task.Volume = volumes.assay;
      Location, plate: AssayPlate2
      Liquid class: slow_entry
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: DilutionTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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