Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        // Constants:
        var MAX_VOLUME = 170;
        var MAX_MIX_VOLUME = 150;
        var PRE_ASP_LARGE = 15;
        var PRE_ASP_MEDIUM = 10;
        var PRE_ASP_SMALL = 5;
        // Get protocol parameters from global scope:
        var global = GetGlobalObject();
        if(global.runsetMode) global.updateRunset();
        var columns = parseInt(global.formColumns, 10) || 1;
        var headMode = "1,2,1," + columns;

        var req = [
        	"tipColumn",
        	"reagentColumn",
        	"sampleVolume",
        	"reagentVolume",
        	"bufferVolume",
        	"adapterVolume",
        	"doOffDeckIncubation"
        ];

        var missing = [];
        for(var i in req) {
           if(!(req[i] in global.settings)) missing.push(req[i]);
        }

        if(missing.length) print("WARNING: The following required variables are missing: " + missing.join(", "));

        var tipColumn = global.settings.tipColumn || 1;
        var reagentColumn = global.settings.reagentColumn || 1;
        var timeMod = global.timeMod || 1;
        var tempRt = global.tempRt || 20;
        var sampleVolume = global.settings.sampleVolume;
        var reagentVolume = global.settings.reagentVolume;
        var bufferVolume = global.settings.bufferVolume;
        var adapterVolume = global.settings.adapterVolume;
        var incubationTemperature = global.settings.incubationTemperature || tempRt;
        var doOffDeckIncubation = global.settings.doOffDeckIncubation;
        var incubationTime = global.settings.incubationTime * timeMod;
        var protocolName = global.settings.protocolName;

        global.statusString = protocolName + " started";
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Temperature: =tempRt;
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 7
      Location: 6
      Temperature: =tempRt;
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
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Main_Processes
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Signal
      Waitfor: SAMPLE_PLATE
  Process
    Plate name: ReactionPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: AliquotMix
    Task BuiltIn::Spawn Process
      Process to spawn: SamplePlate
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task BuiltIn::Wait For
      Waitfor: SAMPLE_PLATE
    Task BuiltIn::Place Plate
      TaskScript: if(doOffDeckIncubation) task.skip();
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: SetTemperature
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        if(doOffDeckIncubation) task.skip();
        task.Incubationtime = incubationTime;
      Incubation time: 0
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      TaskScript: if(doOffDeckIncubation) task.skip();
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::User Message
      Estimated time: 322
      TaskScript:
        if(!doOffDeckIncubation) task.skip();

        task.Body = "Take the Eppendorf plate from " +
        	"position 5 of the Bravo deck, seal, place in a thermal " +
        	"cycler and run the " + protocolName.toLowerCase() +
        	" program. Once the incubation has finished, return the " +
        	"plate to position 5 and choose 'Continue'.";
      Title: Transfer plate
      Pause process: 1
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    Task Bravo::SubProcess
      SubProcess_Name: ResetTemperature
    Task Bravo::SubProcess
      SubProcess_Name: TransferBuffer
  Process
    Plate name: ReagentPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      TaskScript: if(columns < 7) plate.labware = "96 Eppendorf Twin.tec PCR";
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      SubProcess_Name: AliquotMix
    Task Bravo::SubProcess
      SubProcess_Name: AliquotAdapter
    Task Bravo::SubProcess
      SubProcess_Name: AliquotBuffer
  Process
    Plate name: ReagentTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      TaskScript: // New tipbox for dispensing master mix
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: AliquotMix
    Task Bravo::SubProcess
      SubProcess_Name: AliquotAdapter
    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
    Task Bravo::SubProcess
      SubProcess_Name: AliquotBuffer
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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  Process
    Plate name: UsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: AliquotMix
    Task Bravo::SubProcess
      SubProcess_Name: AliquotAdapter
    Task Bravo::SubProcess
      SubProcess_Name: AliquotBuffer
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: SampleTips
  Process
    Plate name: SampleTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task Bravo::SubProcess
      SubProcess_Name: TransferBuffer
  Process
    Plate name: TransferPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: AliquotAdapter
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      SubProcess_Name: TransferSample
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Signal
      Waitfor: FINAL_PLATE
  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: AliquotBuffer
    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 3
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    Task BuiltIn::Wait For
      Waitfor: FINAL_PLATE
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: TransferBuffer
  Process
    Plate name: Occupied
    Plate type: 96 Deep Well PP Sqr Well V Btm
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
  Pipette_Process Name=AliquotAdapter
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = adapterVolume;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 3;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,tipColumn+1]];
      Location, plate: ReagentTips
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[1,reagentColumn+1]];
        if(columns < 7) task.Distancefromwellbottom = 0.5;
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: TransferPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,reagentColumn+1]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = (columns < 7) ? -7 : -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-tipColumn-1]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AliquotBuffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = bufferVolume;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 3;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,tipColumn+2]];
      Location, plate: ReagentTips
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        tipVolume = (volumeLeft > maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = [[1,reagentColumn+2]];
        if(columns < 7) task.Distancefromwellbottom = 0.5;
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: FinalPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,reagentColumn+2]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = (columns < 7) ? -7 : -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-tipColumn-2]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AliquotMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = reagentVolume;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 3;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,tipColumn]];
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,reagentColumn]];
        if(columns < 7) task.Distancefromwellbottom = 0.5;
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: ReactionPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,reagentColumn]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = (columns < 7) ? -7 : -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-tipColumn]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=ResetTemperature
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript:
        // Dummy task
        task.skip();
      Location to use, plate: ReactionPlate
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript: task.Temperature = tempRt;
      Location: 4
      Temperature: =tempRt;
      Temperature Tolerance: 1
      Timeout: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript: task.Temperature = tempRt;
      Location: 6
      Temperature: =tempRt;
      Temperature Tolerance: 1
      Timeout: 1
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
  Pipette_Process Name=SetTemperature
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      TaskScript: if(doOffDeckIncubation) task.skip();
      Location to use, plate: ReactionPlate
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    Task Bravo::secondary::Set temperature - Position
      Task_Disabled: 1
      TaskScript:
        /* To reach the reaction temperature faster
        this initial step is used to raise temperature quickly.
        Once reached the temperature is immediately lowered to
        the actual reaction temperature.
        */
        if(doOffDeckIncubation) task.skip();
        task.Temperature = 58;
      Location: 4
      Temperature: 58
      Wait: 1
      Temperature Tolerance: 1
      Timeout: 10
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 87
      TaskScript:
        if(doOffDeckIncubation) task.skip();
        task.Temperature = incubationTemperature;
      Location: 4
      Temperature: =incubationTemperature;
      Wait: 1
      Temperature Tolerance: 1
      Timeout: 10
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      TaskScript: if(!doOffDeckIncubation) task.skip();
      Location: 1
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  Pipette_Process Name=TransferBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = PRE_ASP_SMALL;
      Location, plate: ReactionPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Volume = sampleVolume + adapterVolume + reagentVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = global.dph(sampleVolume + adapterVolume + reagentVolume, 0.5);
      Location, plate: ReactionPlate
      Liquid class: j_slow_small_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = sampleVolume + adapterVolume + reagentVolume;
      Location, plate: FinalPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 18
      TaskScript:
        var mix_vol = 0.7 * (sampleVolume + adapterVolume + reagentVolume + bufferVolume);
        if(mix_vol > MAX_MIX_VOLUME) {
        	mix_vol = MAX_MIX_VOLUME;
        }
        task.Volume = mix_vol;
      Location, plate: FinalPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Blowout
        task.Volume = PRE_ASP_SMALL;
      Location, plate: FinalPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = PRE_ASP_SMALL;
      Location, plate: SamplePlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = global.dph(sampleVolume, 0.5);
      Location, plate: SamplePlate
      Liquid class: j_slow_small_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = sampleVolume;
      Location, plate: TransferPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 16
      TaskScript:
        var mix_vol = 0.8 * (sampleVolume + adapterVolume);
        if(mix_vol > MAX_MIX_VOLUME) {
        	mix_vol = MAX_MIX_VOLUME;
        }
        task.Volume = mix_vol;
      Location, plate: TransferPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Volume = sampleVolume + adapterVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = global.dph(sampleVolume + adapterVolume, 0.5);
      Location, plate: TransferPlate
      Liquid class: j_slow_small_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = sampleVolume + adapterVolume;
      Location, plate: ReactionPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript:
        var mix_vol = 0.8 * (sampleVolume + reagentVolume + adapterVolume);
        if(mix_vol > MAX_MIX_VOLUME) {
        	mix_vol = MAX_MIX_VOLUME;
        }
        task.Volume = mix_vol;
      Location, plate: ReactionPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 0.75
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        // Blowout
        task.Volume = PRE_ASP_SMALL;
      Location, plate: ReactionPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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