<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet_deepwell6.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
global.runsetMode &amp;&amp; global.updateRunset();
var columns = global.formColumns || 1;
var headMode = &quot;1,2,1,&quot; + columns;
var MAX_TIP_VOLUME = 175;
var tipColumn = global.settings.tipColumn;
var reagentColumn = global.settings.reagentColumn;
var elutionMixes = 20;
var buffer1Volume = global.settings.buffer1Volume;
var buffer2Volume = global.settings.buffer2Volume;
var eluateVolume = buffer1Volume - 2;

var dph = global.dph;

//Testing
var testMode = global.formTestMode;' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Place plate' />
						<Parameter Category='' Name='Body' Value='Place the Eppendorf plate containing elution buffers 1 and 2 on position 9 of the Bravo.' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotBuffer1' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotBuffer1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotBuffer2' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotBuffer2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='elute' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='elute' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='transferTips' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='elutionTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferEluate' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferEluate' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='transferTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// This is the plate with beads from the washing step' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='mixPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='signalPlateCleared' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='elute' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='elute' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferEluate' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferEluate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='capturePlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotBuffer2' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotBuffer2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferEluate' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferEluate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='elutionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotBuffer1' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotBuffer1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='signalPlateCleared' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='elute' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='elute' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='mixPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 7) plate.labware = &quot;96 Eppendorf Twin.tec PCR&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotBuffer1' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotBuffer1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='aliquotBuffer2' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='96 Deep Well PP Sqr Well V Btm' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Nunc Deep Well 1 mL' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='aliquotBuffer2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='reagentPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='occupied' />
					<Parameter Name='Plate type' Value='96 Deep Well PP Sqr Well V Btm' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='adapter' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='aliquotBuffer1' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = buffer1Volume;	// Volume to dispense per well
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);
' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
task.Distancefromwellbottom = (columns &lt; 7) ? 0.5 : 0.3;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='mixPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Distancefromwellbottom = (columns &lt; 7) ? 5 : 15;
	task.Tiptouchretractdistance = (columns &lt; 7) ? -4.5 : -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='aliquotBuffer2' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = buffer2Volume;	// Volume to dispense per well
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / maxVolume);
' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
task.Distancefromwellbottom = (columns &lt; 7) ? 0.4 : 0.25;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn+1]];
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Distancefromwellbottom = (columns &lt; 7) ? 5 : 15;
	task.Tiptouchretractdistance = (columns &lt; 7) ? -4.5 : -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='elute' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = MAX_TIP_VOLUME;
var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,13-columns]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_slow_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = buffer1Volume;
var mAspDistance = 0.3;
var mDispDistance = 2;
var mMixVolume = 0.8 * buffer1Volume;
var mMixLiquidClass = &quot;j_normal_mixing&quot;;
var mMixCycles = elutionMixes;
var mMixAspDistance = 0.7;
var mMixDispDistance = 0.7;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = -4;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='mixPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;
if(mNumberSteps === 1) {
	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='mixPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='On' />
						<Parameter Category='' Name='RPM' Value='1000' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(mMixVolume &gt; 0.8 * maxVolume) {
   mMixVolume = maxVolume * 0.8;
}
task.Volume = mMixVolume;
task.Mixcycles = mMixCycles;
task.Liquidclass = mMixLiquidClass;
task.Aspiratedistance = mMixAspDistance;
if(mMixAspDistance != mMixDispDistance) {
   task.Dispenseatdifferentdistance = true;
   task.Dispensedistance = mMixDispDistance;
}
task.Wellselection = mWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
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						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='Off' />
						<Parameter Category='' Name='RPM' Value='1000' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_blowout&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;None&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='task.Reservationtime = (testMode) ? 1 : 2 * 60;' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='capturePlate' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferEluate' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='task.Reservationtime = testMode ? 1 : 120;' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='capturePlate' />
						<Parameter Category='' Name='Location to use, location' Value='7' />
						<Parameter Category='' Name='Reservation time' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = MAX_TIP_VOLUME;
var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,13-columns]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_slow_small_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = eluateVolume;
var mAspDistance = 0.3;
var mDispDistance = 0.8;
var mMixVolume = 0.75*(eluateVolume+buffer2Volume);
var mMixLiquidClass = &quot;j_slow_mixing&quot;;
var mMixCycles = 8;
var mMixAspDistance = 1;
var mMixDispDistance = 1;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = -4;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='transferTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;
if(mNumberSteps === 1) {
	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionPlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(mMixVolume &gt; 0.8 * maxVolume) {
   mMixVolume = maxVolume * 0.8;
}
task.Volume = mMixVolume;
task.Mixcycles = mMixCycles;
task.Liquidclass = mMixLiquidClass;
task.Aspiratedistance = mMixAspDistance;
if(mMixAspDistance != mMixDispDistance) {
   task.Dispenseatdifferentdistance = true;
   task.Dispensedistance = mMixDispDistance;
}
task.Wellselection = mWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='elutionPlate' />
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						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_blowout&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;None&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='capturePlate' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='transferTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>