<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open( &apos;C:/VWorks Workspace/Protocol Files/development/jgr/scripts/jgr_lib_v1110.js&apos;);
' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var dirPath = &quot;C:/VWorks Workspace/Protocol Files/development/jgr/&quot;;
var global = GetGlobalObject();

// Get the transfer file information
var transferManager = new TransferManager();
var csvFile = global.formFile;
print(global.formFile);
transferManager.loadTransferTable(csvFile);
var error = !transferManager.errorState;

var changeTip = (global.formTipChange == 1) ? true : false;
var doTipTouch = (global.formTipTouch == 1) ? true : false;
var liquidClass;
if(global.formLiquidClass === &quot;Slow&quot;) {
   liquidClass = &quot;j_slow_medium_vol&quot;;
} else if(global.formLiquidClass === &quot;Medium&quot;) {
   liquidClass = &quot;j_slow_large_vol&quot;;
} else if(global.formLiquidClass === &quot;Fast&quot;) {
   liquidClass = &quot;j_normal_large_vol&quot;;
} else {
	print(&quot;liquid class error&quot;);
	liquidClass = &quot;j_normal_small_vol&quot;;
}' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!error) {
	print(&quot;Parsing of transfer table successful&quot;);
	task.skip();
} else {
	print(&quot;Error in parsing transfer table&quot;);
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Bad data' />
						<Parameter Category='' Name='Body' Value='The .csv file could not be parsed successfully - Abort protocol immediately!' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Destination' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Transfer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 175;
var mHeadMode = &quot;4,2,1,1&quot;;
var mLiquidClass = liquidClass;
var mPreAspVolume = (doTipTouch) ? 10 : 0;
var mAspDistance = 0.5;
var mDispDistance = 0.5;
var mBlowoutHeight = 5;
var mDoTipTouch = doTipTouch;
var mTouchRetract = 5;

if(!error) {
	global.formProgress = &quot;Completed: &quot; + transferManager.getCount() + &quot; / &quot; + transferManager.size;
}' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=transferManager.size;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(!changeTip &amp;&amp; transferManager.getCount() &gt; 1) {
	transferManager.increment(false);
} else {
	transferManager.increment();
}' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(!changeTip &amp;&amp; transferManager.getCount() &gt; 1) {
	task.skip();
}
print(transferManager.getNewTipSelection());
task.Wellselection = transferManager.getNewTipSelection();

if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='// Pre-asp
if(mPreAspVolume &gt; 0) {
	task.Wellselection = transferManager.getSourceSelection();
	task.Volume = mPreAspVolume;
	task.Liquidclass = &quot;j_normal_large_vol&quot;;
	task.Distancefromwellbottom = 50;
} else {
	task.skip();
}

if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(transferManager.getVolume() / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = transferManager.getSourceSelection();
task.Volume = transferManager.getVolume() / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;

if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Source' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = transferManager.getDestinationSelection();
task.Volume = transferManager.getVolume() / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;

if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Destination' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Pre-asp
if(mPreAspVolume &gt; 0) {
	task.Wellselection = transferManager.getDestinationSelection();
	task.Volume = mPreAspVolume;
	task.Liquidclass = &quot;j_normal_large_vol&quot;;
	task.Distancefromwellbottom = mBlowoutHeight;
	task.Performtiptouch = mDoTipTouch;
	if(mDoTipTouch) {
		task.Tiptouchretractdistance = mTouchRetract;
		task.Whichsidestousefortiptouch = &quot;North&quot;;
	}
} else {
	task.skip();
}

if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Destination' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(!changeTip &amp;&amp; transferManager.hasNext()) {
	task.skip();
}
print(transferManager.getReturnTipSelection());
task.Wellselection = transferManager.getReturnTipSelection();

if(error) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(!error) {
	global.formProgress = &quot;Completed: &quot; + transferManager.getCount() + &quot; / &quot; + transferManager.size;
}' />
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>