<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var columns;
var headMode = &quot;1,2,1&quot; + columns;' />
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='10' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='10' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='makePlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='makePlate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='bufferTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='makePlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='makePlate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='sourceTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='makePlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='makePlate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='finish' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='finish' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='finalPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='makePlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='makePlate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='sourcePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='makePlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='makePlate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='bufferPlate' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='finish' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Retrieve plates' />
						<Parameter Category='' Name='Body' Value='Remove the diluted index plate from position 6, seal and label. Also remove the adapter source plate from position 4 and store accordingly. Then choose &apos;Continue&apos; to finish the protocol.' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='makePlate' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='bufferTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='bufferPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='8' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='finalPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='8' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='bufferTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='sourceTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='sourcePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='1' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='finalPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='1' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='finalPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,1]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='finalPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-2.5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='sourceTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>