<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 2' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 3' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 3' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 4' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transfer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 175;
var mHeadMode = &quot;1,2,1,1&quot;;
var mSourceColumn = 1;
var mSinglePlate = false;
var mNumberColumns = 3;
var mGetTips = true;
var mTipColumn = 12;
var mReturnTips = true;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = 20;
var mAspDistance = 0.5;
var mDispDistance = 2;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = -4;

// Skip tip handling if no transfer is necessary
// and tips are not carried over:
var mSkipTransfer = false;
if(mSinglePlate &amp;&amp; mNumberColumns == 1) {
	mSkipTransfer = true;
   if(mGetTips &amp;&amp; mReturnTips) {
      mGetTips = false;
      mReturnTips = false;
   }
}' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = [[1,mTipColumn]];
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process - 1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(mSkipTransfer || mPreAspVolume == 0) {
   task.skip();
}
task.Wellselection = [[1,mSourceColumn]];
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process - 3' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
var mCurrentColumn = 0;
' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberColumns;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='mCurrentColumn++;' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(mSkipTransfer) {
   task.skip();
}
task.Wellselection = [[1,mSourceColumn]];
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process - 3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(mSkipTransfer) {
   task.skip();
}
task.Wellselection = [[1,mCurrentColumn]];
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process - 4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(mSkipTransfer || (mPreAspVolume == 0 &amp;&amp; !mDoTipTouch)) {
   task.skip();
}
task.Wellselection = [[1,mCurrentColumn]];
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_blowout&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;None&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process - 4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = [[1,13-mTipColumn]];
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='process - 2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>