<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Reservoir' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Reservoir' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Incubate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Incubate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Distribute' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Distribute' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Rinse' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Rinse' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Reservoir' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Reservoir' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Incubate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Incubate' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Distribute' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Distribute' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Rinse' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Rinse' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Plate1' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Distribute' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Distribute' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Plate2' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Reservoir' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Reservoir' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Plate3' />
					<Parameter Name='Plate type' Value='96 Matrix reservoir SMALL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Distribute' >
				<Minimized >0</Minimized>
				<Task DeviceType='Bravo' IsDerived='1' Name='User Defined Macro::distributeMacro' TaskCount='16' Type='4' Version='1' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 160;
var mHeadMode = &quot;1,1,1,1&quot;;
var mSourceColumn = 1;
var mNumberColumns = 3;
var mGetTips = true;
var mTipColumn = 1;
var mReturnTips = true;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = 50;
var mAspDistance = 1;
var mDispDistance = 2;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = 2;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = [[1,mTipColumn]];
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,mSourceColumn]];
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / (maxVolume - mPreAspVolume));
var mCurrentColumn = 0;
' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberColumns;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='mCurrentColumn++;' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,mSourceColumn]];
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,mCurrentColumn]];
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,mCurrentColumn]];
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = [[1,mTipColumn]];
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Incubate' >
				<Minimized >0</Minimized>
				<Task DeviceType='Bravo' IsDerived='1' Name='User Defined Macro::incubateMixMacro' TaskCount='13' Type='4' Version='1' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mHeadMode = &quot;1,2,1,12&quot;;
var mWellSelection = [[1,12]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_slow_mixing&quot;;
var mPreAspVolume = 10;
var mIncubationTime = 1 * 60;
var mMixInterval = 60;
var mMixVolume = 100;
var mMixCycles = 3;
var mAspDistance = 1;
var mDispDistance = 5;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
    task.Wellselection = mWellSelection;
} else {
    task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mPreAspVolume;
task.Wellselection = mWellSelection;
task.Distancefromwellbottom = 50;
task.Liquidclass = &quot;j_normal_large_vol&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberMixes = Math.floor(mIncubationTime / mMixInterval);
var mTimer;' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberMixes;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='mTimer = new Date().getTime();
task.Volume = mMixVolume;
task.Liquidclass = mLiquidClass;
task.Mixcycles = mMixCycles;
task.Aspiratedistance = mAspDistance;
if(mAspDistance !== mDispDistance) {
    task.Dispenseatdifferentdistance = true;
    task.Dispensedistance = mDispDistance;
} else {
    task.Dispenseatdifferentdistance = false;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='mTimer = (mIncubationTime / mNumberMixes) - Math.floor((new Date().getTime() - mTimer) / 1000);;
task.Reservationtime = (mTimer &gt; 0) ? mTimer : 0;' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='Plate1' />
						<Parameter Category='' Name='Location to use, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Reservation time' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mPreAspVolume;
task.Distancefromwellbottom = mBlowoutHeight;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
if(mDoTipTouch) {
    task.Performtiptouch = true;
    task.Tiptouchretractdistance = mTouchRetract;
    task.Whichsidestousefortiptouch = &quot;South/North&quot;;
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
    task.Wellselection = mWellSelection;
} else {
    task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Mix' >
				<Minimized >0</Minimized>
				<Task DeviceType='Bravo' IsDerived='1' Name='User Defined Macro::mixMacro' TaskCount='9' Type='4' Version='1' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mHeadMode = &quot;1,2,1,6&quot;;
var mWellSelection = [[1,6]];
var mGetTips = false;
var mReturnTips = true;
var mLiquidClass = &quot;j_slow_mixing&quot;;
var mPreAspVolume = 10;
var mMixVolume = 100;
var mMixCycles = 3;
var mAspDistance = 1;
var mDispDistance = 5;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
    task.Wellselection = mWellSelection;
} else {
    task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mPreAspVolume;
task.Wellselection = mWellSelection;
task.Distancefromwellbottom = 50;
task.Liquidclass = &quot;j_normal_large_vol&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='6' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mMixVolume;
task.Liquidclass = mLiquidClass;
task.Mixcycles = mMixCycles;
task.Aspiratedistance = mAspDistance;
if(mAspDistance !== mDispDistance) {
    task.Dispenseatdifferentdistance = true;
    task.Dispensedistance = mDispDistance;
} else {
    task.Dispenseatdifferentdistance = false;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = mPreAspVolume;
task.Distancefromwellbottom = mBlowoutHeight;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
if(mDoTipTouch) {
    task.Performtiptouch = true;
    task.Tiptouchretractdistance = mTouchRetract;
    task.Whichsidestousefortiptouch = &quot;South/North&quot;;
}
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
    task.Wellselection = mWellSelection;
} else {
    task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;6&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Reservoir' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 160;
var mHeadMode = &quot;1,2,1,12&quot;;
var mWellSelection = [[1,12]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = 800;
var mAspDistance = 1;
var mDispDistance = 2;
var mDoMix = false;
var mMixLiquidClass = &quot;j_normal_mixing&quot;;
var mMixCycles = 0;
var mMixAspDistance = 0;
var mMixDispDistance = 0;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate3' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / (maxVolume - mPreAspVolume));' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(mDoMix) {
   var mTemp = mTransferVolume * 0.8;
   if(mTemp &gt; (maxVolume * 0.8)) {
      mTemp = maxVolume * 0.8;
   }
   task.Volume = mTemp;
   task.Mixcycles = mMixCycles;
   task.Liquidclass = mMixLiquidClass;
   task.Aspiratedistance = mMixAspDistance;
   if(mMixAspDistance != mMixDispDistance) {
      task.Dispenseatdifferentdistance = true;
      task.Dispensedistance = mMixDispDistance;
   }
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Rinse' >
				<Minimized >0</Minimized>
				<Task DeviceType='Bravo' IsDerived='1' Name='User Defined Macro::tipRinseMacro' TaskCount='15' Type='4' Version='1' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 160;
var mHeadMode = &quot;1,2,1,12&quot;;
var mWellSelection = [[1,12]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mRinseVolume = 80;
var mNumberRinses = 1;
var mAspDistance = 1;
var mDispDistance = 20;
var mMixLiquidClass = &quot;j_normal_mixing&quot;;
var mMixCycles = 3;
var mMixDistance = 20;
var mBlowoutHeight = 20;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberRinses;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mRinseVolume;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = maxVolume - mRinseVolume;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = maxVolume - mRinseVolume;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mMixDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Volume = maxVolume - mRinseVolume;
task.Mixcycles = mMixCycles;
task.Liquidclass = mMixLiquidClass;
task.Aspiratedistance = mMixDistance;
task.Wellselection = mWellSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mRinseVolume;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Transfer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 160;
var mHeadMode = &quot;1,2,1,6&quot;;
var mWellSelection = [[1,1]];
var mGetTips = true;
var mReturnTips = false;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = 10;
var mAspDistance = 1;
var mDispDistance = 2;
var mDoMix = true;
var mMixLiquidClass = &quot;j_normal_mixing&quot;;
var mMixCycles = 3;
var mMixAspDistance = 1;
var mMixDispDistance = 1;
var mBlowoutHeight = 5;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;6&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='6' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / (maxVolume - mPreAspVolume));' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(mDoMix) {
   var mTemp = mTransferVolume * 0.8;
   if(mTemp &gt; (maxVolume * 0.8)) {
      mTemp = maxVolume * 0.8;
   }
   task.Volume = mTemp;
   task.Mixcycles = mMixCycles;
   task.Liquidclass = mMixLiquidClass;
   task.Aspiratedistance = mMixAspDistance;
   if(mMixAspDistance != mMixDispDistance) {
      task.Dispenseatdifferentdistance = true;
      task.Dispensedistance = mMixDispDistance;
   }
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate2' />
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						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Plate2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mWellSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>