<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open( &apos;C:/VWorks Workspace/Protocol Files/development/jgr/scripts/transfer_lib_v1405.js&apos;);

' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
var filePath = global.formFile;

// TESTING:
// filePath = &quot;C:/VWorks Workspace/Protocol Files/development/jgr/transfer_protocols_eval/testDilutionMulti.csv&quot;;' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var tm = new TransferManager(&quot;dilution&quot;);
tm.openTransferFile(filePath);

/* DEBUG
print(&quot;userFile: &quot; + filePath);
print(&quot;TM state: &quot; + tm.errorState);
print(&quot;TM size: &quot; + tm.getSize());
*/
for(var i=0,n=tm.numberOfPlates();i&lt;n;i++) {
   var t = tm.transfers[i];
	for(var j=0,m=t.length;j&lt;m;j++) {
		print(t[j]);
	}
}
' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='// Show an error message if hte selected file could
// not be interpreted successfully:
if(tm.errorState &amp;&amp; tm.getSize() &amp;&amp; typeof filePath !== &quot;undefined&quot;) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Error' />
						<Parameter Category='' Name='Body' Value='The csv file could not be parsed successfully, abort and check format.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var buffer96Mode = false;
var sample96Mode = false;
var userEntry;' />
				</Task>
				<Task Name='BuiltIn::User Message' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='if(!tm.constantVolumes[0]) {
   task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Option' />
						<Parameter Category='' Name='Body' Value='The buffer volume is the same for all transfers, do you want to pipette all 96 wells simultaneously (Y/N)?' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='userEntry' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='if(tm.constantVolumes[0] &amp;&amp; userEntry.match(/\s*y\s*/gi)) {
   buffer96Mode = true;
}' />
				</Task>
				<Task Name='BuiltIn::User Message' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='if(!tm.constantVolumes[1]) {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Option' />
						<Parameter Category='' Name='Body' Value='The sample volume is the same for all transfers, do you want to pipette all 96 wells simultaneously (Y/N)?' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='userEntry' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='if(tm.constantVolumes[1] &amp;&amp; userEntry.match(/\s*y\s*/gi)) {
   sample96Mode = true;
}

print(&quot;buffer96Mode=&quot;+buffer96Mode+&quot;\n&quot;+
   &quot;sample96Mode=&quot;+sample96Mode);' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1; cassette 1, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 2, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 3, slot 1, slot 2, slot 3, slot 4, slot 5; cassette 4, slot 1, slot 2, slot 3, slot 4, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sampleTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sampleTransfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Barcode or header East' Value='Barcode not in file' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='bufferTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='bufferTransfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='source' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='diluent' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='bufferTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='bufferTransfer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sampleTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sampleTransfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='destination' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='bufferTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='bufferTransfer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sampleTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sampleTransfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='newTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='bufferTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='bufferTransfer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sampleTransfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sampleTransfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='usedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='bufferTransfer' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='if(buffer96Mode) {
   task.Headmode = &quot;0,2,1,1&quot;;
} else {
   task.Headmode = &quot;4,2,1,1&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var hasTransfer = tm.hasNextTransfer();' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = buffer96Mode ? 1 : tm.getCurrentSize();' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=tm.getCurrentSize();' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(hasTransfer) {
	tm.increment();
}' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(tm.useNewTip() &amp;&amp; hasTransfer) {
   task.Wellselection = buffer96Mode ? [[1,1]] : [tm.takeTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
	task.skip();
}
task.Volume = tm.getVolume();
task.Wellselection = buffer96Mode ? [[1,1]] : [tm.getWellSelectionTransferSource()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='diluent' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
	task.skip();
}
task.Volume = tm.getVolume();
task.Wellselection = buffer96Mode ? [[1,1]] : [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(tm.returnTip() &amp;&amp; hasTransfer) {
	task.Wellselection = buffer96Mode ? [[1,1]] : [tm.putTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if((!tm.returnTip() &amp;&amp; (buffer96Mode != sample96Mode)) &amp;&amp; hasTransfer) {
	task.Wellselection = buffer96Mode ? [[1,1]] : [[8,12]];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='// Skip forward:
if(buffer96Mode) {
   for(var i = 1, n = tm.getCurrentSize(); i &lt; n; i++) {
      tm.increment();
   }
}' />
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='sampleTransfer' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='if(sample96Mode) {
   task.Headmode = &quot;0,2,1,1&quot;;
} else {
   task.Headmode = &quot;4,2,1,1&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=tm.numberOfPlates() - 1;' Value='' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var hasTransfer = tm.hasNextTransfer();' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<TaskScript Name='TaskScript' Value='task.Numberoftimestoloop = sample96Mode ? 1 : tm.getCurrentSize();' />
					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=tm.getCurrentSize();' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(hasTransfer) {
	tm.increment();
}' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if((tm.useNewTip() || (sample96Mode != buffer96Mode)) &amp;&amp; hasTransfer) {
   task.Wellselection = sample96Mode ? [[1,1]] : [tm.takeTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
   task.skip();
}
task.Volume = tm.getVolume();
task.Wellselection = sample96Mode ? [[1,1]] : [tm.getWellSelectionTransferSource()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='source' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
   task.skip();
}
task.Volume = tm.getVolume();
task.Wellselection = sample96Mode ? [[1,1]] : [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
if(!hasTransfer) {
   task.skip();
}
task.Wellselection =  sample96Mode ? [[1,1]] : [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-9' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if((tm.returnTip() || sample96Mode) &amp;&amp; hasTransfer) {
	task.Wellselection =  sample96Mode ? [[1,1]] : [tm.putTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<TaskScript Name='TaskScript' Value='if(tm.hasTip()) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='newTips' />
						<Parameter Category='' Name='Spawn control' Value='Spawn new plates when task runs ' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<TaskScript Name='TaskScript' Value='if(tm.hasTip()) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='usedTips' />
						<Parameter Category='' Name='Spawn control' Value='Spawn new plates when task runs ' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(!tm.hasTip()) tm.resetTips();' />
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >1</Task_Disabled>
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					<TaskScript Name='TaskScript' Value='// Skip forward:
if(sample96Mode) {
   for(var i = 1, n = tm.getCurrentSize(); i &lt; n; i++) {
      tm.increment();
   }
}' />
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<TaskScript Name='TaskScript' Value='if(!tm.changePlate()) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='source' />
						<Parameter Category='' Name='Spawn control' Value='Spawn new plates when task runs ' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies >
					<Sub_Process Name='bufferTransfer' />
				</Dependencies>
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>