<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\Documents and Settings\joel\My Documents\vworks_protocols\dev\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open( &apos;C:/VWorks Workspace/Protocol Files/facility/transfer/jgr_lib_v1303.js&apos;);
' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
var filePath = global.formFile;' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(filePath) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Specify file' />
						<Parameter Category='' Name='Body' Value='The protocol was not started via the form. Specify the full path to the CSV file to use:' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' TaskParameterScript='=filePath;' Value='filePath' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var tm = new TransferManager(&quot;transfer&quot;);
tm.openTransferFile(filePath);' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='// Show an error message if hte selected file could
// not be interpreted successfully:
if(tm.errorState &amp;&amp; tm.getSize() &amp;&amp; typeof filePath !== &quot;undefined&quot;) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Error' />
						<Parameter Category='' Name='Body' Value='The csv file could not be parsed successfully, abort and check format.' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1; slot 1, slot 2, slot 3, slot 4, slot 5' />
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2; slot 1, slot 2, slot 3, slot 4, slot 5' />
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 3; slot 1, slot 2, slot 3, slot 4, slot 5' />
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 4; slot 1, slot 2, slot 3, slot 4, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='destination' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='newTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='usedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transfer' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var index = 0;
var hasTransfer = tm.getSize() &gt; 0;
	' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=tm.getSize();' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(hasTransfer) {
	tm.increment();
}' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(tm.useNewTip() &amp;&amp; hasTransfer) {
	task.Wellselection = [tm.takeTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
	task.skip();
}
task.Volume = tm.getVolume();
task.Wellselection = [tm.getWellSelectionTransferSource()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='source' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
	task.skip();
}
task.Volume = tm.getVolume();
task.Wellselection = [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
if(!hasTransfer) {
	task.skip();
}
task.Wellselection = [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-9' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(tm.returnTip() &amp;&amp; hasTransfer) {
	task.Wellselection = [tm.putTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<TaskScript Name='TaskScript' Value='if(!tm.changePlate()) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='source' />
						<Parameter Category='' Name='Spawn control' Value='Spawn new plates when task runs ' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<TaskScript Name='TaskScript' Value='if(tm.hasTip()) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='newTips' />
						<Parameter Category='' Name='Spawn control' Value='Precalculate # of plates (normal operation)' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<TaskScript Name='TaskScript' Value='if(tm.hasTip()) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='usedTips' />
						<Parameter Category='' Name='Spawn control' Value='Precalculate # of plates (normal operation)' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(!tm.hasTip()) tm.resetTips();' />
				</Task>
				<Task Name='BuiltIn::Loop End' >
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					<TaskScript Name='TaskScript' Value='index++;' />
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>