<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();

var vol_final =  parseInt(global.formVolume);
var vol_max_asp = 175;
var vol_pre_asp = 30;
var num_cols = parseInt(global.formColumns);
var head_mode = &quot;1,2,1,&quot; + num_cols;
var liquid_class = (global.formLiquidClass == &quot;Slow&quot;) ? &quot;j_peg_handling&quot; : &quot;j_fast_large_vol&quot;; 
var vol_step;
var asp_repeats;

// Debug:
print(&quot;vol_final=&quot;+vol_final+&quot; num_cols=&quot;+num_cols+&quot; liquid_class=&quot;+liquid_class); ' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Reservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DestinationPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='EmptyTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Transfer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = head_mode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, 13 - num_cols]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='// Pre-asp
task.Volume = vol_pre_asp;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reservoir' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='50' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='asp_repeats = Math.ceil((vol_final + vol_pre_asp) / vol_max_asp);
vol_step = vol_final / asp_repeats;

print(&quot;Transfering in &quot; + asp_repeats + &quot; x &quot; + vol_step + &quot; uL steps&quot;);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=asp_repeats;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = vol_step;
task.Liquidclass = liquid_class;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reservoir' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = vol_step;
task.Liquidclass = liquid_class;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DestinationPlate' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
task.Volume = vol_pre_asp;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DestinationPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='North' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, 13 - num_cols]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='EmptyTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>