Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev
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Main_Processes
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: ReagentTips
  Process
    Plate name: BeadSolution1
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Incubation time: 1200
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: removeSupnat
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash1
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addDenature
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::User Message
      Title: Transfer plate
      Body: Transfer the plate to a thermal cycler and run the denaturing program: 5 min RT, 30 min at 37
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Spawn Process
      Process to spawn: OxidationPlate
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      Incubation time: 300
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: transferEluate
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
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  Process
    Plate name: WashBuffer1
    Plate type: 96 Matrix open reservoir movable
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: wash1
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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  Process
    Plate name: DenatureSolution
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Task_Disabled: 1
    Task Bravo::SubProcess
      Sub-process name: distributeDenature
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: addDenature
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
  Process
    Plate name: OxidationPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferEluate
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: splitSample
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: addOxSolution
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Spawn Process
      Process to spawn: BisulfiteReagent
    Task Bravo::SubProcess
      Sub-process name: transferBisulfiteReagent
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: BisulfiteReagent
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: distributeAdditive
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: distributeBisulfiteReagent
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::User Message
      Title: User action
      Body: When the oxidation incubation has finished, return the plate to position 5 and click 'Continue'.
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    Task Bravo::SubProcess
      Sub-process name: transferBisulfiteReagent
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: SampleTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: removeSupnat
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash1
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: addDenature
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Storage Incubate
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: UsedTips
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferEluate
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: splitSample
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBisulfiteReagent
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: OxidationTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task Bravo::SubProcess
      Sub-process name: addOxSolution
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
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  Process
    Plate name: ReagentTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: distributeDenature
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Storage Incubate
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: OxidationTips
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: distributeAdditive
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: distributeBisulfiteReagent
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: UsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: addOxSolution
      Static labware configuration 1: 96 Deep Well PP Sqr Well V Btm
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      useOriginalLocations: 1
  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
    Use single instance of plate: 1
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      SubProcess_Name: removeSupnat
    Task Bravo::SubProcess
      SubProcess_Name: wash1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
  Process
    Plate name: ReagentPlate
    Plate type: 96 Nunc Deep Well 1 mL
    Use single instance of plate: 1
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      SubProcess_Name: distributeDenature
    Task Bravo::SubProcess
      SubProcess_Name: distributeAdditive
    Task Bravo::SubProcess
      SubProcess_Name: distributeBisulfiteReagent
    Task Bravo::SubProcess
      SubProcess_Name: addOxSolution
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=addDenature
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 50;
        var mAspDistance = 0.75;
        var mDispDistance = 2;
        var mMixVolume = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: DenatureSolution
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: DenatureSolution
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadSolution1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Move To Location
      Location: 1
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  Pipette_Process Name=addOxSolution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 165;
        var mHeadMode = "1,1,1,1";
        var mTipColumn = 0;
        var mSourceColumn = 2;
        var mSinglePlate = false;
        var mNumberColumns = columns / 2;
        var mLiquidClass = "j_normal_small_vol";
        var mPreAspVolume = 3;
        var mTransferVolume = 1;
        var mAspDistance = 0.65;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
        var mCurrentColumn = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      TaskScript: task.Wellselection = [[1,++mTipColumn]];
      Location, plate: OxidationTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        // Increment source column after half the (split) plate has been done:
        if(mCurrentColumn === columns) mSourceColumn++;
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ReagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = [[1,++mCurrentColumn]];
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Volume: 10
      Liquid class: j_normal_mixing
      Mix cycles: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.Wellselection = [[1,13-mTipColumn]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        // Do water next
        var maxVolume = 165;
        var mHeadMode = "1,1,1,1";
        var mTipColumn = columns / 2;
        var mSourceColumn = 3;
        var mSinglePlate = false;
        var mNumberColumns = columns / 2;
        var mLiquidClass = "j_normal_small_vol";
        var mPreAspVolume = 3;
        var mTransferVolume = 1;
        var mAspDistance = 0.65;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
        var mCurrentColumn = columns / 2;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      TaskScript: task.Wellselection = [[1,++mTipColumn]];
      Location, plate: OxidationTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        // Increment source column after half the (split) plate has been done:
        if(mCurrentColumn === columns) mSourceColumn++;
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ReagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = [[1,++mCurrentColumn]];
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Volume: 10
      Liquid class: j_normal_mixing
      Mix cycles: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.Wellselection = [[1,13-mTipColumn]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Move To Location
      Location: 1
    Task BuiltIn::User Message
      Title: Incubate
      Body: Transfer the plate in position ? to a thermal cycler and incubate 30 min at 40C.
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    Task BuiltIn::Group End
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  Pipette_Process Name=distributeAdditive
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = 5;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 2;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Location, plate: ReagentTips
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.5
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: BisulfiteReagent
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Location, plate: ReagentTips
      Mark tips as used: 1
      Well selection: Column=1 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=distributeBisulfiteReagent
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = 170;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 5;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        // If using two reagent columns:
        //task.Headmode = (columns > 6) ? "1,1,1,2" : "1,1,1,1";
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        // If using two reagent columns:
        //task.Wellselection = (columns > 6) ? [[1,2]] : [[1,1]];
      Location, plate: ReagentTips
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      TaskScript:
        // If using two reagent columns:
        //task.Wellselection = (columns > 6) ? [[1,6]] : [[1,5]];

        if(columnsDone > 6) task.Wellselection = [[1,6]];
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=4 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: BisulfiteReagent
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=4 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Location, plate: ReagentTips
      Mark tips as used: 1
      Well selection: Column=2 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=distributeDenature
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = 50;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 2;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: DenatureSolution
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Location, plate: ReagentTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeSupnat
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      Location to use, plate: BeadSolution1
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = 110;
        var mAspDistance = 0.5;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North ";
        }
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=splitSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 25;
        var mAspDistance = 0.75;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::JavaScript
      TaskScript:
        // Update columns and head mode:
        columns *= 2;
        headMode = "1,2,1," + columns;
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  Pipette_Process Name=transferBisulfiteReagent
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_medium_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 170;
        var mAspDistance = 1;
        var mDispDistance = 4;
        var mMixVolume = 100;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BisulfiteReagent
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BisulfiteReagent
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mTransferVolume = 175;
        var mAspDistance = 1;
        var mDispDistance = 4;
        var mMixVolume = 100;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BisulfiteReagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: OxidationPlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferEluate
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 50;
        var mAspDistance = 0.75;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = [[1,1+columns]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: OxidationPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 50;
        var mAspDistance = 0.75;
        var mDispDistance = 2;
        var mMixVolume = 80;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadSolution1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=wash1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Loop
      Number of times to loop: 3
      Change tips every N times, N = : 1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 1000;
        var mAspDistance = 2;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 3;
        var mMixAspDistance = 5;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 20;
        var mDoTipTouch = true;
        var mTouchRetract = -15;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: WashBuffer1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: WashBuffer1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Tiptouchretractdistance = 10;
        task.Whichsidestousefortiptouch = "South";
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadSolution1
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: BeadSolution1
      Location to use, location: 7
      Reservation time: 120
    Task BuiltIn::JavaScript
      TaskScript:
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 5;
        var mTransferVolume = 1010;
        var mAspDistance = 2;
        var mDispDistance = 2;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Tiptouchretractdistance = 10;
        task.Whichsidestousefortiptouch = "North";
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Loop End
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