Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var numberColumns = 3;
        var headMode = "1,2,1," + numberColumns;
        var beadVolume = 50;
        var beadWashVolume = 400;
        var precipVolumeA = 100;
        var precipVolumeB = 100;
        var beadResuspVolume = 10;
        var pelletTime = 60;
        var pelletTimeShort = 30;
        var pelletTimeLong = 120;
        var hasTips = false;
    Task BuiltIn::JavaScript
      TaskScript:
        function getTips() {
           var newTips = !hasTips;
           hasTips = true;
           return newTips;
        }

        function returnTips() {
           hasTips = false;
           return true;
        }
Main_Processes
  Process
    Plate name: Tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: TransferWashBuffer
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: DistributeBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task Bravo::SubProcess
      Sub-process name: ResuspendBeads
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    Task Bravo::SubProcess
      Sub-process name: SplitBeads
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    Task Bravo::SubProcess
      Sub-process name: MakeFragSepA
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    Task Bravo::SubProcess
      Sub-process name: MakeFragSepB
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  Process
    Plate name: FragSepA
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task Bravo::SubProcess
      Sub-process name: ResuspendBeads
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    Task Bravo::SubProcess
      Sub-process name: SplitBeads
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    Task Bravo::SubProcess
      Sub-process name: MakeFragSepA
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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  Process
    Plate name: FragSepB
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: SplitBeads
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    Task Bravo::SubProcess
      Sub-process name: MakeFragSepB
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
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  Process
    Plate name: PrecipBufferA
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: MakeFragSepA
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    Task BuiltIn::Spawn Process
      Process to spawn: PrecipBufferB
  Process
    Plate name: PrecipBufferB
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: MakeFragSepB
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  Process
    Plate name: ElutionBuffer
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: FragSepA
  Process
    Plate name: WashBuffer
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: TransferWashBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: FragSepB
  Process
    Plate name: ElutionBufferReservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: ResuspendBeads
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: PrecipBufferB
  Process
    Plate name: WashBufferReservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: TransferWashBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: PrecipBufferA
  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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  Pipette_Process Name=DistributeBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,2,1,1";
        var mSourceColumn = 1;
        var mNumberColumns = numberColumns - 1;
        var mGetTips = getTips();
        var mTipColumn = 12;
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = beadVolume * 2;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = 10;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / (maxVolume - mPreAspVolume));
        var mCurrentColumn = 1;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: FragSepA
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = false;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = beadVolume * 2 + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 20;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / (maxVolume - mPreAspVolume));
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: FragSepA
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = beadWashVolume + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 20;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=MakeFragSepA
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_peg_handling";
        var mPreAspVolume = 20;
        var mTransferVolume = precipVolumeA;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 80;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 19
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: PrecipBufferA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 22
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: PrecipBufferA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepA
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=MakeFragSepB
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_peg_handling";
        var mPreAspVolume = 20;
        var mTransferVolume = precipVolumeB;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 80;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: PrecipBufferB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: PrecipBufferB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepB
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=ResuspendBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      Location to use, plate: FragSepA
      Location to use, location: 5
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = beadResuspVolume * 2;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepA
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 22
      TaskScript:
        var mTemp = mTransferVolume * 0.8;
        if(mTemp > (maxVolume * 0.8)) {
           mTemp = maxVolume * 0.8;
        }
        task.Volume = mTemp;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepA
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: FragSepA
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 5;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 1;
        var mDispDistance = 25;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 25;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: Waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=SplitBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = beadVolume;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferElutionBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 1100;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 20;
        var mDoTipTouch = true;
        var mTouchRetract = 1;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferWashBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 170;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 800;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 20;
        var mDoTipTouch = true;
        var mTouchRetract = 1;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=9 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: WashBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: WashBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: WashBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: WashBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = getTips();
        var mReturnTips = returnTips();
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = beadWashVolume;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferReservoir
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 46
      TaskScript:
        var mTemp = mTransferVolume * 0.8;
        if(mTemp > (maxVolume * 0.8)) {
           mTemp = maxVolume * 0.8;
        }
        task.Volume = mTemp;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepA
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=3 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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