Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet_red4.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::JavaScript
      TaskScript:
        var testMode = false;
        var numberColumns = 1;
        var headMode = "1,2,1," + numberColumns;
        var washMixes = 10;
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Temperature: 46
      Temperature Tolerance: 1
      Timeout: 10
      Allow concurrent operation: 1
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Main_Processes
  Process
    Plate name: capturePlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: addSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: captureMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: washBeads1
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-1
    Task Bravo::SubProcess
      Sub-process name: isolateBeads3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: washBeads2-2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferBeads
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
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  Process
    Plate name: samplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: addSample
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: washPlate
  Process
    Plate name: washPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      SubProcess_Name: transferBeads
    Task Bravo::SubProcess
      SubProcess_Name: washIncubate1
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads4
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-3
    Task Bravo::SubProcess
      SubProcess_Name: washIncubate2
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      SubProcess_Name: washBeads3
  Process
    Plate name: waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads1
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads2
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads3
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads4
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads5
    Task Bravo::SubProcess
      SubProcess_Name: washBeads3
  Process
    Plate name: washSolution1
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: washBeads1
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: washSolution2
  Process
    Plate name: washSolution2
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-1
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-2
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-3
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: washSolution3
  Process
    Plate name: washSolution3
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      SubProcess_Name: washBeads3
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: captureTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: addSample
    Task Bravo::SubProcess
      SubProcess_Name: captureMix
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads1
    Task BuiltIn::Spawn Process
      Process to spawn: washSolution1
    Task Bravo::SubProcess
      SubProcess_Name: washBeads1
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads2
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: washTips1
  Process
    Plate name: washTips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-1
    Task Bravo::SubProcess
      SubProcess_Name: isolateBeads3
    Task Bravo::SubProcess
      SubProcess_Name: washBeads2-2
    Task Bravo::SubProcess
      Sub-process name: transferBeads
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads4
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: washBeads2-3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads5
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: washTips2
  Process
    Plate name: washTips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      SubProcess_Name: washBeads3
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
  Process
    Plate name: occupied
    Plate type: 96 Nunc Deep Well 1 mL
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=addSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 100;
        var mAspDistance = 0.3;
        var mDispDistance = 0.8;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: samplePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: samplePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=captureMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 30;
        var mIncubationTime = 30 * 60;
        var mTimerCycles = 5;
        var mMixVolume = 150;
        var mAspDistance = 3;
        var mDispDistance = 3;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -9;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: captureTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: capturePlate
      Location, location: 5
      Mode: On
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 31
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = testMode ? 1 : mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 31
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        if(testMode) {
           var mMixCycles = 1;
        } else {
           var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        }
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: capturePlate
      Location, location: 5
      Mode: Off
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 120;
      Location to use, plate: capturePlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = 360;
        var mAspDistance = 0.55;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task BuiltIn::Reserve Location
      TaskScript:
        // Wait 30 s before last asp:
        if(mCurrentStep != mNumberSteps) {
        	task.skip();
        }
      Location to use, plate: capturePlate
      Location to use, location: 7
      Reservation time: 30
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 60;
      Location to use, plate: capturePlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = 210;
        var mAspDistance = 0.55;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      Estimated time: 11
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 60;
      Location to use, plate: capturePlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = 210;
        var mAspDistance = 0.55;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 60;
      Location to use, plate: washPlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 210;
        var mAspDistance = 0.8;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every dispense repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads5
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 60;
      Location to use, plate: washPlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 210;
        var mAspDistance = 0.8;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 0;
        var mTransferVolume = 220;
        var mAspDistance = 0.3;
        var mDispDistance = 0.8;
        var mBlowoutHeight = 10;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Dynamictipretraction = 0.05;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 1.5;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 3;
        var mMixDispDistance = 3;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: capturePlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Location, plate: capturePlate
      Location, location: 5
      Mode: Timed
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads2-1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 1.5;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 3;
        var mMixDispDistance = 3;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: capturePlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Location, plate: capturePlate
      Location, location: 5
      Mode: Timed
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads2-2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 1.5;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 3;
        var mMixDispDistance = 3;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: capturePlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Location, plate: capturePlate
      Location, location: 5
      Mode: Timed
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 20
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads2-3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 2;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 3;
        var mMixDispDistance = 3;
        var mBlowoutHeight = 8;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 52
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: washPlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_slow_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 2;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 3;
        var mMixDispDistance = 3;
        var mBlowoutHeight = 8;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution3
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution3
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 73
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: washPlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_slow_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 60;
      Location to use, plate: washPlate
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-numberColumns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 210;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      Estimated time: 11
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: // Move plate off magnet
      Location to use, plate: washPlate
      Location to use, location: 5
    Task BuiltIn::Loop End
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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
  Pipette_Process Name=washIncubate1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 30 * 60;
      Location to use, plate: washPlate
      Location to use, location: 4
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  Pipette_Process Name=washIncubate2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 30 * 60;
      Location to use, plate: washPlate
      Location to use, location: 4
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 12
      Location: 4
      Temperature: 20
      Temperature Tolerance: 1
      Timeout: 10
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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
