<?xml version="1.0" encoding="utf-16"?>
<velocity11 file="Form_Data" version="1.0">
  <Property name="UseGlobalContext" value="1" />
  <Property name="RestoreDefaultsOnLoad" value="1" />
  <Property name="ShowLogInFullScreen" value="1" />
  <Property name="FormBackgroundColor" value="-1" />
  <Object type="ToolboxLibrary.MainContainer, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="mainContainer1" children="Controls">
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox7" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formEmail" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic17" children="Controls">
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      <Property name="Text">Email this address when finished:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Email this address when finished:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Email this address when finished:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formSkipPrep" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic16" children="Controls">
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      <Property name="Text">Skip prep:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Skip prep:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Skip prep:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup1" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic15" children="Controls">
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        <Property name="Text">When setting the elution volume to 24 uL or less the protocol will pause before the final step and you will be instructed to centrifuge the plate.</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="When setting the elution volume to 24 uL or less the protocol will pause before the final step and you will be instructed to centrifuge the plate." ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="When setting the elution volume to 24 uL or less the protocol will pause before the final step and you will be instructed to centrifuge the plate." ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic14" children="Controls">
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        <Property name="Text">IMPORTANT:</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="IMPORTANT:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="IMPORTANT:" ValueToDisplay="" Hide_if="" />
      </Object>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic13" children="Controls">
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      <Property name="Text">Science for Life Laboratory Stockholm 2012</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Science for Life Laboratory Stockholm 2012" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Science for Life Laboratory Stockholm 2012" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic12" children="Controls">
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      <Property name="Text">Created by Joel Gruselius</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Created by Joel Gruselius" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Created by Joel Gruselius" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic9" children="Controls">
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      <Property name="Text">DNA purification</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="DNA purification" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="DNA purification" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.PauseResume, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="pauseResume1" children="Controls">
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      <Property name="Text"> PAUSE</Property>
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" PAUSE" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic11" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="statusString" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic10" children="Controls">
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      <Property name="Text">Status:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Status:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Status:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton1" children="Controls">
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      <Property name="Text"> START</Property>
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      <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="run(&quot;C:/VWorks Workspace/Protocol Files/facility/resources/clear_inventory.bat&quot;, true);&#xA;runset.clear();&#xA;if(!formSkipPrep) {&#xA;	runset.openRunsetFile(&quot;C:/VWorks Workspace/Protocol Files/facility/ca_purification/ca_purification.rst&quot;, &quot;ca_form.VWForm&quot;);&#xA;} else {&#xA;	runset.appendProtocolFileToRunset(&quot;C:/VWorks Workspace/Protocol Files/facility/ca_purification/ca_purification.pro&quot;, 1, &quot;&quot;, &quot;ca_form.VWForm&quot;);&#xA;}" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" START" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic8" children="Controls">
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      <Property name="Text">Columns of samples:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Columns of samples:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Columns of samples:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formColumns" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="1;2;3;4;5;6;7;8;9;10;11;12" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="12" ValueToDisplay="" Hide_if="Const(0)" />
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      <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="1;2;3;4;5;6;7;8;9;10;11;12;" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox6" children="Controls">
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      <Property name="Text">30</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formElutionVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="10" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="200" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="10" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="30" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="10" />
          <Range Value="200" />
        </Ranges>
      </Parameter>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox5" children="Controls">
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      <Property name="Text">10</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formResuspVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="5" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="100" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="5" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="10" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="5" />
          <Range Value="100" />
        </Ranges>
      </Parameter>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox4" children="Controls">
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      <Property name="Text">10</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBindTime" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="60" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="1" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="10" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="1" />
          <Range Value="60" />
        </Ranges>
      </Parameter>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox3" children="Controls">
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      <Property name="Text">100</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formPrecipVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="50" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="500" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="50" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="100" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="50" />
          <Range Value="500" />
        </Ranges>
      </Parameter>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox2" children="Controls">
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      <Property name="Text">20</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBeadVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="5" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="100" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="5" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="20" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="5" />
          <Range Value="100" />
        </Ranges>
      </Parameter>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox1" children="Controls">
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      <Property name="Text">50</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formSampleVolume" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Min. value" Description="The min value of this edit" Type="12" Value="5" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)" />
      <Parameter Name="Max. value" Description="The max value of this edit" Type="12" Value="200" ValueToDisplay="" Hide_if="Variable(Read only) != Const(0)">
        <Ranges>
          <Range Value="5" />
        </Ranges>
      </Parameter>
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="12" Value="50" ValueToDisplay="" Hide_if="">
        <Ranges>
          <Range Value="5" />
          <Range Value="200" />
        </Ranges>
      </Parameter>
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic7" children="Controls">
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      <Property name="Text">Elution volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Elution volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Elution volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic6" children="Controls">
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      <Property name="Text">Resuspension volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Resuspension volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Resuspension volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic5" children="Controls">
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      <Property name="Text">Bind time:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Bind time:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Bind time:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic4" children="Controls">
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      <Property name="Text">Precipitation buffer volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Precipitation buffer volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Precipitation buffer volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic3" children="Controls">
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      <Property name="Text">Bead volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Bead volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Bead volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic2" children="Controls">
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      <Property name="Text">Sample volume:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Sample volume:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Sample volume:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic1" children="Controls">
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      <Property name="Text">CA purification</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="CA purification" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="CA purification" ValueToDisplay="" Hide_if="" />
    </Object>
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  </Object>
</velocity11>