<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='0' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011

var global = GetGlobalObject();

var volume = {};
var columns = parseInt(global.formColumns, 10);
volume.elution = parseFloat(global.formElutionVolume) + 150 + 5*80 + global.formResuspVolume; // Add 150 for bead wash, 5*80 for tips wash
volume.pbuffer = parseFloat(global.formPrecipVolume) + 10; // Total incl dead vol
volume.wash = 600;

var headMode = &quot;1,2,1,&quot; + columns;

global.statusString = &quot;Preparing buffer plates&quot;;' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferElutionBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferElutionBuffer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TrasferPrecipBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TrasferPrecipBuffer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferWashBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferWashBuffer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferElutionBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferElutionBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ElutionBufferReservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TrasferPrecipBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TrasferPrecipBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='PrecipBufferReservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Beads' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferWashBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferWashBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 3, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='WASH_BUFFER_CLEARED' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='WashBufferReservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferElutionBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferElutionBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='PrecipBuffer' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ElutionBuffer' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TrasferPrecipBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TrasferPrecipBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='WashBuffer' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='PrecipBuffer' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferWashBuffer' />
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						<Parameter Category='Static labware configuration' Name='9' Value='96 Eppendorf Twin.tec PCR' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferWashBuffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 3, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='WashBuffer' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Waste' />
					<Parameter Name='Plate type' Value='96 Deep Well PP Sqr Well V Btm' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='BindPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='WASH_BUFFER_CLEARED' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='BindPlate' />
						<Parameter Category='' Name='Spawn as subroutine' Value='' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Beads' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Sample' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='TransferElutionBuffer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 175;
var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,13-columns]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_fast_large_vol&quot;;
var mPreAspVolume = 10;
var mTransferVolume = volume.elution;
var mAspDistance = 1;
var mDispDistance = 2;
var mBlowoutHeight = 10;
var mDoTipTouch = false;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ElutionBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ElutionBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ElutionBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ElutionBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferWashBuffer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 175;
var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,13-columns]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_normal_large_vol&quot;;
var mPreAspVolume = 20;
var mTransferVolume = volume.wash;
var mAspDistance = 1;
var mDispDistance = 2;
var mBlowoutHeight = 10;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WashBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WashBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WashBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WashBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TrasferPrecipBuffer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var maxVolume = 175;
var mHeadMode = headMode;
var mWellSelection = [[1,1]];
var mTipSelection = [[1,13-columns]];
var mGetTips = true;
var mReturnTips = true;
var mLiquidClass = &quot;j_slow_large_vol&quot;;
var mPreAspVolume = 20;
var mTransferVolume = volume.pbuffer;
var mAspDistance = 1;
var mDispDistance = 1;
var mBlowoutHeight = 10;
var mDoTipTouch = true;
var mTouchRetract = 5;' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = mHeadMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(mGetTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = 50;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='PrecipBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=mNumberSteps;' Value='mTemp;' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mAspDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='PrecipBufferReservoir' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mTransferVolume / mNumberSteps;
task.Liquidclass = mLiquidClass;
task.Distancefromwellbottom = mDispDistance;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='PrecipBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = mWellSelection;
task.Volume = mPreAspVolume;
task.Liquidclass = &quot;j_normal_large_vol&quot;;
task.Distancefromwellbottom = mBlowoutHeight;
task.Performtiptouch = mDoTipTouch;
if(mDoTipTouch) {
   task.Tiptouchretractdistance = mTouchRetract;
   task.Whichsidestousefortiptouch = &quot;North&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='PrecipBuffer' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(mReturnTips) {
   task.Wellselection = mTipSelection;
} else {
   task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>