Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();
        var columns = global.formColumns || 1;
        var headMode = "1,2,1," + columns;
        var beadVol = global.purif.beadVolume || 90;
        var sampleVol = global.purif.sampleVolume || 50;
        var washVol = 200;
        var washes = 2;
        var eluteVol = global.purif.eluteVolume || 25;
        var maxVol = 175;
        var maxMixVol = 160;
        var preAsp = 5;
        var preAspLarge = 15;
        var bindTime = 5 * 60;
        var eluteTime = 2 * 60;
        var ethanolDryTime = 10 * 60;
        var pelletTime = 60;
        var pelletTimeShort = 30;
        var pelletTimeLong = 180;

        // For testing:
        print("beadVol="+beadVol+";sampleVol="+sampleVol+";eluteVol="+eluteVol);
        /*
        columns = 1;
        headMode = "1,2,1," + columns;
        beadVol = 90;
        sampleVol = 50;
        eluteVol = 25;
        washVol = 200;
        bindTime = 5 * 60;
        eluteTime = 2 * 60;
        ethanolDryTime = 10 * 60;
        pelletTime = 60;
        pelletTimeShort = 30;
        pelletTimeLong = 180;
        */
Main_Processes
  Process
    Plate name: BindTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferBeads
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: bind
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: BeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferBeads
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: SamplePlate
  Process
    Plate name: BindPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferBeads
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: bind
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
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    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: removeBindMix
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    Task Bravo::SubProcess
      Sub-process name: wash
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  Process
    Plate name: EthanolPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: wash
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  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: elute
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  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: elute
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  Pipette_Process Name=bind
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = preAspLarge;
        var mIncubationTime = bindTime;
        var mTimerCycles = 3;
        var mMixVolume = bindMixVol;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BindPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 74
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 213
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elute
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = maxVol;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = preAspLarge;
        var mTransferVolume = eluteVol;
        var mAspDistance = 1;
        var mDispDistance = 0.75;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_mixing";
        var mPreAspVolume = preAsp;
        var mIncubationTime = eluteTime;
        var mTimerCycles = 5;
        var mMixVolume = eluteVol * 0.8;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BindPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 15
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 83
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BindPlate
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = maxVol;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = preAsp;
        var mTransferVolume = eluteVol;
        var mAspDistance = 0.4;
        var mDispDistance = 0.5;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 24
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FinalPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBindMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = maxVol;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = preAspLarge;
        var mTransferVolume = sampleVol + beadVol + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 24
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = maxVol;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 15;
        var mTransferVolume = beadVol;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mMixVolume = (0.8 * beadVol > maxMixVol) ? maxMixVol : 0.8 * beadVol;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 24
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: BeadPlate
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var bindMixVol = 0.8 * (beadVol + sampleVol);
        bindMixVol = (bindMixVol > maxMixVol) ? maxMixVol : bindMixVol;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript: task.Preaspiratevolume = preAspLarge;
      Location, plate: SamplePlate
      Volume: =sampleVol; [10]
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: BindPlate
      Volume: =sampleVol; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 25
      Location, plate: BindPlate
      Volume: =bindMixVol;
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = preAspLarge;
      Location, plate: BindPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=wash
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =washes; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: EthanolPlate
      Volume: =preAsp;
      Liquid class: j_normal_large_vol
      Distance from well bottom: 45
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(washVol / maxVol);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = washVol / steps;
      Location, plate: EthanolPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = washVol / steps;
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -14
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript: task.Volume = (washVol * 0.8 > maxMixVol) ? maxMixVol : washVol * 0.8;
      Location, plate: BindPlate
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript: steps = Math.ceil((washVol + 10) / maxVol);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = (washVol + 10) / steps;
      Location, plate: BindPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = (washVol + 10) / steps;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: Waste
      Volume: =preAsp;
      Liquid class: j_blowout
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = ethanolDryTime;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
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