Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();
        var columns = global.formColumns || 1;
        var headMode = "1,2,1,"+columns;
        var MAX_VOLUME = 170;
        var volumes = {
        	source:1,
        	dilution:10,
        	buffer:[999,90],
        	reagent:6,
        	assay:4
        };

        var assayPlates = (columns > 11) + 1;

        // Dynamic Pipetting Height 2.0:
        function dph(vol, endHeight) {
        	var v = parseFloat(vol);
        	var e = parseFloat(endHeight);
        	if(v > 0 && e > 0 && !isNaN(v+e)) {
        		return 0.078 - 9.501E-5*v + (0.734-e)/v;
        	} else {
        		throw "ValueException";
        	}
        }
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=4
      Estimated time: 2
      Location: 4
      Temperature: 4
      Timeout: 1
      Allow concurrent operation: 1
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Main_Processes
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task BuiltIn::Load
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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    Task BuiltIn::Signal
      Waitfor: MOVE_DILUTION2
  Process
    Plate name: AssayPlate1
    Plate type: 384 Bio-Rad Hard-Shell
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task Bravo::SubProcess
      Sub-process name: transferAnalytes
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: transferStandards1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: finishUp
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  Process
    Plate name: BufferReservoir
    Plate type: 96 Matrix open reservoir movable
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: transferBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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  Process
    Plate name: DilutionPlate1
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: transferBuffer
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    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: makeDilutionSeries
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    Task Bravo::SubProcess
      Sub-process name: transferAnalytes
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  Process
    Plate name: DilutionPlate2
    Plate type: 96 Eppendorf Twin.tec PCR
    Use single instance of plate: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: SamplePlate
    Task Bravo::SubProcess
      Sub-process name: transferBuffer
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    Task Bravo::SubProcess
      Sub-process name: makeDilutionSeries
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    Task BuiltIn::Wait For
      Waitfor: MOVE_DILUTION2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Spawn Process
      Process to spawn: TransferPlate
    Task Bravo::SubProcess
      Sub-process name: transferAnalytes
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  Process
    Plate name: DilutionTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
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    Task BuiltIn::Spawn Process
      Process to spawn: SampleTips
  Process
    Plate name: SampleTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferSample
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    Task Bravo::SubProcess
      Sub-process name: makeDilutionSeries
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: ReagentTips
  Process
    Plate name: ReagentTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: prepareReagent
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    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: AnalyteTips
    Task BuiltIn::Wait For
      Waitfor: SIGNAL_STANDARDS2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferStandards1
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  Process
    Plate name: ReagentPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: prepareReagent
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  Process
    Plate name: TransferPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: prepareReagent
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    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
    Task BuiltIn::Spawn Process
      Process to spawn: StandardPlate
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  Process
    Plate name: StandardPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferStandards1
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  Process
    Plate name: AnalyteTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferAnalytes
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfor: SIGNAL_STANDARDS2
  Process
    Plate name: AssayPlate2
    Plate type: 384 Bio-Rad Hard-Shell
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: transferReagent
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    Task Bravo::SubProcess
      Sub-process name: transferAnalytes
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    Task Bravo::SubProcess
      Sub-process name: transferStandards1
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  Pipette_Process Name=finishUp
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Wait For User
      Estimated time: 6
      User Message: Confirm to turn off cooling and finish the protocol.
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
      Allow concurrent operation: 1
    Task BuiltIn::Reserve Location
      TaskScript: task.skip();
      Location to use, plate: AssayPlate1
      Location to use, location: 4
    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 1
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  Pipette_Process Name=makeDilutionSeries
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = volumes.dilution;
      Location, plate: DilutionPlate1
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Volume = volumes.dilution;
      Location, plate: DilutionPlate2
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 56
      TaskScript:
        var mixVolume = 0.8 * (volumes.dilution + volumes.buffer[1]);
        if(mixVolume > MAX_VOLUME * 0.8) {
        	mixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = mixVolume;
        task.Dynamictipextension = dph(mixVolume, 0.75);
      Location, plate: DilutionPlate1
      Liquid class: j_normal_mixing
      Mix cycles: 20
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=prepareReagent
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = assayPlates * (4 * volumes.reagent + 5);	// Volume to dispense per well
        var maxTipVolume = 170;	// Tip capacity
        var columnsToDo = columns / assayPlates + 1;
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columnsToDo;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        var volumeLeft = (columnsToDo - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ? maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: TransferPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columnsDone == columnsToDo) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: ReagentTips
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferAnalytes
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var fromPlate = [
        	"DilutionPlate2",
        	"DilutionPlate2",
        	"DilutionPlate1",
        	"DilutionPlate1",
        	"DilutionPlate2",
        	"DilutionPlate2",
        	"DilutionPlate1",
        	"DilutionPlate1"
        ];
        var fromWells = [
        	[1,1],
        	[1,1],
        	[1,1],
        	[1,1],
        	[1,7],
        	[1,7],
        	[1,7],
        	[1,7]
        ];
        var toWells = [
        	[2,3],
        	[2,4],
        	[1,3],
        	[1,4],
        	[2,3],
        	[2,4],
        	[1,3],
        	[1,4]
        ];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: =assayPlates; [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=counter
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if(counter === 2) {
        	task.Headmode = "1,1,1,"+columns/assayPlates;
        } else {
        	task.Headmode = "1,2,1,"+columns/assayPlates;
        }
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(counter === 2) {
        	task.Wellselection = [[1,1]];
        } else {
        	task.Wellselection = [[1,13-columns/assayPlates]];
        }
      Location, plate: AnalyteTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Location_plate = fromPlate[i];
        task.Wellselection = [fromWells[i]];
      Location, plate: DilutionPlate1
      Volume: =volumes.assay;
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        if(counter === 2) task.Location_plate = "AssayPlate2";
        task.Wellselection = [toWells[i++]];
      Location, plate: AssayPlate1
      Volume: =volumes.assay;
      Liquid class: j_slow_small_vol
      Distance from well bottom: 2.25
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        // Dummy task
        task.skip();
      Location, plate: AssayPlate2
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        // Dummy task
        task.skip();
      Location, plate: DilutionPlate2
      Empty tips: 1
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(counter === 2) {
        	task.Wellselection = [[1,1]];
        } else {
        	task.Wellselection = [[1,13-columns/assayPlates]];
        }
      Location, plate: AnalyteTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Group End
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  Pipette_Process Name=transferBuffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: DilutionTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: BufferReservoir
      Volume: 3
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(volumes.buffer[0] / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [4]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = volumes.buffer[0] / steps;
      Location, plate: BufferReservoir
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = volumes.buffer[0] / steps;
      Location, plate: DilutionPlate1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = volumes.buffer[1];
      Location, plate: BufferReservoir
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = volumes.buffer[1];
      Location, plate: DilutionPlate2
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: BufferReservoir
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 22
      Perform tip touch: 1
      Tip touch retract distance: -20
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: DilutionTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferReagent
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = "1,2,1,"+(columns/assayPlates+1);
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=3 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,12-columns/assayPlates]];
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var wells = [[1,1],[1,2],[2,1],[2,2]];
        if(assayPlates === 2) wells = wells.concat(wells);
        var i = 0;
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript: task.Volume = assayPlates * (4 * volumes.reagent + 3);
      Location, plate: TransferPlate
      Pre-aspirate volume: 2
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =4*assayPlates; [4]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        if(i > 3) task.Location_plate = "AssayPlate2";
        task.Wellselection = [wells[i++]];
      Location, plate: AssayPlate1
      Volume: =volumes.reagent [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 2.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Location_plate = "TransferPlate";
      Location, plate: AssayPlate2
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 2
      Perform tip touch: 1
      Tip touch retract distance: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,12-columns/assayPlates]];
      Location, plate: ReagentTips
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      Location, plate: SamplePlate
      Volume: =volumes.source;
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: DilutionPlate1
      Volume: =volumes.source;
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 37
      TaskScript:
        task.Volume = MAX_VOLUME * 0.9;
        task.Dynamictipextension = 20 / (MAX_VOLUME * 0.9);
      Location, plate: DilutionPlate1
      Liquid class: j_normal_mixing
      Mix cycles: 20
      Aspirate distance: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferStandards1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::Loop
      Number of times to loop: =assayPlates; [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=counter
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        if(counter === 2) {
        	task.Headmode = "1,2,1,1";
        } else {
        	task.Headmode = "1,1,1,1";
        }
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(counter === 2) {
        	task.Wellselection = [[1,12]];
        } else {
        	task.Wellselection = [[1,1]];
        }
      Location, plate: ReagentTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // var col = columns * 2 + 1;
        // var wells = [[1,col],[1,col+1],[2,col],[2,col+1]];
        var wells = [[1,1],[1,2],[2,1],[2,2]];
        var i = 0;
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: StandardPlate
      Volume: =volumes.assay; [10]
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        if(counter === 2) task.Location_plate = "AssayPlate2";
        task.Wellselection = [wells[i++]];
      Location, plate: AssayPlate1
      Volume: =volumes.assay;
      Liquid class: j_slow_small_vol
      Distance from well bottom: 1.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript:
        // Dummy task
        task.skip();
      Location, plate: AssayPlate2
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(counter === 2) {
        	task.Wellselection = [[1,12]];
        } else {
        	task.Wellselection = [[1,1]];
        }
      Location, plate: ReagentTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Group End
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