Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        // Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011-2012

        var global = GetGlobalObject();
        var columns = parseInt(global.formColumns);
        var headMode = "1,2,1," + columns;
        var beadVolume = parseFloat(global.formBeadVolume);
        var beadWashVolume = 200;
        var beadResuspVolume = 10;
        var precipVolumeA = 100;
        var precipVolumeB = 100;
        var sampleVolume = parseFloat(global.formSampleVolume);
        var bindWashVolume = 400;
        var washDryTime = 600;
        var elutionVolume = parseFloat(global.formElutionVolume);
        var pelletTime = 60;
        var pelletTimeShort = 30;
        var pelletTimeLong = 180;
        var MAX_MIX_VOLUME = 160;
        var MAX_TIP_VOLUME = 175;

        var precipBufferPlateType;
        if(global.formBufferPlate == "Nunc") {
        	precipBufferPlateType = "96 Nunc Deep Well 1 mL";
        } else {
        	precipBufferPlateType = "96 Matrix open reservoir movable";
        }

        /*
         Turns out it's hard to handle
         small bead volumes in Nunc
         plates. Add an extra volume
         to faciliate splitting the beads
         and then remove this extra
         volume.
        */
        var extraResuspVolume = 100;

        function dph(vol, endHeight) {
        	var v = parseFloat(vol);
        	var e = parseFloat(endHeight);
        	if(v > 0 && e > 0 && !isNaN(v+e)) {
        		return 0.078 - 9.501E-5*v + (0.734-e)/v;
        	} else {
        		throw "ValueException";
        	}
        }
Main_Processes
  Process
    Plate name: Tips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: TransferWashBuffer
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task Bravo::SubProcess
      Sub-process name: ResuspendBeads
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    Task BuiltIn::Spawn Process
      Process to spawn: FragSepB
    Task Bravo::SubProcess
      Sub-process name: SplitBeads
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    Task BuiltIn::Spawn Process
      Process to spawn: PrecipBufferA
    Task Bravo::SubProcess
      Sub-process name: AdjustBeadVolume1
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    Task Bravo::SubProcess
      Sub-process name: MakeFragSepA
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    Task Bravo::SubProcess
      Sub-process name: AdjustBeadVolume2
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    Task Bravo::SubProcess
      Sub-process name: MakeFragSepB
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    Task Bravo::SubProcess
      Sub-process name: TransferSample1
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    Task Bravo::SubProcess
      Sub-process name: Bind1
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    Task Bravo::SubProcess
      Sub-process name: TransferFragSepA
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    Task Bravo::SubProcess
      Sub-process name: Bind2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: AddElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: Elute
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    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
    Task Bravo::SubProcess
      Sub-process name: TransferEluate
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: TransferSample1
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
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  Process
    Plate name: BeadSource
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Spawn Process
      Process to spawn: FragSepA
    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: FragSepA
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: ResuspendBeads
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    Task Bravo::SubProcess
      Sub-process name: SplitBeads
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    Task Bravo::SubProcess
      Sub-process name: AdjustBeadVolume1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: MakeFragSepA
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    Task Bravo::SubProcess
      Sub-process name: TransferSample1
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    Task Bravo::SubProcess
      Sub-process name: Bind1
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    Task Bravo::SubProcess
      Sub-process name: TransferFragSepA
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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  Process
    Plate name: FragSepB
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: SplitBeads
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    Task Bravo::SubProcess
      Sub-process name: AdjustBeadVolume2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: MakeFragSepB
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    Task Bravo::SubProcess
      Sub-process name: TransferFragSepA
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Bind2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: AddElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: Elute
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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  Process
    Plate name: PrecipBufferA
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::JavaScript
      TaskScript: plate.labware = precipBufferPlateType;
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: MakeFragSepA
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: PrecipBufferB
  Process
    Plate name: PrecipBufferB
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::JavaScript
      TaskScript: plate.labware = precipBufferPlateType;
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: MakeFragSepB
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfor: signal_plate_cleared_1
  Process
    Plate name: ElutionBuffer
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: ResuspendBeads
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: AddElutionBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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  Process
    Plate name: WashBuffer
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: TransferWashBuffer
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
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    Task BuiltIn::Wait For
      Waitfor: signal_plate_cleared_1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task Bravo::SubProcess
      Sub-process name: AdjustBeadVolume1
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    Task Bravo::SubProcess
      Sub-process name: AdjustBeadVolume2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferEluate
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  Process
    Plate name: ElutionBufferReservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferElutionBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: WashBufferReservoir
  Process
    Plate name: WashBufferReservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferWashBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: BeadSource
  Pipette_Process Name=AddElutionBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mMixVolume = elutionVolume * 0.8;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1.3;
        var mMixDispDistance = 1.3;
        var mBlowoutHeight = 5;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Task_Disabled: 1
      Estimated time: 2
      Location, plate: FragSepB
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepB
      Aspirate distance: 2
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Task_Disabled: 1
      Estimated time: 2
      Location, plate: FragSepB
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.skip();
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AdjustBeadVolume1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: FragSepA
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,1]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (extraResuspVolume/2 - beadResuspVolume);
        var mAspDistance = 0.8;
        var mDispDistance = 30;
        var mBlowoutHeight = 35;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AdjustBeadVolume2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: FragSepB
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,1]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (extraResuspVolume/2 - beadResuspVolume);
        var mAspDistance = 0.8;
        var mDispDistance = 30;
        var mBlowoutHeight = 35;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepB
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadDistribution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = 2 * beadVolume;	// Volume to dispense per well
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 5;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((MAX_TIP_VOLUME - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: Tips1
      Well selection: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: task.Volume = 10;
      Location, plate: BeadSource
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      TaskScript:
        var mixVolume = 0.7 * (beadVolume * columns);
        if(mixVolume > MAX_MIX_VOLUME) {
        	mixVolume = MAX_MIX_VOLUME;
        }
        task.Volume = mixVolume;
      Location, plate: BeadSource
      Liquid class: j_normal_mixing
      Mix cycles: 8
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        if(columnsDone < 1) task.skip();
        mixVolume = 0.7 * volumeLeft;
        task.Volume = (mixVolume > MAX_MIX_VOLUME)  ? MAX_MIX_VOLUME : mixVolume;
      Location, plate: BeadSource
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: BeadSource
      Volume: =tipVolume [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.6
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: FragSepA
      Volume: =aliquotVolume [10]
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -7;
        }
      Location, plate: BeadSource
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 8
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: Tips1
      Mark tips as used: 0
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Bind1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 30;
        var mIncubationTime = 10 * 60;
        var mTimerCycles = 3;
        var mMixVolume = 125;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: FragSepA
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepA
      Mode: On
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 80
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 482
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepA
      Mode: Off
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepA
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Bind2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 30;
        var mIncubationTime = 10 * 60;
        var mTimerCycles = 3;
        var mMixVolume = 150;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepB
      Mode: On
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 87
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 476
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepB
      Mode: Off
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Elute
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_mixing";
        var mPreAspVolume = 20;
        var mIncubationTime = 2 * 60;
        var mTimerCycles = 3;
        var mMixVolume = elutionVolume * 0.8;
        var mAspDistance = 0.8;
        var mDispDistance = 0.8;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4.5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.skip();
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: FragSepB
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Task_Disabled: 1
      Estimated time: 2
      Location, plate: FragSepB
      Mode: On
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 14
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepB
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 74
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Task_Disabled: 1
      Estimated time: 2
      Location, plate: FragSepB
      Mode: Off
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: FragSepA
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = beadVolume * 2 + 5;
        var mAspDistance = 0.5;
        var mDispDistance = 20;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / (maxVolume - mPreAspVolume));
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: FragSepA
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = beadWashVolume + 10;
        var mAspDistance = 0.5;
        var mDispDistance = 20;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: FragSepB
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_peg_handling";
        var mPreAspVolume = 20;
        var mTransferVolume = beadResuspVolume * 2 + sampleVolume + precipVolumeA + precipVolumeB + 10;
        var mAspDistance = 0.5;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass =  "j_slow_large_vol";;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: FragSepB
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = bindWashVolume + 10;
        var mAspDistance = 0.5;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepB
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = washDryTime;
      Location to use, plate: FragSepB
      Location to use, location: 7
    Task BuiltIn::Group End
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  Pipette_Process Name=MakeFragSepA
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_peg_handling";
        var mPreAspVolume = 20;
        var mTransferVolume = precipVolumeA;
        var mAspDistance = 0.5;
        var mDispDistance = 2;
        var mMixVolume = 80;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = (beadResuspVolume * 0.8 < 150) ? beadResuspVolume * 0.8 : 150;
        task.Liquidclass = "j_slow_mixing";
        task.Distancefromwellbottom = 0.75;
        task.Mixcycles = 10;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 26
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: PrecipBufferA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepA
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=MakeFragSepB
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_peg_handling";
        var mPreAspVolume = 20;
        var mTransferVolume = precipVolumeB;
        var mAspDistance = 0.5;
        var mDispDistance = 2;
        var mMixVolume = 80;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 2;
        var mMixDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepB
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = (beadResuspVolume * 0.8 < 150) ? beadResuspVolume * 0.8 : 150;
        task.Liquidclass = "j_slow_mixing";
        task.Distancefromwellbottom = 0.75;
        task.Mixcycles = 10;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: PrecipBufferB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepB
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=ResuspendBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = extraResuspVolume;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 0.8;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepA
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 55
      TaskScript:
        var mTemp = mTransferVolume * 0.8;
        if(mTemp > (maxVolume * 0.8)) {
           mTemp = maxVolume * 0.8;
        }
        task.Volume = mTemp;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepA
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: FragSepA
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: Waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: Waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: Waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=SplitBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = extraResuspVolume/2;
        var mAspDistance = 0.3;
        var mDispDistance = 0.8;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEluate
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 0.5;
        var mDispDistance = 1;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = 15;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: FragSepB
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 25
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FinalPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: FragSepB
      Perform tip touch: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferElutionBuffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_fast_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 1000;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferFragSepA
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: FragSepA
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_peg_handling";
        var mPreAspVolume = 20;
        var mTransferVolume = beadResuspVolume + precipVolumeA + sampleVolume + 10;
        var mAspDistance = 0.5;
        var mDispDistance = 5;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = sampleVolume + 5;
        var mAspDistance = 0.4;
        var mDispDistance = 2;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
          task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferWashBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 800;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=7 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: WashBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: WashBufferReservoir
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: WashBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: WashBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = beadWashVolume;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBuffer
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: ElutionBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 49
      TaskScript:
        var mTemp = mTransferVolume * 0.8;
        if(mTemp > (maxVolume * 0.8)) {
           mTemp = maxVolume * 0.8;
        }
        task.Volume = mTemp;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepA
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepA
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = MAX_TIP_VOLUME;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = bindWashVolume;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 2;
        var mMixDispDistance = 7;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: WashBuffer
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: WashBuffer
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FragSepB
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FragSepB
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=5 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: Tips1
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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