<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Full_System_Magnet_red6.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
var numberOfColumns = parseInt(global.formColumns);
var roomTemp = 22;
var headMode = &quot;1,3,1,&quot; + numberOfColumns;
var preAspVol = 5;
var preAspDist = 30;
var mixCycles = 5;
//Set simulation on/off
var simulationToggle = parseInt(global.simulationToggle);
//Skip timers Yes/No
var timerSkip = parseInt(global.timerSkip);' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(simulationToggle == true) {
task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='SamplePlate2' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer6uLtoNewPlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer6uLtoNewPlate' />
					</Parameters>
				</Task>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer6uLtoNewPlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer6uLtoNewPlate' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Recover remaining samples at MiniHub' />
						<Parameter Category='' Name='Body' Value='Recover the remaining 5&apos; and 3&apos; adapter-ligated RNA at the MiniHub.

This plate may be stored at -80 degrees Celsius.

The robot continues with the preparation for Reverse Transcription.

You may close this window.

' />
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						<Parameter Category='' Name='Pause process' Value='0' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTprimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTprimer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(simulationToggle == true) {
task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='denaturation' />
						<Parameter Category='' Name='Spawn as subroutine' Value='1' />
						<Parameter Category='' Name='Spawn parameter' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTmix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTmix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(simulationToggle == true) {
task.skip();
}
' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='cDNAsynth' />
						<Parameter Category='' Name='Spawn as subroutine' Value='1' />
						<Parameter Category='' Name='Spawn parameter' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Plate ready for amplification' />
						<Parameter Category='' Name='Body' Value='Protocol finished!

Sample plate on position 6 is ready for amplification.

Alternatively, if amplifying later, freeze the samples in -80 degrees Celcius.

Click to finish this protocol and shut down cooling on position 6.' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate2' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTprimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTprimer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTmix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTmix' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='MasterMixPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer6uLtoNewPlate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer6uLtoNewPlate' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='NewTips2' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips1' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTprimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTprimer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='NewTips3' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTprimer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTprimer' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTmix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTmix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips2' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AddRTmix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AddRTmix' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='NewTips3' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='Biometra TRobot::Run a program' >
					<Devices >
						<Device Device_Name='Biometra TRobot - 1' Location_Name='Load Port' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(timerSkip == true) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Block Type' Value='96' />
						<Parameter Category='' Name='Program' Value='4,1,srna-de ' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::CentrifugeAuto' >
					<Devices >
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 1' />
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Max spin force' Value='251.5' />
						<Parameter Category='' Name='Acceleration' Value='80' />
						<Parameter Category='' Name='Braking' Value='80' />
						<Parameter Category='' Name='Timer mode' Value='Total time' />
						<Parameter Category='' Name='Time to spin' Value='5' />
						<Parameter Category='' Name='Counterweight mode' Value='Fixed counterweight' />
						<Parameter Category='' Name='Counterweight' Value='' />
					</Parameters>
					<CustomData >
						<Parameter Name='Spin task id' Value='875205732' />
						<Parameter Name='Spin task Type' Value='1' />
					</CustomData>
				</Task>
				<Task Name='Nexus XPeel::Peel' >
					<Devices >
						<Device Device_Name='Nexus XPeel - 1' Location_Name='Location' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Begin location speed' Value='Default slow' />
						<Parameter Category='' Name='Adhere time' Value='2.5 Seconds' />
						<Parameter Category='' Name='Ignore seal not removed error.' Value='0' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='denaturation' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='Biometra TRobot::Run a program' >
					<Devices >
						<Device Device_Name='Biometra TRobot - 1' Location_Name='Load Port' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(timerSkip == true) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Block Type' Value='96' />
						<Parameter Category='' Name='Program' Value='4,3,srna-rt ' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::CentrifugeAuto' >
					<Devices >
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 1' />
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Max spin force' Value='251.5' />
						<Parameter Category='' Name='Acceleration' Value='80' />
						<Parameter Category='' Name='Braking' Value='80' />
						<Parameter Category='' Name='Timer mode' Value='Total time' />
						<Parameter Category='' Name='Time to spin' Value='5' />
						<Parameter Category='' Name='Counterweight mode' Value='Fixed counterweight' />
						<Parameter Category='' Name='Counterweight' Value='' />
					</Parameters>
					<CustomData >
						<Parameter Name='Spin task id' Value='875354572l' />
						<Parameter Name='Spin task Type' Value='1' />
					</CustomData>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cDNAsynth' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='AddRTmix' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var headMode = &quot;1,3,1,&quot; + numberOfColumns;
var aspVolume = 5.5;
var tipSelection = [[1,13-numberOfColumns]];
var wellSelection = [[1,1]];
var preAspDist = 30;
var aspDist = 0.5;
var dispDist = 0.75;
var blowOutDist = 6;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=numberOfColumns' Value='numberOfColumns' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='tipColumn' />
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='dispColumn' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips3' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = preAspDist;
task.Volume = preAspVol;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MasterMixPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = aspDist;
task.Volume = aspVolume;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MasterMixPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = dispDist;
task.Wellselection = [[1,dispColumn]];
task.Volume = aspVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Aspiratedistance = aspDist;
task.Dispensedistance = 4;
task.Wellselection = [[1,dispColumn]];
task.Volume = aspVolume + 3;
task.Mixcycles = mixCycles;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = blowOutDist;
task.Wellselection = [[1,dispColumn]];
task.Volume = preAspVol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' TaskParameterScript='=0.75-blowOutDist' Value='0.75-blowOutDist' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='if(numberOfColumns === 12) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = wellSelection;
if(numberOfColumns === 12) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips3' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = wellSelection;
if(numberOfColumns === 12) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='AddRTprimer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var headMode = &quot;1,3,1,&quot; + numberOfColumns;
var aspVolume = 1;
var tipSelection = [[1,13-numberOfColumns]];
var wellSelection = [[1,1]];
var preAspDist = 30;
var aspDist = 0.5;
var dispDist = 0.75;
var blowOutDist = 6;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=numberOfColumns' Value='numberOfColumns' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='tipColumn' />
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='dispColumn' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = preAspDist;
task.Volume = preAspVol;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MasterMixPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = aspDist;
task.Volume = aspVolume;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MasterMixPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = dispDist;
task.Wellselection = [[1,dispColumn]];
task.Volume = aspVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Aspiratedistance = aspDist;
task.Dispensedistance = 3;
task.Wellselection = [[1,dispColumn]];
task.Volume = aspVolume + 3;
task.Mixcycles = mixCycles;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = blowOutDist;
task.Wellselection = [[1,dispColumn]];
task.Volume = preAspVol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' TaskParameterScript='=0.75-blowOutDist' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='if(numberOfColumns === 12) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = wellSelection;
if(numberOfColumns === 12) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = wellSelection;
if(numberOfColumns === 12) {
task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Transfer6uLtoNewPlate' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var headMode = &quot;1,3,1,&quot; + numberOfColumns;
var aspVolume = 6.6;
var tipSelection = [[1,13-numberOfColumns]];
var wellSelection = [[1,1]];
var preAspDist = 30;
var aspDist = 0.5;
var dispDist = 0.75;
var blowOutDist = 7;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;
' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = tipSelection;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = preAspDist;
task.Wellselection = wellSelection;
task.Volume = preAspVol;
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = aspDist;
task.Wellselection = wellSelection;
task.Volume = aspVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = dispDist;
task.Wellselection = wellSelection;
task.Volume = aspVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Distancefromwellbottom = blowOutDist;
task.Wellselection = wellSelection;
task.Volume = preAspVol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate2' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' TaskParameterScript='=0.75-blowOutDist' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = tipSelection;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='NewTips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
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</Velocity11>