<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Bravo_RoundMagnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='open( &apos;C:/VWorks Workspace/Protocol Files/facility/transfer/transfer_lib.js&apos;);

' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2012-2013

var global = GetGlobalObject();
var filePath = global.formFile;' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(filePath) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Specify file' />
						<Parameter Category='' Name='Body' Value='The protocol was not started via the form. Specify the full path to the CSV file to use:' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' TaskParameterScript='=filePath;' Value='filePath' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var tm = new TransferManager(&quot;adapter&quot;);
tm.openTransferFile(filePath);

var MAX_VOLUME = 170;

var destinationPlate = &quot;96 Eppendorf Twin.tec PCR&quot;;
var altPlates = { &quot;96 Thermo-Fast Skirted PCR&quot;:1 };
if(global.formPlate in altPlates) {
   destinationPlate = global.formPlate;
}

if(global.formLog) {
	print(&quot;Input file: &quot; + filePath);
	print(&quot;TransferManager errorstate: &quot; + tm.errorState);
	print(&quot;TransferManager size: &quot; + tm.getSize());
	for(var i=0,n=tm.numberOfPlates();i&lt;n;i++) {
		var t = tm.transfers[i];
		for(var j=0,m=t.length;j&lt;m;j++) {
			print(t[j]);
		}
	}
}

global.transfersDone = 0;
global.totalTransfers = tm.getSize();
' />
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='// Show an error message if hte selected file could
// not be interpreted successfully:
if(tm.errorState &amp;&amp; tm.getSize() &amp;&amp; typeof filePath !== &quot;undefined&quot;) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Error' />
						<Parameter Category='' Name='Body' Value='The csv file could not be parsed successfully, abort and check format.' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(tm.volumeLimitedTo(MAX_VOLUME)) {
	task.skip();
} else {
	task.Body = &quot;The transfer instruction file contains volumes above what the tip can hold (&quot; + MAX_VOLUME + &quot; uL). Please abort the run and check the file.&quot;;
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Volume warning' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='plate.labware = destinationPlate;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='destination' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='newTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transfer' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='usedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transfer' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='2' SubsetType='4' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var index = 0;
var hasTransfer = tm.getSize() &gt; 0;' />
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=tm.getSize();' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='if(hasTransfer) {
   tm.increment();
}' />
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='if(tm.useNewTip() &amp;&amp; hasTransfer) {
	task.Wellselection = [tm.takeTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;4&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
   task.skip();
}
var vol = tm.getVolume();
task.Volume = (vol &lt;= MAX_VOLUME) ? vol : MAX_VOLUME;
task.Wellselection = [tm.getWellSelectionTransferSource()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='source' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(!hasTransfer) {
   task.skip();
}
var vol = tm.getVolume();
task.Volume = (vol &lt;= MAX_VOLUME) ? vol : MAX_VOLUME;
task.Wellselection = [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.75' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
if(!hasTransfer) {
   task.skip();
	global.transfersDone++;
}
task.Wellselection = [tm.getWellSelectionTransferDestination()];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='destination' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-9' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='if(tm.returnTip() &amp;&amp; hasTransfer) {
	task.Wellselection = [tm.putTip()];
} else {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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					<TaskScript Name='TaskScript' Value='index++;' />
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var email = global.formEmail;
var protocolName = &quot;Adapter aliquotation&quot;;

if(typeof email === &quot;string&quot; &amp;&amp; email.match(/[\w\d\.]+@[\w\d\.]+/)) {
	(function() {
		var msg = {
			body: protocolName+&quot; completed on &quot;+new Date().toLocaleString(),
			sub: protocolName+&quot; has completed&quot;,
			to: email
		};
		// Quote-ilize:
		for(var i in msg) msg[i] = msg[i].replace(/.+/, &quot;\&quot;$&amp;\&quot;&quot;);
		var script = &quot;C:\\VWorks Workspace\\bravo_mailer.bat&quot;
		run([script, msg.to, msg.sub, msg.body].join(&quot; &quot;));
	})();
}

global.formEmail = &quot;&quot;;' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='finish' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>