<?xml version="1.0" encoding="utf-16"?>
<velocity11 file="Form_Data" version="1.0">
  <Property name="UseGlobalContext" value="1" />
  <Property name="RestoreDefaultsOnLoad" value="1" />
  <Property name="ShowLogInFullScreen" value="1" />
  <Property name="FormBackgroundColor" value="-1" />
  <Object type="ToolboxLibrary.MainContainer, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="mainContainer1" children="Controls">
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic17" children="Controls">
      <Property name="Text">Check this box to proceed with first source plate without prompting.</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Check this box to proceed with first source plate without prompting." ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Check this box to proceed with first source plate without prompting." ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic16" children="Controls">
      <Property name="Text">Don't pause for first plate:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Don't pause for first plate:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Don't pause for first plate:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox3" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formProceedWithSource1" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="1" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic15" children="Controls">
      <Property name="Text">Buffer plate:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Buffer plate:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Buffer plate:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist2" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formDiluentPlate" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Reservoir;Nunc Deepwell" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="Reservoir" ValueToDisplay="" Hide_if="Const(0)" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic14" children="Controls">
      <Property name="Text">When using a Nunc plate: Put buffer in A1 and calculate that volume is sufficient for all dilutions.</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="When using a Nunc plate: Put buffer in A1 and calculate that volume is sufficient for all dilutions." ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="When using a Nunc plate: Put buffer in A1 and calculate that volume is sufficient for all dilutions." ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleTextBox, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleTextBox1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formEmail" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic13" children="Controls">
      <Property name="Text">Email this address when finished:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Email this address when finished:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Email this address when finished:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic12" children="Controls">
      <Property name="Text">of</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="of" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="of" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic11" children="Controls">
      <Property name="Text">Transfers done:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Transfers done:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Transfers done:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic10" children="Controls">
      <Property name="Text">0</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="totalTransfers" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The default value of the Javascript variable" Type="1" Value="0" ValueToDisplay="" Hide_if="Variable(JavaScript variable) == Const(&quot;&quot;)" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic9" children="Controls">
      <Property name="Text">0</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="transfersDone" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The default value of the Javascript variable" Type="1" Value="0" ValueToDisplay="" Hide_if="Variable(JavaScript variable) == Const(&quot;&quot;)" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic8" children="Controls">
      <Property name="Text">Dest. plate:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Dest. plate:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Dest. plate:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic7" children="Controls">
      <Property name="Text">Source plate:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Source plate:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Source plate:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDropdown, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDropdown2" children="Controls">
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      <Property name="Text">Eppendorf twin.tec 96</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formDestinationPlate" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Eppendorf twin.tec 96;Thermo-Fast skirted 96 (AB-0800);ABgene TF LP 96 (AB-1300);Nunc Deepwell" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="Eppendorf twin.tec 96" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox2" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formIgnoreBarcodes" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Read only" Description="If checked, the operator may never alter the value of this field" Type="0" Value="1" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic6" children="Controls">
      <Property name="Text">Ignore barcodes:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Ignore barcodes:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Ignore barcodes:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formLog" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic5" children="Controls">
      <Property name="Text">Print transfers and barcodes to log:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Print transfers and barcodes to log:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Print transfers and barcodes to log:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDropdown, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDropdown1" children="Controls">
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      <Property name="Text">Eppendorf twin.tec 96</Property>
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formSourcePlate" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Eppendorf twin.tec 96;Thermo-Fast skirted 96 (AB-0800);ABgene TF LP 96 (AB-1300)" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="Eppendorf twin.tec 96" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic4" children="Controls">
      <Property name="Text">Joel Gruselius (2015) National Genomics Infrastructure | SciLifeLab</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Joel Gruselius (2015) National Genomics Infrastructure | SciLifeLab" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Joel Gruselius (2015) National Genomics Infrastructure | SciLifeLab" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.PauseResume, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="pauseResume1" children="Controls">
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      <Property name="Text"> PAUSE</Property>
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" PAUSE" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton1" children="Controls">
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      <Property name="Text"> START</Property>
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      <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="// Load the correct protocol depending on what the user&#xA;// selected in the form:&#xA;var path = &quot;C:/VWorks Workspace/Protocol files/facility/transfer/&quot;;&#xA;var fileMap = {&#xA;	&quot;Aliquotation&quot;: &quot;transfer_hal.pro&quot;,&#xA;	&quot;Dilution&quot;: &quot;transfer_dilution_hal.pro&quot;,&#xA;	&quot;Setup Workset/Plate (LIMS)&quot;: &quot;transfer_dilution_hal.pro&quot;,&#xA;	&quot;Library Normalization (LIMS)&quot;: &quot;transfer_dilution_hal.pro&quot;,&#xA;	&quot;Adapter&quot;: &quot;transfer_adapter_hal.pro&quot;&#xA;};&#xA;var file = path + fileMap[formMode];&#xA;runset.clear();&#xA;runset.appendProtocolFileToRunset(file, 1, &quot;&quot;, &quot;transfer_form_hal.VWForm&quot;);&#xA;&#xA;run(&quot;C:/VWorks Workspace/Protocol Files/facility/resources/clear_inventory.bat&quot;, true);" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" START" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleFileBrowsing, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleFileBrowsing1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formFile" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic3" children="Controls">
      <Property name="Text">File:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="File:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="File:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formMode" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Aliquotation;Dilution;Setup Workset/Plate (LIMS);Library Normalization (LIMS);Adapter;" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="Aliquotation" ValueToDisplay="" Hide_if="Const(0)" />
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      <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="Aliquotation;Dilution;Setup Workset/Plate (LIMS);Library Normalization (LIMS);Adapter;" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic2" children="Controls">
      <Property name="Text">Mode:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Mode:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Mode:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.3.1395, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic1" children="Controls">
      <Property name="Text">Transfer protocols</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Transfer protocols" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Transfer protocols" ValueToDisplay="" Hide_if="" />
    </Object>
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  </Object>
</velocity11>