<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='1' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Full_System_Magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011-2012, 2015, 2016

// Get the object representing the global namespace:
var global = GetGlobalObject();
if(global.runsetMode) global.updateRunset();

// For testing:
//open(&quot;C:/VWorks Workspace/Protocol Files/facility/truseq/ca_temp.js&quot;);
//if(settings) global.settings = settings;
//if(formColumns) global.formColumns = formColumns;
//if(dph) global.dph = dph;

// Protocol parameters:
var columns = global.formColumns;
var elutionVolume = global.settings.elutionVolume;
var sealFinalPlate = global.settings.sealFinalPlate;

var pelletTime = 60;
// Magnet incubation time, short:
var pelletTimeShort = 30;
// Headmode:
var headMode = &quot;1,2,1,&quot; + columns;
// Ambient temperature:
var roomTemp = 20;
// Max aspiration volume:
var maxAspVolume = 170;
// Max volume to use when mixing:
var maxMixVolume = 160;
// Temperature of finished sample plate:
var finalTemp = 6;
// Pre-aspiration volume:
var preAsp = 20;
// Transfer loop vars:
var stepVolume;
var aspRepeats;

// For displaying status:
global.statusString = &quot;Setting temperature...&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='task.Temperature = roomTemp;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='20' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='task.Temperature = roomTemp;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='20' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='global.statusString = &quot;CA elution started&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferEluate' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferEluate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='BeadPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferEluate' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='SpinDown' />
						<Parameter Category='' Name='Spawn as subroutine' Value='1' />
						<Parameter Category='' Name='Spawn parameter' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='FinalPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferEluate' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tipbox' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::CentrifugeAuto' >
					<Devices >
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 1' />
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Max spin force' Value='300' />
						<Parameter Category='' Name='Acceleration' Value='80' />
						<Parameter Category='' Name='Braking' Value='80' />
						<Parameter Category='' Name='Timer mode' Value='Total time' />
						<Parameter Category='' Name='Time to spin' Value='3' />
						<Parameter Category='' Name='Counterweight mode' Value='Fixed counterweight' />
						<Parameter Category='' Name='Counterweight' Value='' />
					</Parameters>
					<CustomData >
						<Parameter Name='Spin task id' Value='2612587681' />
						<Parameter Name='Spin task Type' Value='1' />
					</CustomData>
				</Task>
				<Task Name='Nexus XPeel::Peel' >
					<Devices >
						<Device Device_Name='Nexus XPeel - 1' Location_Name='Location' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(sealFinalPlate) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Begin location speed' Value='Default slow' />
						<Parameter Category='' Name='Adhere time' Value='2.5 Seconds' />
						<Parameter Category='' Name='Ignore seal not removed error.' Value='0' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SpinDown' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='TransferEluate' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = finalTemp;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=finalTemp;' Value='' />
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						<Parameter Category='' Name='Timeout' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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					<TaskScript Name='TaskScript' Value='global.statusString = &quot;Isolating eluate&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, 13 - columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tipbox' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='task.Reservationtime = pelletTime;' />
					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location to use, location' Value='7' />
						<Parameter Category='' Name='Reservation time' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = preAsp;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='40' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = elutionVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = elutionVolume + 3;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='FinalPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = preAsp;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South/North' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, 13 - columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tipbox' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(finalTemp === roomTemp) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='Finish' />
						<Parameter Category='' Name='Body' Value='Click Continue to turn off cooling and finish the run.' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='1' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='global.statusString = &quot;CA elution finished&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Cleanup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
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</Velocity11>