Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        // Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011-2012, 2015

        // Get the object representing the global namespace:
        var global = GetGlobalObject();

        /*
        // For testing:
        global = {};
        open("C:/VWorks Workspace/Protocol Files/facility/truseq/ca_temp.js");
        if(settings) global.settings = settings;
        if(formColumns) global.formColumns = formColumns;
        if(dph) global.dph = dph;
        */

        if(global.runsetMode) global.updateRunset();
        var testMode = (typeof global.testMode !== "undefined" && global.testMode);

        // Protocol parameters:
        var columns = global.formColumns;
        var transferSample = global.settings.transferSample;
        var beadVolume = global.settings.beadVolume;
        var beadResuspVolume = global.settings.beadResuspVolume * !transferSample;
        var sampleVolume = global.settings.sampleVolume;
        var precipVolume = global.settings.precipVolume;
        var bindTime = global.settings.bindTime * !testMode;
        var elutionVolume = global.settings.elutionVolume;
        var dilutionVolume = global.settings.dilutionVolume;

        // Dynamic pippetting:
        var dph = global.dph;

        // If bind time was specified in minutes:
        if(bindTime % 60 !== 0 || bindTime < 60) bindTime *= 60;
        bindTime *= !testMode;
        // Not changed atm:
        var rinseVolume = 70;
        var bindMixInterval = 2 * 60;
        // Bind mix vars:
        var numBindMixes;
        var ethanolDryTime = 10 * 60 * !testMode;
        var dnaWashVolume = 300;
        var dnaWashRepeats = 1;
        // Number of mix cycles for washing beads/DNA (per washing):
        var dnaWashMixes = 5;
        var elutionTime = 2 * 60 * !testMode;
        // Magnet incubation time for pelleting fragsep larger volumes = longer:
        var pelletTimeLong = 120 * ((((precipVolume+sampleVolume+beadResuspVolume)/160) + 1) / 2);
        // Magnet incubation time:
        var pelletTime = 60;
        // Magnet incubation time, short:
        var pelletTimeShort = 30;
        // Headmode:
        var headMode = "1,2,1," + columns;
        // Ambient temperature:
        var roomTemp = 20;
        // Max aspiration volume:
        var maxAspVolume = 170;
        // Max volume to use when mixing:
        var maxMixVolume = 160;
        // Temperature of finished sample plate:
        var finalTemp = 20;
        // Pre-aspiration volume:
        var preAsp = 20;
        // Transfer loop vars:
        var stepVolume;
        var aspRepeats;

        // For displaying status:
        global.statusString = "Setting temperature...";
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = roomTemp;
      Location: 4
      Temperature: 20
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = roomTemp;
      Location: 6
      Temperature: 20
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "CA purification started";
Main_Processes
  Process
    Plate name: Tipbox
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: MakeFragSep
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: Bind
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips4
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: AddElutionBuffer
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: Elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips5
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: BeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: MakeFragSep
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: Bind
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: AddElutionBuffer
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: Elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      TaskScript: //if(!transferSample) task.skip();
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
      TaskScript: //if(!transferSample) task.skip();
    Task BuiltIn::Spawn Process
      Process to spawn: WashBufferPlate
  Process
    Plate name: PrecipBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: MakeFragSep
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: WashBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: WashBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: BeadResusp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips4
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: AddElutionBuffer
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips5
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips4
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: RinseTips5
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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  Process
    Plate name: Occupied
    Plate type: 96 Nunc Deep Well 1 mL
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=AddElutionBuffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Adding elution buffer";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        // To try to eliminate beads left in tips,
        // perform an extra large preasp:
        var extraPreAsp;
        if((elutionVolume + preAsp) > 130) {
           extraPreAsp = 180 - elutionVolume - preAsp;
           if(extraPreAsp < 0) {
              extraPreAsp = 0;
           }
        } else {
           extraPreAsp = 50;
        }
        task.Volume = preAsp + extraPreAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 50
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = elutionVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Volume = elutionVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadPlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript:
        var mixVolume = 0.7 * elutionVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 10
      Aspirate distance: 0.8
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadPlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadResusp
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(dilutionVolume > 0) {
        	task.Location_plate = "ElutionBufferPlate";
        } else if(!transferSample) {
        	task.Location_plate = "BeadPlate";
        }
        task.Volume = preAsp;
      Location, plate: SamplePlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 39
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript: if(!dilutionVolume) task.skip();
      Location, plate: ElutionBufferPlate
      Volume: =dilutionVolume;
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 1.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      TaskScript:
        if(!dilutionVolume) {
        	task.skip();
        } else if(!transferSample) {
        	task.Location_plate = "BeadPlate";
        }
        sampleVolume += dilutionVolume;
      Location, plate: SamplePlate
      Volume: =dilutionVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 43
      TaskScript:
        if(!transferSample) task.Location_plate = "BeadPlate";
        task.Volume = 0.7 * sampleVolume;
      Location, plate: SamplePlate
      Liquid class: j_normal_mixing
      Mix cycles: 15
      Aspirate distance: 0.8
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(!transferSample) task.skip();
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(sampleVolume, 0.5);
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(!transferSample) task.skip();
        task.Volume = sampleVolume;
      Location, plate: BeadPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 15
      TaskScript:
        // To get rid of any bubbles at bottom of well:
        var mixVolume = 0.7 * (precipVolume + sampleVolume + beadResuspVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_slow_mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadPlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 63
      TaskScript:
        var mixVolume = 0.7 * (precipVolume + sampleVolume + beadResuspVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: BeadPlate
      Liquid class: j_slow_mixing
      Mix cycles: 10
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadPlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript: task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 10
      Perform tip touch: 1
      Tip touch retract distance: -9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Bind
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Precipitating DNA";
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 30;
        var mIncubationTime = bindTime;
        var mTimerCycles = 5;
        var mMixVolume = (precipVolume < 150) ? precipVolume : 150;
        var mAspDistance = 1;
        var mDispDistance = 1;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadPlate
      Mode: On
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 116
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 451
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadPlate
      Mode: Off
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Elute
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Eluting";
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = false;
        var mReturnTips = false;
        var mLiquidClass = "j_extra_slow_mixing";
        // Volume left from last step:
        var mPreAspVolume = extraPreAsp;
        var mIncubationTime = elutionTime;
        var mTimerCycles = 3;
        var mMixVolume = elutionVolume*0.7;
        var mAspDistance = 0.8;
        var mDispDistance = 0.8;
        var mBlowoutHeight = 6;
        var mDoTipTouch = true;
        var mTouchRetract = -5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BeadPlate
      Location, location: 5
      Mode: On
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 39
      TaskScript:
        // Time n mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 73
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BeadPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BeadPlate
      Location, location: 5
      Mode: Off
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: Tipbox
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Isolating beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Preaspiration
        task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // To allow larger volumes of precipitation
        // buffer than the tip can handle in a single
        // aspiration:
        aspRepeats =Math.ceil((precipVolume + sampleVolume + beadResuspVolume + 5) / maxAspVolume);
        stepVolume = (precipVolume + sampleVolume + beadResuspVolume) / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: BeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Blowout volume: 20
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=MakeFragSep
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Making fragment separation mixture";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Preasp
        task.Volume = preAsp;
      Location, plate: PrecipBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // To allow larger volumes of precipitation
        // buffer than the tip can handle in a single
        // aspiration:

        aspRepeats = 1;
        stepVolume = precipVolume;
        if(stepVolume > maxAspVolume) {
           aspRepeats = Math.ceil(stepVolume / maxAspVolume);
           stepVolume = Math.round(stepVolume / aspRepeats);
        }
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 22
      TaskScript: task.Volume = stepVolume;
      Location, plate: PrecipBufferPlate
      Liquid class: j_peg_handling
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      TaskScript: task.Volume = stepVolume;
      Location, plate: BeadPlate
      Liquid class: j_peg_handling
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript: task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 10
      Perform tip touch: 1
      Tip touch retract distance: -8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        if(maxAspVolume - rinseVolume - 4 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 4;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        if(maxAspVolume - rinseVolume - 10 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 10;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips4
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        if(maxAspVolume - rinseVolume - 4 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 4;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        if(maxAspVolume - rinseVolume - 10 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 10;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips5
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript:
        task.skip();
        task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        if(maxAspVolume - rinseVolume - 4 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 4;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript:
        if(maxAspVolume - rinseVolume - 10 <= 0) task.skip();
        task.Volume = maxAspVolume - rinseVolume - 10;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Washing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dnaWashRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: WashBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        aspRepeats =Math.ceil((dnaWashVolume + preAsp + 5) / maxAspVolume);
        stepVolume = dnaWashVolume / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume= stepVolume;
      Location, plate: WashBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = stepVolume;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 42
      TaskScript:
        var mixVolume = 0.7 * dnaWashVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
        task.Mixcycles = dnaWashMixes;
      Location, plate: BeadPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 15
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: // Blowout
      Location, plate: BeadPlate
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: BeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: BeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        // Return tips so not to interfere with plate moving
        task.Wellselection = [[1,13 - columns]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=6 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript:
        // Allow ethanol to evaporate
        task.Reservationtime = ethanolDryTime;
      Location to use, plate: BeadPlate
      Location to use, location: 7
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: Cleanup
    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "CA binding and ethanol wash finished";
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