Velocity11 Protocol_Data 2.0
File_Info
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();
        var runsetMode = global.runsetMode;
        if(runsetMode) global.updateRunset();
        var columns = global.formColumns || 1;
        var headMode = "1,2,1," + columns;
        var beadVolume = global.settings.beadVolume || 90;
        var sampleVolume = global.settings.sampleVolume || 50;
        var washVolume = 200;
        var washes = 2;
        var elutionVolume = global.settings.elutionVolume || 25;

        var beadPlateSlot = ({
        	1: "Cassette4Slot1",
        	2: "Cassette4Slot2",
        	3: "Cassette4Slot5"
        })[global.settings.beadPlateToUse];

        var MAX_VOLUME = 175;
        var MAX_MIX_VOLUME = 160;
        var PRE_ASP = 5;
        var PRE_ASP_LARGE = 15;

        var testMode = (global.testMode) ? true : false;
        var bindTime = testMode ? 1 : 5 * 60;
        var elutionTime = testMode ? 1 : 2 * 60;
        var ethanolDryTime = testMode ? 1 : 5 * 60;
        var pelletTime = testMode ? 1 : 120;
        var pelletTimeShort = testMode ? 1 : 30;
        var pelletTimeLong = testMode ? 1 : 180;

        var doCentrifuge = true;
        var finalHold = global.settings.finalHold;
        var sealFinalPlate = global.settings.sealFinalPlate;

        var dph = global.dph;

        // For testing:
        print("beadVolume="+beadVolume+";sampleVolume="+sampleVolume+";elutionVolume="+elutionVolume);
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Location: 4
      Temperature: 20
      Wait: 0
      Timeout: 1
      Allow concurrent operation: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Location: 6
      Temperature: 20
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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Main_Processes
  Process
    Plate name: BindTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferBeads
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: bind
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
  Process
    Plate name: BeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: shakeBeads
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: BindPlate
    Task Bravo::SubProcess
      Sub-process name: transferBeads
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Spawn Process
      Process to spawn: Waste
  Process
    Plate name: BindPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.unloadFrom = [beadPlateSlot];
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferBeads
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: bind
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.loadIntoByLocation = [beadPlateSlot];
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Spawn Process
      Process to spawn: FinalPlate
  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
  Process
    Plate name: EthanolPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
    Task BuiltIn::Place Plate
      TaskScript: if(global.runsetMode) plate.labware = "96 Deep Well PP Sqr Well V Btm";
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Spawn Process
      TaskScript: // To prevent tips-on before moving
      Process to spawn: BindTips
    Task Bravo::SubProcess
      Sub-process name: rinseTips
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Wait For
      Waitfor: ELUTION_FINISHED
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: FinalPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Signal
      Waitfor: ELUTION_FINISHED
    Task BuiltIn::Spawn Process
      TaskScript: if(!doCentrifuge) task.skip();
      Process to spawn: CentrifugePlate
      Spawn as subroutine: 1
    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      TaskScript: if(doCentrifuge || !sealFinalPlate) task.skip();
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::User Message
      TaskScript: if(!finalHold) task.skip();
      Title: Confirm
      Body: Confirm to turn off cooling and finish protocol.
      Pause process: 1
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    Task Bravo::SubProcess
      Sub-process name: resetTemp
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: CentrifugePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 15
      Max spin force: 251.5
      Acceleration: 80
      Braking: 80
      Timer mode: Total time
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 782862828
        Spin task Type: 1
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 17
      TaskScript: if(sealFinalPlate) task.skip();
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: Occupied
    Plate type: 96 Nunc Deep Well 1 mL
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=bind
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_extra_slow_mixing",
        	preAspVolume: PRE_ASP_LARGE,
        	incubationTime: bindTime,
        	timerCycles: 3,
        	mixVolume: bindMixVolume,
        	aspDistance: 1.25,
        	dispDistance: 1.25,
        	blowoutHeight: 8,
        	doTipTouch: true,
        	touchRetract: -7
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
            task.Wellselection = m.tipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(m.preAspVolume == 0) {
           task.skip();
        }
        task.Volume = m.preAspVolume;
        task.Wellselection = m.wellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BindPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 64
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        m.timer = new Date().getTime();
        task.Volume = m.mixVolume;
        task.Liquidclass = m.liquidClass;
        task.Mixcycles = m.timerCycles;
        task.Aspiratedistance = m.aspDistance;
        if(m.aspDistance !== m.dispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = m.dispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 205
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        m.timer = (new Date().getTime() - m.timer) / 1000;
        m.mixCycles = Math.floor(m.timerCycles*m.incubationTime/(m.timer)) - m.timerCycles;
        print("timer=" + m.timer + ", mixCycles=" + m.mixCycles);
        if(m.mixCycles > 0) {
           task.Mixcycles = m.mixCycles;
        } else {
           task.skip();
        }

        task.Volume = m.mixVolume;
        task.Liquidclass = m.liquidClass;
        task.Aspiratedistance = m.aspDistance;
        if(m.aspDistance !== m.dispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = m.dispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(m.preAspVolume == 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Volume = m.preAspVolume;
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Liquidclass = "j_blowout";
        if(m.doTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = m.touchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(m.returnTips) {
            task.Wellselection = m.tipSelection;
        } else {
            task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elute
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 17
      TaskScript: if(!finalHold) task.skip();
      Location: 4
      Temperature: 4
      Temperature Tolerance: 4
      Timeout: 10
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_medium_vol",
        	preAspVolume: PRE_ASP_LARGE,
        	transferVolume: elutionVolume+2,
        	aspDistance: 1,
        	dispDistance: 0.75,
        	blowoutHeight: 7,
        	doTipTouch: true,
        	touchRetract: -6
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: ElutionBufferPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: ElutionBufferPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_mixing",
        	preAspVolume: PRE_ASP,
        	incubationTime: elutionTime,
        	timerCycles: 5,
        	mixVolume: elutionVolume * 0.8,
        	aspDistance: 1.25,
        	dispDistance: 1.25,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Shake
      Location, plate: BindPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 14
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        m.timer = new Date().getTime();
        task.Volume = m.mixVolume;
        task.Liquidclass = m.liquidClass;
        task.Mixcycles = m.timerCycles;
        task.Aspiratedistance = m.aspDistance;
        if(m.aspDistance !== m.dispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = m.dispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 82
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        m.timer = (new Date().getTime() - m.timer) / 1000;
        m.mixCycles = Math.floor(m.timerCycles*m.incubationTime/(m.timer)) - m.timerCycles;
        print("timer=" + m.timer + ", mixCycles=" + m.mixCycles);
        if(m.mixCycles > 0) {
           task.Mixcycles = m.mixCycles;
        } else {
           task.skip();
        }

        task.Volume = m.mixVolume;
        task.Liquidclass = m.liquidClass;
        task.Aspiratedistance = m.aspDistance;
        if(m.aspDistance !== m.dispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = m.dispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume == 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Volume = m.preAspVolume;
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Liquidclass = "j_blowout";
        if(m.doTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = m.touchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BindPlate
      Location to use, location: 7
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_small_vol",
        	preAspVolume: PRE_ASP,
        	transferVolume: elutionVolume,
        	aspDistance: 0.4,
        	dispDistance: 0.5,
        	blowoutHeight: 7,
        	doTipTouch: true,
        	touchRetract: -6,
        };
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: FinalPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(m.preAspVolume == 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=removeBindMix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_medium_vol",
        	preAspVolume: PRE_ASP_LARGE,
        	transferVolume: sampleVolume + beadVolume + 10,
        	aspDistance: 0.75,
        	dispDistance: 30,
        	blowoutHeight: 30,
        	doTipTouch: true,
        	touchRetract: 0
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(m.preAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(m.preAspVolume == 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=resetTemp
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      Location to use, plate: FinalPlate
      Location to use, location: 4
      Reservation time: 0
    Task Bravo::secondary::Set temperature - Position
      Location: 4
      Turn off temperature: 1
      Timeout: 5
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task Bravo::secondary::Set temperature - Position
      Location: 6
      Turn off temperature: 1
      Timeout: 5
      Allow concurrent operation: 1
    Task BuiltIn::Group End
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  Pipette_Process Name=rinseTips
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_normal_medium_vol",
        	preAspVolume: 10,
        	transferVolume: MAX_VOLUME,
        	aspDistance: 1,
        	dispDistance: 30,
        	doTipTouch: true,
        	touchRetract: 5
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume;
        task.Preaspiratevolume = m.preAspVolume;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: ElutionBufferPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Distancefromwellbottom = m.dispDistance;
        task.Liquidclass = m.liquidClass;
        if(m.doTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = m.touchRetract;
            task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=shakeBeads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Shake
      Estimated time: 11
      Location, plate: BeadPlate
      Mode: Timed
      RPM: 1000
      Direction: NWSE
      Time for operation in Timed mode: 10
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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
  Pipette_Process Name=transferBeads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var m = {
        	headMode: headMode,
        	wellSelection: [[1,1]],
        	tipSelection: [[1,13-columns]],
        	getTips: true,
        	returnTips: true,
        	liquidClass: "j_slow_large_vol",
        	preAspVolume: 15,
        	transferVolume: beadVolume,
        	aspDistance: 1,
        	dispDistance: 1,
        	mixVolume: (0.8 * beadVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * beadVolume,
        	mixLiquidClass: "j_normal_mixing",
        	mixCycles: 10,
        	mixAspDistance: 1,
        	mixDispDistance: 5,
        	blowoutHeight: 5,
        	doTipTouch: true,
        	touchRetract: -4
        };
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = m.headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(m.getTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(m.preAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 37
      TaskScript:
        if(m.mixVolume > MAX_VOLUME) {
           m.mixVolume = MAX_VOLUME * 0.8;
        }
        task.Volume = m.mixVolume;
        task.Mixcycles = m.mixCycles;
        task.Liquidclass = m.mixLiquidClass;
        task.Aspiratedistance = m.mixAspDistance;
        if(m.mixAspDistance != m.mixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = m.mixDispDistance;
        }
        task.Wellselection = m.wellSelection;
      Location, plate: BeadPlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(m.preAspVolume == 0 && !m.doTipTouch) {
           task.skip();
        }
        task.Wellselection = m.wellSelection;
        task.Volume = m.preAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = m.blowoutHeight;
        task.Performtiptouch = m.doTipTouch;
        if(m.doTipTouch) {
           task.Tiptouchretractdistance = m.touchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: m.numberSteps = Math.ceil(m.transferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =m.numberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.aspDistance;
      Location, plate: BeadPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = m.wellSelection;
        task.Volume = m.transferVolume / m.numberSteps;
        task.Liquidclass = m.liquidClass;
        task.Distancefromwellbottom = m.dispDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(m.returnTips) {
           task.Wellselection = m.tipSelection;
        } else {
           task.skip();
        }
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var bindMixVolume = 0.8 * (beadVolume + sampleVolume);
        bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      TaskScript:
        task.Preaspiratevolume = PRE_ASP_LARGE;
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.5;
        task.Dynamictipextension = dph(sampleVolume, 0.5);
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: BindPlate
      Volume: =sampleVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 23
      Location, plate: BindPlate
      Volume: =bindMixVolume;
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = PRE_ASP_LARGE;
      Location, plate: BindPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =washes; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: EthanolPlate
      Volume: =PRE_ASP;
      Liquid class: j_normal_large_vol
      Distance from well bottom: 45
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(washVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = washVolume / steps;
      Location, plate: EthanolPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = washVolume / steps;
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript: task.Volume = (washVolume * 0.8 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : washVolume * 0.8;
      Location, plate: BindPlate
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript: steps = Math.ceil((washVolume + 10) / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = (washVolume + 10) / steps;
      Location, plate: BindPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = (washVolume + 10) / steps;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 25
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: Waste
      Volume: =PRE_ASP;
      Liquid class: j_blowout
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: BindTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = ethanolDryTime;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
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
