Velocity11 Protocol_Data 2.0
File_Info
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::User Message
      TaskScript:
        var user_entry = GetGlobalObject().formColumns;
        if(typeof user_entry !== "undefined") {
        	task.skip();
        	print("Using the defined form value for columns (" + user_entry + ")");
        }
      Title: User entry
      Body: Enter the number of columns of samples to process (1-12):
      Pause process: 1
      User data entry into variable: 1
      Variable name: user_entry
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    Task BuiltIn::JavaScript
      TaskScript:
        // Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011-2012

        var global = GetGlobalObject();
        // General vars
        var time_mod = 1/100;
        // Ambient temperature (deg C):
        var temp_rt = 20;
        // Number of columns of samples to process:
        var n_columns = parseInt(user_entry);
        // Pipette head operation mode:
        var head_mode = "1,2,1," + n_columns;
        // Air aspiration volumes (uL):
        var pre_asp_large = 20;
        var pre_asp_medium = 15;
        var pre_asp_small = 10;
        // Volume to rinse tips with:
        var vol_rinse = 80;

        // mRNA purification vars
        // Volume of starting RNA sample:
        var vol_sample = 50;
        // Volume of poly-T beads:
        var vol_beads = 50;
        // Volume of wash buffer (per wash):
        var vol_wash = 200;
        // Volume of elution buffer:
        var vol_elute = 50;
        // Volume of binding buffer:
        var vol_bind = 50;
        // Volume of fragmentation/prime mix:
        var vol_frag = 19.5;
        // Volume sample to use for cDNA synthesis:
        var vol_sample2 = 17;
        // Volume of 1st strand cDNA synthesis mix:
        var vol_synth1 = 8;
        // Volume of 2nd strand cDNA synthesis mix:
        var vol_synth2 = 25;
        // Bind incubation time (sec):
        var time_bind = 5 * 60 * time_mod;
        // Normal bead pellet time (sec):
        var time_pellet = 2 * 60 * time_mod;
        // Short bead pellet time (sec):
        var time_pellet_short = 0.5 * 60 * time_mod;
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = temp_rt;
      Location: 4
      Temperature: =temp_rt;
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = temp_rt;
      Location: 6
      Temperature: =temp_rt;
      Timeout: 1
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Main_Processes
  Process
    Plate name: plate_sample
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      TaskScript: // Plate containing RNA starting material
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_sample_cleared
  Process
    Plate name: plate_bind
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::Wait For
      Waitfor: signal_distrib_done1
    Task BuiltIn::Wait For
      Waitfor: signal_distrib_done2
    Task BuiltIn::User Message
      Estimated time: 28
      Title: Remove plates
      Body:
        Wait until the robot has stopped then remove the following plates:

           1st strand synthesis reagent plate (MiniHub cassette 2, shelf 2)
           2nd strand synthesis reagent plate (MiniHub cassette 2, shelf 1)

        Seal and keep on ice or in fridge until used.

        Place the Eppendorf plate containing RNA samples on position 8 of the Bravo deck and click 'Continue'.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_sample
    Task BuiltIn::Spawn Process
      Process to spawn: tips_bind
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Wait For
      Waitfor: signal_sample_cleared
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_denat
      Spawn as subroutine: 1
    Task BuiltIn::Signal
      Waitfor: signal_rinse1
    Task BuiltIn::Wait For
      Waitfor: signal_rinse1_done
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Task_Disabled: 1
      TaskScript: task.Incubationtime = time_bind;
      Incubation time: 0
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task BuiltIn::Signal
      Waitfor: signal_wash_plate1
    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Signal
      Waitfor: signal_elution_plate
    Task Bravo::SubProcess
      Sub-process name: AddElution
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate1
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_bind_cleared
  Process
    Plate name: plate_wash
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate containing wash buffer
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeWash
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Wait For
      Waitfor: signal_wash_plate1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Wait For
      Waitfor: signal_wash_plate2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: plate_elute
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate containing elution buffer
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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    Task BuiltIn::Wait For
      Waitfor: signal_elution_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: AddElution
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate1
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    Task BuiltIn::Wait For
      Waitfor: signal_bind_cleared
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_elute
      Spawn as subroutine: 1
    Task BuiltIn::Signal
      Waitfor: signal_rinse2
    Task BuiltIn::Wait For
      Waitfor: signal_rinse2_done
    Task BuiltIn::Signal
      Waitfor: signal_bind_plate
    Task Bravo::SubProcess
      Sub-process name: TransferEluate2
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: plate_rebind
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with binding buffer
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 4
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    Task BuiltIn::Wait For
      Waitfor: signal_bind_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferEluate2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript: task.Incubationtime = time_bind;
      Incubation time: 0
      Use relative timing: 0
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    Task BuiltIn::Signal
      Waitfor: signal_wash_plate2
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Signal
      Waitfor: signal_frag_plate
    Task Bravo::SubProcess
      Sub-process name: AddFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_frag_cleared
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_frag
      Spawn as subroutine: 1
    Task BuiltIn::Signal
      Waitfor: signal_rinse3
    Task BuiltIn::Wait For
      Waitfor: signal_rinse3_done
    Task BuiltIn::User Message
      Estimated time: 508
      Title: Return plate
      Body: Remove seal and place the Eppendorf plate containing the first strand synthesis reagents on position 4 then click Continue.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_synth1_b
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Task_Disabled: 1
      TaskScript: task.Incubationtime = time_bind;
      Incubation time: 0
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_rebind_cleared
  Process
    Plate name: plate_frag
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with elute, frag, prime mix
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 3
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    Task BuiltIn::Wait For
      Waitfor: signal_frag_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: AddFrag
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_frag_cleared
  Process
    Plate name: plate_synth1_a
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with 1st strand synthesis mix
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 2
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  Process
    Plate name: plate_synth1_b
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_rebind_cleared
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::User Message
      Estimated time: 104
      Title: Plate transfer
      Body: Remove the plate in position 5. Seal, transfer to a thermocycler and run the cDNA first strand synthesis program. Confirm this message and stay clear of robot when incubation has started.
      Pause process: 1
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    Task BuiltIn::Signal
      Waitfor: signal_rinse4
    Task BuiltIn::Wait For
      Waitfor: signal_rinse4_done
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_1st-strand
      Spawn as subroutine: 1
    Task BuiltIn::User Message
      Estimated time: 5197
      Title: Return plate
      Body: Remove seal and place the Eppendorf plate containing the second strand synthesis reagents on position 4 then click Continue.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_synth2_b
    Task Bravo::SubProcess
      Sub-process name: TransferSynth
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_synth1_cleared
  Process
    Plate name: plate_synth2_a
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with 2nd strand synthesis mix
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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  Process
    Plate name: plate_synth2_b
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferSynth
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    Task BuiltIn::Wait For
      Waitfor: signal_synth1_cleared
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_2nd-strand
      Spawn as subroutine: 1
  Process
    Plate name: plate_rinse
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      TaskScript: // Plate with water for rinsing tips
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
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    Task Bravo::SubProcess
      Sub-process name: RinseTips4
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: plate_waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      TaskScript: // Waste
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Spawn Process
      Process to spawn: plate_reagents
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Wait For
      Waitfor: signal_reagents_cleared
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
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    Task Bravo::SubProcess
      Sub-process name: RinseTips4
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  Process
    Plate name: plate_reagents
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
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    Task BuiltIn::Signal
      Waitfor: signal_reagents_cleared
  Process
    Plate name: tips_bind
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Tips to use for binding and 1st wash
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse1
    Task BuiltIn::Signal
      Waitfor: signal_rinse_plate
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task BuiltIn::Signal
      Waitfor: signal_rinse1_done
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: tips_elute
  Process
    Plate name: tips_elute
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Tips to use for eluting and 2nd wash
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AddElution
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate1
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse2
    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task BuiltIn::Signal
      Waitfor: signal_rinse2_done
    Task Bravo::SubProcess
      Sub-process name: TransferEluate2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: tips_frag
  Process
    Plate name: tips_frag
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Tips to use for preparing fragmentation and cDNA synthesis
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AddFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse3
    Task Bravo::SubProcess
      Sub-process name: RinseTips3
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    Task BuiltIn::Signal
      Waitfor: signal_rinse3_done
    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse4
    Task Bravo::SubProcess
      Sub-process name: RinseTips4
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    Task BuiltIn::Signal
      Waitfor: signal_rinse4_done
    Task Bravo::SubProcess
      Sub-process name: TransferSynth
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
  Process
    Plate name: tips_reagent
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: plate_wash
    Task Bravo::SubProcess
      Sub-process name: DistributeWash
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_rinse
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Wait For
      Waitfor: signal_reservoirs_cleared
    Task BuiltIn::Spawn Process
      Process to spawn: tips_used
    Task BuiltIn::Spawn Process
      Process to spawn: plate_elute
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_rebind
    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_frag
    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_synth1_a
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_synth2_a
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_bind
    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Signal
      Waitfor: signal_distrib_done1
  Process
    Plate name: tips_used
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Signal
      Waitfor: signal_distrib_done2
  Process
    Plate name: reservoir_wash
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: DistributeWash
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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  Process
    Plate name: reservoir_rinse
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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    Task BuiltIn::Signal
      Waitfor: signal_reservoirs_cleared
  Process
    Plate name: centrifuge_plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1838293
        Spin task Type: 1
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_denat
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 3794726
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 3,1,rna-den
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_frag
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 3833021l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 3,3,rna-frg
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_elute
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 3836456l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 3,2,rna-elu
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_1st-strand
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 3839691l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 3,4,rna-1st
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_2nd-strand
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 3844988l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 3,5,rna-2nd
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Pipette_Process Name=AddElution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_elute;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = 0.8 * vol_elute;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 20;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 72
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_bind
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AddFrag
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_frag;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = 0.8 * vol_frag;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 20;
        var mMixAspDistance = 0.55;
        var mMixDispDistance = 0.55;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6.5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_frag
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 18
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_rebind
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeBeads
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 1;
        var mNumberColumns = n_columns;
        var mGetTips = true;
        var mTipColumn = 6;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_beads;
        var mAspDistance = 0.8;
        var mDispDistance = 1;
        var mMixAspDistance = 1.8;
        var mMixDispDistance = 1.8;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 40
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        if(mTransferVolume * mNumberColumns > maxVolume) {
           task.Volume = maxVolume - 20;
        } else {
           task.Volume = mTransferVolume * mNumberColumns - 20;
        }
        task.Liquidclass = "j_normal_mixing";
        task.Distancefromwellbottom = mMixAspDistance;
        task.Mixcycles = 10;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript:
        if(mCurrentColumn == 1) {
        	task.skip();
        }
        task.Wellselection = [[1,mSourceColumn]];
        task.Liquidclass = "j_normal_mixing";
        task.Distancefromwellbottom = mMixAspDistance;
        task.Mixcycles = 3;
        var mMixVolume = mTransferVolume * (mNumberColumns - mCurrentColumn + 1) * 0.8;
        task.Volume = (mMixVolume > (maxVolume - 20)) ? (maxVolume - 20) : mMixVolume;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,13-mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeBind
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 3;
        var mNumberColumns = n_columns;
        var mGetTips = true;
        var mTipColumn = 2;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_bind;
        var mAspDistance = 0.8;
        var mDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,13-mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeElution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 2;
        var mNumberColumns = n_columns;
        var mGetTips = true;
        var mTipColumn = 1;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_elute;
        var mAspDistance = 0.8;
        var mDispDistance = 1;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,13-mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeFrag
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 4;
        var mNumberColumns = n_columns;
        var mGetTips = true;
        var mTipColumn = 3;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_frag;
        var mAspDistance = 0.5;
        var mDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_frag
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,13-mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeRinse
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_fast_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 800;
        var mAspDistance = 3;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -13;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: reservoir_rinse
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        // Extra transfer to waste to rinse tips
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: reservoir_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        // Extra transfer to waste to rinse tips
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = 25;
        task.Performtiptouch  = true;
        task.Tiptouchretractdistance = 5;
        task.Whichsidestousefortiptouch = "North";
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: reservoir_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeSynth1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 5;
        var mNumberColumns = n_columns;
        var mGetTips = true;
        var mTipColumn = 4;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_synth1;
        var mAspDistance = 0.3;
        var mDispDistance = 0.3;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_synth1_a
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_synth1_a
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,13-mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeSynth2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 6;
        var mNumberColumns = n_columns;
        var mGetTips = true;
        var mTipColumn = 5;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_synth2;
        var mAspDistance = 0.3;
        var mDispDistance = 0.5;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_reagents
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_synth2_a
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_synth2_a
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,13-mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeWash
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = vol_wash * 2.5;
        var mAspDistance = 2;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -13;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: reservoir_wash
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: reservoir_wash
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_beads + vol_sample + 5);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet;
      Location to use, plate: plate_bind
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_wash + 10);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet_short;
      Location to use, plate: plate_bind
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_elute + vol_bind + 5);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      Estimated time: 12
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet;
      Location to use, plate: plate_rebind
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_wash + 10);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet_short;
      Location to use, plate: plate_rebind
      Location to use, location: 7
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight =30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = maxVolume - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        task.Volume = maxVolume - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEluate1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = vol_elute + 10;
        var mAspDistance = 0.6;
        var mDispDistance = 2.8;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 38
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 21
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEluate2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_elute;
        var mAspDistance = 0.6;
        var mDispDistance = 2.8;
        var mMixVolume = 0.7 * (vol_elute + vol_bind);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 59
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 54
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = "j_normal_mixing";
        task.Aspiratedistance = 1;
        task.Wellselection = mWellSelection;
      Location, plate: plate_elute
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 33
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 19
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 54
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_rebind
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_elute + vol_bind);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 20
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_elute + vol_bind);
        task.Dynamictipretraction = 4 / (0.8 * (vol_elute + vol_bind));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferFrag
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_frag;
        var mAspDistance = 0.6;
        var mDispDistance = 2.8;
        var mMixVolume = 0.6 * (vol_synth1 + vol_frag);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 0.5;
        var mMixDispDistance = 2.8;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6.5;
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet;
      Location to use, plate: plate_rebind
      Location to use, location: 7
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 18
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_synth1_b
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 29
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_synth1_b
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_frag);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_synth1_b
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_frag);
        task.Dynamictipretraction = 4 / (0.8 * (vol_synth1 + vol_frag));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_synth1_b
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_synth1_b
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_sample;
        var mAspDistance = 0.6;
        var mDispDistance = 4;
        var mMixVolume = 0.7 * (vol_beads + vol_sample);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_sample
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 33
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_sample
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_bind
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSynth
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection =[[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_frag + vol_synth1;
        var mAspDistance = 0.6;
        var mDispDistance = 2.8;
        var mMixVolume = (vol_synth1 + vol_synth2);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_synth1_b
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 22
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_synth1_b
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_synth2_b
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 35
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_synth2_b
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_synth2_b
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 6
      Turn off temperature: 1
      Timeout: 1
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
  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 0;
        var mTransferVolume = vol_wash;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 0.7 * vol_wash;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 3;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 21
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_bind
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 0;
        var mTransferVolume = vol_wash;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 0.7 * vol_wash;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 3;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 21
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_rebind
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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
