Velocity11 Protocol_Data 2.0
File_Info
  AutoUnloadRacks: 1
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::User Message
      TaskScript:
        var user_entry = GetGlobalObject().formColumns;
        if(typeof user_entry !== "undefined") {
        	task.skip();
        	print("Using the defined form value for columns (" + user_entry + ")");
        }
      Title: User entry
      Body: Enter the number of columns of samples to process (1-12):
      Pause process: 1
      User data entry into variable: 1
      Variable name: user_entry
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    Task BuiltIn::JavaScript
      TaskScript:
        // Author: Joel Gruselius (joel.gruselius@scilifelab.se), SciLifeLab, 2011-2012

        var global = GetGlobalObject();
        // General vars
        var time_mod = 1;
        // Ambient temperature (deg C):
        var TEMP_RT = 20;
        // Number of columns of samples to process:
        var n_columns = parseInt(user_entry, 10);
        // Pipette head operation mode:
        var head_mode = "1,2,1," + n_columns;
        // Air aspiration volumes (uL):
        var PRE_ASP_LARGE = 20;
        var PRE_ASP_MEDIUM = 15;
        var PRE_ASP_SMALL = 10;
        // Volume to rinse tips with:
        var vol_rinse = 80;
        // Max volume to aspirate:
        var MAX_TIP_VOLUME = 170;

        // mRNA purification vars
        // Volume of starting RNA sample:
        var vol_sample = 50;
        // Volume of poly-T beads:
        var vol_beads = 50;
        // Volume of wash buffer (per wash):
        var vol_wash = 200;
        // Volume of elution buffer:
        var vol_elute = 50;
        // Volume of binding buffer:
        var vol_bind = 50;
        // Volume of fragmentation/prime mix:
        var vol_frag = 19.5;
        // Volume sample to use for cDNA synthesis:
        var vol_sample2 = 17;
        // Volume of 1st strand cDNA synthesis mix:
        var vol_synth1 = 8;
        // Volume of 2nd strand cDNA synthesis mix:
        var vol_synth2 = 25;
        // Bind incubation time (sec):
        var time_bind = 5 * 60 * time_mod;
        // Normal bead pellet time (sec):
        var time_pellet = 2 * 60;
        // Short bead pellet time (sec):
        var time_pellet_short = 0.5 * 60;

        var final_hold = !!global.formFinalHold;

        var dph = global.dph;
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = TEMP_RT;
      Location: 4
      Temperature: =TEMP_RT;
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = TEMP_RT;
      Location: 6
      Temperature: =TEMP_RT;
      Timeout: 1
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Main_Processes
  Process
    Plate name: plate_sample
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      TaskScript: // Plate containing RNA starting material
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_sample_cleared
  Process
    Plate name: plate_bind
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::User Message
      Task_Disabled: 1
      Estimated time: 521
      Title: Remove plates
      Body:
        Wait until the robot has stopped then remove the following plates:

           1st strand synthesis reagent plate (MiniHub cassette 2, shelf 2)
           2nd strand synthesis reagent plate (MiniHub cassette 2, shelf 1)

        Seal and keep on ice or in fridge until used.

        Place the Eppendorf plate containing RNA samples on position 8 of the Bravo deck and click 'Continue'.

        Also turn off the ThermoCube cooling unit.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_sample
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Wait For
      Waitfor: signal_sample_cleared
    Task BuiltIn::Signal
      Waitfor: signal_rinse1
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_denat
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Wait For
      Waitfor: signal_rinse1_done
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Task_Disabled: 1
      TaskScript: task.Incubationtime = time_bind;
      Incubation time: 0
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task BuiltIn::Signal
      Waitfor: signal_wash_plate1
    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Signal
      Waitfor: signal_elution_plate
    Task Bravo::SubProcess
      Sub-process name: AddElution
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate1
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_bind_cleared
  Process
    Plate name: plate_wash
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate containing wash buffer
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeWash
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Wait For
      Waitfor: signal_wash_plate1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 1
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    Task BuiltIn::Wait For
      Waitfor: signal_wash_plate2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: plate_elute
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate containing elution buffer
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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    Task BuiltIn::Wait For
      Waitfor: signal_elution_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: AddElution
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate1
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    Task BuiltIn::Wait For
      Waitfor: signal_bind_cleared
    Task BuiltIn::Signal
      Waitfor: signal_rinse2
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_elute
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Wait For
      Waitfor: signal_rinse2_done
    Task BuiltIn::Signal
      Waitfor: signal_bind_plate
    Task Bravo::SubProcess
      Sub-process name: TransferEluate2
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: plate_rebind
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with binding buffer
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 4
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    Task BuiltIn::Wait For
      Waitfor: signal_bind_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferEluate2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript: task.Incubationtime = time_bind;
      Incubation time: 0
      Use relative timing: 0
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    Task BuiltIn::Signal
      Waitfor: signal_wash_plate2
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Signal
      Waitfor: signal_frag_plate
    Task Bravo::SubProcess
      Sub-process name: AddFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_frag_cleared
    Task BuiltIn::Signal
      Waitfor: signal_rinse3
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_frag
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Wait For
      Waitfor: signal_rinse3_done
    Task BuiltIn::User Message
      Task_Disabled: 1
      Estimated time: 70
      Title: Return plate
      Body: Remove seal and place the Eppendorf plate containing the first strand synthesis reagents on position 4 then click Continue.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_synth1
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      Task_Disabled: 1
      TaskScript: task.Incubationtime = time_bind;
      Incubation time: 0
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_rebind_cleared
  Process
    Plate name: plate_frag
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with elute, frag, prime mix
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 3
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    Task BuiltIn::Wait For
      Waitfor: signal_frag_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: AddFrag
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_frag_cleared
  Process
    Plate name: plate_synth1
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with 1st strand synthesis mix
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_rebind_cleared
    Task BuiltIn::Signal
      Waitfor: signal_rinse4
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_1st-strand
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Wait For
      Waitfor: signal_rinse4_done
    Task BuiltIn::User Message
      Task_Disabled: 1
      Estimated time: 62
      Title: Return plate
      Body: Remove seal and place the Eppendorf plate containing the second strand synthesis reagents on position 4 then click Continue.
      Pause process: 1
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_synth2
    Task Bravo::SubProcess
      Sub-process name: TransferSynth
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: signal_synth1_cleared
  Process
    Plate name: plate_synth2
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Plate with 2nd strand synthesis mix
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task Bravo::SubProcess
      Sub-process name: TransferSynth
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    Task BuiltIn::Wait For
      Waitfor: signal_synth1_cleared
    Task BuiltIn::Spawn Process
      Process to spawn: incubation_2nd-strand
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
  Process
    Plate name: plate_rinse
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
    Task BuiltIn::Place Plate
      TaskScript: // Plate with water for rinsing tips
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse_plate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 2
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    Task BuiltIn::Signal
      Waitfor: signal_get_tips_used_synth1
    Task BuiltIn::Wait For
      Waitfor: signal_get_rinse_synth2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: RinseTips4
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfor: signal_get_used_tips_synth2
  Process
    Plate name: plate_waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      TaskScript: // Waste
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task Bravo::SubProcess
      Sub-process name: RinseTips3
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    Task Bravo::SubProcess
      Sub-process name: RinseTips4
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  Process
    Plate name: plate_reagents
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
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  Process
    Plate name: tips_bind
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Tips to use for binding and 1st wash
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse1
    Task BuiltIn::Signal
      Waitfor: signal_rinse_plate
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task BuiltIn::Signal
      Waitfor: signal_rinse1_done
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads2
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: tips_elute
  Process
    Plate name: tips_elute
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Tips to use for eluting and 2nd wash
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AddElution
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate1
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse2
    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task BuiltIn::Signal
      Waitfor: signal_rinse2_done
    Task Bravo::SubProcess
      Sub-process name: TransferEluate2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads3
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    Task Bravo::SubProcess
      Sub-process name: WashBeads2
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads4
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Spawn Process
      Process to spawn: tips_frag
  Process
    Plate name: tips_frag
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript: // Tips to use for preparing fragmentation and cDNA synthesis
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AddFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse3
    Task Bravo::SubProcess
      Sub-process name: RinseTips3
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    Task BuiltIn::Signal
      Waitfor: signal_rinse3_done
    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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    Task BuiltIn::Signal
      Waitfor: signal_get_reagent_tips_synth1
    Task BuiltIn::Wait For
      Waitfor: signal_get_tips_frag_synth1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Wait For
      Waitfor: signal_rinse4
    Task Bravo::SubProcess
      Sub-process name: RinseTips4
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    Task BuiltIn::Signal
      Waitfor: signal_rinse4_done
    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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    Task BuiltIn::Signal
      Waitfor: signal_get_reagent_tips_synth2
    Task BuiltIn::Wait For
      Waitfor: signal_get_tips_frag_synth2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferSynth
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
  Process
    Plate name: tips_reagent
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: plate_wash
    Task Bravo::SubProcess
      Sub-process name: DistributeWash
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_rinse
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Wait For
      Waitfor: signal_reservoirs_cleared
    Task BuiltIn::Spawn Process
      Process to spawn: plate_elute
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_rebind
    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_frag
    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task BuiltIn::Spawn Process
      Process to spawn: plate_bind
    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: tips_bind
    Task BuiltIn::Wait For
      Waitfor: signal_get_reagent_tips_synth1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Signal
      Waitfor: signal_get_tips_frag_synth1
    Task BuiltIn::Wait For
      Waitfor: signal_get_reagent_tips_synth2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Signal
      Waitfor: signal_get_tips_frag_synth2
  Process
    Plate name: tips_used
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DistributeElution
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    Task Bravo::SubProcess
      Sub-process name: DistributeBind
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    Task Bravo::SubProcess
      Sub-process name: DistributeFrag
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    Task Bravo::SubProcess
      Sub-process name: DistributeBeads
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Wait For
      Waitfor: signal_get_tips_used_synth1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth1
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    Task BuiltIn::Storage Incubate
      Device Device_Name=Agilent Labware MiniHub - 1
      newIncubationTime: 0
      IncubationTime Incubation_Time_MS=10
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Signal
      Waitfor: signal_get_rinse_synth2
    Task BuiltIn::Wait For
      Waitfor: signal_get_used_tips_synth2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DistributeSynth2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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  Process
    Plate name: reservoir_wash
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: DistributeWash
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: tips_used
  Process
    Plate name: reservoir_rinse
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DistributeRinse
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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    Task BuiltIn::Signal
      Waitfor: signal_reservoirs_cleared
  Process
    Plate name: incubation_denat
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Estimated time: 589
      Block Type: 96
      Program: 3,1,rna-den
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 29
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1897504947l
        Spin task Type: 1
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 18
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_frag
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 30
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1898434838l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Estimated time: 582
      Block Type: 96
      Program: 3,3,rna-frg
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 18
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_elute
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 29
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1898473339l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Estimated time: 351
      Block Type: 96
      Program: 3,2,rna-elu
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 18
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_1st-strand
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 29
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1898512698l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Estimated time: 2628
      Block Type: 96
      Program: 3,4,rna-1st
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 18
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: incubation_2nd-strand
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 30
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 1898545599l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Estimated time: 3631
      Block Type: 96
      Program: 3,5,rna-2nd
  Pipette_Process Name=AddElution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_elute;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = 0.8 * vol_elute;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 20;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 71
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_bind
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AddFrag
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_frag;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = 0.8 * vol_frag;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 30;
        var mMixAspDistance = 0.55;
        var mMixDispDistance = 0.55;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6.5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 64
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_rebind
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 5
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_frag);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 6
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_frag);
        task.Dynamictipretraction = 4 / (0.8 * (vol_frag));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeBeads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_beads;	// Volume to dispense per well
        var maxTipVolume = MAX_TIP_VOLUME;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 10;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips_reagent
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 52
      TaskScript:
        var mMixVolume = vol_beads * (columns - columnsDone) * 0.8;
        task.Volume = (mMixVolume > (maxTipVolume - 20)) ? (maxTipVolume - 20) : mMixVolume;
        task.Mixcycles = (columnsDone === 0) ? 10 : 3;
      Location, plate: plate_reagents
      Liquid class: j_slow_mixing
      Aspirate distance: 1.8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: plate_reagents
      Volume: =tipVolume; [10]
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_bind
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_reagents
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeBind
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_bind;	// Volume to dispense per well
        var maxTipVolume = MAX_TIP_VOLUME;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips_reagent
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: plate_reagents
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.4
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_rebind
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_reagents
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeElution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_elute;	// Volume to dispense per well
        var maxTipVolume = MAX_TIP_VOLUME;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips_reagent
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: plate_reagents
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.4
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_elute
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_reagents
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=1 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeFrag
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_frag;	// Volume to dispense per well
        var maxTipVolume = MAX_TIP_VOLUME;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips_reagent
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: plate_reagents
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.4
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_frag
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_reagents
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeRinse
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_fast_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 800;
        var mAspDistance = 3;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -13;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: reservoir_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        // Extra transfer to waste to rinse tips
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: reservoir_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        // Extra transfer to waste to rinse tips
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = 25;
        task.Performtiptouch  = true;
        task.Tiptouchretractdistance = 5;
        task.Whichsidestousefortiptouch = "North";
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: reservoir_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeSynth1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_synth1;	// Volume to dispense per well
        var maxTipVolume = MAX_TIP_VOLUME;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips_reagent
      Well selection: Column=4 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: plate_reagents
      Volume: =tipVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.4
      Well selection: Column=4 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_synth1
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_reagents
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=4 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=7 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeSynth2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = vol_synth2;	// Volume to dispense per well
        var maxTipVolume = MAX_TIP_VOLUME;	// Tip capacity
        var columns = n_columns;		// Total number of columns to process
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 4;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / maxVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips_reagent
      Well selection: Column=5 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      Location, plate: plate_reagents
      Volume: =tipVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.4
      Well selection: Column=5 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: plate_synth2
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: plate_reagents
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=5 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      Location, plate: tips_used
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=DistributeWash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = vol_wash * 2.5;
        var mAspDistance = 2;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -13;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: reservoir_wash
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: reservoir_wash
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_wash
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_wash
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_reagent
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_beads + vol_sample + 5);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet;
      Location to use, plate: plate_bind
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_wash + 10);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet_short;
      Location to use, plate: plate_bind
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_elute + vol_bind + 5);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet;
      Location to use, plate: plate_rebind
      Location to use, location: 7
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = (vol_wash + 10);
        var mAspDistance = 0.3;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet_short;
      Location to use, plate: plate_rebind
      Location to use, location: 7
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 20;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips4
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mRinseVolume = 80;
        var mNumberRinses = 1;
        var mAspDistance = 2;
        var mDispDistance = 30;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 2;
        var mMixDistance = 30;
        var mBlowoutHeight =30;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =mNumberRinses; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_rinse
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mMixDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        task.Volume = MAX_TIP_VOLUME - mRinseVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixDistance;
        task.Wellselection = mWellSelection;
      Location, plate: plate_waste
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mRinseVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEluate1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = vol_elute + 10;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 9
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_elute);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 12
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_elute);
        task.Dynamictipretraction = 4 / (0.8 * (vol_elute));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_elute
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferEluate2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_elute;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = 0.7 * (vol_elute);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 31
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = "j_normal_mixing";
        task.Aspiratedistance = 1;
        task.Wellselection = mWellSelection;
      Location, plate: plate_elute
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
        var mMixVolume = 0.7 * (vol_elute + vol_bind);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 54
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_rebind
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 13
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_elute + vol_bind);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 20
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_elute + vol_bind);
        task.Dynamictipretraction = 4 / (0.8 * (vol_elute + vol_bind));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_rebind
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferFrag
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_frag;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = 0.6 * (vol_synth1 + vol_frag);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 0.5;
        var mMixDispDistance = 2.8;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6.5;
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = time_pellet;
      Location to use, plate: plate_rebind
      Location to use, location: 7
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_synth1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 28
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_synth1
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 7
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_frag);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_synth1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_frag);
        task.Dynamictipretraction = 4 / (0.8 * (vol_synth1 + vol_frag));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_synth1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_synth1
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_sample;
        var mAspDistance = 0.4;
        var mDispDistance = 4;
        var mMixVolume = 0.7 * (vol_beads + vol_sample);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 10;
        var mMixAspDistance = 0.8;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 9;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_sample
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_sample
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 53
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_bind
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 13
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_beads + vol_sample);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 21
      TaskScript:
        // Remove bubbles
        task.Volume = 0.9 * (vol_beads + vol_sample);
        task.Dynamictipretraction = 4 / (0.9 * (vol_beads + vol_sample));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_bind
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferSynth
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection =[[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = vol_frag + vol_synth1;
        var mAspDistance = 0.4;
        var mDispDistance = 2.8;
        var mMixVolume = (vol_synth1 + vol_synth2);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 1;
        var mMixDispDistance = 4;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_synth1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
        if(mNumberSteps === 1) {
        	task.Dynamictipextension = dph(mTransferVolume, mAspDistance);
        }
      Location, plate: plate_synth1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_synth2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 34
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_synth2
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Task_Disabled: 1
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_synth2);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.25;
      Location, plate: plate_synth2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      Estimated time: 10
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_synth2);
        task.Dynamictipretraction = 4 / (0.8 * (vol_synth1 + vol_synth2));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.25;
      Location, plate: plate_synth2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: plate_synth2
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_frag
      Mark tips as used: 1
      Well selection: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 0;
        var mTransferVolume = vol_wash;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 0.7 * vol_wash;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 3;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_wash
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 21
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_bind
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_bind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_bind
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = head_mode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-n_columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 0;
        var mTransferVolume = vol_wash;
        var mAspDistance = 1;
        var mDispDistance = 2;
        var mMixVolume = 0.7 * vol_wash;
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 3;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = false;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: plate_wash
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_TIP_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: plate_wash
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 21
      TaskScript:
        if(mMixVolume > MAX_TIP_VOLUME) {
           mMixVolume = MAX_TIP_VOLUME * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: plate_rebind
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        if(mPreAspVolume == 0) {
        	task.skip();
        }
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: plate_rebind
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: tips_elute
      Mark tips as used: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=2 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=10 Row=0
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: reset_temp
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript:
        if(final_hold) {
        	task.Temperature =4;
        } else {
        	task.Turnofftemperature = true;
        }
      Location: 4
      Temperature Tolerance: 4
      Timeout: 10
      Allow concurrent operation: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Turn off temperature: 1
      Timeout: 1
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    Task BuiltIn::User Message
      Estimated time: 1223
      TaskScript: if(!final_hold) task.skip();
      Title: Turn off cooling
      Body: Confirm this message to turn off cooling and finish the run.
      Pause process: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Turn off temperature: 1
      Temperature Tolerance: 4
      Timeout: 10
      Allow concurrent operation: 1
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