<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='0' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Full_System_Magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();

// General vars
var time_mod = global.time_mod;
// Ambient temperature (deg C):
var temp_rt = global.temp_rt;
// Number of columns of samples to process:
var n_columns = global.n_columns;
// Pipette head operation mode:
var head_mode = &quot;1,2,1,&quot; + n_columns;
// Maximum volume to use when mixing (uL):
var max_mix_vol = 140;
// Air aspiration volumes (uL):
var pre_asp_large = 20;
var pre_asp_medium = 15;
var pre_asp_small = 8;
// End repair vars
// Starting volume of DNA sample (uL):
var vol_sample = 15;
// The column where the adenylation reaction mix
// is located in the master mix plate:
var col_ad_mix = 1; 
// Volume of adenylation reaction mix (uL):
var vol_ad_mix = 15;
// Adenylation reaction incubation temperature (deg C):
// To compensate for panel-plate temperature differences
// the set temperature have been calibrated to:
var temp_ad = 53; // Actual reaction temperature: 37C
// Adenylation reaction incubation time (min):
var time_ad = 30 * 60 * time_mod;

global.statusString = &quot;A-tailing started...&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Plate with starting sample
//plate.labware = platetype_sample;' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='signal_sample_plate_cleared' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='plate_sample' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Plate with reaction mix (buffer/enzymes)
//plate.labware = platetype_sample;' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='DivideMix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DivideMix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='plate_sample' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='signal_sample_plate_cleared' >
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				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='cycler_incubation' />
						<Parameter Category='' Name='Spawn as subroutine' Value='1' />
						<Parameter Category='' Name='Spawn parameter' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='plate_ad' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Plate with adenylation master mix in column 2' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DivideMix' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='plate_mastermix' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Unload based on barcode' Value='0' />
						<Parameter Category='' Name='Barcode' Value='' />
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// New tipbox for dispensing master mix' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DivideMix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips_mix_new' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Unload based on barcode' Value='0' />
						<Parameter Category='' Name='Barcode' Value='' />
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 2' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Empty tipbox for used master mix tips' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='DivideMix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='tips_ad' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips_mix_old' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// New tips for transfer of sample to adenylation reaction mix' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips_ad' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::CentrifugeAuto' >
					<Devices >
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 1' />
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Max spin force' Value='500' />
						<Parameter Category='' Name='Acceleration' Value='80' />
						<Parameter Category='' Name='Braking' Value='80' />
						<Parameter Category='' Name='Timer mode' Value='Time at speed' />
						<Parameter Category='' Name='Time to spin' Value='5' />
						<Parameter Category='' Name='Counterweight mode' Value='Fixed counterweight' />
						<Parameter Category='' Name='Counterweight' Value='' />
					</Parameters>
					<CustomData >
						<Parameter Name='Spin task id' Value='3176127' />
						<Parameter Name='Spin task Type' Value='1' />
					</CustomData>
				</Task>
				<Task Name='Biometra TRobot::Run a program' >
					<Devices >
						<Device Device_Name='Biometra TRobot - 1' Location_Name='Load Port' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Nexus XPeel::Peel' >
					<Devices >
						<Device Device_Name='Nexus XPeel - 1' Location_Name='Location' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Begin location speed' Value='Default slow' />
						<Parameter Category='' Name='Adhere time' Value='2.5 Seconds' />
						<Parameter Category='' Name='Ignore seal not removed error.' Value='0' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cycler_incubation' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='DivideMix' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,1,1,1&quot;;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='1' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='// Last column of tips:
task.Wellselection = [[1,col_ad_mix]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips_mix_new' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='// Pre-aspiration
task.Wellselection = [[1,col_ad_mix]];
task.Volume = pre_asp_large;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_mastermix' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='40' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=n_columns;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='current_column' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,col_ad_mix]];
task.Volume = vol_ad_mix;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_mastermix' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,0+current_column]];
task.Volume = vol_ad_mix;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_ad' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Tip-to-wall touch
task.Wellselection = [[1,col_ad_mix]];
task.Volume = pre_asp_large;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_mastermix' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South/North' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='// First column of empty tip box:
task.Wellselection = [[1,13-col_ad_mix]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips_mix_old' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferSample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = head_mode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, 13 - n_columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips_ad' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = pre_asp_large;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_sample' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = vol_sample;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_sample' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = vol_sample;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_ad' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mix_vol = 0.8 * (vol_sample + vol_ad_mix);
if(mix_vol &gt; max_mix_vol) {
	mix_vol = max_mix_vol;
}
task.Volume = mix_vol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_ad' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='// Remove bubbles
task.Volume = 0.9 *(vol_sample + vol_ad_mix);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_ad' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Remove bubbles
task.Volume = 0.9 * (vol_sample + vol_ad_mix);
task.Dynamictipretraction = 4 / (0.9 * (vol_sample + vol_ad_mix));' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_ad' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
task.Volume = pre_asp_large;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate_ad' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1, 13 - n_columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips_ad' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='global.statusString = &quot;A-tailing completed&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ResetTemp' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>