Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet.dev
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::JavaScript
      TaskScript:
        //author Chuan Wang, version 160406

        //Global parameters
        var global = GetGlobalObject();
        var time_mod = 1;
        var temp_rt = 20;

        //number of columns
        //var columns = parseInt(user_entry);
        var columns = global.formColumns || 1;

        //head mode
        var headMode = "1,2,1," + columns;

        // Air aspiration volumes (uL):
        var pre_asp_large = 20;
        var pre_asp_medium = 15;
        var pre_asp_small = 10;

        //Volume fragmentation buffer
        var vol_frag = 13;
        // Volume of 1st strand cDNA synthesis mix:
        var vol_synth1 = 8;
        // Volume of 2nd strand cDNA synthesis mix:
        var vol_synth2 = 25;

        //Starting sample volume
        var vol_starting_sample = 5;
Main_Processes
  Process
    Plate name: TipBox_Frag
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AddFragBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
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    Task BuiltIn::Signal
      Waitfor: Waitfor_RemoveTipBox_Frag
  Process
    Plate name: BufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: AddFragBuffer
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Distribute1strand
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: Distribute2strand
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      TaskScript: // Plate containing RNA starting material
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: AddFragBuffer
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_Remove_Waste_TipBox_Frag
    Task BuiltIn::Place Plate
      TaskScript: // Plate containing RNA starting material
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::User Message
      Estimated time: 13
      Title: Plate transfer
      Body: Remove the plate in position 4. Seal, transfer to a thermocycler and run the mRNA fragmentation program. Click "Continue" when incubation has started. The incubation will take 5 minutes. Standby for the 1st strand synthesis.
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    Task BuiltIn::Spawn Process
      Process to spawn: TipBox_1strand
    Task BuiltIn::Wait For
      Waitfor: Waitfor_1strandBuffDistributed
    Task BuiltIn::User Message
      Estimated time: 23
      Title: Return plate
      Body: When thermocycler run is finsihed, unseal and return the plate to position 4. Also inspect that 1st strand synthesis buffer has been aliquoted to all wells to run in the plate on position 5. Click "Continue" when these steps have been completed.
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    Task BuiltIn::Signal
      Waitfor: Waitfor_FragmentedSample
    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Signal
      Waitfor: Waitfor_RemoveSamplePlate
  Process
    Plate name: TipBox_1strand
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: FirstStrand
    Task Bravo::SubProcess
      Sub-process name: Distribute1strand
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    Task BuiltIn::Signal
      Waitfor: Waitfor_1strandBuffDistributed
    Task BuiltIn::Wait For
      Waitfor: Waitfor_FragmentedSample
    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
  Process
    Plate name: FirstStrand
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Distribute1strand
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    Task Bravo::SubProcess
      Sub-process name: TransferFrag
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_RemoveSamplePlate
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::User Message
      Estimated time: 12
      Title: Plate transfer
      Body: Remove the plate in position 4. Seal, transfer to a thermocycler and run the cDNA first strand synthesis program. Seal the Deep well nunc plate with reagents on position 9 and store it in 4ºC. Click "Continue" when incubation has started.
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    Task BuiltIn::User Message
      Estimated time: 15
      Title: Plate transfer
      Body: When thermocycler run is finsihed, unseal and return the plate to position 4. Also unseal and return the deep well nunc plate with reagents to position 9. Click "Continue" when these steps have been completed.
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    Task BuiltIn::Spawn Process
      Process to spawn: TipBox_2strand
    Task BuiltIn::Wait For
      Waitfor: Waitfor_SecondStrandBuffer
    Task Bravo::SubProcess
      Sub-process name: Transfer1strandsample
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Signal
      Waitfor: Waitfor_RemoveFirstStrandPlate
  Process
    Plate name: Waste_TipBox_Frag
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: AddFragBuffer
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_RemoveTipBox_Frag
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: Waitfor_Remove_Waste_TipBox_Frag
  Process
    Plate name: TipBox_2strand
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      Process to spawn: SecondStrand
    Task BuiltIn::Wait For
      Waitfor: Waitfor_SecondStrandPlate
    Task Bravo::SubProcess
      Sub-process name: Distribute2strand
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    Task BuiltIn::Signal
      Waitfor: Waitfor_SecondStrandBuffer
    Task Bravo::SubProcess
      Sub-process name: Transfer1strandsample
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_RemoveFirstStrandPlate
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 3
    Task BuiltIn::Signal
      Waitfor: Waitfor_RemoveTipBox_2strand
  Process
    Plate name: SecondStrand
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Signal
      Waitfor: Waitfor_SecondStrandPlate
    Task Bravo::SubProcess
      Sub-process name: Distribute2strand
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    Task Bravo::SubProcess
      Sub-process name: Transfer1strandsample
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    Task BuiltIn::Wait For
      Waitfor: Waitfor_RemoveTipBox_2strand
    Task BuiltIn::User Message
      Estimated time: 7
      Title: Plate transfer
      Body: Remove the plate in position 5. Seal, transfer to a thermocycler and run the cDNA second strand synthesis program. The leftover tips (if any) in MiniHub cassette 1 slot 1 are unused. Click "Continue" when incubation has started.
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  Pipette_Process Name=AddFragBuffer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 1;
        var mNumberColumns = columns;
        var mNumberSteps = mNumberColumns;
        var mGetTips = true;
        var mReturnTips = true;
        var mFragBuffPosition = [[1,1]];
        var mLiquidClass = "j_normal_medium_vol";
        var mTransferVolume = vol_frag;
        var mAspDistance = 0.5;
        var mDispDistance = 1;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
        var mMixVolume = 0.8*(vol_starting_sample+vol_frag);
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 3;
        var mMixAspDistance = 0.55;
        var mMixDispDistance = 0.55;
        var mPreAspVolume = 10;

        var single_col_tips_on = 0;
        var single_col_tips_off  = 0;
        var block_mix = 1;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Loop
      TaskScript:
        single_col_tips_on++;
        single_col_tips_off++;
      Number of times to loop: =mNumberSteps [mNumberSteps]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[ 1 , single_col_tips_on ]];
        	print("Pressing tips on at " + task.Wellselection);
        } else {
           task.skip();
        }
      Location, plate: TipBox_Frag
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=3 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mFragBuffPosition;
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BufferPlate
      Volume: 13
      Pre-aspirate volume: 1
      Liquid class: j_normal_medium_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[ 1 , block_mix ]];
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;

        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;

        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[ 1 , block_mix ]];

        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        // Remove bubbles
        task.Wellselection = [[ 1 , block_mix ]];
        task.Volume = mMixVolume;
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.1;
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        // Remove bubbles
        task.Volume = mMixVolume;
        task.Dynamictipretraction = 4 / mMixVolume;
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.1;
        task.Wellselection = [[ 1 , block_mix ]];
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[ 1 , block_mix ]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: SamplePlate
      Empty tips: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
        	task.Wellselection = [[ 1 , single_col_tips_off ]];
        	print("Taking tips off at " + task.Wellselection);
        } else {
           task.skip();
        }
      Location, plate: Waste_TipBox_Frag
      Mark tips as used: 1
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop End
      TaskScript: block_mix++;
    Task BuiltIn::Group End
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  Pipette_Process Name=Distribute1strand
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 2;
        var mNumberColumns = columns;
        var mGetTips = true;
        var mTipColumn = 1;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_synth1;
        var mAspDistance = 0.3;
        var mDispDistance = 0.3;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: TipBox_1strand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = 50;
      Location, plate: BufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: TipBox_1strand
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Distribute2strand
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = "1,1,1,1";
        var mSourceColumn = 3;
        var mNumberColumns = columns;
        var mGetTips = true;
        var mTipColumn = 1;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = vol_synth2;
        var mAspDistance = 0.3;
        var mDispDistance = 0.3;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: TipBox_2strand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = 50;
      Location, plate: BufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentColumn = 0;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberColumns; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript: mCurrentColumn++;
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[1,mSourceColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BufferPlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: SecondStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = [[1,mCurrentColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: SecondStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,mTipColumn]];
        } else {
           task.skip();
        }
      Location, plate: TipBox_2strand
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer1strandsample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;

        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = (vol_frag + vol_starting_sample + vol_synth1);
        var mAspDistance = 0.25;
        var mDispDistance = 3;

        var mMixVolume = 0.6 * (vol_synth2 + vol_frag + vol_starting_sample + vol_synth1);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 0.7;
        var mMixDispDistance = 3;

        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6.5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox_2strand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=8 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 23
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: SecondStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 33
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: SecondStrand
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth2 + vol_frag + vol_starting_sample + vol_synth1);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.25;
      Location, plate: SecondStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth2 + vol_frag + vol_starting_sample + vol_synth1);
        task.Dynamictipretraction = 4 / (0.8 * (vol_synth2 + vol_frag + vol_starting_sample + vol_synth1));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.25;
      Location, plate: SecondStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: SecondStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox_2strand
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferFrag
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;

        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = 20;
        var mTransferVolume = (vol_frag + vol_starting_sample);
        var mAspDistance = 0.25;
        var mDispDistance = 3;

        var mMixVolume = 0.6 * (vol_synth1 + vol_frag + vol_starting_sample);
        var mMixLiquidClass = "j_slow_mixing";
        var mMixCycles = 8;
        var mMixAspDistance = 0.7;
        var mMixDispDistance = 3;

        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6.5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox_1strand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=8 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 19
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: SamplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 27
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: FirstStrand
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_frag + vol_starting_sample);
        task.Liquidclass = "j_slow_medium_vol";
        task.Distancefromwellbottom = 0.25;
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        // Remove bubbles
        task.Volume = 0.8 * (vol_synth1 + vol_frag + vol_starting_sample);
        task.Dynamictipretraction = 4 / (0.8 * (vol_synth1 + vol_frag + vol_starting_sample));
        task.Liquidclass = "j_slow_small_vol";
        task.Distancefromwellbottom = 0.25;
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: FirstStrand
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: TipBox_1strand
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task BuiltIn::Group End
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