<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='0' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Full_System_Magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Constants:
var MAX_VOLUME = 170;
var MAX_MIX_VOLUME = 150;
var PRE_ASP_LARGE = 15;
var PRE_ASP_MEDIUM = 10;
var PRE_ASP_SMALL = 5;
// Get protocol parameters from global scope:
var global = GetGlobalObject();
var runsetMode = global.runsetMode;
if(runsetMode) global.updateRunset();
var columns = global.formColumns;
var headMode = &quot;1,2,1,&quot; + columns;
var tipColumn = (runsetMode) ? global.settings.tipColumn : 1;
var reagentColumn = global.settings.reagentColumn || 1;
var timeMod = global.timeMod || 1;
var tempRt = global.tempRt || 20;
var sampleVolume = global.settings.sampleVolume || 50;
var reagentVolume = global.settings.reagentVolume || 50;
var incubationTemperature = global.settings.incubationTemperature || 20;

var incubationTime = global.settings.incubationTime * timeMod;
var protocolName = global.formProtocol;

// useCycler indicates whether to use tRobot for incubation
var useCycler = true;
var doCentrifuge = true;
var finalHold = !runsetMode &amp;&amp; global.formFinalHold;
var sealFinalPlate = finalHold || !runsetMode;
var cyclerProgram = global.settings.cyclerProgram;

global.statusString = protocolName + &quot; started&quot;;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Plate with starting sample
//plate.labware = platetype_sample;' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Scan barcode' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SamplePlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Barcode or header East' Value='Barcode not in file' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Plate with reaction mix (buffer/enzymes)
//plate.labware = platetype_sample;' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AliquotMix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(useCycler) task.skip();' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='SetTemperature' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='SetTemperature' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='useCycler &amp;&amp; task.skip();
task.Incubationtime = incubationTime;' />
					<Parameters >
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						<Parameter Category='' Name='Incubation time' Value='0' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(!useCycler) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='CyclerIncubation' />
						<Parameter Category='' Name='Spawn as subroutine' Value='1' />
						<Parameter Category='' Name='Spawn parameter' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ResetTemperature' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ResetTemperature' />
					</Parameters>
				</Task>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!sealFinalPlate ||  (doCentrifuge || useCycler)) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<TaskScript Name='TaskScript' Value='if(!finalHold) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='FinalHold' />
						<Parameter Category='' Name='Spawn as subroutine' Value='1' />
						<Parameter Category='' Name='Spawn parameter' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(finalHold) task.skip();' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReactionPlate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Plate with end repair master mix in column 1' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AliquotMix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// New tipbox for dispensing master mix' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AliquotMix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='ReagentTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Empty tipbox for used master mix tips' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='AliquotMix' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='AliquotMix' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 2, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='SampleTips' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='UsedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Free empty stackers' Value='1' />
						<Parameter Category='' Name='Parameter 1' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// New tips for transfer of sample to end repair reaction mix' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='TransferSample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='TransferSample' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='SampleTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Seal if using VSpin or tRobot 
if(!doCentrifuge &amp;&amp; !useCycler) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::CentrifugeAuto' >
					<Devices >
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 1' />
						<Device Device_Name='Agilent Centrifuge Loader - 1' Location_Name='Bucket 2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!doCentrifuge) task.skip();' />
					<Parameters >
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						<Parameter Category='' Name='Max spin force' Value='500' />
						<Parameter Category='' Name='Acceleration' Value='80' />
						<Parameter Category='' Name='Braking' Value='80' />
						<Parameter Category='' Name='Timer mode' Value='Time at speed' />
						<Parameter Category='' Name='Time to spin' Value='5' />
						<Parameter Category='' Name='Counterweight mode' Value='Fixed counterweight' />
						<Parameter Category='' Name='Counterweight' Value='' />
					</Parameters>
					<CustomData >
						<Parameter Name='Spin task id' Value='963344206l' />
						<Parameter Name='Spin task Type' Value='1' />
					</CustomData>
				</Task>
				<Task Name='Biometra TRobot::Run a program' >
					<Devices >
						<Device Device_Name='Biometra TRobot - 1' Location_Name='Load Port' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!useCycler) task.skip();
//task.Program = cyclerProgram;' />
					<Parameters >
						<Parameter Category='' Name='Block Type' Value='96' />
						<Parameter Category='' Name='Program' Value='2,1,ts-er   ' />
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					</Parameters>
				</Task>
				<Task Name='Nexus XPeel::Peel' >
					<Devices >
						<Device Device_Name='Nexus XPeel - 1' Location_Name='Location' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='// Peel off seal if using VSpin or tRobot 
if(!(doCentrifuge || useCycler) || sealFinalPlate) task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Begin location speed' Value='Default slow' />
						<Parameter Category='' Name='Adhere time' Value='2.5 Seconds' />
						<Parameter Category='' Name='Ignore seal not removed error.' Value='0' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='CyclerIncubation' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Barcode or header East' Value='Barcode not in file' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='PlateLoc::Seal' >
					<Devices >
						<Device Device_Name='Agilent PlateLoc - 1' Location_Name='Stage' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!sealFinalPlate ||  (doCentrifuge || useCycler)) {
	task.skip();
}' />
					<Parameters >
						<Parameter Category='' Name='Seal time' Value='1.2' />
						<Parameter Category='' Name='Seal temperature' Value='170' />
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					</Parameters>
				</Task>
				<Task Name='Biometra TRobot::Run a program' >
					<Devices >
						<Device Device_Name='Biometra TRobot - 1' Location_Name='Load Port' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Block Type' Value='96' />
						<Parameter Category='' Name='Program' Value='1,1,hold4   ' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='FinalHold' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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					<Parameter Name='Barcode or header East' Value='Barcode not in file' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='AliquotMix' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var aliquotVolume = reagentVolume;	// Volume to dispense per well
var maxTipVolume = MAX_VOLUME;	// Tip capacity
var columnsDone = 0;	// Number of columns dispensed so far
var deadVolume = 3;		// Extra liquid volume to aspirate

// Total volume to transfer:
var transferVolume = aliquotVolume * columns;
// The total volume of the largest number of aliquots that fit in one tip:
var MAX_VOLUME = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
// Number of aspirations necessary:
var aspirateSteps = Math.ceil(transferVolume / MAX_VOLUME);
' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='0' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=aspirateSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='// Update volumes:
// Volume left to transfer:
var volumeLeft = (columns - columnsDone) * aliquotVolume;
// The actual volume to aspirate:
var tipVolume = (volumeLeft &gt; MAX_VOLUME) ?  MAX_VOLUME + deadVolume : volumeLeft + deadVolume;
// The number of aliquots to dispense from the aspirated volume: 
var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=tipVolume;' Value='10' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=dispenseSteps;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,++columnsDone]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=aliquotVolume;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,reagentColumn]];
if(columns == columnsDone) {
	task.Performtiptouch = true;
	task.Whichsidestousefortiptouch = &quot;None&quot;;
	task.Tiptouchretractdistance = -14.5;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReagentPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='0' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-tipColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='UsedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='ResetTemperature' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='// Dummy task
task.skip();' />
					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = tempRt;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='task.Temperature = tempRt;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=tempRt;' Value='' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='SetTemperature' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='useCycler &amp;&amp; task.skip();' />
					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='ReactionPlate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='/* To reach the reaction temperature faster 
this initial step is used to raise temperature quickly.
Once reached the temperature is immediately lowered to
the actual reaction temperature.
*/
useCycler &amp;&amp; task.skip();
task.Temperature = 58;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='58' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='10' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='useCycler &amp;&amp; task.skip();
task.Temperature = incubationTemperature;' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' TaskParameterScript='=incubationTemperature;' Value='' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='10' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='useCycler &amp;&amp; task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='TransferSample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = headMode;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='2' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;
task.Distancefromwellbottom = 0.5;
task.Dynamictipextension = global.dph(sampleVolume, 0.5);' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SamplePlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_small_vol' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Volume = sampleVolume;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='3' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='var mix_vol = 0.8 * (sampleVolume + reagentVolume);
if(mix_vol &gt; MAX_MIX_VOLUME) {
	mix_vol = MAX_MIX_VOLUME;
}
task.Volume = mix_vol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.75' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
task.Volume = PRE_ASP_SMALL;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='ReactionPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='SampleTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;2&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
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</Velocity11>