Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\Full_System_Magnet.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::User Message
      Task_Disabled: 1
      TaskScript:
        if(!(runsetMode && GetGlobalObject().settings.doOffDeckIncubation)) {
        	task.skip();
        }
      Title: Usr message
      Body: When the incubation has finished return the sample plate to position 5. Also place the plate containing adapter indexes in the MiniHub. Choose 'Continue' to resume the protocol.
      Pause process: 1
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    Task BuiltIn::JavaScript
      TaskScript:
        // Constants:
        var MAX_VOLUME = 170;
        var MAX_MIX_VOLUME = 150;
        var PRE_ASP_LARGE = 15;
        var PRE_ASP_MEDIUM = 10;
        var PRE_ASP_SMALL = 5;
        // Get protocol parameters from global scope:
        var global = GetGlobalObject();
        var runsetMode = global.runsetMode;
        if(runsetMode) global.updateRunset();
        var columns = global.formColumns;
        var headMode = "1,2,1," + columns;
        var tipColumn = (runsetMode) ? global.settings.tipColumn : 1;
        var reagentColumn = global.settings.reagentColumn || 1;
        var timeMod = global.timeMod || 1;
        var tempRt = global.tempRt || 20;
        var sampleVolume = global.settings.sampleVolume || 32.5;
        var reagentVolume = global.settings.reagentVolume || 5;
        var bufferVolume = global.settings.bufferVolume || 5;
        var adapterVolume = global.settings.adapterVolume || 2.5;
        var incubationTemperature = global.settings.incubationTemperature || 30;

        var incubationTime = global.settings.incubationTime * timeMod;
        var protocolName = global.formProtocol;

        // useCycler indicates whether to use tRObot for incubation
        var useCycler = true;
        var doCentrifuge = true;
        var finalHold = !runsetMode && global.formFinalHold;
        var sealFinalPlate = finalHold || !runsetMode;
        var cyclerProgram = global.settings.cyclerProgram;

        global.statusString = protocolName + " started";
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 4
      Temperature: =tempRt;
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: =tempRt;
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
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Main_Processes
  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
    Barcode or header East: Barcode not in file
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task BuiltIn::Place Plate
      TaskScript:
        // Scan barcode
        if(runsetMode) task.skip();
      Device to use: Bravo - 1
      Location to use: 3
    Task BuiltIn::Place Plate
      TaskScript: if(runsetMode) task.skip();
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 4
    Task BuiltIn::Signal
      Waitfor: signalMove1
  Process
    Plate name: ReactionPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: AliquotMix
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    Task BuiltIn::Spawn Process
      Process to spawn: SamplePlate
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task BuiltIn::Wait For
      Waitfor: signalMove1
    Task BuiltIn::Spawn Process
      TaskScript: if(!useCycler) task.skip();
      Process to spawn: CyclerIncubation
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      TaskScript: if(useCycler) task.skip();
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: SetTemperature
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        useCycler && task.skip();
        task.Incubationtime = incubationTime;
      Incubation time: 0
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: ResetTemperature
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    Task Bravo::SubProcess
      Sub-process name: TransferStop
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  Process
    Plate name: ReagentPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: AliquotMix
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    Task Bravo::SubProcess
      Sub-process name: AliquotBuffer
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  Process
    Plate name: ReagentTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      TaskScript: // New tipbox for dispensing master mix
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: AliquotMix
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    Task Bravo::SubProcess
      Sub-process name: AliquotBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: IndexPlate
  Process
    Plate name: UsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: AliquotMix
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    Task Bravo::SubProcess
      Sub-process name: AliquotBuffer
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
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    Task BuiltIn::Spawn Process
      Process to spawn: SampleTips
  Process
    Plate name: SampleTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Estimated time: 975
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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    Task Bravo::SubProcess
      Sub-process name: TransferStop
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  Process
    Plate name: IndexPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TransferSample
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  Process
    Plate name: StopPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: AliquotBuffer
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    Task Bravo::SubProcess
      Sub-process name: TransferStop
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    Task BuiltIn::Spawn Process
      TaskScript:
        // Seal if using VSpin or tRobot
        if(!doCentrifuge && !sealFinalPlate) task.skip();
      Process to spawn: SealAndSpin
      Spawn as subroutine: 1
    Task BuiltIn::Spawn Process
      TaskScript: if(!finalHold) task.skip();
      Process to spawn: FinalHold
      Spawn as subroutine: 1
    Task BuiltIn::Place Plate
      TaskScript: if(finalHold) task.skip();
      Device to use: Bravo - 1
      Location to use: 6
  Process
    Plate name: CyclerIncubation
    Plate type: 96 Eppendorf Twin.tec PCR
    Barcode or header East: Barcode not in file
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      TaskScript:
        // Seal if using VSpin or tRobot
        if(!doCentrifuge && !useCycler) task.skip();
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 29
      TaskScript: if(!doCentrifuge) task.skip();
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 963492860l
        Spin task Type: 1
    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Estimated time: 715
      TaskScript:
        if(!useCycler) task.skip();
        //task.Program = cyclerProgram;
      Block Type: 96
      Program: 2,3,ts-lig
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 16
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Process
    Plate name: FinalHold
    Plate type: 96 Eppendorf Twin.tec PCR
    Barcode or header East: Barcode not in file
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    Task Biometra TRobot::Run a program
      Device Device_Name=Biometra TRobot - 1 Location_Name=Load Port
      Block Type: 96
      Program: 1,1,hold4
  Process
    Plate name: SealAndSpin
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task PlateLoc::Seal
      Device Device_Name=Agilent PlateLoc - 1 Location_Name=Stage
      Estimated time: 7
      Seal time: 1.2
      Seal temperature: 170
    Task BuiltIn::CentrifugeAuto
      Devices
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 1
        Device Device_Name=Agilent Centrifuge Loader - 1 Location_Name=Bucket 2
      Estimated time: 29
      TaskScript: if(!doCentrifuge) task.skip();
      Max spin force: 500
      Acceleration: 80
      Braking: 80
      Timer mode: Time at speed
      Time to spin: 5
      Counterweight mode: Fixed counterweight
      CustomData
        Spin task id: 974109742l
        Spin task Type: 1
    Task Nexus XPeel::Peel
      Device Device_Name=Nexus XPeel - 1 Location_Name=Location
      Estimated time: 16
      TaskScript:
        // Peel off seal if using VSpin or tRobot
        if(!(doCentrifuge && !sealFinalPlate)) task.skip();
      Begin location speed: Default slow
      Adhere time: 2.5 Seconds
      Ignore seal not removed error.: 0
  Pipette_Process Name=AliquotBuffer
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = bufferVolume;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 3;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var MAX_VOLUME = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / MAX_VOLUME);

        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > MAX_VOLUME) ?  MAX_VOLUME + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,tipColumn+1]];
      Location, plate: ReagentTips
      Well selection: Column=3 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        tipVolume = (volumeLeft > MAX_VOLUME) ?  MAX_VOLUME + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Wellselection = [[1,reagentColumn+1]];
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: StopPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,reagentColumn+1]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-tipColumn-1]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=8 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=AliquotMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var aliquotVolume = reagentVolume;	// Volume to dispense per well
        var maxTipVolume = MAX_VOLUME;	// Tip capacity
        var columnsDone = 0;	// Number of columns dispensed so far
        var deadVolume = 3;		// Extra liquid volume to aspirate

        // Total volume to transfer:
        var transferVolume = aliquotVolume * columns;
        // The total volume of the largest number of aliquots that fit in one tip:
        var MAX_VOLUME = aliquotVolume * Math.floor((maxTipVolume - deadVolume) / aliquotVolume);
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(transferVolume / MAX_VOLUME);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,tipColumn]];
      Location, plate: ReagentTips
      Well selection: Column=2 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Update volumes:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > MAX_VOLUME) ?  MAX_VOLUME + deadVolume : volumeLeft + deadVolume;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = (tipVolume - deadVolume) / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Wellselection = [[1,reagentColumn]];
      Location, plate: ReagentPlate
      Volume: =tipVolume; [10]
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: ReactionPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,reagentColumn]];
        if(columns == columnsDone) {
        	task.Performtiptouch = true;
        	task.Whichsidestousefortiptouch = "None";
        	task.Tiptouchretractdistance = -14.5;
        }
      Location, plate: ReagentPlate
      Empty tips: 1
      Volume: 0
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript: task.Wellselection = [[1,13-tipColumn]];
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=9 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=ResetTemperature
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Reserve Location
      TaskScript:
        // Dummy task
        task.skip();
      Location to use, plate: ReactionPlate
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript: task.Temperature = tempRt;
      Location: 4
      Temperature: =tempRt;
      Temperature Tolerance: 1
      Timeout: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript: task.Temperature = tempRt;
      Location: 6
      Temperature: =tempRt;
      Temperature Tolerance: 1
      Timeout: 1
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
  Pipette_Process Name=SetTemperature
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      TaskScript: useCycler && task.skip();
      Location to use, plate: ReactionPlate
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    Task Bravo::secondary::Set temperature - Position
      Task_Disabled: 1
      TaskScript:
        /* To reach the reaction temperature faster
        this initial step is used to raise temperature quickly.
        Once reached the temperature is immediately lowered to
        the actual reaction temperature.
        */
        useCycler && task.skip();
        task.Temperature = 58;
      Location: 4
      Temperature: 58
      Wait: 1
      Temperature Tolerance: 1
      Timeout: 10
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 87
      TaskScript:
        useCycler && task.skip();
        task.Temperature = incubationTemperature;
      Location: 4
      Temperature: =incubationTemperature;
      Wait: 1
      Temperature Tolerance: 1
      Timeout: 10
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      TaskScript: useCycler && task.skip();
      Location: 1
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  Pipette_Process Name=TransferSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = PRE_ASP_SMALL;
      Location, plate: SamplePlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 24
      TaskScript: task.Volume = sampleVolume;
      Location, plate: SamplePlate
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = sampleVolume;
      Location, plate: IndexPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 17
      TaskScript:
        var mix_vol = 0.8 * (sampleVolume + adapterVolume);
        if(mix_vol > MAX_MIX_VOLUME) {
        	mix_vol = MAX_MIX_VOLUME;
        }
        task.Volume = mix_vol;
      Location, plate: IndexPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 23
      TaskScript: task.Volume = sampleVolume + adapterVolume;
      Location, plate: IndexPlate
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = sampleVolume + adapterVolume;
      Location, plate: ReactionPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 20
      TaskScript:
        var mix_vol = 0.8 * (sampleVolume + reagentVolume + adapterVolume);
        if(mix_vol > MAX_MIX_VOLUME) {
        	mix_vol = MAX_MIX_VOLUME;
        }
        task.Volume = mix_vol;
      Location, plate: ReactionPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 0.75
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        // Blowout
        task.Volume = PRE_ASP_SMALL;
      Location, plate: ReactionPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=TransferStop
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=6 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript: task.Volume = PRE_ASP_SMALL;
      Location, plate: ReactionPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript: task.Volume = sampleVolume + adapterVolume + reagentVolume;
      Location, plate: ReactionPlate
      Liquid class: j_slow_small_vol
      Distance from well bottom: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript: task.Volume = sampleVolume + adapterVolume + reagentVolume;
      Location, plate: StopPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 18
      TaskScript:
        var mix_vol = 0.8 * (sampleVolume + adapterVolume + reagentVolume);
        if(mix_vol > MAX_MIX_VOLUME) {
        	mix_vol = MAX_MIX_VOLUME;
        }
        task.Volume = mix_vol;
      Location, plate: StopPlate
      Liquid class: j_slow_mixing
      Mix cycles: 5
      Aspirate distance: 0.75
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        // Blowout
        task.Volume = PRE_ASP_SMALL;
      Location, plate: StopPlate
      Liquid class: j_blowout
      Distance from well bottom: 8
      Perform tip touch: 1
      Tip touch retract distance: -7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=6 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,13-columns]];
      Location, plate: SampleTips
      Mark tips as used: 1
      Well selection: Column=6 Row=0
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    Task BuiltIn::Group End
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
