Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev
  PipettePlatesInInstanceOrder: 1
  StartScript: open( 'C:/VWorks Workspace/Protocol Files/facility/truseq/ca_runset_v1110.js');
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        global = GetGlobalObject();

        // FOR TESTING:
        var columnsOfSamples = 12;
        var beadVolume = 20;
        var beadResuspVolume = 10;

        /* UNCOMMENT FOR RUNSET:
        // Assign actual variables used by protocol:
        var columnsOfSamples = global.ca.columnsOfSamples;
        var beadVolume = global.ca.beadVolume;
        var beadResuspVolume = global.ca.beadResuspVolume;
        */

        // Not changed atm:
        var beadWashVolume = 170;
        var rinseVolume = 80;
        var beadWashRepeats = 1;

        // Set variables not modifiable by user:
        // Headmode:
        var headMode = "1,2,1," + columnsOfSamples;
        // Time modifier (for testing):
        var timeMod = 1;
        // Ambient temperature:
        var roomTemperature = 20;
        // Max aspiration volume:
        var maxAspVolume = 170;
        // Max volume to use when mixing:
        var maxMixVolume = 160;
        // Magnet incubation time:
        var pelletTime = 60;
        // Magnet incubation time, short:
        var pelletTimeShort = 30;
        // Pre-aspiration volume:
        var preAsp = 5;
        // Number of times to perform the bead
        // storage buffer removal wash:
        var beadWashRepeats = 1;
        // Transfer loop vars:
        var stepVolume;
        var aspRepeats;
        // For displaying status:
        global.statusString = "Setting temperature...";
    Task BuiltIn::JavaScript
      TaskScript:
        // Debug:
        checkSettings();
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: task.Temperature = roomTemperature;
      Location: 4
      Temperature: 20
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 3
      TaskScript: task.Temperature = roomTemperature;
      Location: 6
      Temperature: 20
      Wait: 1
      Temperature Tolerance: 2
      Timeout: 10
      Allow concurrent operation: 1
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    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "Protocol started";
Main_Processes
  Process
    Plate name: Tipbox
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: BeadStirUp
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    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task BuiltIn::Spawn Process
      Process to spawn: ElutionBufferPlate
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
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  Process
    Plate name: SourceBeadPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task Bravo::SubProcess
      Sub-process name: BeadStirUp
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    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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  Process
    Plate name: WashedBeadPlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: BeadDistribution
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    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
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  Process
    Plate name: ElutionBufferPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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    Task Bravo::SubProcess
      Sub-process name: BeadResusp
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  Process
    Plate name: Waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: IsolateBeads1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips1
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    Task Bravo::SubProcess
      Sub-process name: WashBeads1
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    Task Bravo::SubProcess
      Sub-process name: RinseTips2
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  Pipette_Process Name=BeadDistribution
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Distributing beads";
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume to dispense per well:
        var aliquotVolume = beadVolume;
        // Tip capacity:
        var maxTipVolume = 170;
         // Total number of columns to process:
        var columns = columnsOfSamples;
        // Number of columns dispensed so far:
        var columnsDone = 0;

        // Total volume to transfer:
        var totalVolume = aliquotVolume * columns;
        // Number of aspirations necessary:
        var aspirateSteps = Math.ceil(totalVolume / maxTipVolume);
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspirateSteps; [1]
      Change tips every N times, N = : 1
    Task BuiltIn::JavaScript
      TaskScript:
        // Volume left to transfer:
        var volumeLeft = (columns - columnsDone) * aliquotVolume;
        // The total volume of the largest number of aliquots that fit in one tip:
        var maxVolume = aliquotVolume * Math.floor(maxTipVolume / aliquotVolume);
        // The actual volume to aspirate:
        var tipVolume = (volumeLeft > maxVolume) ?  maxVolume : volumeLeft;
        // The number of aliquots to dispense from the aspirated volume:
        var dispenseSteps = tipVolume / aliquotVolume;
    Task Bravo::secondary::Aspirate
      Estimated time: 8
      Location, plate: SourceBeadPlate
      Volume: =tipVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =dispenseSteps; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Wellselection = [[1,++columnsDone]];
      Location, plate: WashedBeadPlate
      Volume: =aliquotVolume; [10]
      Liquid class: j_normal_large_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      TaskScript: task.Volume = preAsp;
      Location, plate: SourceBeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: Tipbox
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadResusp
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 36
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: task.Volume = preAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 39
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript: task.Volume = beadResuspVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_small_vol
      Distance from well bottom: 10
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: task.Volume = beadResuspVolume;
      Location, plate: WashedBeadPlate
      Liquid class: j_normal_small_vol
      Distance from well bottom: 0.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: WashedBeadPlate
      Location, location: 5
      Mode: On
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Shake
      Location, plate: WashedBeadPlate
      Location, location: 5
      Mode: Off
      RPM: 1500
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 24
      TaskScript:
        var mixVolume = 0.7 * (beadResuspVolume);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: WashedBeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 10
      Aspirate distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: task.Volume = preAsp;
      Location, plate: WashedBeadPlate
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=BeadStirUp
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Resuspending beads";
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=1 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: SourceBeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 51
      TaskScript:
        var mixVolume = 0.7 * (beadVolume * columnsOfSamples);
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: SourceBeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 8
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 7
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Task_Disabled: 1
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: SourceBeadPlate
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=IsolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Removing bead storage buffer";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript: task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: WashedBeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      TaskScript:
        task.Volume = beadVolume + 5;
        task.Preaspiratevolume = preAsp;
      Location, plate: WashedBeadPlate
      Liquid class: j_slow_medium_vol
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        task.Volume = beadVolume + 5;
        task.Blowoutvolume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=RinseTips2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Rinsing tips";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript: task.Wellselection = [[1, 13 - columnsOfSamples]];
      Location, plate: Tipbox
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 8
      TaskScript: task.Volume = rinseVolume;
      Location, plate: ElutionBufferPlate
      Pre-aspirate volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        if(maxAspVolume - rinseVolume > 0) {
           task.Volume = maxAspVolume - rinseVolume;
        } else {
           task.skip();
        }
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      TaskScript: task.Volume = 80;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = 70;
      Location, plate: Waste
      Liquid class: j_normal_mixing
      Mix cycles: 3
      Aspirate distance: 30
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      TaskScript: task.skip();
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WashBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
      TaskScript: global.statusString = "Washing beads";
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      TaskScript: task.skip();
      Location, plate: Tipbox
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =beadWashRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        // Each transfer may have to be done in
        // more than one step if volume is large
        aspRepeats =Math.ceil((beadWashVolume + preAsp + 5) / maxAspVolume);
        stepVolume = beadWashVolume / aspRepeats;
    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript: task.Volume= stepVolume;
      Location, plate: ElutionBufferPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript: task.Volume = stepVolume;
      Location, plate: WashedBeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 3
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 45
      TaskScript:
        var mixVolume = 0.7 * beadWashVolume;
        if(mixVolume > maxMixVolume) {
        	mixVolume = maxMixVolume;
        }
        task.Volume = mixVolume;
      Location, plate: WashedBeadPlate
      Liquid class: j_normal_mixing
      Mix cycles: 7
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript: // Blowout
      Location, plate: WashedBeadPlate
      Empty tips: 1
      Volume: 10
      Liquid class: j_blowout
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: WashedBeadPlate
      Location to use, location: 7
      Reservation time: 0
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        // Pre-aspiration
        task.Volume = preAsp;
      Location, plate: WashedBeadPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 40
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop
      Number of times to loop: =aspRepeats; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: WashedBeadPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Volume = stepVolume + 5;
      Location, plate: Waste
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript:
        // Blowout
        task.Volume = preAsp;
      Location, plate: Waste
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        // Return tips so not to interfere with plate moving
        task.Wellselection = [[1,13 - columnsOfSamples]];
      Location, plate: Tipbox
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: Cleanup
    Task BuiltIn::JavaScript
      TaskScript: global.statusString = "Protocol finished";
