<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var global = GetGlobalObject();
var columns = parseInt(global.formColumns, 10);
var volumeStandard = parseFloat(global.formVolumeStandard);
var volumeSample = parseFloat(global.formVolumeSample);' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferSamples' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Matrix open reservoir movable' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 3, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='source' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 5' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='transferStandards' />
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						<Parameter Category='Static labware configuration' Name='6' Value='96 Matrix open reservoir movable' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='final' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='standards' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 3' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='newTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Downstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Free empty stackers' Value='1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferStandards' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='transferSamples' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 4' />
					</Devices>
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				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='usedTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Occupied' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='transferSamples' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot; + columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,12-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='source' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volumeSample;' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='final' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volumeSample;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='final' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,2]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='transferStandards' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='standards' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volumeStandard;' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='final' />
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						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volumeStandard;' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='final' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-7' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='usedTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>