<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option B\XT_Illumina_1.5_scilife_mod\Device Files\BravoMiniPHBenchCel_round_magnet_red4.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sub1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sub1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='reservoir' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1; slot 1, slot 2, slot 3' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='3' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='3' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sub1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sub1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='sub1' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='sub1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='sub1' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var volumes = [5, 50, 100];' />
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=volumes.length;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='0' strVariableName='i' />
					</Variables>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.Volume = volumes[i];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='reservoir' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_slow_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Task Name='BuiltIn::Change Instance' >
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					<Parameters >
						<Parameter Category='' Name='Plate to change' Value='plate' />
						<Parameter Category='' Name='Spawn control' Value='Precalculate # of plates (normal operation)' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>