Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet_deepwell6.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: startup
    Task BuiltIn::JavaScript
      TaskScript:
        var global = GetGlobalObject();
        var columns = global.formColumns | 1;
        var headMode = "1,2,1," + columns;
        var washMixes = 15;

        // Testing:
        var testMode = global.formTestMode;
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 6
      Temperature: 52
      Temperature Tolerance: 1
      Timeout: 15
      Allow concurrent operation: 1
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Main_Processes
  Process
    Plate name: capturePlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: samplePlate
    Task Bravo::SubProcess
      Sub-process name: addSample
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: captureMix
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: washBeads1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: present1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: washBeads2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: present2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads3
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
  Process
    Plate name: samplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: addSample
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
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  Process
    Plate name: waste
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: isolateBeads1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads3
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: washSolution1
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: washBeads1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: washBeads2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: captureTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: addSample
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: captureMix
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Spawn Process
      Process to spawn: washSolution1
    Task Bravo::SubProcess
      Sub-process name: washBeads1
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
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    Task BuiltIn::Spawn Process
      Process to spawn: washTips1
  Process
    Plate name: washTips1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: washBeads2
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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    Task Bravo::SubProcess
      Sub-process name: isolateBeads3
      Static labware configuration 6: 96 Nunc Deep Well 1 mL
      Static labware configuration 9: 96 Nunc Deep Well 1 mL
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  Process
    Plate name: occupied
    Plate type: 96 Nunc Deep Well 1 mL
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Process
    Plate name: adapter
    Plate type: 96 Nunc Deep Well 1 mL
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
  Pipette_Process Name=addSample
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 100;
        var mAspDistance = 0.6;
        var mDispDistance = 0.8;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: samplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 9
    Task BuiltIn::User Message
      Estimated time: 43
      Title: Transfer plate
      Body: Transfer the plate from the thermal cycler to position 8 of the Bravo deck an select 'Continue'.
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: samplePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=captureMix
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 30;
        var mIncubationTime = testMode ? 60 : 25 * 60;
        var mTimerCycles = 5;
        var mMixVolume = 150;
        var mAspDistance = 3;
        var mDispDistance = 3;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -9;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: captureTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Wellselection = mWellSelection;
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: capturePlate
      Location, location: 5
      Mode: On
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 140
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = testMode ? 1 : mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 1320
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        if(testMode) {
           var mMixCycles = 1;
        } else {
           var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        }
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: capturePlate
      Location, location: 5
      Mode: Off
      RPM: 750
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        task.Volume = mPreAspVolume;
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Liquid class: j_normal_large_vol
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = mTipSelection;
        } else {
            task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 120;
      Location to use, plate: capturePlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = 380;
        var mAspDistance = 0.75;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task BuiltIn::Reserve Location
      TaskScript:
        // Wait 30 s before last asp:
        if(mCurrentStep != mNumberSteps) {
        	task.skip();
        }
      Location to use, plate: capturePlate
      Location to use, location: 7
      Reservation time: 30
    Task Bravo::secondary::Aspirate
      Estimated time: 19
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 120;
      Location to use, plate: capturePlate
      Location to use, location: 7
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = 210;
        var mAspDistance = 0.75;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=isolateBeads3
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = testMode ? 1 : 120;
      Location to use, plate: capturePlate
      Location to use, location: 7
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 6
      Turn off temperature: 1
      Timeout: 1
      Allow concurrent operation: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = 210;
        var mAspDistance = 0.75;
        var mDispDistance = 25;
        var mBlowoutHeight = 25;
        var mDoTipTouch = true;
        var mTouchRetract = 5;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
        var mCurrentStep = 0;
    Task BuiltIn::Loop
      TaskScript: mCurrentStep++;
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = (mCurrentStep == mNumberSteps) ? "j_slow_medium_vol" : mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        // Touch every aspiration repeat:
        if(mDoTipTouch) {
           task.Performtiptouch = true;
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "North";
        }
      Location, plate: waste
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=present1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task BuiltIn::User Message
      Estimated time: 142
      Title: Transfer plate
      Body: Seal the Nunc plate in position 8 and mount it on the pre-heated adapter on positon 6 then choose 'Continue'. The incubation will take 25 minutes then you will be asked to return the plate.
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    Task BuiltIn::Reserve Location
      TaskScript: if(testMode) task.Reservationtime = 30;
      Location to use, plate: capturePlate
      Location to use, location: 8
      Reservation time: 1500
    Task BuiltIn::User Message
      Estimated time: 425
      Title: Return plate
      Body: Move the Nunc plate from the adapter on position 6 to position 8 and unseal, then choose 'Continue'.
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    Task BuiltIn::Group End
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  Pipette_Process Name=present2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Move To Location
      Estimated time: 2
      Location: 1
      PipetteHead: 96LT, 200 µL Series III
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=1
    Task BuiltIn::User Message
      Estimated time: 35
      Title: Transfer plate
      Body: Seal the Nunc plate in position 8 and mount it on the pre-heated adapter on positon 6 then choose 'Continue'. The incubation will take 25 minutes then you will be asked to return the plate.
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    Task BuiltIn::Reserve Location
      TaskScript: if(testMode) task.Reservationtime = 30;
      Location to use, plate: capturePlate
      Location to use, location: 8
      Reservation time: 1500
    Task BuiltIn::User Message
      Estimated time: 780
      Title: Return plate
      Body: Move the Nunc plate from the adapter on position 6 to position 8 and unseal, then choose 'Continue'.
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads1
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 1.5;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
        Wells: Column=11 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: capturePlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 60
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 75
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: capturePlate
      Aspirate distance: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: capturePlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: captureTips
      Mark tips as used: 1
      Well selection: Column=11 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=washBeads2
    Device Device_Name=Bravo - 1 Location_Name=1
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var maxVolume = 175;
        var mHeadMode = headMode;
        var mWellSelection = [[1,1]];
        var mTipSelection = [[1,13-columns]];
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_large_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = 200;
        var mAspDistance = 1.5;
        var mDispDistance = 2;
        var mMixVolume = 150;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = washMixes;
        var mMixAspDistance = 1;
        var mMixDispDistance = 1;
        var mBlowoutHeight = 10;
        var mDoTipTouch = true;
        var mTouchRetract = -8;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: washSolution1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / maxVolume);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 9
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: washSolution1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: capturePlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 60
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 75
      TaskScript:
        if(mMixVolume > maxVolume) {
           mMixVolume = maxVolume * 0.8;
        }
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;
        if(mMixAspDistance != mMixDispDistance) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
        task.Wellselection = mWellSelection;
      Location, plate: capturePlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: capturePlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 60
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        task.Wellselection = mWellSelection;
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: capturePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = mTipSelection;
        } else {
           task.skip();
        }
      Location, plate: washTips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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