<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\SureSelect\XT_Illumina\BravoMiniPHBenchCel_round_magnet.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Columns' />
						<Parameter Category='' Name='Body' Value='Enter the number of columns of samples to process (1-12):' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='1' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='userEntry' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var columns = parseInt(userEntry);
var beadVolume = 50;
var washVolume = 200;
var washes = 3;
var finalVolume = washVolume;
var preAspVolume = 20;
var maxVolume = 170;
var pelletTime = 60;
var steps;
var headMode = &quot;1,2,1,&quot; + columns;
' />
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='ResuspendBeads' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ResuspendBeads' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Distribute' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Distribute' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Wash' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Wash' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='newTips' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='ResuspendBeads' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Distribute' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Wash' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='BeadPlate' />
					<Parameter Name='Plate type' Value='96 Nunc Deep Well 1 mL' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Wash' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='BufferPlate' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Wash' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Waste' />
					<Parameter Name='Plate type' Value='96 Deep Well PP Sqr Well V Btm' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Distribute' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='20' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='35' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=columns-1;' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='2' strVariableName='currentColumn' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 2) task.skip();
var mixVol = 0.8 * 50 * (columns - currentColumn + 2);
task.Volume = (mixVol &gt; 150) ? 150 : mixVol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 2) task.skip();
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='50' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(columns &lt; 2) task.skip();
task.Wellselection = [[1,currentColumn]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='50' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='20' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-4' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='ResuspendBeads' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='20' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='35' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='// Bead resuspension
var mixVol = 0.8 * (50 * columns);
task.Volume = (mixVol &gt; 150) ? 150 : mixVol;' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='8' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='0.8' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='// Blowout
task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='20' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_blowout' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-9' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.skip();' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Wash' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='task.Headmode = &quot;1,2,1,&quot;+columns;' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BufferPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='20' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='35' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='4' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='washCounter' />
					</Variables>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='2' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BufferPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Volume' Name='Volume' Value='100' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='15' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='North' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location to use, location' Value='5' />
						<Parameter Category='' Name='Reservation time' Value='' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='On' />
						<Parameter Category='' Name='RPM' Value='1250' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_mixing' />
						<Parameter Category='Properties' Name='Mix cycles' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='' Name='Mode' Value='Off' />
						<Parameter Category='' Name='RPM' Value='1250' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='if(washCounter&gt;3) {
   task.Locationtouse_location = 5;
   task.Reservationtime = 0;
}' />
					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location to use, location' Value='7' />
						<Parameter Category='' Name='Reservation time' Value='30' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='2' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(washCounter&gt;3) {
   task.skip();
} else if(washCounter == 1) {
   task.Volume = 135;
} else {
   task.Volume = 110;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='BeadPlate' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='if(washCounter&gt;3) {
   task.skip();
} else if(washCounter == 1) {
   task.Volume = 135;
} else {
   task.Volume = 110;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Waste' />
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						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_large_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='North' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
						<Parameter Category='' Name='Location to use, plate' Value='BeadPlate' />
						<Parameter Category='' Name='Location to use, location' Value='5' />
						<Parameter Category='' Name='Reservation time' Value='' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Waste' />
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						<Parameter Category='Volume' Name='Volume' Value='20' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='j_normal_medium_vol' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='30' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South/North' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,13-columns]];' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='newTips' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>