<?xml version="1.0" encoding="utf-16"?>
<velocity11 file="Form_Data" version="1.0">
  <Property name="UseGlobalContext" value="1" />
  <Property name="RestoreDefaultsOnLoad" value="1" />
  <Property name="ShowLogInFullScreen" value="1" />
  <Property name="FormBackgroundColor" value="-1" />
  <Object type="ToolboxLibrary.MainContainer, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="mainContainer1" children="Controls">
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic4" children="Controls">
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      <Property name="Text">Joel Gruselius 2012 Science for Life laboratory Stockholm</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Joel Gruselius 2012 Science for Life laboratory Stockholm" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Joel Gruselius 2012 Science for Life laboratory Stockholm" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.PauseResume, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="pauseResume1" children="Controls">
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      <Property name="Text"> PAUSE</Property>
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" PAUSE" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton1" children="Controls">
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      <Property name="Text"> START</Property>
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      <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="// Load the correct protocol depending on what the user&#xA;// selected in the form:&#xA;var path = &quot;C:/VWorks Workspace/Protocol files/development/jgr/transfer_protocols_eval/&quot;;&#xA; if(formMode == &quot;Transfer&quot;) {&#xA;	path += &quot;transfer_v1303.pro&quot;;&#xA;} else if(formMode == &quot;Dilution&quot;) {&#xA;	path += &quot;transfer_dilution_v1301.pro&quot;;&#xA;} else if(formMode == &quot;Adapter&quot;) {&#xA;	path += &quot;transfer_adapter_v1301.pro&quot;;&#xA;} else if(formMode == &quot;Dilution_v1303&quot;) {&#xA;	path += &quot;transfer_dilution_v1303.pro&quot;;&#xA;} else if(formMode == &quot;Dilution LIMS&quot;) {&#xA;	path += &quot;transfer_dilution_lims_v1303.pro&quot;;&#xA;}&#xA;&#xA;runset.appendProtocolFileToRunset(path, 1, &quot;&quot;, &quot;transfer_form.VWForm&quot;);" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value=" START" ValueToDisplay="" Hide_if="" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleFileBrowsing, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleFileBrowsing1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formFile" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Mandatory" Description="If checked, the operator MUST enter something in this field prior to running" Type="0" Value="1" ValueToDisplay="" Hide_if="Variable(Read only) == Const(1) || Variable(Data entry) == Const(0)" />
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic3" children="Controls">
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      <Property name="Text">File:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="File:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="File:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist1" children="Controls">
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      <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formMode" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Transfer;Dilution;Adapter;Dilution_v1303;Dilution LIMS;" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="Transfer" ValueToDisplay="" Hide_if="Const(0)" />
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      <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="Transfer;Dilution;Adapter;Dilution_v1302;" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic2" children="Controls">
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      <Property name="Text">Mode:</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Mode:" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Mode:" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=1.0.4577.5912, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic1" children="Controls">
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      <Property name="Text">Transfer protocols</Property>
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      <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Transfer protocols" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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      <Parameter Name="Value" Description="" Type="1" Value="Transfer protocols" ValueToDisplay="" Hide_if="" />
    </Object>
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  </Object>
</velocity11>